###
#@notes:'This is a plain translation of an SBML model created on 03/06/2019. The original model has 1805 molecules and 2583 reactions. The translated model has 1136 molecules and 2583 rules'
###
begin model
begin parameters
	cobra_default_lb -1000.0
	cobra_default_ub 1000.0
	minus_inf -1e20
	plus_inf 1e20
	R_EX_cbl1_e_lower_bound -0.01 #units:mmol_per_gDW_per_hr
	R_EX_glc_e_lower_bound -10.0 #units:mmol_per_gDW_per_hr
	R_ATPM_lower_bound 3.15 #units:mmol_per_gDW_per_hr
	cobra_0_bound 0
end parameters
begin compartments
	#volume units: L
	c 2 nan #Cytoplasm
	e 2 nan #Extracellular
	p 2 nan #Periplasm
	cell 3 1.0
end compartments
begin molecule types
	potassium()
	Thiamin()
	L_Allo_threonine()
	S_Adenosyl_4_methylthio_2_oxobutanoate()
	phosphatidylserine__dioctadecanoyl_n_C18_0__()
	UDP_3_O___3_hydroxytetradecanoyl___N_acetylglucosamine()
	s2_tetradecanoyl_sn_glycerol3_phosphate()
	C___3_Indolyl___glycerol3_phosphate()
	UDP()
	s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__()
	s3_Dehydroshikimate()
	Maltopentaose()
	s1_2_dioctadecanoyl_sn_glycerol3_phosphate()
	s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__()
	D_Allose()
	threelinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()
	XDP()
	dTDP_4_amino_4_6_dideoxy_D_galactose()
	cis_Aconitate()
	L_Prolinylglycine()
	O_Succinylbenzoyl_CoA()
	Pantetheine4_phosphate()
	butanesulfonate()
	bis_molybdopterinmono_guaninedinucleotide()
	N_Formylmethionyl_tRNA()
	Octanoyl_ACP__n_C8_0ACP__()
	L_Lactate()
	glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA()
	Dihydroneopterinmonophosphate()
	Agmatine()
	molybdopterin()
	Decanoate__n_C10_0__()
	s3_Sulfino_L_alanine()
	Phenylacetyl_CoA()
	s1_4_Dihydroxy_2_naphthoate()
	s2_Dehydro_3_deoxy_D_gluconate()
	acylphosphatidylglycerol__n_C14_0__()
	Maltotetraose()
	s3_AMP()
	L_Proline()
	s2_3_dihydroxybenzoylserine()
	Butyryl_ACP__n_C4_0ACP__()
	s1_hydroxy_2_methyl_2___E___butenyl4_diphosphate()
	s2_Deoxy_D_ribose1_phosphate()
	CoenzymeA()
	phosphatidylserine__dihexadec_9_enoyl_n_C16_1__()
	Glycolate()
	s3_Phospho_D_glyceroylphosphate()
	phosphatidylethanolamine__didodecanoyl_n_C12_0__()
	dTDP_4_dehydro_6_deoxy_D_glucose()
	s2_3_CyclicAMP()
	s4_Amino_5_hydroxymethyl_2_methylpyrimidine()
	tRNA__Thr__()
	__R___2_3_Dihydroxy_3_methylpentanoate()
	trans_3_cis_5_dodecenoyl___acyl_carrierprotein__()
	s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()
	Dopamine()
	s5_6_7_8_Tetrahydrofolate()
	L_methionine_R_sulfoxide()
	N_3_aminopropyl_1_5_diaminopentane()
	Oxidizedglutathione()
	trans_Hexadec_2_enoyl___acyl_carrierprotein__()
	Pyridoxamine5_phosphate()
	D_Ribose1_5_bisphosphate()
	O16antigenundecaprenyldiphosphate()
	cis_dec_3_enoyl___acyl_carrierprotein____n_C10_1__()
	Pyruvate()
	__S___3_Methyl_2_oxopentanoate()
	s4_Methyl_2_oxopentanoate()
	Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()
	N_Succinyl_LL_2_6_diaminoheptanedioate()
	__R___3_hydroxy_cis_vacc_11_enoyl___acyl_carrierprotein__()
	Co2pl()
	octanoate__proteinbound__()
	IscSwithboundsulfur()
	Glycerol()
	IDP()
	UDP_D_glucuronate()
	s2_hexadec_9_enoyl_sn_glycerol3_phosphate()
	Ornithine()
	Phosphotyrosine()
	P1_P4_Bis__5_guanosyl__tetraphosphate()
	N2_Succinyl_L_glutamate5_semialdehyde()
	N_Acetyl_L_glutamate()
	__S___Dihydroorotate()
	Tetradecanoyl_phosphate__n_C14_1__()
	N1___5_Phospho_D_ribosyl__glycinamide()
	s1_tetradec_7_enoyl_sn_glycerol3_phosphate()
	IscUscaffoldprotein()
	proteindisulfideisomeraseII__oxidized__()
	D_Mannose6_phosphate()
	s2_dodecanoyl_sn_glycerol3_phosphate()
	twolinkeddisacharidepentapeptideandtetrapeptidemureinunits__uncrosslinked_middleofchain__()
	Hydrogenperoxide()
	Aminoacetaldehyde()
	__enterobacterialcommonantigen__x3undecaprenyl_diphosphate()
	L_2_Amino_3_oxobutanoate()
	D_Sorbitol()
	Glycinebetaine()
	Propanoylphosphate()
	L_Glutaminyl_tRNA__Gln__()
	Protoporphyrin()
	GDP()
	ITP()
	Isocitrate()
	L_Homoserine()
	s5_10_Methenyltetrahydrofolate()
	s4_Aminobutanal()
	s2_C_methyl_D_erythritol2_4_cyclodiphosphate()
	gamma_glutamyl_gamma_butyraldehyde()
	D_Allose6_phosphate()
	O_Phospho_4_hydroxy_L_threonine()
	tRNA__Ala__()
	__R___3_Hydroxyoctadecanoyl___acyl_carrierprotein__()
	s3_5_CyclicGMP()
	s3_Hydroxypimeloyl___acyl_carrierprotein__methylester()
	Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__()
	glutaredoxin__reduced__()
	s2_Deoxy_D_ribose5_phosphate()
	Citrate()
	twodisacharidelinkedmureinunits_tripeptidecrosslinkedtripeptide__A2pm__A2pm____middleofchain__()
	P1_P4_Bis__5_adenosyl__tetraphosphate()
	s3___3_hydroxy_phenyl__propionate()
	D_Tagaturonate()
	Xanthosine5_phosphate()
	Oxidizedthioredoxin()
	Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()
	sn_Glycero_3_phosphoethanolamine()
	Reducedthioredoxin()
	D_Glycero_D_manno_heptose1_7_bisphosphate()
	__S___3_Hydroxyhexadecanoyl_CoA()
	adenylatedmolybdopterin()
	L_Rhamnulose1_phosphate()
	O_Phospho_L_serine()
	L_fuculose()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()
	arsenite()
	IscUwithbound__4Fe_4S__cluster()
	flavodoxinsemioxidized()
	fusedthiol_disulfideinterchangeprotein__oxidized__()
	tRNA__SeCys__()
	dIDP()
	s3_Oxooctanoyl___acyl_carrierprotein__()
	Nitricoxide()
	D_Erythrose4_phosphate()
	trans_Dodec_2_enoyl___acyl_carrierprotein__()
	phosphatidylserine__ditetradecanoyl_n_C14_0__()
	L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()
	N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()
	UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate_D_alanine()
	Orotate()
	Inosine()
	coprogen()
	Prephenate()
	s3_Aminoacrylate()
	D_Glycerate2_phosphate()
	phosphatidylserine__didodecanoyl_n_C12_0__()
	s5_Phospho_alpha_D_ribose1_diphosphate()
	Adenosylcobinamidephosphate()
	cardiolipin__tetrahexadec_9_enoyl_n_C16_1__()
	ProtoporphyrinogenIX()
	__S___2_Aceto_2_hydroxybutanoate()
	Selenide()
	sirohydrochlorin()
	Urea()
	Siroheme()
	__R___Propane_1_2_diol()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()
	hydroxymethylglutathione()
	s3_Carboxy_2_hydroxy_4_methylpentanoate()
	Biotin()
	Deoxyinosine()
	Hydroxypyruvate()
	Reducedriboflavin()
	s6_Acetyl_D_glucose()
	s2_3_CyclicUMP()
	AMP()
	L_Lactaldehyde()
	Phosphonate()
	L_ascorbate_6_phosphate()
	N1___5_Phospho_alpha_D_ribosyl___5_6_dimethylbenzimidazole()
	Diphosphate()
	__R___3_Hydroxyhexanoyl___acyl_carrierprotein__()
	N_Acetyl_L_glutamyl5_phosphate()
	Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__()
	CDP()
	Propionate__n_C3_0__()
	cis_3___3_carboxyethenyl___3_5_cyclohexadiene_1_2_diol()
	s7_8_Diaminononanoate()
	L_Threonine()
	__S___3_Hydroxybutanoyl_CoA()
	O_Succinyl_L_homoserine()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()
	N_Acetylneuraminate()
	D_Mannitol()
	ethanesulfonate()
	Peroxyaminoacrylate()
	Calcium()
	Ureidoacrylateperacid()
	s1_tetradecanoyl_sn_glycerol3_phosphate()
	dUTP()
	Flavinadeninedinucleotidereduced()
	L_Glutamate5_semialdehyde()
	UroporphyrinogenIII()
	s5_10_Methylenetetrahydrofolate()
	Glutaryl___acyl_carrierprotein__methylester()
	Octadecenoyl_CoA__n_C18_1CoA__()
	uridine5_diphospho_beta_4_deoxy_4_amino_L_arabinose()
	dTDPglucose()
	Oxalyl_CoA()
	Dihydroxyacetone()
	Octanoyl_CoA__n_C8_0CoA__()
	crotonobetainyl_CoA()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()
	s2_Isopropylmaleate()
	L_Cystathionine()
	N_Carbamoyl_L_aspartate()
	s3_oxo_cis_vacc_11_enoyl___acyl_carrierprotein__()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()
	Nitrate()
	Acetaldehyde()
	Sarcosine()
	s6_Phospho_D_gluconate()
	Hydrogensulfide()
	L_Lysine_tRNA__Lys__()
	N2_Succinyl_L_ornithine()
	s2_Demethylmenaquinol8()
	GDP_D_mannose()
	Dodecanoate__n_C12_0__()
	cis_dodec_5_enoyl___acyl_carrierprotein____n_C12_1__()
	s2_hexadecanoyl_sn_glycerol3_phosphate()
	fusedthiol_disulfideinterchangeprotein__reduced__()
	tRNA__Trp__()
	s2_3_Dihydrodipicolinate()
	ReducedFMN()
	acylphosphatidylglycerol__n_C18_0__()
	Acetoacetyl_CoA()
	threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala___oneuncrosslinkedtetrapaptide____middleofchain__()
	H2()
	Menaquinone8()
	UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate()
	selenite()
	Undecaprenyl_diphospho_N_acetylglucosamine_N_acetylmannosaminuronate()
	s3_oxo_5_6_dehydrosuberyl_CoA()
	Dethiobiotin()
	heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()
	SufSEwithboundsulfur()
	s2_oxepin_2__3H___ylideneacetyl_CoA()
	Quinolinate()
	s3_Oxooctanoyl_CoA()
	L_Methionine()
	s3_4_Dihydroxyphenylacetaldehyde()
	s5_amino_1___5_phospho_D_ribosyl__imidazole()
	Thiosulfate()
	N_Acetyl_D_glucosamine6_phosphate()
	D_Lactaldehyde()
	R_3_hydroxypalmitoyl___acyl_carrierprotein__()
	D_Glutamate()
	s1___5_Phosphoribosyl___AMP()
	trans_Hex_2_enoyl_CoA()
	fructoselysinePhosphate()
	coprogenunloaded__noFe__III____()
	Nicotinamide()
	Fe_enterobactin()
	__2Fe_1S__desulfuratediron_sulfurcluster()
	s2_Oxoglutarate()
	L_Aspartate()
	N_Acetyl_D_glucosamine()
	Dodecanoly_phosphate__n_C12_0__()
	galactofuranosyl_glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()
	Glycerophosphoserine()
	CMP()
	D_Glucosamine()
	tungstenbispterincofactorguaninedinucleotide()
	L_Carnitinyl_CoA()
	UDPglucose()
	rifampin()
	Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__()
	Dimethylallyldiphosphate()
	N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()
	Propanoyl_CoA()
	s3_oxo_cis_palm_9_eoyl___acyl_carrierprotein__()
	cardiolipin__tetraoctadec_11_enoyl_n_C18_1__()
	Xanthine()
	__4Fe_4S__iron_sulfurcluster()
	s4_Hydroxybenzoate()
	Dephospho_CoA()
	Carbamate()
	L_Fucose()
	s3_keto_L_gulonate_6_phosphate()
	Dimethylsulfoxide()
	glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()
	Glycine()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()
	malonyl_CoAmethylester()
	periplasmicproteindisulfideisomeraseI__oxidized__()
	D_Fructose()
	tRNA__Pro__()
	s2_tetradec_7_enoyl_sn_glycerol3_phosphate()
	Protoheme()
	s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate()
	s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__()
	MoaDProteinwiththiocarboxylate()
	GDP_4_oxo_L_fucose()
	Myristoyl_ACP__n_C14_0ACP__()
	trans_Oct_2_enoyl___acyl_carrierprotein__()
	s5_Formamido_1___5_phospho_D_ribosyl__imidazole_4_carboxamide()
	Indole()
	CTP()
	Oxaloacetate()
	N2_Acetyl_L_ornithine()
	ADPglucose()
	D_Altronate()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()
	p_Cresol()
	innercoreoligosaccharidelipidA__Ecoli__()
	IscSsulfuracceptorprotein()
	Octadecanoyl_ACP__n_C18_0ACP__()
	Maltohexaose()
	Pyridoxal()
	N_Acetyl_D_glucosamine1_phosphate()
	tRNA__Phe__()
	CO2()
	Glutathiolselenolate()
	s3_Carboxy_4_methyl_2_oxopentanoate()
	phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()
	MoaDProteinwithboundAMP()
	phospho_heptosyl_heptosyl_kdo2_lipidA()
	Glycerol2_phosphate()
	gamma_glutamyl_gammaaminobutyricacid()
	fructoselysine()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()
	Glyceraldehyde3_phosphate()
	s6_hydroxymethyldihydropterin()
	D_Glucarate()
	s5_Amino_6___5_phosphoribosylamino__uracil()
	ferroxamine()
	trans_Dec_2_enoyl_CoA()
	coreoligosaccharidelipidAdiphosphate()
	D_tartrate()
	Thymine()
	threedisacharidelinkedmureinunits__pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()
	s5_Dehydro_D_gluconate()
	CDP_1_2_ditetradec_7_enoylglycerol()
	Arbutin6_phosphate()
	acylcarrierprotein()
	D_Tagatose1_6_biphosphate()
	Methanol()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()
	apoprotein__acylcarrierprotein__()
	Palmitoyl_CoA__n_C16_0CoA__()
	cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()
	D_Glucuronate()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()
	phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()
	cardiolipin__tetraoctadecanoyl_n_C18_0__()
	Pyridoxine()
	Phosphatidylglycerol__didodecanoyl_n_C12_0__()
	s2_Octaprenyl_6_methoxyphenol()
	s2_phospho_4___cytidine5_diphospho___2_C_methyl_D_erythritol()
	Maltose6_phosphate()
	N_____R___4_Phosphopantothenoyl___L_cysteine()
	__R___Glycerate()
	L_Arginine()
	L_Methionyl_tRNA__Met__()
	SufBCDscaffoldcomplex()
	D_Xylulose5_phosphate()
	MoaDProteinwithcarboxylate()
	Undecaprenyl_diphospho_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine()
	gamma_L_Glutamyl_L_cysteine()
	Dodecanoyl_CoA__n_C12_0CoA__()
	__S___3_Hydroxytetradecanoyl_CoA()
	__enterobacterialcommonantigen__x2undecaprenyl_diphosphate()
	Acetate()
	psicoselysine()
	__2_3_Dihydroxybenzoyl__adenylate()
	NicotinateD_ribonucleotide()
	s5_Methylthioadenosine()
	Zinc()
	Chloride()
	Sucrose6_phosphate()
	cardiolipin__tetratetradecanoyl_n_C14_0__()
	Aminoacetone()
	dADP()
	Dihydropteroate()
	acylphosphatidylglycerol__n_C16_1__()
	s2__alpha_D_Mannosyl_6_phosphate___D_glycerate()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()
	s5_____5_phospho_1_deoxyribulos_1_ylamino__methylideneamino___1___5_phosphoribosyl__imidazole_4_carboxamide()
	Deoxyguanosine()
	D_Galactose()
	L_Aspartyl_tRNA__Asp__()
	s4_Phospho_L_aspartate()
	Tetradecanoyl_phosphate__n_C14_0__()
	D_Glycero_D_manno_heptose7_phosphate()
	IMP()
	D_erythro_1___Imidazol_4_yl__glycerol3_phosphate()
	Sedoheptulose1_7_bisphosphate()
	D_Methionine()
	s2_3_Bis__3_hydroxytetradecanoyl___beta_D_glucosaminyl1_phosphate()
	s5_6_7_8_tetrahydropteridine()
	Octadecanoyl_phosphate__n_C18_0__()
	tungstenbindingcofactor()
	Shikimate()
	__S___2_Acetolactate()
	CDP_1_2_dihexadecanoylglycerol()
	D_Arabinose5_phosphate()
	s5_Methylthio_D_ribose()
	heptosyl_kdo2_lipidA()
	__S___3_Hydroxyoctanoyl_CoA()
	D_Galactarate()
	s5_Amino_1___5_Phospho_D_ribosyl__imidazole_4_carboxamide()
	s5_Dehydro_4_deoxy_D_glucarate()
	__O16antigen__x4coreoligosaccharidelipidA()
	s5_O___1_Carboxyvinyl___3_phosphoshikimate()
	Glutathionylspermidine()
	s1_deoxy_D_xylulose5_phosphate()
	s5_deoxyribose()
	Cob__I__alamin()
	Hydroxymethylbilane()
	D_Ribulose5_phosphate()
	D_Fructose6_phosphate()
	UDP_D_galacto_1_4_furanose()
	Flavodoxinreduced()
	s3_Oxohexadecanoyl___acyl_carrierprotein__()
	s7_aminomethyl_7_deazaguanine()
	Glycolaldehyde()
	dCDP()
	Fe__III__dicitrate()
	s1___5_Phosphoribosyl___5_____5_phosphoribosylamino__methylideneamino__imidazole_4_carboxamide()
	s2_5_Diamino_6___ribosylamino___4___3H___pyrimidinone5_phosphate()
	L_Glutamate5_phosphate()
	bis_molybdopteringuaninedinucleotide()
	s6_phospho_D_glucono_1_5_lactone()
	s3_Dehydro_L_gulonate()
	alpha_D_Ribose5_phosphate()
	ferroxamineminusFe__3__()
	dihydrosirohydrochlorin()
	Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__()
	__S___3_Hydroxyhexanoyl_CoA()
	L_Glutamine()
	UMP()
	Ethanol()
	SufBCDwithbound__4Fe_4S__cluster()
	dUMP()
	N1_Acetylspermidine()
	Adenosylcobalamin()
	ADP()
	Maltotriose()
	s3_Phosphoadenylylsulfate()
	acylphosphatidylglycerol__n_C12_0__()
	Allulose6_phosphate()
	s5_Formyltetrahydrofolate()
	Hydroquinone()
	s2_Octaprenylphenol()
	s5_Deoxyadenosine()
	__R___2_3_Dihydroxy_3_methylbutanoate()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()
	__O16antigen__x2undecaprenyldiphosphate()
	Sulfite()
	phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()
	L_alanine_L_glutamate()
	undecaprenylphosphate_4_amino_4_formyl_L_arabinose()
	s2_3_Dihydro_2_3_dihydroxybenzoate()
	magnesium()
	L_alanine_D_glutamate()
	Malonyl_CoA()
	P1_P5_Bis__5_adenosyl__pentaphosphate()
	FMN()
	L_Lysine()
	Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__()
	cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()
	s1_2_ditetradecanoyl_sn_glycerol3_phosphate()
	Riboflavin()
	s3___Imidazol_4_yl___2_oxopropylphosphate()
	alpha_D_Galactose1_phosphate()
	D_Sorbitol6_phosphate()
	Dodecanoyl_ACP__n_C12_0ACP__()
	Cupl()
	s1_4_dihydroxy_2_napthoyl_CoA()
	s1_deoxy_D_xylulose()
	L_Histidyl_tRNA__His__()
	s2_3_CyclicGMP()
	CDP_1_2_dihexadec_9_enoylglycerol()
	s4_Methyl_5___2_phosphoethyl___thiazole()
	__3Fe_4S__damagediron_sulfurcluster()
	N_Acetyl_D_mannosamine6_phosphate()
	branchingglycogen()
	Nicotinamideadeninedinucleotidephosphate_reduced()
	L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()
	trans_Hex_2_enoyl___acyl_carrierprotein__()
	Mercaptopyruvate()
	Galactitol()
	s2__alpha_D_Mannosyl___D_glycerate()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()
	Decanoyl_ACP__n_C10_0ACP__()
	s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()
	glucosyl_glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA()
	s3_Phospho_D_glycerate()
	N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()
	s2_3_4_5_Tetrahydrodipicolinate()
	s3_Hydroxyglutaryl___acyl_carrierprotein__methylester()
	N__omega_____L_Arginino__succinate()
	N8_Acetylspermidine()
	Pyridoxal5_phosphate()
	D_Malate()
	chorismate()
	tRNA__Gln__()
	Adenosylcobinamide()
	N_acetylmuramate6_phosphate()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()
	Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()
	sulfoacetate()
	cyclopropanephosphatidylglycerol__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo__()
	s1_hexadec_9_enoyl_sn_glycerol3_phosphate()
	L_Lyxose()
	L_Arabinose()
	______Ureidoglycolate()
	galactosyl_glucosyl_innercoreoligosaccharidelipidA()
	Maltoheptaose()
	s2_C_methyl_D_erythritol4_phosphate()
	Ethanolamine()
	Dihydromonapterin()
	Nitrite()
	dTTP()
	Betainealdehyde()
	s3_Deoxy_D_manno_2_octulosonate()
	Hexanoate__n_C6_0__()
	tetradecenoate__n_C14_1__()
	UDP_N_acetylmuramate()
	phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()
	D_Glyceraldehyde()
	D_Alanine()
	__O16antigen__x3undecaprenyldiphosphate()
	kdo_phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()
	Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__()
	diacetylchitobiose_6_phosphate()
	Cadmium()
	UTP()
	Decanoyl_CoA__n_C10_0CoA__()
	s3_UMP()
	N___5_Phospho_D_ribosyl__anthranilate()
	Cys_Gly()
	s4_Aminobutanoate()
	acylphosphatidylglycerol__n_C14_1__()
	D_Galactonate()
	Oxamate()
	lipoyl_AMP()
	__S___Propane_1_2_diol()
	cis_2_Methylaconitate()
	trimethylamine()
	s1_dodecanoyl_sn_glycerol3_phosphate()
	UDP_N_acetylmuramoyl_L_alanine()
	dehydroglycine()
	Isochorismate()
	s1_Pyrroline_5_carboxylate()
	CoproporphyrinogenIII()
	Carbamoylphosphate()
	s2_Octaprenyl_6_methoxy_1_4_benzoquinol()
	L_ThreonineO_3_phosphate()
	tungstenbispterincofactormono_guaninedinucleotide()
	Galactitol1_phosphate()
	Succinate()
	crotonobetaine()
	L_Leucine()
	L_Cysteinyl_tRNA__Cys__()
	HemeO()
	D_Glucose()
	L_Selenocysteinyl_tRNA__Sec__()
	Phenylacetaldehyde()
	sn_Glycero_3_phospho_1_inositol()
	s2_Dehydropantoate()
	s3_Oxohexanoyl___acyl_carrierprotein__()
	N_Acetyl_D_galactosamine()
	D_Mannose1_phosphate()
	Acetol()
	s3_Methyl_2_oxobutanoate()
	L_Alanyl_tRNA__Ala__()
	Adenosine5_phosphosulfate()
	Trehalose()
	s4_Methyl_5___2_hydroxyethyl___thiazole()
	periplasmicdisulfideisomerase_thiol_disulphideoxidase__oxidized__()
	silver()
	L_Alanine()
	s3_Oxotetradecanoyl_CoA()
	Guanosine3_5_bis__diphosphate__()
	__S___3_Hydroxydodecanoyl_CoA()
	s3_Hydroxypropanoate()
	phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()
	tetracycline()
	D_Alanyl_D_alanine()
	Deoxycytidine()
	tRNA__Met__()
	Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala()
	Ubiquinol_8()
	GDP_4_dehydro_6_deoxy_D_mannose()
	UDP_3_O___3_hydroxytetradecanoyl___D_glucosamine()
	Spermidine()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()
	s6_7_Dimethyl_8___1_D_ribityl__lumazine()
	But_2_enoyl___acyl_carrierprotein__()
	Hydrogencyanide()
	s2_Dehydro_3_deoxy_D_arabino_heptonate7_phosphate()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()
	Ferrichrome()
	Octadecanoyl_phosphate__n_C18_1__()
	Butanal()
	Cytidine()
	cardiolipin__tetratetradec_7_enoyl_n_C14_1__()
	S_Adenosyl_L_homocysteine()
	Tetradecenoyl_CoA__n_C14_1CoA__()
	Butanoyl_CoA()
	N_Methyltryptophan()
	SufBCDwithbound__2Fe_2S__cluster()
	Nicotinamideadeninedinucleotidephosphate()
	s4_amino_4_deoxychorismate()
	Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()
	GMP()
	Thymidine()
	methanesulfonate()
	UDP_N_acetyl_D_glucosamine()
	L_Aspartate4_semialdehyde()
	s3_Octaprenyl_4_hydroxybenzoate()
	__R___3_Hydroxytetradecanoyl___acyl_carrierprotein__()
	dihydromonapterin_triphosphate()
	__R___3_Hydroxyoctanoyl___acyl_carrierprotein__()
	tRNA__Tyr__()
	Nicotinate()
	applipoprotein()
	s1_octadec_11_enoyl_sn_glycerol3_phosphate()
	s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA()
	s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()
	Formyl_CoA()
	L_seryl_AMP()
	s3_Oxohexanoyl_CoA()
	S_Methyl_L_methionine()
	N_Acetyl_D_mannosamine()
	__3R___3_Hydroxyacyl___acyl_carrierprotein__()
	s2_3_Dioxo_L_gulonate()
	s4_Hydroxy_L_threonine()
	Oxalate()
	trans_3_cis_9_palmitoleoyl___acyl_carrierprotein__()
	S_Adenosyl_L_methionine()
	Phenethylamine()
	trans_octadec_2_enoyl___acyl_carrierprotein__()
	S_Ribosyl_L_homocysteine()
	UDP_N_acetyl_3_O___1_carboxyvinyl___D_glucosamine()
	D_Glucose1_phosphate()
	s4_Hydroxy_2_oxopentanoate()
	s2_Oxo_3_hydroxy_4_phosphobutanoate()
	L_Phenylalanyl_tRNA__Phe__()
	s2_Octaprenyl_3_methyl_5_hydroxy_6_methoxy_1_4_benzoquinol()
	molybdopteringuaninedinucleotide()
	L_Histidinolphosphate()
	tRNA__Val__()
	Nicotinamideadeninedinucleotide()
	alpha_D_Ribose1_phosphate()
	s3_Phosphohydroxypyruvate()
	ADP_D_glycero_D_manno_heptose()
	Selenate()
	dUDP()
	s3_hydroxycinnamicacid()
	IscUwithbound__2Fe_2S__cluster()
	gamma_butyrobetainyl_CoA()
	Dihydroneopterin()
	Lactose()
	__R___3_hydroxy_cis_dodec_5_enoyl___acyl_carrierprotein__()
	Isethionicacid()
	Bicarbonate()
	glutaredoxin__oxidized__()
	myo_Inositol()
	Sedoheptulose7_phosphate()
	__S___3_Hydroxyoctadecanoyl_CoA()
	N_Acetyl_L_glutamate5_semialdehyde()
	s3_Deoxy_D_manno_octulosonate8_phosphate()
	__R___3_Hydroxydecanoyl___acyl_carrierprotein__()
	twodisacharidelinkedmureinunits_pentapeptidecorsslinkedtripeptide__A2pm__A2pm____middleofchain__()
	trans_3_cis_11_vacceoyl___acyl_carrierprotein__()
	Glycerol3_phosphate()
	Flavinadeninedinucleotideoxidized()
	s6_carboxy_5_6_7_8_tetrahydropterin()
	Shikimate5_phosphate()
	Adenosine()
	Hexadecanoyl_phosphate__n_C16_0__()
	s2_Succinyl_6_hydroxy_2_4_cyclohexadiene_1_carboxylate()
	L_Seryl_tRNA__Sec__()
	L_Rhamnulose()
	Fe2pl()
	trans_Octadec_2_enoyl_CoA()
	Lipoate()
	N2_Succinyl_L_arginine()
	Fe__III__hydoxamate_unloaded()
	Pyridoxine5_phosphate()
	Iminoaspartate()
	Undecaprenylphosphate()
	dTDP_L_rhamnose()
	Formate()
	s3_Oxo_glutaryl___acyl_carrierprotein__methylester()
	dTMP()
	Undecaprenyldiphosphate()
	s3_oxo_cis_dodec_5_enoyl___acyl_carrierprotein__()
	Nicotinamideadeninedinucleotide_reduced()
	L_Xylulose()
	O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()
	alpha_alpha_Trehalose6_phosphate()
	L_MethionineSulfoxide()
	trans_3_cis_7_myristoleoyl___acyl_carrierprotein__()
	gamma_hydroxybutyrate()
	gamma_glutamyl_putrescine()
	UDP_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine()
	L_Histidinol()
	s5_6_dihydrouracil()
	UndecaprenyldiphosphoN_acetyl_glucosamine()
	s2_Dehydro_3_deoxy_D_galactonate()
	beta_Alanine()
	s2___5_triphosphoribosyl___3_dephospho_CoA()
	L_Galactonate()
	Malonatesemialdehyde()
	ATP()
	nickel()
	s2_Aminomalonatesemialdehyde()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()
	D_Mannose()
	aerobactinminusFe3()
	s3_Oxooctadecanoyl_CoA()
	KDO__2___lipid__A__()
	D_Glucose6_phosphate()
	s3_Oxodecanoyl_CoA()
	minocycline()
	D_Carnitine()
	s5_Methyltetrahydrofolate()
	s2_Hydroxy_3_oxopropanoate()
	dTDP_4_dehydro_6_deoxy_L_mannose()
	L_Xylulose5_phosphate()
	Isopentenyldiphosphate()
	octadecenoate__n_C18_1__()
	CDP_1_2_dioctadec_11_enoylglycerol()
	Adenine()
	tRNA__Lys__()
	Taurine()
	glucosyl_innercoreoligosaccharidelipidA()
	dGDP()
	CDP_1_2_dioctadecanoylglycerol()
	periplasmicproteindisulfideisomeraseI__reduced__()
	O_Phospho_L_homoserine()
	D_4_Phosphopantothenate()
	__R___S_Lactoylglutathione()
	trans_Tetradec_2_enoyl___acyl_carrierprotein__()
	s10_Formyltetrahydrofolate()
	KDO_lipidIV__A__()
	dIMP()
	s3_GMP()
	tRNA__Ile__()
	FerrichromeminusFe__III__()
	s3_Oxo_pimeloyl___acyl_carrierprotein__methylester()
	lipoprotein()
	s3_Oxotetradecanoyl___acyl_carrierprotein__()
	s3___2_3_Dihydroxyphenyl__propanoate()
	L_Histidine()
	o_Succinylbenzoate()
	s1_hexadecanoyl_sn_glycerol3_phosphate()
	s2_3_diaminopropionate()
	dITP()
	tungstenbispterincofactor()
	L_Tryptophan()
	__enterobacterialcommonantigen__x4coreoligosaccharidelipidA()
	Pyridoxamine()
	Geranyldiphosphate()
	Thiaminmonophosphate()
	__R___3_Hydroxydodecanoyl___acyl_carrierprotein__()
	twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__()
	Phenylpropanoate()
	Cytosine()
	twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()
	Molybdate()
	s1___5_Phosphoribosyl___ATP()
	Putrescine()
	Deamino_NADpl()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()
	D_carnitinyl_CoA()
	phosphoethanolamineKDO__2___lipid__A__()
	Aerobactin()
	uridine5_diphospho_beta_4_deoxy_4_formamido_L_arabinose()
	coreoligosaccharidelipidA()
	D_Glycero_D_manno_heptose1_phosphate()
	Selenophosphate()
	N1___alpha_D_ribosyl___5_6_dimethylbenzimidazole()
	s2_Phosphoglycolate()
	CDP_1_2_ditetradecanoylglycerol()
	Tetradecanoyl_CoA__n_C14_0CoA__()
	Sodium()
	Superoxideanion()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()
	s2_Methyl_4_amino_5_hydroxymethylpyrimidinediphosphate()
	s2_octadecanoyl_sn_glycerol3_phosphate()
	Sulfate()
	N_Succinyl_2_L_amino_6_oxoheptanedioate()
	S_Adenosylmethioninamine()
	s2_3_CyclicCMP()
	N2_Formyl_N1___5_phospho_D_ribosyl__glycinamide()
	Hpl()
	LL_2_6_Diaminoheptanedioate()
	__R___Pantothenate()
	dATP()
	all_trans_Octaprenyldiphosphate()
	N_Acetylanthranilate()
	s2_octadec_11_enoyl_sn_glycerol3_phosphate()
	Cobinamide()
	trans_Aconitate()
	D_Glucuronate1_phosphate()
	tRNA__His__()
	dAMP()
	N_Acetyl_D_galactosamine1_phosphate()
	Ring1_2_epoxyphenylacetyl_CoA()
	s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()
	Ammonium()
	Hexadecanoate__n_C16_0__()
	Dihydroxyacetonephosphate()
	Sucrose()
	adenosinethiaminetriphosphate()
	Acetyl_maltose()
	s1_octadecanoyl_sn_glycerol3_phosphate()
	s3_Oxohexadecanoyl_CoA()
	s4_Phospho_D_erythronate()
	dCTP()
	__enterobacterialcommonantigen__x4undecaprenyl_diphosphate()
	Melibiose()
	L_Isoleucine()
	acylphosphatidylglycerol__n_C16_0__()
	Enoylglutaryl___acyl_carrierprotein__methylester()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()
	molybdenumcofactor()
	D_Galacturonate()
	s2_Octaprenyl_6_hydroxyphenol()
	periplasmicdisulfideisomerase_thiol_disulphideoxidase__reduced__()
	s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()
	Xanthosine()
	fusidicacid()
	hepta_acylatedcoreoligosaccharidelipidA__E_coli__()
	L_Asparagine()
	s3_cmp()
	s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__()
	Hexanoyl_CoA__n_C6_0CoA__()
	Guanosine3_diphosphate5_triphosphate()
	Acetyl_ACP()
	methylisocitrate()
	s4_Hydroxyphenylacetaldehyde()
	s2_3_dihydroxicinnamicacid()
	tRNA__Glu__()
	Anthranilate()
	molybdopterincytosinedinucleotide()
	L_Isoleucyl_tRNA__Ile__()
	Hexadecanoyl_phosphate__n_C16_1__()
	s5_6_Dimethylbenzimidazole()
	trans_Hexadec_2_enoyl_CoA()
	Allantoin()
	__R___3_hydroxy_cis_myristol_7_eoyl___acyl_carrierprotein__()
	L_Citrulline()
	twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()
	phosphatidylserine__dihexadecanoyl_n_C16_0__()
	acylphosphatidylglycerol__n_C18_1__()
	Methylglyoxal()
	twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain__()
	Succinyl_CoA()
	D_Fructose1_phosphate()
	Hexanoyl_ACP__n_C6_0ACP__()
	Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()
	TrimethylamineN_oxide()
	s2_Demethylmenaquinone8()
	Fumarate()
	s2_3_Dihydroxybenzoate()
	D_Glucosamine6_phosphate()
	s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()
	D_Xylulose()
	__R___Pantoate()
	UDPgalactose()
	Nitrousoxide()
	s1_6_anhydrous_N_Acetylmuramate()
	KDO__2___lipidIV__A__()
	s2_Oxopent_4_enoate()
	Allantoate()
	__S___3_Hydroxydecanoyl_CoA()
	s3_Oxoadipyl_CoA()
	UDP_N_acetyl_D_galactosamine()
	Maltose()
	SufSEsulfuracceptorcomplex()
	twolinkeddisacharidepentapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()
	heptosyl_heptosyl_kdo2_lipidA()
	Quinate()
	L_Rhamnose()
	d_biotind_sulfoxide()
	D_Fructuronate()
	s1___2_Carboxyphenylamino___1_deoxy_D_ribulose5_phosphate()
	Acetylphosphate()
	twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain__()
	glycogen()
	Arbutin()
	s2_Dehydro_3_deoxy_D_gluconate6_phosphate()
	arsenate()
	s4_Aminobenzoate()
	trans_Cinnamate()
	UDP_2_3_bis__3_hydroxytetradecanoyl__glucosamine()
	tRNA__Cys__()
	s1_6_anhydrous_N_Acetylmuramyl_tripeptide()
	hepta_acylatedKDO__2___lipid__A__()
	rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()
	novobiocin()
	trans_Oct_2_enoyl_CoA()
	D_Ribose()
	Uridine()
	tRNA__Asn__()
	ferric2_3_dihydroxybenzoylserine()
	Acetoacetyl_ACP()
	Deoxyadenosine()
	Ubiquinone_8()
	N_N_diacetylchitobiose()
	s5_amino_1___5_phospho_D_ribosyl__imidazole_4_carboxylate()
	tRNA__Arg__()
	tRNA__Asp__()
	trans_Dec_2_enoyl___acyl_carrierprotein__()
	Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()
	Hexadecenoate__n_C16_1__()
	Orotidine5_phosphate()
	D_Cysteine()
	__O16antigen__x4undecaprenyldiphosphate()
	dGTP()
	Selenodiglutathione()
	Hexadecenoyl_CoA__n_C16_1CoA__()
	L_Glutamate()
	L_Tyrosine()
	s2_Methylcitrate()
	cyclopropanephosphatidylglycerol__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo__()
	gamma_butyrobetaine()
	myo_Inositolhexakisphosphate()
	L_Valyl_tRNA__Val__()
	D_Fructose1_6_bisphosphate()
	s2_Octaprenyl_3_methyl_6_methoxy_1_4_benzoquinol()
	undecaprenylphosphate_4_amino_4_deoxy_L_arabinose()
	s3_oxo_cis_myristol_7_eoyl___acyl_carrierprotein__()
	Glycerophosphoglycerol()
	Phosphoenolpyruvate()
	D_Tagatose6_phosphate()
	Menaquinol8()
	dTDP_4_acetamido_4_6_dideoxy_D_galactose()
	Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()
	Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__()
	IscUwithtwobound__2Fe_2S__clusters()
	L_Fuculose1_phosphate()
	Propanal()
	s5_phosphoribosyl_5_carboxyaminoimidazole()
	s1_2_didodecanoyl_sn_glycerol3_phosphate()
	Enterochelin()
	bis_molybdenumcofactor()
	coldadaptedKDO__2___lipid__A__()
	s2_hydroxy_6_ketononatrienedioate()
	s3_Oxodecanoyl___acyl_carrierprotein__()
	cyclicpyranopterinmonophosphate()
	s2_3_23_Tetrakis__beta_hydroxymyristoyl___D_glucosaminyl_1_6_beta_D_glucosamine1_4_bisphosphate()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()
	Fe3pl()
	tRNA__Leu__()
	s2_5_diketo_D_gluconate()
	Porphobilinogen()
	Dimethylsulfide()
	trans_Tetradec_2_enoyl_CoA()
	L_Malate()
	s3_Oxododecanoyl___acyl_carrierprotein__()
	L_Glutamyl_tRNA__Glu__()
	s2___Formamido___N1___5_phospho_D_ribosyl__acetamidine()
	D_Serine()
	cardiolipin__tetrahexadecanoyl_n_C16_0__()
	threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()
	Phenylaceticacid()
	L_Carnitine()
	dTDP()
	phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()
	Cyanate()
	N6___1_2_Dicarboxyethyl___AMP()
	meso_2_6_Diaminoheptanedioate()
	s2_Hydroxy_6_oxonona_2_4_diene_1_9_dioate()
	H2O()
	L_Ribulose5_phosphate()
	L_Ribulose()
	s5_Amino_6___5_phosphoribitylamino__uracil()
	tungstate()
	s3_Oxododecanoyl_CoA()
	L_Idonate()
	Urate()
	Pimeloyl___acyl_carrierprotein__()
	cis_3___3_carboxyethyl___3_5_cyclohexadiene_1_2_diol()
	Malonyl___acyl_carrierprotein__()
	s7_cyano_7_carbaguanine()
	s2_Dehydro_3_deoxy_D_galactonate6_phosphate()
	s2_3_dehydroadipyl_CoA()
	__2R_4S___2_methyl_2_4_dihydroxydihydrofuran_3_one()
	s6_7_Dihydropteridine()
	s5_Phospho_beta_D_ribosylamine()
	__S___Methylmalonyl_CoA()
	tetradecanoate__n_C14_0__()
	__3S___3_Hydroxyadipyl_CoA()
	twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()
	betaD_Galactose()
	L_Asparaginyl_tRNA__Asn__()
	D_Mannitol1_phosphate()
	trans_Dodec_2_enoyl_CoA()
	L_Prolyl_tRNA__Pro__()
	octadecanoate__n_C18_0__()
	s8_Amino_7_oxononanoate()
	Cu2pl()
	Uracil()
	s3_4_dihydroxy_2_butanone4_phosphate()
	__S___2___5_Amino_1___5_phospho_D_ribosyl__imidazole_4_carboxamido__succinate()
	Chloramphenicol()
	s2_Oxobutanoate()
	s4_5_dihydroxy_2_3_pentanedione()
	Tyramine()
	Thiaminediphosphate()
	L_Glutamate1_semialdehyde()
	s5_Amino_4_oxopentanoate()
	cAMP()
	UDP_N_acetylmuramoyl_L_alanyl_D_glutamate()
	tRNA__Gly__()
	Formaldehyde()
	Adenosine_GDP_cobinamide()
	s7_deaza_7_carboxyguanine()
	s1_Aminopropan_2_ol()
	Tetrahydromonapterin()
	L_tartrate()
	Farnesyldiphosphate()
	twodisacharidelinkedmureinunits_tripeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()
	D_Xylose()
	L_Phenylalanine()
	ADP_L_glycero_D_manno_heptose()
	Guanine()
	GTP()
	phosphatidylserine__ditetradec_7_enoyl_n_C14_1__()
	N2_Succinyl_L_glutamate()
	s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()
	L_Valine()
	s3_Dehydroquinate()
	Succinicsemialdehyde()
	L_Threonyl_tRNA__Thr__()
	s2_Dehydro_L_gulonate()
	s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()
	proteindisulfideisomeraseII__reduced__()
	__R___3_hydroxy_cis_palm_9_eoyl___acyl_carrierprotein__()
	UDP_N_acetyl_D_mannosaminouronate()
	octanoate__n_C8_0__()
	Phosphate()
	L_Ascorbate()
	L_Tyrosyl_tRNA__Tyr__()
	Adenosine3_5_bisphosphate()
	s1_6_anhydrous_N_Acetylmuramyl_tetrapeptide()
	ADPribose()
	cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()
	Butyrate__n_C4_0__()
	Hg2pl()
	s3___4_Hydroxyphenyl__pyruvate()
	s1_5_Diaminopentane()
	LipidADisaccharide()
	Fe__III__hydroxamate()
	s4___1_D_Ribitylamino___5_aminouracil()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()
	KDO__2___lipidIV__A__withlaurate()
	D_Gluconate()
	L_Arginyl_tRNA__Arg__()
	__2R_4S___2_methyl_2_3_3_4_tetrahydroxytetrahydrofuran()
	L_Serine()
	D_Mannonate()
	s2_succinyl_5_enolpyruvyl_6_hydroxy_3_cyclohexene_1_carboxylate()
	Crotonoyl_CoA()
	s3_Oxooctadecanoyl___acyl_carrierprotein__()
	XTP()
	SufBCDwithtwobound__2Fe_2S__clusters()
	CDP_1_2_didodecanoylglycerol()
	sn_Glycero_3_phosphocholine()
	s7_8_Dihydrofolate()
	Palmitoyl_ACP__n_C16_0ACP__()
	D_Lactate()
	Mn2pl()
	O_Acetyl_L_serine()
	Enoylpimeloyl___acyl_carrierprotein__methylester()
	s1_4_alpha_D_glucan()
	Glyoxylate()
	Stearoyl_CoA__n_C18_0CoA__()
	Acetoacetate()
	L_Leucyl_tRNA__Leu__()
	Thiocyanate()
	cyclopropanephosphatidylethanolamine__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo__()
	NMN()
	L_Seryl_tRNA__Ser__()
	N_Acetylmuramate()
	L_Tryptophanyl_tRNA__Trp__()
	s4___cytidine5_diphospho___2_C_methyl_D_erythritol()
	s1_2_dihexadecanoyl_sn_glycerol3_phosphate()
	CMP_3_deoxy_D_manno_octulosonate()
	dGMP()
	s4_Amino_2_methyl_5_phosphomethylpyrimidine()
	dCMP()
	s1D_myo_Inositol1_phosphate()
	s3_Carboxy_3_hydroxy_4_methylpentanoate()
	UDP_N_acetyl_D_mannosamine()
	cyclopropanephosphatidylethanolamine__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo__()
	phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()
	E_3_carboxy_2_pentenedioate6_methylester()
	L_Cysteine()
	Glycyl_tRNA__Gly__()
	L_Homocysteine()
	D_Glucosamine1_phosphate()
	Reducedglutathione()
	Pimeloyl___acyl_carrierprotein__methylester()
	Inorganictriphosphate()
	s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__()
	UDP_4_keto_pyranose()
	Guanosine()
	Phenylpyruvate()
	KDO__2___lipidIV__A__withpalmitoleoyl()
	s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()
	tRNA__Ser__()
	lipoate__proteinbound__()
	phosphatidylserine__dioctadec_11_enoyl_n_C18_1__()
	Deoxyuridine()
	GDP_L_fucose()
	Oxalureate()
	__2Fe_2S__iron_sulfurcluster()
	O2()
	Hypoxanthine()
	S_Formylglutathione()
	doxorubicin()
	cardiolipin__tetradodecanoyl_n_C12_0__()
	Choline()
	sulfurdioxide()
	s6_hydroxymethyl_dihydropterinpyrophosphate()
	Acetyl_CoA()
end molecule types
begin seed species
end seed species
begin observables
	Species s10_Formyltetrahydrofolate_c @c:s10_Formyltetrahydrofolate() #10-Formyltetrahydrofolate
	Species s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0___c @c:s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__() #1,2-Diacyl-sn-glycerol (didodecanoyl, n-C12:0)
	Species s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0___c @c:s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__() #1,2-Diacyl-sn-glycerol (ditetradecanoyl, n-C14:0)
	Species s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1___c @c:s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__() #1,2-Diacyl-sn-glycerol (ditetradec-7-enoyl, n-C14:1)
	Species s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0___c @c:s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__() #1,2-Diacyl-sn-glycerol (dihexadecanoyl, n-C16:0)
	Species s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1___c @c:s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__() #1,2-Diacyl-sn-glycerol (dihexadec-9-enoyl, n-C16:1)
	Species s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0___c @c:s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__() #1,2-Diacyl-sn-glycerol (dioctadecanoyl, n-C18:0)
	Species s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1___c @c:s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__() #1,2-Diacyl-sn-glycerol (dioctadec-11-enoyl, n-C18:1)
	Species __R___Propane_1_2_diol_c @c:__R___Propane_1_2_diol() #(R)-Propane-1,2-diol
	Species __S___Propane_1_2_diol_c @c:__S___Propane_1_2_diol() #(S)-Propane-1,2-diol
	Species s3_Phospho_D_glyceroylphosphate_c @c:s3_Phospho_D_glyceroylphosphate() #3-Phospho-D-glyceroyl phosphate
	Species s1_4_dihydroxy_2_napthoyl_CoA_c @c:s1_4_dihydroxy_2_napthoyl_CoA() #1,4-dihydroxy-2-napthoyl-CoA
	Species s1_4_alpha_D_glucan_c @c:s1_4_alpha_D_glucan() #1,4-alpha-D-glucan
	Species s1_5_Diaminopentane_c @c:s1_5_Diaminopentane() #1,5-Diaminopentane
	Species s1_dodecanoyl_sn_glycerol3_phosphate_c @c:s1_dodecanoyl_sn_glycerol3_phosphate() #1-dodecanoyl-sn-glycerol 3-phosphate
	Species s1_hexadec_9_enoyl_sn_glycerol3_phosphate_c @c:s1_hexadec_9_enoyl_sn_glycerol3_phosphate() #1-hexadec-9-enoyl-sn-glycerol 3-phosphate
	Species s1_hexadecanoyl_sn_glycerol3_phosphate_c @c:s1_hexadecanoyl_sn_glycerol3_phosphate() #1-hexadecanoyl-sn-glycerol 3-phosphate
	Species s1_octadec_11_enoyl_sn_glycerol3_phosphate_c @c:s1_octadec_11_enoyl_sn_glycerol3_phosphate() #1-octadec-11-enoyl-sn-glycerol 3-phosphate
	Species s1_octadecanoyl_sn_glycerol3_phosphate_c @c:s1_octadecanoyl_sn_glycerol3_phosphate() #1-octadecanoyl-sn-glycerol 3-phosphate
	Species s1_Pyrroline_5_carboxylate_c @c:s1_Pyrroline_5_carboxylate() #1-Pyrroline-5-carboxylate
	Species s1_tetradec_7_enoyl_sn_glycerol3_phosphate_c @c:s1_tetradec_7_enoyl_sn_glycerol3_phosphate() #1-tetradec-7-enoyl-sn-glycerol 3-phosphate
	Species s1_tetradecanoyl_sn_glycerol3_phosphate_c @c:s1_tetradecanoyl_sn_glycerol3_phosphate() #1-tetradecanoyl-sn-glycerol 3-phosphate
	Species s2_3_diaminopropionate_c @c:s2_3_diaminopropionate() #2,3-diaminopropionate
	Species s2_3_Dihydro_2_3_dihydroxybenzoate_c @c:s2_3_Dihydro_2_3_dihydroxybenzoate() #2,3-Dihydro-2,3-dihydroxybenzoate
	Species s2_3_dehydroadipyl_CoA_c @c:s2_3_dehydroadipyl_CoA() #2,3-dehydroadipyl-CoA
	Species s2_3_Dihydroxybenzoate_c @c:s2_3_Dihydroxybenzoate() #2,3-Dihydroxybenzoate
	Species __2_3_Dihydroxybenzoyl__adenylate_c @c:__2_3_Dihydroxybenzoyl__adenylate() #(2,3-Dihydroxybenzoyl)adenylate
	Species s2_3_dihydroxybenzoylserine_c @c:s2_3_dihydroxybenzoylserine() #2,3-dihydroxybenzoylserine
	Species s2_3_Dihydrodipicolinate_c @c:s2_3_Dihydrodipicolinate() #2,3-Dihydrodipicolinate
	Species __R___2_3_Dihydroxy_3_methylbutanoate_c @c:__R___2_3_Dihydroxy_3_methylbutanoate() #(R)-2,3-Dihydroxy-3-methylbutanoate
	Species __R___2_3_Dihydroxy_3_methylpentanoate_c @c:__R___2_3_Dihydroxy_3_methylpentanoate() #(R)-2,3-Dihydroxy-3-methylpentanoate
	Species s2_3_Dioxo_L_gulonate_c @c:s2_3_Dioxo_L_gulonate() #2,3-Dioxo-L-gulonate
	Species __S___2___5_Amino_1___5_phospho_D_ribosyl__imidazole_4_carboxamido__succinate_c @c:__S___2___5_Amino_1___5_phospho_D_ribosyl__imidazole_4_carboxamido__succinate() #(S)-2-[5-Amino-1-(5-phospho-D-ribosyl)imidazole-4-carboxamido]succinate
	Species s2_5_diketo_D_gluconate_c @c:s2_5_diketo_D_gluconate() #2,5-diketo-D-gluconate
	Species s2_5_Diamino_6___ribosylamino___4___3H___pyrimidinone5_phosphate_c @c:s2_5_Diamino_6___ribosylamino___4___3H___pyrimidinone5_phosphate() #2,5-Diamino-6-(ribosylamino)-4-(3H)-pyrimidinone 5'-phosphate
	Species LL_2_6_Diaminoheptanedioate_c @c:LL_2_6_Diaminoheptanedioate() #LL-2,6-Diaminoheptanedioate
	Species meso_2_6_Diaminoheptanedioate_c @c:meso_2_6_Diaminoheptanedioate() #meso-2,6-Diaminoheptanedioate
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C12:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C14:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C14:1)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C16:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C16:1)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C18:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1___c @c:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C18:1)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C12:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C14:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C14:1)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C16:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C16:1)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C18:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1___c @c:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C18:1)
	Species __S___2_Aceto_2_hydroxybutanoate_c @c:__S___2_Aceto_2_hydroxybutanoate() #(S)-2-Aceto-2-hydroxybutanoate
	Species s2_Aminomalonatesemialdehyde_c @c:s2_Aminomalonatesemialdehyde() #2-Aminomalonate semialdehyde
	Species L_2_Amino_3_oxobutanoate_c @c:L_2_Amino_3_oxobutanoate() #L-2-Amino-3-oxobutanoate
	Species s1___2_Carboxyphenylamino___1_deoxy_D_ribulose5_phosphate_c @c:s1___2_Carboxyphenylamino___1_deoxy_D_ribulose5_phosphate() #1-(2-Carboxyphenylamino)-1-deoxy-D-ribulose 5-phosphate
	Species s2_Dehydro_3_deoxy_D_arabino_heptonate7_phosphate_c @c:s2_Dehydro_3_deoxy_D_arabino_heptonate7_phosphate() #2-Dehydro-3-deoxy-D-arabino-heptonate 7-phosphate
	Species s2_dodecanoyl_sn_glycerol3_phosphate_c @c:s2_dodecanoyl_sn_glycerol3_phosphate() #2-dodecanoyl-sn-glycerol 3-phosphate
	Species s2_Dehydro_3_deoxy_D_gluconate6_phosphate_c @c:s2_Dehydro_3_deoxy_D_gluconate6_phosphate() #2-Dehydro-3-deoxy-D-gluconate 6-phosphate
	Species s2_Dehydro_3_deoxy_D_gluconate_c @c:s2_Dehydro_3_deoxy_D_gluconate() #2-Dehydro-3-deoxy-D-gluconate
	Species s2_Dehydro_3_deoxy_D_galactonate_c @c:s2_Dehydro_3_deoxy_D_galactonate() #2-Dehydro-3-deoxy-D-galactonate
	Species s2_Dehydro_3_deoxy_D_galactonate6_phosphate_c @c:s2_Dehydro_3_deoxy_D_galactonate6_phosphate() #2-Dehydro-3-deoxy-D-galactonate 6-phosphate
	Species s2_Dehydro_L_gulonate_c @c:s2_Dehydro_L_gulonate() #2-Dehydro-L-gulonate
	Species s2_Dehydropantoate_c @c:s2_Dehydropantoate() #2-Dehydropantoate
	Species s2_Demethylmenaquinone8_c @c:s2_Demethylmenaquinone8() #2-Demethylmenaquinone 8
	Species s2_Demethylmenaquinol8_c @c:s2_Demethylmenaquinol8() #2-Demethylmenaquinol 8
	Species s2_Deoxy_D_ribose1_phosphate_c @c:s2_Deoxy_D_ribose1_phosphate() #2-Deoxy-D-ribose 1-phosphate
	Species s2_Deoxy_D_ribose5_phosphate_c @c:s2_Deoxy_D_ribose5_phosphate() #2-Deoxy-D-ribose 5-phosphate
	Species __2Fe_1S__desulfuratediron_sulfurcluster_c @c:__2Fe_1S__desulfuratediron_sulfurcluster() #[2Fe-1S] desulfurated iron-sulfur cluster
	Species __2Fe_2S__iron_sulfurcluster_c @c:__2Fe_2S__iron_sulfurcluster() #[2Fe-2S] iron-sulfur cluster
	Species s2_Hydroxy_3_oxopropanoate_c @c:s2_Hydroxy_3_oxopropanoate() #2-Hydroxy-3-oxopropanoate
	Species s2_hexadec_9_enoyl_sn_glycerol3_phosphate_c @c:s2_hexadec_9_enoyl_sn_glycerol3_phosphate() #2-hexadec-9-enoyl-sn-glycerol 3-phosphate
	Species s2_hexadecanoyl_sn_glycerol3_phosphate_c @c:s2_hexadecanoyl_sn_glycerol3_phosphate() #2-hexadecanoyl-sn-glycerol 3-phosphate
	Species s2_Isopropylmaleate_c @c:s2_Isopropylmaleate() #2-Isopropylmaleate
	Species s2_Methyl_4_amino_5_hydroxymethylpyrimidinediphosphate_c @c:s2_Methyl_4_amino_5_hydroxymethylpyrimidinediphosphate() #2-Methyl-4-amino-5-hydroxymethylpyrimidine diphosphate
	Species cis_2_Methylaconitate_c @c:cis_2_Methylaconitate() #cis-2-Methylaconitate
	Species s2_Methylcitrate_c @c:s2_Methylcitrate() #2-Methylcitrate
	Species s2_C_methyl_D_erythritol4_phosphate_c @c:s2_C_methyl_D_erythritol4_phosphate() #2-C-methyl-D-erythritol 4-phosphate
	Species s2_C_methyl_D_erythritol2_4_cyclodiphosphate_c @c:s2_C_methyl_D_erythritol2_4_cyclodiphosphate() #2-C-methyl-D-erythritol 2,4-cyclodiphosphate
	Species s2_Oxobutanoate_c @c:s2_Oxobutanoate() #2-Oxobutanoate
	Species s2_octadec_11_enoyl_sn_glycerol3_phosphate_c @c:s2_octadec_11_enoyl_sn_glycerol3_phosphate() #2-octadec-11-enoyl-sn-glycerol 3-phosphate
	Species s2_octadecanoyl_sn_glycerol3_phosphate_c @c:s2_octadecanoyl_sn_glycerol3_phosphate() #2-octadecanoyl-sn-glycerol 3-phosphate
	Species s2_Octaprenyl_6_hydroxyphenol_c @c:s2_Octaprenyl_6_hydroxyphenol() #2-Octaprenyl-6-hydroxyphenol
	Species s2_Octaprenyl_6_methoxy_1_4_benzoquinol_c @c:s2_Octaprenyl_6_methoxy_1_4_benzoquinol() #2-Octaprenyl-6-methoxy-1,4-benzoquinol
	Species s2_Octaprenyl_3_methyl_5_hydroxy_6_methoxy_1_4_benzoquinol_c @c:s2_Octaprenyl_3_methyl_5_hydroxy_6_methoxy_1_4_benzoquinol() #2-Octaprenyl-3-methyl-5-hydroxy-6-methoxy-1,4-benzoquinol
	Species s2_Octaprenyl_3_methyl_6_methoxy_1_4_benzoquinol_c @c:s2_Octaprenyl_3_methyl_6_methoxy_1_4_benzoquinol() #2-Octaprenyl-3-methyl-6-methoxy- 1,4-benzoquinol
	Species s2_Octaprenyl_6_methoxyphenol_c @c:s2_Octaprenyl_6_methoxyphenol() #2-Octaprenyl-6-methoxyphenol
	Species s2_Octaprenylphenol_c @c:s2_Octaprenylphenol() #2-Octaprenylphenol
	Species s2_oxepin_2__3H___ylideneacetyl_CoA_c @c:s2_oxepin_2__3H___ylideneacetyl_CoA() #2-oxepin-2(3H)-ylideneacetyl-CoA
	Species s2_phospho_4___cytidine5_diphospho___2_C_methyl_D_erythritol_c @c:s2_phospho_4___cytidine5_diphospho___2_C_methyl_D_erythritol() #2-phospho-4-(cytidine 5'-diphospho)-2-C-methyl-D-erythritol
	Species D_Glycerate2_phosphate_c @c:D_Glycerate2_phosphate() #D-Glycerate 2-phosphate
	Species s2_Phosphoglycolate_c @c:s2_Phosphoglycolate() #2-Phosphoglycolate
	Species s2_succinyl_5_enolpyruvyl_6_hydroxy_3_cyclohexene_1_carboxylate_c @c:s2_succinyl_5_enolpyruvyl_6_hydroxy_3_cyclohexene_1_carboxylate() #2-succinyl-5-enolpyruvyl-6-hydroxy-3-cyclohexene-1-carboxylate
	Species s2_Succinyl_6_hydroxy_2_4_cyclohexadiene_1_carboxylate_c @c:s2_Succinyl_6_hydroxy_2_4_cyclohexadiene_1_carboxylate() #2-Succinyl-6-hydroxy-2,4-cyclohexadiene-1-carboxylate
	Species s2_tetradec_7_enoyl_sn_glycerol3_phosphate_c @c:s2_tetradec_7_enoyl_sn_glycerol3_phosphate() #2-tetradec-7-enoyl-sn-glycerol 3-phosphate
	Species s2_tetradecanoyl_sn_glycerol3_phosphate_c @c:s2_tetradecanoyl_sn_glycerol3_phosphate() #2-tetradecanoyl-sn-glycerol 3-phosphate
	Species s2___5_triphosphoribosyl___3_dephospho_CoA_c @c:s2___5_triphosphoribosyl___3_dephospho_CoA() #2'-(5''-triphosphoribosyl)-3'-dephospho-CoA
	Species s3___4_Hydroxyphenyl__pyruvate_c @c:s3___4_Hydroxyphenyl__pyruvate() #3-(4-Hydroxyphenyl)pyruvate
	Species s3_5_CyclicGMP_c @c:s3_5_CyclicGMP() #3',5'-Cyclic GMP
	Species s3_Aminoacrylate_c @c:s3_Aminoacrylate() #3-Aminoacrylate
	Species s3_Carboxy_2_hydroxy_4_methylpentanoate_c @c:s3_Carboxy_2_hydroxy_4_methylpentanoate() #3-Carboxy-2-hydroxy-4-methylpentanoate
	Species s3_Carboxy_3_hydroxy_4_methylpentanoate_c @c:s3_Carboxy_3_hydroxy_4_methylpentanoate() #3-Carboxy-3-hydroxy-4-methylpentanoate
	Species s3_Carboxy_4_methyl_2_oxopentanoate_c @c:s3_Carboxy_4_methyl_2_oxopentanoate() #3-Carboxy-4-methyl-2-oxopentanoate
	Species s3_Dehydro_L_gulonate_c @c:s3_Dehydro_L_gulonate() #3-Dehydro-L-gulonate
	Species s3_keto_L_gulonate_6_phosphate_c @c:s3_keto_L_gulonate_6_phosphate() #3-keto-L-gulonate-6-phosphate
	Species s3_Dehydroquinate_c @c:s3_Dehydroquinate() #3-Dehydroquinate
	Species s3_Dehydroshikimate_c @c:s3_Dehydroshikimate() #3-Dehydroshikimate
	Species __3Fe_4S__damagediron_sulfurcluster_c @c:__3Fe_4S__damagediron_sulfurcluster() #[3Fe-4S] damaged iron-sulfur cluster
	Species __3R___3_Hydroxyacyl___acyl_carrierprotein___c @c:__3R___3_Hydroxyacyl___acyl_carrierprotein__() #(3R)-3-Hydroxyacyl-[acyl-carrier protein]
	Species __3S___3_Hydroxyadipyl_CoA_c @c:__3S___3_Hydroxyadipyl_CoA() #(3S)-3-Hydroxyadipyl-CoA
	Species __S___3_Hydroxybutanoyl_CoA_c @c:__S___3_Hydroxybutanoyl_CoA() #(S)-3-Hydroxybutanoyl-CoA
	Species __R___3_hydroxy_cis_dodec_5_enoyl___acyl_carrierprotein___c @c:__R___3_hydroxy_cis_dodec_5_enoyl___acyl_carrierprotein__() #(R)-3-hydroxy-cis-dodec-5-enoyl-[acyl-carrier protein]
	Species s3_hydroxycinnamicacid_c @c:s3_hydroxycinnamicacid() #3-hydroxycinnamic acid
	Species __R___3_hydroxy_cis_myristol_7_eoyl___acyl_carrierprotein___c @c:__R___3_hydroxy_cis_myristol_7_eoyl___acyl_carrierprotein__() #(R)-3-hydroxy-cis-myristol-7-eoyl-[acyl-carrier protein]
	Species __R___3_hydroxy_cis_palm_9_eoyl___acyl_carrierprotein___c @c:__R___3_hydroxy_cis_palm_9_eoyl___acyl_carrierprotein__() #(R)-3-hydroxy-cis-palm-9-eoyl-[acyl-carrier protein]
	Species __R___3_hydroxy_cis_vacc_11_enoyl___acyl_carrierprotein___c @c:__R___3_hydroxy_cis_vacc_11_enoyl___acyl_carrierprotein__() #(R)-3-hydroxy-cis-vacc-11-enoyl-[acyl-carrier protein]
	Species __S___3_Hydroxydecanoyl_CoA_c @c:__S___3_Hydroxydecanoyl_CoA() #(S)-3-Hydroxydecanoyl-CoA
	Species __S___3_Hydroxydodecanoyl_CoA_c @c:__S___3_Hydroxydodecanoyl_CoA() #(S)-3-Hydroxydodecanoyl-CoA
	Species __R___3_Hydroxydodecanoyl___acyl_carrierprotein___c @c:__R___3_Hydroxydodecanoyl___acyl_carrierprotein__() #(R)-3-Hydroxydodecanoyl-[acyl-carrier protein]
	Species __R___3_Hydroxydecanoyl___acyl_carrierprotein___c @c:__R___3_Hydroxydecanoyl___acyl_carrierprotein__() #(R)-3-Hydroxydecanoyl-[acyl-carrier protein]
	Species __S___3_Hydroxyhexanoyl_CoA_c @c:__S___3_Hydroxyhexanoyl_CoA() #(S)-3-Hydroxyhexanoyl-CoA
	Species __S___3_Hydroxyhexadecanoyl_CoA_c @c:__S___3_Hydroxyhexadecanoyl_CoA() #(S)-3-Hydroxyhexadecanoyl-CoA
	Species __R___3_Hydroxyhexanoyl___acyl_carrierprotein___c @c:__R___3_Hydroxyhexanoyl___acyl_carrierprotein__() #(R)-3-Hydroxyhexanoyl-[acyl-carrier protein]
	Species __R___3_Hydroxytetradecanoyl___acyl_carrierprotein___c @c:__R___3_Hydroxytetradecanoyl___acyl_carrierprotein__() #(R)-3-Hydroxytetradecanoyl-[acyl-carrier protein]
	Species __S___3_Hydroxyoctanoyl_CoA_c @c:__S___3_Hydroxyoctanoyl_CoA() #(S)-3-Hydroxyoctanoyl-CoA
	Species __R___3_Hydroxyoctanoyl___acyl_carrierprotein___c @c:__R___3_Hydroxyoctanoyl___acyl_carrierprotein__() #(R)-3-Hydroxyoctanoyl-[acyl-carrier protein]
	Species __R___3_Hydroxyoctadecanoyl___acyl_carrierprotein___c @c:__R___3_Hydroxyoctadecanoyl___acyl_carrierprotein__() #(R)-3-Hydroxyoctadecanoyl-[acyl-carrier protein]
	Species __S___3_Hydroxyoctadecanoyl_CoA_c @c:__S___3_Hydroxyoctadecanoyl_CoA() #(S)-3-Hydroxyoctadecanoyl-CoA
	Species R_3_hydroxypalmitoyl___acyl_carrierprotein___c @c:R_3_hydroxypalmitoyl___acyl_carrierprotein__() #R-3-hydroxypalmitoyl-[acyl-carrier protein]
	Species s3_Hydroxypropanoate_c @c:s3_Hydroxypropanoate() #3-Hydroxypropanoate
	Species s3___3_hydroxy_phenyl__propionate_c @c:s3___3_hydroxy_phenyl__propionate() #3-(3-hydroxy-phenyl)propionate
	Species __S___3_Hydroxytetradecanoyl_CoA_c @c:__S___3_Hydroxytetradecanoyl_CoA() #(S)-3-Hydroxytetradecanoyl-CoA
	Species C___3_Indolyl___glycerol3_phosphate_c @c:C___3_Indolyl___glycerol3_phosphate() #C'-(3-Indolyl)-glycerol 3-phosphate
	Species s3_Methyl_2_oxobutanoate_c @c:s3_Methyl_2_oxobutanoate() #3-Methyl-2-oxobutanoate
	Species __S___3_Methyl_2_oxopentanoate_c @c:__S___3_Methyl_2_oxopentanoate() #(S)-3-Methyl-2-oxopentanoate
	Species s3_oxo_cis_dodec_5_enoyl___acyl_carrierprotein___c @c:s3_oxo_cis_dodec_5_enoyl___acyl_carrierprotein__() #3-oxo-cis-dodec-5-enoyl-[acyl-carrier protein]
	Species s3_oxo_cis_myristol_7_eoyl___acyl_carrierprotein___c @c:s3_oxo_cis_myristol_7_eoyl___acyl_carrierprotein__() #3-oxo-cis-myristol-7-eoyl-[acyl-carrier protein]
	Species s3_oxo_cis_palm_9_eoyl___acyl_carrierprotein___c @c:s3_oxo_cis_palm_9_eoyl___acyl_carrierprotein__() #3-oxo-cis-palm-9-eoyl-[acyl-carrier protein]
	Species s3_oxo_cis_vacc_11_enoyl___acyl_carrierprotein___c @c:s3_oxo_cis_vacc_11_enoyl___acyl_carrierprotein__() #3-oxo-cis-vacc-11-enoyl-[acyl-carrier protein]
	Species s3_Oxodecanoyl_CoA_c @c:s3_Oxodecanoyl_CoA() #3-Oxodecanoyl-CoA
	Species s3_Oxododecanoyl_CoA_c @c:s3_Oxododecanoyl_CoA() #3-Oxododecanoyl-CoA
	Species s3_Oxododecanoyl___acyl_carrierprotein___c @c:s3_Oxododecanoyl___acyl_carrierprotein__() #3-Oxododecanoyl-[acyl-carrier protein]
	Species s3_Oxodecanoyl___acyl_carrierprotein___c @c:s3_Oxodecanoyl___acyl_carrierprotein__() #3-Oxodecanoyl-[acyl-carrier protein]
	Species s3_Oxohexanoyl_CoA_c @c:s3_Oxohexanoyl_CoA() #3-Oxohexanoyl-CoA
	Species s3_Oxohexadecanoyl_CoA_c @c:s3_Oxohexadecanoyl_CoA() #3-Oxohexadecanoyl-CoA
	Species s3_Oxohexanoyl___acyl_carrierprotein___c @c:s3_Oxohexanoyl___acyl_carrierprotein__() #3-Oxohexanoyl-[acyl-carrier protein]
	Species s3_Oxotetradecanoyl___acyl_carrierprotein___c @c:s3_Oxotetradecanoyl___acyl_carrierprotein__() #3-Oxotetradecanoyl-[acyl-carrier protein]
	Species s3_Oxooctanoyl_CoA_c @c:s3_Oxooctanoyl_CoA() #3-Oxooctanoyl-CoA
	Species s3_Oxooctanoyl___acyl_carrierprotein___c @c:s3_Oxooctanoyl___acyl_carrierprotein__() #3-Oxooctanoyl-[acyl-carrier protein]
	Species s3_Oxooctadecanoyl___acyl_carrierprotein___c @c:s3_Oxooctadecanoyl___acyl_carrierprotein__() #3-Oxooctadecanoyl-[acyl-carrier protein]
	Species s3_Oxooctadecanoyl_CoA_c @c:s3_Oxooctadecanoyl_CoA() #3-Oxooctadecanoyl-CoA
	Species s3_Oxohexadecanoyl___acyl_carrierprotein___c @c:s3_Oxohexadecanoyl___acyl_carrierprotein__() #3-Oxohexadecanoyl-[acyl-carrier protein]
	Species s3_Octaprenyl_4_hydroxybenzoate_c @c:s3_Octaprenyl_4_hydroxybenzoate() #3-Octaprenyl-4-hydroxybenzoate
	Species s3_Oxotetradecanoyl_CoA_c @c:s3_Oxotetradecanoyl_CoA() #3-Oxotetradecanoyl-CoA
	Species s3_oxo_5_6_dehydrosuberyl_CoA_c @c:s3_oxo_5_6_dehydrosuberyl_CoA() #3-oxo-5,6-dehydrosuberyl-CoA
	Species s3_Phospho_D_glycerate_c @c:s3_Phospho_D_glycerate() #3-Phospho-D-glycerate
	Species s3_Phosphohydroxypyruvate_c @c:s3_Phosphohydroxypyruvate() #3-Phosphohydroxypyruvate
	Species s5_O___1_Carboxyvinyl___3_phosphoshikimate_c @c:s5_O___1_Carboxyvinyl___3_phosphoshikimate() #5-O-(1-Carboxyvinyl)-3-phosphoshikimate
	Species s3_Sulfino_L_alanine_c @c:s3_Sulfino_L_alanine() #3-Sulfino-L-alanine
	Species s4_Aminobutanoate_c @c:s4_Aminobutanoate() #4-Aminobutanoate
	Species s4_Aminobutanal_c @c:s4_Aminobutanal() #4-Aminobutanal
	Species s4_Aminobenzoate_c @c:s4_Aminobenzoate() #4-Aminobenzoate
	Species s4_amino_4_deoxychorismate_c @c:s4_amino_4_deoxychorismate() #4-amino-4-deoxychorismate
	Species s4_Amino_5_hydroxymethyl_2_methylpyrimidine_c @c:s4_Amino_5_hydroxymethyl_2_methylpyrimidine() #4-Amino-5-hydroxymethyl-2-methylpyrimidine
	Species s4_Amino_2_methyl_5_phosphomethylpyrimidine_c @c:s4_Amino_2_methyl_5_phosphomethylpyrimidine() #4-Amino-2-methyl-5-phosphomethylpyrimidine
	Species s4___cytidine5_diphospho___2_C_methyl_D_erythritol_c @c:s4___cytidine5_diphospho___2_C_methyl_D_erythritol() #4-(cytidine 5'-diphospho)-2-C-methyl-D-erythritol
	Species p_Cresol_c @c:p_Cresol() #p-Cresol
	Species __4Fe_4S__iron_sulfurcluster_c @c:__4Fe_4S__iron_sulfurcluster() #[4Fe-4S] iron-sulfur cluster
	Species s4_Hydroxy_2_oxopentanoate_c @c:s4_Hydroxy_2_oxopentanoate() #4-Hydroxy-2-oxopentanoate
	Species s4_Hydroxybenzoate_c @c:s4_Hydroxybenzoate() #4-Hydroxybenzoate
	Species s4_Hydroxy_L_threonine_c @c:s4_Hydroxy_L_threonine() #4-Hydroxy-L-threonine
	Species s4_Methyl_5___2_hydroxyethyl___thiazole_c @c:s4_Methyl_5___2_hydroxyethyl___thiazole() #4-Methyl-5-(2-hydroxyethyl)-thiazole
	Species s4_Methyl_2_oxopentanoate_c @c:s4_Methyl_2_oxopentanoate() #4-Methyl-2-oxopentanoate
	Species s4_Methyl_5___2_phosphoethyl___thiazole_c @c:s4_Methyl_5___2_phosphoethyl___thiazole() #4-Methyl-5-(2-phosphoethyl)-thiazole
	Species s4_Phospho_L_aspartate_c @c:s4_Phospho_L_aspartate() #4-Phospho-L-aspartate
	Species s4_Phospho_D_erythronate_c @c:s4_Phospho_D_erythronate() #4-Phospho-D-erythronate
	Species D_4_Phosphopantothenate_c @c:D_4_Phosphopantothenate() #D-4'-Phosphopantothenate
	Species N_____R___4_Phosphopantothenoyl___L_cysteine_c @c:N_____R___4_Phosphopantothenoyl___L_cysteine() #N-((R)-4-Phosphopantothenoyl)-L-cysteine
	Species s4___1_D_Ribitylamino___5_aminouracil_c @c:s4___1_D_Ribitylamino___5_aminouracil() #4-(1-D-Ribitylamino)-5-aminouracil
	Species s5_6_dihydrouracil_c @c:s5_6_dihydrouracil() #5,6-dihydrouracil
	Species s5_amino_1___5_phospho_D_ribosyl__imidazole_4_carboxylate_c @c:s5_amino_1___5_phospho_D_ribosyl__imidazole_4_carboxylate() #5-amino-1-(5-phospho-D-ribosyl)imidazole-4-carboxylate
	Species s5_Amino_4_oxopentanoate_c @c:s5_Amino_4_oxopentanoate() #5-Amino-4-oxopentanoate
	Species s5_Amino_6___5_phosphoribitylamino__uracil_c @c:s5_Amino_6___5_phosphoribitylamino__uracil() #5-Amino-6-(5'-phosphoribitylamino)uracil
	Species s5_Amino_6___5_phosphoribosylamino__uracil_c @c:s5_Amino_6___5_phosphoribosylamino__uracil() #5-Amino-6-(5'-phosphoribosylamino)uracil
	Species s5_phosphoribosyl_5_carboxyaminoimidazole_c @c:s5_phosphoribosyl_5_carboxyaminoimidazole() #5-phosphoribosyl-5-carboxyaminoimidazole
	Species s5_Dehydro_D_gluconate_c @c:s5_Dehydro_D_gluconate() #5-Dehydro-D-gluconate
	Species s5_Dehydro_4_deoxy_D_glucarate_c @c:s5_Dehydro_4_deoxy_D_glucarate() #5-Dehydro-4-deoxy-D-glucarate
	Species s5_deoxyribose_c @c:s5_deoxyribose() #5'-deoxyribose
	Species s5_Formyltetrahydrofolate_c @c:s5_Formyltetrahydrofolate() #5-Formyltetrahydrofolate
	Species s5_Methylthioadenosine_c @c:s5_Methylthioadenosine() #5-Methylthioadenosine
	Species s5_Methyltetrahydrofolate_c @c:s5_Methyltetrahydrofolate() #5-Methyltetrahydrofolate
	Species s5_Methylthio_D_ribose_c @c:s5_Methylthio_D_ribose() #5-Methylthio-D-ribose
	Species N1___5_Phospho_alpha_D_ribosyl___5_6_dimethylbenzimidazole_c @c:N1___5_Phospho_alpha_D_ribosyl___5_6_dimethylbenzimidazole() #N1-(5-Phospho-alpha-D-ribosyl)-5,6-dimethylbenzimidazole
	Species s6_hydroxymethyldihydropterin_c @c:s6_hydroxymethyldihydropterin() #6-hydroxymethyl dihydropterin
	Species s6_hydroxymethyl_dihydropterinpyrophosphate_c @c:s6_hydroxymethyl_dihydropterinpyrophosphate() #6-hydroxymethyl-dihydropterin pyrophosphate
	Species s6_Phospho_D_gluconate_c @c:s6_Phospho_D_gluconate() #6-Phospho-D-gluconate
	Species s6_phospho_D_glucono_1_5_lactone_c @c:s6_phospho_D_glucono_1_5_lactone() #6-phospho-D-glucono-1,5-lactone
	Species s8_Amino_7_oxononanoate_c @c:s8_Amino_7_oxononanoate() #8-Amino-7-oxononanoate
	Species acylcarrierprotein_c @c:acylcarrierprotein() #acyl carrier protein
	Species L_alanine_D_glutamate_c @c:L_alanine_D_glutamate() #L-alanine-D-glutamate
	Species L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_c @c:L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate() #L-alanine-D-glutamate-meso-2,6-diaminoheptanedioate
	Species L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine_c @c:L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine() #L-alanine-D-glutamate-meso-2,6-diaminoheptanedioate-D-alanine
	Species L_alanine_L_glutamate_c @c:L_alanine_L_glutamate() #L-alanine-L-glutamate
	Species N1_Acetylspermidine_c @c:N1_Acetylspermidine() #N1-Acetylspermidine
	Species N_Methyltryptophan_c @c:N_Methyltryptophan() #N-Methyltryptophan
	Species S_Formylglutathione_c @c:S_Formylglutathione() #S-Formylglutathione
	Species Aminoacetaldehyde_c @c:Aminoacetaldehyde() #Aminoacetaldehyde
	Species Acetoacetyl_CoA_c @c:Acetoacetyl_CoA() #Acetoacetyl-CoA
	Species Aminoacetone_c @c:Aminoacetone() #Aminoacetone
	Species Acetate_c @c:Acetate() #Acetate
	Species Acetyl_ACP_c @c:Acetyl_ACP() #Acetyl-ACP
	Species Acetoacetate_c @c:Acetoacetate() #Acetoacetate
	Species Acetaldehyde_c @c:Acetaldehyde() #Acetaldehyde
	Species N_Acetylanthranilate_c @c:N_Acetylanthranilate() #N-Acetylanthranilate
	Species Acetyl_CoA_c @c:Acetyl_CoA() #Acetyl-CoA
	Species Acetol_c @c:Acetol() #Acetol
	Species N_Acetyl_L_glutamyl5_phosphate_c @c:N_Acetyl_L_glutamyl5_phosphate() #N-Acetyl-L-glutamyl 5-phosphate
	Species N_Acetyl_L_glutamate5_semialdehyde_c @c:N_Acetyl_L_glutamate5_semialdehyde() #N-Acetyl-L-glutamate 5-semialdehyde
	Species N_Acetyl_D_glucosamine_c @c:N_Acetyl_D_glucosamine() #N-Acetyl-D-glucosamine
	Species N_Acetyl_D_glucosamine1_phosphate_c @c:N_Acetyl_D_glucosamine1_phosphate() #N-Acetyl-D-glucosamine 1-phosphate
	Species N_Acetyl_D_glucosamine6_phosphate_c @c:N_Acetyl_D_glucosamine6_phosphate() #N-Acetyl-D-glucosamine 6-phosphate
	Species s6_Acetyl_D_glucose_c @c:s6_Acetyl_D_glucose() #6-Acetyl-D-glucose
	Species N_Acetyl_L_glutamate_c @c:N_Acetyl_L_glutamate() #N-Acetyl-L-glutamate
	Species Acetyl_maltose_c @c:Acetyl_maltose() #Acetyl-maltose
	Species N_Acetyl_D_mannosamine_c @c:N_Acetyl_D_mannosamine() #N-Acetyl-D-mannosamine
	Species N_Acetyl_D_mannosamine6_phosphate_c @c:N_Acetyl_D_mannosamine6_phosphate() #N-Acetyl-D-mannosamine 6-phosphate
	Species N_acetylmuramate6_phosphate_c @c:N_acetylmuramate6_phosphate() #N-acetylmuramate 6-phosphate
	Species N_Acetylneuraminate_c @c:N_Acetylneuraminate() #N-Acetylneuraminate
	Species cis_Aconitate_c @c:cis_Aconitate() #cis-Aconitate
	Species trans_Aconitate_c @c:trans_Aconitate() #trans-Aconitate
	Species E_3_carboxy_2_pentenedioate6_methylester_c @c:E_3_carboxy_2_pentenedioate6_methylester() #E-3-carboxy-2-pentenedioate 6-methyl ester
	Species N2_Acetyl_L_ornithine_c @c:N2_Acetyl_L_ornithine() #N2-Acetyl-L-ornithine
	Species O_Acetyl_L_serine_c @c:O_Acetyl_L_serine() #O-Acetyl-L-serine
	Species Acetoacetyl_ACP_c @c:Acetoacetyl_ACP() #Acetoacetyl-ACP
	Species Acetylphosphate_c @c:Acetylphosphate() #Acetyl phosphate
	Species Adenine_c @c:Adenine() #Adenine
	Species Adenosine_c @c:Adenosine() #Adenosine
	Species Adenosylcobinamide_c @c:Adenosylcobinamide() #Adenosyl cobinamide
	Species Adenosylcobinamidephosphate_c @c:Adenosylcobinamidephosphate() #Adenosyl cobinamide phosphate
	Species Adenosylcobalamin_c @c:Adenosylcobalamin() #Adenosylcobalamin
	Species ADP_c @c:ADP() #ADP
	Species ADPglucose_c @c:ADPglucose() #ADPglucose
	Species ADP_D_glycero_D_manno_heptose_c @c:ADP_D_glycero_D_manno_heptose() #ADP-D-glycero-D-manno-heptose
	Species ADP_L_glycero_D_manno_heptose_c @c:ADP_L_glycero_D_manno_heptose() #ADP-L-glycero-D-manno-heptose
	Species ADPribose_c @c:ADPribose() #ADPribose
	Species silver_c @c:silver() #silver
	Species Adenosine_GDP_cobinamide_c @c:Adenosine_GDP_cobinamide() #Adenosine-GDP-cobinamide
	Species Agmatine_c @c:Agmatine() #Agmatine
	Species S_Adenosyl_L_homocysteine_c @c:S_Adenosyl_L_homocysteine() #S-Adenosyl-L-homocysteine
	Species s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate_c @c:s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate() #2-Amino-4-hydroxy-6-(erythro-1,2,3-trihydroxypropyl)dihydropteridine triphosphate
	Species s5_Amino_1___5_Phospho_D_ribosyl__imidazole_4_carboxamide_c @c:s5_Amino_1___5_Phospho_D_ribosyl__imidazole_4_carboxamide() #5-Amino-1-(5-Phospho-D-ribosyl)imidazole-4-carboxamide
	Species s5_amino_1___5_phospho_D_ribosyl__imidazole_c @c:s5_amino_1___5_phospho_D_ribosyl__imidazole() #5-amino-1-(5-phospho-D-ribosyl)imidazole
	Species s2_Oxoglutarate_c @c:s2_Oxoglutarate() #2-Oxoglutarate
	Species beta_Alanine_c @c:beta_Alanine() #beta-Alanine
	Species D_Alanine_c @c:D_Alanine() #D-Alanine
	Species L_Alanine_c @c:L_Alanine() #L-Alanine
	Species D_Alanyl_D_alanine_c @c:D_Alanyl_D_alanine() #D-Alanyl-D-alanine
	Species __S___2_Acetolactate_c @c:__S___2_Acetolactate() #(S)-2-Acetolactate
	Species L_Alanyl_tRNA__Ala___c @c:L_Alanyl_tRNA__Ala__() #L-Alanyl-tRNA(Ala)
	Species D_Allose_c @c:D_Allose() #D-Allose
	Species D_Allose6_phosphate_c @c:D_Allose6_phosphate() #D-Allose 6-phosphate
	Species Allantoin_c @c:Allantoin() #Allantoin
	Species Allantoate_c @c:Allantoate() #Allantoate
	Species Allulose6_phosphate_c @c:Allulose6_phosphate() #Allulose 6-phosphate
	Species D_Altronate_c @c:D_Altronate() #D-Altronate
	Species S_Adenosyl_L_methionine_c @c:S_Adenosyl_L_methionine() #S-Adenosyl-L-methionine
	Species S_Adenosylmethioninamine_c @c:S_Adenosylmethioninamine() #S-Adenosylmethioninamine
	Species S_Adenosyl_4_methylthio_2_oxobutanoate_c @c:S_Adenosyl_4_methylthio_2_oxobutanoate() #S-Adenosyl-4-methylthio-2-oxobutanoate
	Species AMP_c @c:AMP() #AMP
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid_c @c:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramic acid
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide_c @c:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramyl-tripeptide
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide_c @c:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramyl-tetrapeptide
	Species s1_6_anhydrous_N_Acetylmuramate_c @c:s1_6_anhydrous_N_Acetylmuramate() #1,6-anhydrous-N-Acetylmuramate
	Species s1_6_anhydrous_N_Acetylmuramyl_tripeptide_c @c:s1_6_anhydrous_N_Acetylmuramyl_tripeptide() #1,6-anhydrous-N-Acetylmuramyl-tripeptide
	Species s1_6_anhydrous_N_Acetylmuramyl_tetrapeptide_c @c:s1_6_anhydrous_N_Acetylmuramyl_tetrapeptide() #1,6-anhydrous-N-Acetylmuramyl-tetrapeptide
	Species Anthranilate_c @c:Anthranilate() #Anthranilate
	Species P1_P4_Bis__5_adenosyl__tetraphosphate_c @c:P1_P4_Bis__5_adenosyl__tetraphosphate() #P1,P4-Bis(5'-adenosyl) tetraphosphate
	Species P1_P5_Bis__5_adenosyl__pentaphosphate_c @c:P1_P5_Bis__5_adenosyl__pentaphosphate() #P1,P5-Bis(5'-adenosyl) pentaphosphate
	Species acylphosphatidylglycerol__n_C12_0___c @c:acylphosphatidylglycerol__n_C12_0__() #acyl phosphatidylglycerol (n-C12:0)
	Species acylphosphatidylglycerol__n_C14_0___c @c:acylphosphatidylglycerol__n_C14_0__() #acyl phosphatidylglycerol (n-C14:0)
	Species acylphosphatidylglycerol__n_C14_1___c @c:acylphosphatidylglycerol__n_C14_1__() #acyl phosphatidylglycerol (n-C14:1)
	Species acylphosphatidylglycerol__n_C16_0___c @c:acylphosphatidylglycerol__n_C16_0__() #acyl phosphatidylglycerol (n-C16:0)
	Species acylphosphatidylglycerol__n_C16_1___c @c:acylphosphatidylglycerol__n_C16_1__() #acyl phosphatidylglycerol (n-C16:1)
	Species acylphosphatidylglycerol__n_C18_0___c @c:acylphosphatidylglycerol__n_C18_0__() #acyl phosphatidylglycerol (n-C18:0)
	Species acylphosphatidylglycerol__n_C18_1___c @c:acylphosphatidylglycerol__n_C18_1__() #acyl phosphatidylglycerol (n-C18:1)
	Species apoprotein__acylcarrierprotein___c @c:apoprotein__acylcarrierprotein__() #apoprotein [acyl carrier protein]
	Species s1_Aminopropan_2_ol_c @c:s1_Aminopropan_2_ol() #1-Aminopropan-2-ol
	Species Adenosine5_phosphosulfate_c @c:Adenosine5_phosphosulfate() #Adenosine 5'-phosphosulfate
	Species D_Arabinose5_phosphate_c @c:D_Arabinose5_phosphate() #D-Arabinose 5-phosphate
	Species L_Arabinose_c @c:L_Arabinose() #L-Arabinose
	Species O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate_c @c:O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate() #O-acetyl-rhamanosyl-N-acetylglucosamyl-undecaprenyl diphosphate
	Species Arbutin6_phosphate_c @c:Arbutin6_phosphate() #Arbutin 6-phosphate
	Species aerobactinminusFe3_c @c:aerobactinminusFe3() #aerobactin minus Fe3
	Species Aerobactin_c @c:Aerobactin() #Aerobactin
	Species L_Arginine_c @c:L_Arginine() #L-Arginine
	Species N__omega_____L_Arginino__succinate_c @c:N__omega_____L_Arginino__succinate() #N(omega)-(L-Arginino)succinate
	Species L_Arginyl_tRNA__Arg___c @c:L_Arginyl_tRNA__Arg__() #L-Arginyl-tRNA(Arg)
	Species L_ascorbate_6_phosphate_c @c:L_ascorbate_6_phosphate() #L-ascorbate-6-phosphate
	Species L_Asparagine_c @c:L_Asparagine() #L-Asparagine
	Species L_Asparaginyl_tRNA__Asn___c @c:L_Asparaginyl_tRNA__Asn__() #L-Asparaginyl-tRNA(Asn)
	Species arsenite_c @c:arsenite() #arsenite
	Species arsenate_c @c:arsenate() #arsenate
	Species L_Aspartate_c @c:L_Aspartate() #L-Aspartate
	Species L_Aspartate4_semialdehyde_c @c:L_Aspartate4_semialdehyde() #L-Aspartate 4-semialdehyde
	Species L_Aspartyl_tRNA__Asp___c @c:L_Aspartyl_tRNA__Asp__() #L-Aspartyl-tRNA(Asp)
	Species L_Allo_threonine_c @c:L_Allo_threonine() #L-Allo-threonine
	Species adenosinethiaminetriphosphate_c @c:adenosinethiaminetriphosphate() #adenosine thiamine triphosphate
	Species ATP_c @c:ATP() #ATP
	Species Crotonoyl_CoA_c @c:Crotonoyl_CoA() #Crotonoyl-CoA
	Species gamma_butyrobetainyl_CoA_c @c:gamma_butyrobetainyl_CoA() #gamma-butyrobetainyl-CoA
	Species Betainealdehyde_c @c:Betainealdehyde() #Betaine aldehyde
	Species branchingglycogen_c @c:branchingglycogen() #branching glycogen
	Species bis_molybdenumcofactor_c @c:bis_molybdenumcofactor() #bis-molybdenum cofactor
	Species bis_molybdopterinmono_guaninedinucleotide_c @c:bis_molybdopterinmono_guaninedinucleotide() #bis-molybdopterin mono-guanine dinucleotide
	Species bis_molybdopteringuaninedinucleotide_c @c:bis_molybdopteringuaninedinucleotide() #bis-molybdopterin guanine dinucleotide
	Species Butanal_c @c:Butanal() #Butanal
	Species Butanoyl_CoA_c @c:Butanoyl_CoA() #Butanoyl-CoA
	Species Biotin_c @c:Biotin() #Biotin
	Species d_biotind_sulfoxide_c @c:d_biotind_sulfoxide() #d-biotin d-sulfoxide
	Species Butyrate__n_C4_0___c @c:Butyrate__n_C4_0__() #Butyrate (n-C4:0)
	Species But_2_enoyl___acyl_carrierprotein___c @c:But_2_enoyl___acyl_carrierprotein__() #But-2-enoyl-[acyl-carrier protein]
	Species Butyryl_ACP__n_C4_0ACP___c @c:Butyryl_ACP__n_C4_0ACP__() #Butyryl-ACP (n-C4:0ACP)
	Species butanesulfonate_c @c:butanesulfonate() #butanesulfonate
	Species tungstenbispterincofactor_c @c:tungstenbispterincofactor() #tungsten bispterin cofactor
	Species tungstenbispterincofactormono_guaninedinucleotide_c @c:tungstenbispterincofactormono_guaninedinucleotide() #tungsten bispterin cofactor mono-guanine dinucleotide
	Species tungstenbispterincofactorguaninedinucleotide_c @c:tungstenbispterincofactorguaninedinucleotide() #tungsten bispterin cofactor guanine dinucleotide
	Species Calcium_c @c:Calcium() #Calcium
	Species cAMP_c @c:cAMP() #cAMP
	Species N_Carbamoyl_L_aspartate_c @c:N_Carbamoyl_L_aspartate() #N-Carbamoyl-L-aspartate
	Species Cobinamide_c @c:Cobinamide() #Cobinamide
	Species Cob__I__alamin_c @c:Cob__I__alamin() #Cob(I)alamin
	Species Carbamate_c @c:Carbamate() #Carbamate
	Species Carbamoylphosphate_c @c:Carbamoylphosphate() #Carbamoyl phosphate
	Species Cadmium_c @c:Cadmium() #Cadmium
	Species cis_dodec_5_enoyl___acyl_carrierprotein____n_C12_1___c @c:cis_dodec_5_enoyl___acyl_carrierprotein____n_C12_1__() #cis-dodec-5-enoyl-[acyl-carrier protein] (n-C12:1)
	Species cis_dec_3_enoyl___acyl_carrierprotein____n_C10_1___c @c:cis_dec_3_enoyl___acyl_carrierprotein____n_C10_1__() #cis-dec-3-enoyl-[acyl-carrier protein] (n-C10:1)
	Species s7_deaza_7_carboxyguanine_c @c:s7_deaza_7_carboxyguanine() #7-deaza-7-carboxyguanine
	Species CDP_c @c:CDP() #CDP
	Species CDP_1_2_didodecanoylglycerol_c @c:CDP_1_2_didodecanoylglycerol() #CDP-1,2-didodecanoylglycerol
	Species CDP_1_2_dihexadec_9_enoylglycerol_c @c:CDP_1_2_dihexadec_9_enoylglycerol() #CDP-1,2-dihexadec-9-enoylglycerol
	Species CDP_1_2_dihexadecanoylglycerol_c @c:CDP_1_2_dihexadecanoylglycerol() #CDP-1,2-dihexadecanoylglycerol
	Species CDP_1_2_dioctadec_11_enoylglycerol_c @c:CDP_1_2_dioctadec_11_enoylglycerol() #CDP-1,2-dioctadec-11-enoylglycerol
	Species CDP_1_2_dioctadecanoylglycerol_c @c:CDP_1_2_dioctadecanoylglycerol() #CDP-1,2-dioctadecanoylglycerol
	Species CDP_1_2_ditetradec_7_enoylglycerol_c @c:CDP_1_2_ditetradec_7_enoylglycerol() #CDP-1,2-ditetradec-7-enoylglycerol
	Species CDP_1_2_ditetradecanoylglycerol_c @c:CDP_1_2_ditetradecanoylglycerol() #CDP-1,2-ditetradecanoylglycerol
	Species cis_3___3_carboxyethyl___3_5_cyclohexadiene_1_2_diol_c @c:cis_3___3_carboxyethyl___3_5_cyclohexadiene_1_2_diol() #cis-3-(3-carboxyethyl)-3,5-cyclohexadiene-1,2-diol
	Species cis_3___3_carboxyethenyl___3_5_cyclohexadiene_1_2_diol_c @c:cis_3___3_carboxyethenyl___3_5_cyclohexadiene_1_2_diol() #cis-3-(3-carboxyethenyl)-3,5-cyclohexadiene-1,2-diol
	Species Cys_Gly_c @c:Cys_Gly() #Cys-Gly
	Species Choline_c @c:Choline() #Choline
	Species chorismate_c @c:chorismate() #chorismate
	Species diacetylchitobiose_6_phosphate_c @c:diacetylchitobiose_6_phosphate() #diacetylchitobiose-6-phosphate
	Species trans_Cinnamate_c @c:trans_Cinnamate() #trans-Cinnamate
	Species Citrate_c @c:Citrate() #Citrate
	Species L_Citrulline_c @c:L_Citrulline() #L-Citrulline
	Species CMP_3_deoxy_D_manno_octulosonate_c @c:CMP_3_deoxy_D_manno_octulosonate() #CMP-3-deoxy-D-manno-octulosonate
	Species Chloride_c @c:Chloride() #Chloride
	Species CMP_c @c:CMP() #CMP
	Species CO2_c @c:CO2() #CO2
	Species CoenzymeA_c @c:CoenzymeA() #Coenzyme A
	Species Co2pl_c @c:Co2pl() #Co2+
	Species coreoligosaccharidelipidA_c @c:coreoligosaccharidelipidA() #core oligosaccharide lipid A
	Species cyclopropanephosphatidylethanolamine__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo___c @c:cyclopropanephosphatidylethanolamine__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo__() #cyclopropane phosphatidylethanolamine (dihexadec-9,10-cyclo-anoyl, n-C16:0 cyclo)
	Species cyclopropanephosphatidylethanolamine__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo___c @c:cyclopropanephosphatidylethanolamine__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo__() #cyclopropane phosphatidylethanolamine (dioctadec-11,12-cyclo-anoyl, n-C18:0 cyclo)
	Species cyclopropanephosphatidylglycerol__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo___c @c:cyclopropanephosphatidylglycerol__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo__() #cyclopropane phosphatidylglycerol (dihexadec-9,10-cyclo-anoyl, n-C16:0 cyclo)
	Species cyclopropanephosphatidylglycerol__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo___c @c:cyclopropanephosphatidylglycerol__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo__() #cyclopropane phosphatidylglycerol (dioctadec-11,12-cyclo-anoyl, n-C18:0 cyclo)
	Species coprogen_c @c:coprogen() #coprogen
	Species coprogenunloaded__noFe__III_____c @c:coprogenunloaded__noFe__III____() #coprogen unloaded (no Fe(III))
	Species s6_carboxy_5_6_7_8_tetrahydropterin_c @c:s6_carboxy_5_6_7_8_tetrahydropterin() #6-carboxy-5,6,7,8-tetrahydropterin
	Species cyclicpyranopterinmonophosphate_c @c:cyclicpyranopterinmonophosphate() #cyclic pyranopterin monophosphate
	Species CoproporphyrinogenIII_c @c:CoproporphyrinogenIII() #Coproporphyrinogen III
	Species L_Carnitine_c @c:L_Carnitine() #L-Carnitine
	Species D_Carnitine_c @c:D_Carnitine() #D-Carnitine
	Species D_carnitinyl_CoA_c @c:D_carnitinyl_CoA() #D-carnitinyl-CoA
	Species L_Carnitinyl_CoA_c @c:L_Carnitinyl_CoA() #L-Carnitinyl-CoA
	Species Cytosine_c @c:Cytosine() #Cytosine
	Species crotonobetaine_c @c:crotonobetaine() #crotonobetaine
	Species crotonobetainyl_CoA_c @c:crotonobetainyl_CoA() #crotonobetainyl-CoA
	Species CTP_c @c:CTP() #CTP
	Species Cupl_c @c:Cupl() #Cu+
	Species Cu2pl_c @c:Cu2pl() #Cu2+
	Species Hydrogencyanide_c @c:Hydrogencyanide() #Hydrogen cyanide
	Species Cyanate_c @c:Cyanate() #Cyanate
	Species D_Cysteine_c @c:D_Cysteine() #D-Cysteine
	Species L_Cysteine_c @c:L_Cysteine() #L-Cysteine
	Species L_Cystathionine_c @c:L_Cystathionine() #L-Cystathionine
	Species L_Cysteinyl_tRNA__Cys___c @c:L_Cysteinyl_tRNA__Cys__() #L-Cysteinyl-tRNA(Cys)
	Species Cytidine_c @c:Cytidine() #Cytidine
	Species Deoxyadenosine_c @c:Deoxyadenosine() #Deoxyadenosine
	Species s5_Deoxyadenosine_c @c:s5_Deoxyadenosine() #5'-Deoxyadenosine
	Species dADP_c @c:dADP() #dADP
	Species dAMP_c @c:dAMP() #dAMP
	Species s7_8_Diaminononanoate_c @c:s7_8_Diaminononanoate() #7,8-Diaminononanoate
	Species dATP_c @c:dATP() #dATP
	Species s3_4_dihydroxy_2_butanone4_phosphate_c @c:s3_4_dihydroxy_2_butanone4_phosphate() #3,4-dihydroxy-2-butanone 4-phosphate
	Species trans_Dec_2_enoyl_CoA_c @c:trans_Dec_2_enoyl_CoA() #trans-Dec-2-enoyl-CoA
	Species Decanoate__n_C10_0___c @c:Decanoate__n_C10_0__() #Decanoate (n-C10:0)
	Species Decanoyl_ACP__n_C10_0ACP___c @c:Decanoyl_ACP__n_C10_0ACP__() #Decanoyl-ACP (n-C10:0ACP)
	Species Decanoyl_CoA__n_C10_0CoA___c @c:Decanoyl_CoA__n_C10_0CoA__() #Decanoyl-CoA (n-C10:0CoA)
	Species N6___1_2_Dicarboxyethyl___AMP_c @c:N6___1_2_Dicarboxyethyl___AMP() #N6-(1,2-Dicarboxyethyl)-AMP
	Species dCDP_c @c:dCDP() #dCDP
	Species dCMP_c @c:dCMP() #dCMP
	Species dCTP_c @c:dCTP() #dCTP
	Species Deoxycytidine_c @c:Deoxycytidine() #Deoxycytidine
	Species trans_Dodec_2_enoyl_CoA_c @c:trans_Dodec_2_enoyl_CoA() #trans-Dodec-2-enoyl-CoA
	Species Dodecanoate__n_C12_0___c @c:Dodecanoate__n_C12_0__() #Dodecanoate (n-C12:0)
	Species Dodecanoyl_ACP__n_C12_0ACP___c @c:Dodecanoyl_ACP__n_C12_0ACP__() #Dodecanoyl-ACP (n-C12:0ACP)
	Species Dodecanoyl_CoA__n_C12_0CoA___c @c:Dodecanoyl_CoA__n_C12_0CoA__() #Dodecanoyl-CoA (n-C12:0CoA)
	Species Dodecanoly_phosphate__n_C12_0___c @c:Dodecanoly_phosphate__n_C12_0__() #Dodecanoly-phosphate (n-C12:0)
	Species dGDP_c @c:dGDP() #dGDP
	Species dGMP_c @c:dGMP() #dGMP
	Species Selenodiglutathione_c @c:Selenodiglutathione() #Selenodiglutathione
	Species Deoxyguanosine_c @c:Deoxyguanosine() #Deoxyguanosine
	Species dGTP_c @c:dGTP() #dGTP
	Species Dihydroxyacetone_c @c:Dihydroxyacetone() #Dihydroxyacetone
	Species Dihydroxyacetonephosphate_c @c:Dihydroxyacetonephosphate() #Dihydroxyacetone phosphate
	Species s2_3_dihydroxicinnamicacid_c @c:s2_3_dihydroxicinnamicacid() #2,3-dihydroxicinnamic acid
	Species s7_8_Dihydrofolate_c @c:s7_8_Dihydrofolate() #7,8-Dihydrofolate
	Species dehydroglycine_c @c:dehydroglycine() #dehydroglycine
	Species Dihydromonapterin_c @c:Dihydromonapterin() #Dihydromonapterin
	Species dihydromonapterin_triphosphate_c @c:dihydromonapterin_triphosphate() #dihydromonapterin-triphosphate
	Species s1_4_Dihydroxy_2_naphthoate_c @c:s1_4_Dihydroxy_2_naphthoate() #1,4-Dihydroxy-2-naphthoate
	Species Dihydroneopterin_c @c:Dihydroneopterin() #Dihydroneopterin
	Species __S___Dihydroorotate_c @c:__S___Dihydroorotate() #(S)-Dihydroorotate
	Species Dihydroneopterinmonophosphate_c @c:Dihydroneopterinmonophosphate() #Dihydroneopterin monophosphate
	Species s3___2_3_Dihydroxyphenyl__propanoate_c @c:s3___2_3_Dihydroxyphenyl__propanoate() #3-(2,3-Dihydroxyphenyl)propanoate
	Species Dihydropteroate_c @c:Dihydropteroate() #Dihydropteroate
	Species s4_5_dihydroxy_2_3_pentanedione_c @c:s4_5_dihydroxy_2_3_pentanedione() #4,5-dihydroxy-2,3-pentanedione
	Species s6_7_Dihydropteridine_c @c:s6_7_Dihydropteridine() #6,7-Dihydropteridine
	Species dIDP_c @c:dIDP() #dIDP
	Species dIMP_c @c:dIMP() #dIMP
	Species Deoxyinosine_c @c:Deoxyinosine() #Deoxyinosine
	Species dITP_c @c:dITP() #dITP
	Species s5_6_Dimethylbenzimidazole_c @c:s5_6_Dimethylbenzimidazole() #5,6-Dimethylbenzimidazole
	Species s6_7_Dimethyl_8___1_D_ribityl__lumazine_c @c:s6_7_Dimethyl_8___1_D_ribityl__lumazine() #6,7-Dimethyl-8-(1-D-ribityl)lumazine
	Species Dimethylallyldiphosphate_c @c:Dimethylallyldiphosphate() #Dimethylallyl diphosphate
	Species Dimethylsulfide_c @c:Dimethylsulfide() #Dimethyl sulfide
	Species Dimethylsulfoxide_c @c:Dimethylsulfoxide() #Dimethyl sulfoxide
	Species Deamino_NADpl_c @c:Deamino_NADpl() #Deamino-NAD+
	Species Dephospho_CoA_c @c:Dephospho_CoA() #Dephospho-CoA
	Species fusedthiol_disulfideinterchangeprotein__oxidized___c @c:fusedthiol_disulfideinterchangeprotein__oxidized__() #fused thiol:disulfide interchange protein (oxidized)
	Species fusedthiol_disulfideinterchangeprotein__reduced___c @c:fusedthiol_disulfideinterchangeprotein__reduced__() #fused thiol:disulfide interchange protein (reduced)
	Species dihydrosirohydrochlorin_c @c:dihydrosirohydrochlorin() #dihydrosirohydrochlorin
	Species Dethiobiotin_c @c:Dethiobiotin() #Dethiobiotin
	Species dTDP_c @c:dTDP() #dTDP
	Species dTDP_4_acetamido_4_6_dideoxy_D_galactose_c @c:dTDP_4_acetamido_4_6_dideoxy_D_galactose() #dTDP-4-acetamido-4,6-dideoxy-D-galactose
	Species dTDP_4_amino_4_6_dideoxy_D_galactose_c @c:dTDP_4_amino_4_6_dideoxy_D_galactose() #dTDP-4-amino-4,6-dideoxy-D-galactose
	Species dTDP_4_dehydro_6_deoxy_D_glucose_c @c:dTDP_4_dehydro_6_deoxy_D_glucose() #dTDP-4-dehydro-6-deoxy-D-glucose
	Species dTDP_4_dehydro_6_deoxy_L_mannose_c @c:dTDP_4_dehydro_6_deoxy_L_mannose() #dTDP-4-dehydro-6-deoxy-L-mannose
	Species dTDPglucose_c @c:dTDPglucose() #dTDPglucose
	Species dTDP_L_rhamnose_c @c:dTDP_L_rhamnose() #dTDP-L-rhamnose
	Species dTMP_c @c:dTMP() #dTMP
	Species dTTP_c @c:dTTP() #dTTP
	Species dUDP_c @c:dUDP() #dUDP
	Species dUMP_c @c:dUMP() #dUMP
	Species Deoxyuridine_c @c:Deoxyuridine() #Deoxyuridine
	Species dUTP_c @c:dUTP() #dUTP
	Species s1_deoxy_D_xylulose_c @c:s1_deoxy_D_xylulose() #1-deoxy-D-xylulose
	Species s1_deoxy_D_xylulose5_phosphate_c @c:s1_deoxy_D_xylulose5_phosphate() #1-deoxy-D-xylulose 5-phosphate
	Species D_Erythrose4_phosphate_c @c:D_Erythrose4_phosphate() #D-Erythrose 4-phosphate
	Species Enoylglutaryl___acyl_carrierprotein__methylester_c @c:Enoylglutaryl___acyl_carrierprotein__methylester() #Enoylglutaryl-[acyl-carrier protein] methyl ester
	Species D_erythro_1___Imidazol_4_yl__glycerol3_phosphate_c @c:D_erythro_1___Imidazol_4_yl__glycerol3_phosphate() #D-erythro-1-(Imidazol-4-yl)glycerol 3-phosphate
	Species Enterochelin_c @c:Enterochelin() #Enterochelin
	Species Enoylpimeloyl___acyl_carrierprotein__methylester_c @c:Enoylpimeloyl___acyl_carrierprotein__methylester() #Enoylpimeloyl-[acyl-carrier protein] methyl ester
	Species Ethanolamine_c @c:Ethanolamine() #Ethanolamine
	Species ethanesulfonate_c @c:ethanesulfonate() #ethanesulfonate
	Species Ethanol_c @c:Ethanol() #Ethanol
	Species D_Fructose1_phosphate_c @c:D_Fructose1_phosphate() #D-Fructose 1-phosphate
	Species D_Fructose6_phosphate_c @c:D_Fructose6_phosphate() #D-Fructose 6-phosphate
	Species Flavinadeninedinucleotideoxidized_c @c:Flavinadeninedinucleotideoxidized() #Flavin adenine dinucleotide oxidized
	Species Flavinadeninedinucleotidereduced_c @c:Flavinadeninedinucleotidereduced() #Flavin adenine dinucleotide reduced
	Species Formaldehyde_c @c:Formaldehyde() #Formaldehyde
	Species L_Fuculose1_phosphate_c @c:L_Fuculose1_phosphate() #L-Fuculose 1-phosphate
	Species L_fuculose_c @c:L_fuculose() #L-fuculose
	Species D_Fructose1_6_bisphosphate_c @c:D_Fructose1_6_bisphosphate() #D-Fructose 1,6-bisphosphate
	Species Fe2pl_c @c:Fe2pl() #Fe2+
	Species Fe3pl_c @c:Fe3pl() #Fe3+
	Species ferric2_3_dihydroxybenzoylserine_c @c:ferric2_3_dihydroxybenzoylserine() #ferric 2,3-dihydroxybenzoylserine
	Species Fe__III__hydroxamate_c @c:Fe__III__hydroxamate() #Fe(III)hydroxamate
	Species Fe__III__hydoxamate_unloaded_c @c:Fe__III__hydoxamate_unloaded() #Fe(III)hydoxamate, unloaded
	Species Ferrichrome_c @c:Ferrichrome() #Ferrichrome
	Species FerrichromeminusFe__III___c @c:FerrichromeminusFe__III__() #Ferrichrome minus Fe(III)
	Species Fe_enterobactin_c @c:Fe_enterobactin() #Fe-enterobactin
	Species ferroxamine_c @c:ferroxamine() #ferroxamine
	Species ferroxamineminusFe__3___c @c:ferroxamineminusFe__3__() #ferroxamine minus Fe(3)
	Species N2_Formyl_N1___5_phospho_D_ribosyl__glycinamide_c @c:N2_Formyl_N1___5_phospho_D_ribosyl__glycinamide() #N2-Formyl-N1-(5-phospho-D-ribosyl)glycinamide
	Species Flavodoxinreduced_c @c:Flavodoxinreduced() #Flavodoxin reduced
	Species flavodoxinsemioxidized_c @c:flavodoxinsemioxidized() #flavodoxin semi oxidized
	Species N_Formylmethionyl_tRNA_c @c:N_Formylmethionyl_tRNA() #N-Formylmethionyl-tRNA
	Species FMN_c @c:FMN() #FMN
	Species ReducedFMN_c @c:ReducedFMN() #Reduced FMN
	Species Formate_c @c:Formate() #Formate
	Species Formyl_CoA_c @c:Formyl_CoA() #Formyl-CoA
	Species s2___Formamido___N1___5_phospho_D_ribosyl__acetamidine_c @c:s2___Formamido___N1___5_phospho_D_ribosyl__acetamidine() #2-(Formamido)-N1-(5-phospho-D-ribosyl)acetamidine
	Species s5_Formamido_1___5_phospho_D_ribosyl__imidazole_4_carboxamide_c @c:s5_Formamido_1___5_phospho_D_ribosyl__imidazole_4_carboxamide() #5-Formamido-1-(5-phospho-D-ribosyl)imidazole-4-carboxamide
	Species Farnesyldiphosphate_c @c:Farnesyldiphosphate() #Farnesyl diphosphate
	Species D_Fructose_c @c:D_Fructose() #D-Fructose
	Species fructoselysine_c @c:fructoselysine() #fructoselysine
	Species fructoselysinePhosphate_c @c:fructoselysinePhosphate() #fructoselysine Phosphate
	Species D_Fructuronate_c @c:D_Fructuronate() #D-Fructuronate
	Species L_Fucose_c @c:L_Fucose() #L-Fucose
	Species Fumarate_c @c:Fumarate() #Fumarate
	Species D_Glucose1_phosphate_c @c:D_Glucose1_phosphate() #D-Glucose 1-phosphate
	Species Glyceraldehyde3_phosphate_c @c:Glyceraldehyde3_phosphate() #Glyceraldehyde 3-phosphate
	Species sn_Glycero_3_phosphocholine_c @c:sn_Glycero_3_phosphocholine() #sn-Glycero-3-phosphocholine
	Species sn_Glycero_3_phosphoethanolamine_c @c:sn_Glycero_3_phosphoethanolamine() #sn-Glycero-3-phosphoethanolamine
	Species Glycerophosphoglycerol_c @c:Glycerophosphoglycerol() #Glycerophosphoglycerol
	Species sn_Glycero_3_phospho_1_inositol_c @c:sn_Glycero_3_phospho_1_inositol() #sn-Glycero-3-phospho-1-inositol
	Species Glycerophosphoserine_c @c:Glycerophosphoserine() #Glycerophosphoserine
	Species D_Glucose6_phosphate_c @c:D_Glucose6_phosphate() #D-Glucose 6-phosphate
	Species galactosyl_glucosyl_innercoreoligosaccharidelipidA_c @c:galactosyl_glucosyl_innercoreoligosaccharidelipidA() #galactosyl-glucosyl-inner core oligosaccharide lipid A
	Species D_Galactose_c @c:D_Galactose() #D-Galactose
	Species alpha_D_Galactose1_phosphate_c @c:alpha_D_Galactose1_phosphate() #alpha-D-Galactose 1-phosphate
	Species D_Galactarate_c @c:D_Galactarate() #D-Galactarate
	Species D_Galactonate_c @c:D_Galactonate() #D-Galactonate
	Species L_Galactonate_c @c:L_Galactonate() #L-Galactonate
	Species Galactitol1_phosphate_c @c:Galactitol1_phosphate() #Galactitol 1-phosphate
	Species D_Galacturonate_c @c:D_Galacturonate() #D-Galacturonate
	Species D_Glucosamine1_phosphate_c @c:D_Glucosamine1_phosphate() #D-Glucosamine 1-phosphate
	Species D_Glucosamine6_phosphate_c @c:D_Glucosamine6_phosphate() #D-Glucosamine 6-phosphate
	Species N1___5_Phospho_D_ribosyl__glycinamide_c @c:N1___5_Phospho_D_ribosyl__glycinamide() #N1-(5-Phospho-D-ribosyl)glycinamide
	Species glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate_c @c:glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate() #glucosyl-O-acetyl-rhamanosyl-N-acetylglucosamyl-undecaprenyl diphosphate
	Species gamma_butyrobetaine_c @c:gamma_butyrobetaine() #gamma-butyrobetaine
	Species Glycolaldehyde_c @c:Glycolaldehyde() #Glycolaldehyde
	Species GDP_c @c:GDP() #GDP
	Species GDP_4_dehydro_6_deoxy_D_mannose_c @c:GDP_4_dehydro_6_deoxy_D_mannose() #GDP-4-dehydro-6-deoxy-D-mannose
	Species GDP_L_fucose_c @c:GDP_L_fucose() #GDP-L-fucose
	Species GDP_D_mannose_c @c:GDP_D_mannose() #GDP-D-mannose
	Species GDP_4_oxo_L_fucose_c @c:GDP_4_oxo_L_fucose() #GDP-4-oxo-L-fucose
	Species Guanosine3_diphosphate5_triphosphate_c @c:Guanosine3_diphosphate5_triphosphate() #Guanosine 3'-diphosphate 5'-triphosphate
	Species galactofuranosyl_glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate_c @c:galactofuranosyl_glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate() #galactofuranosyl-glucosyl-O-acetyl-rhamanosyl-N-acetylglucosamyl-undecaprenyl diphosphate
	Species gamma_glutamyl_gammaaminobutyricacid_c @c:gamma_glutamyl_gammaaminobutyricacid() #gamma-glutamyl-gamma aminobutyric acid
	Species glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA_c @c:glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA() #glucosyl-galactosyl-glucosyl-inner core oligosaccharide lipid A
	Species gamma_glutamyl_gamma_butyraldehyde_c @c:gamma_glutamyl_gamma_butyraldehyde() #gamma-glutamyl-gamma-butyraldehyde
	Species glucosyl_glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA_c @c:glucosyl_glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA() #glucosyl-glucosyl-galactosyl-glucosyl-inner core oligosaccharide lipid A
	Species gamma_glutamyl_putrescine_c @c:gamma_glutamyl_putrescine() #gamma-glutamyl-putrescine
	Species gamma_hydroxybutyrate_c @c:gamma_hydroxybutyrate() #gamma-hydroxybutyrate
	Species glucosyl_innercoreoligosaccharidelipidA_c @c:glucosyl_innercoreoligosaccharidelipidA() #glucosyl-inner core oligosaccharide lipid A
	Species D_Glucose_c @c:D_Glucose() #D-Glucose
	Species D_Gluconate_c @c:D_Gluconate() #D-Gluconate
	Species D_Glucarate_c @c:D_Glucarate() #D-Glucarate
	Species D_Glucuronate_c @c:D_Glucuronate() #D-Glucuronate
	Species L_Glutamine_c @c:L_Glutamine() #L-Glutamine
	Species L_Glutaminyl_tRNA__Gln___c @c:L_Glutaminyl_tRNA__Gln__() #L-Glutaminyl-tRNA(Gln)
	Species D_Glutamate_c @c:D_Glutamate() #D-Glutamate
	Species L_Glutamate_c @c:L_Glutamate() #L-Glutamate
	Species L_Glutamate1_semialdehyde_c @c:L_Glutamate1_semialdehyde() #L-Glutamate 1-semialdehyde
	Species L_Glutamate5_phosphate_c @c:L_Glutamate5_phosphate() #L-Glutamate 5-phosphate
	Species L_Glutamate5_semialdehyde_c @c:L_Glutamate5_semialdehyde() #L-Glutamate 5-semialdehyde
	Species gamma_L_Glutamyl_L_cysteine_c @c:gamma_L_Glutamyl_L_cysteine() #gamma-L-Glutamyl-L-cysteine
	Species L_Glutamyl_tRNA__Glu___c @c:L_Glutamyl_tRNA__Glu__() #L-Glutamyl-tRNA(Glu)
	Species Glyoxylate_c @c:Glyoxylate() #Glyoxylate
	Species Glycine_c @c:Glycine() #Glycine
	Species D_Glyceraldehyde_c @c:D_Glyceraldehyde() #D-Glyceraldehyde
	Species Glycinebetaine_c @c:Glycinebetaine() #Glycine betaine
	Species Glycerol_c @c:Glycerol() #Glycerol
	Species __R___Glycerate_c @c:__R___Glycerate() #(R)-Glycerate
	Species Glycerol2_phosphate_c @c:Glycerol2_phosphate() #Glycerol 2-phosphate
	Species Glycerol3_phosphate_c @c:Glycerol3_phosphate() #Glycerol 3-phosphate
	Species Glycolate_c @c:Glycolate() #Glycolate
	Species glycogen_c @c:glycogen() #glycogen
	Species Glycyl_tRNA__Gly___c @c:Glycyl_tRNA__Gly__() #Glycyl-tRNA(Gly)
	Species Glutaryl___acyl_carrierprotein__methylester_c @c:Glutaryl___acyl_carrierprotein__methylester() #Glutaryl-[acyl-carrier protein] methyl ester
	Species D_Glycero_D_manno_heptose1_7_bisphosphate_c @c:D_Glycero_D_manno_heptose1_7_bisphosphate() #D-Glycero-D-manno-heptose 1,7-bisphosphate
	Species D_Glycero_D_manno_heptose1_phosphate_c @c:D_Glycero_D_manno_heptose1_phosphate() #D-Glycero-D-manno-heptose 1-phosphate
	Species D_Glycero_D_manno_heptose7_phosphate_c @c:D_Glycero_D_manno_heptose7_phosphate() #D-Glycero-D-manno-heptose 7-phosphate
	Species GMP_c @c:GMP() #GMP
	Species P1_P4_Bis__5_guanosyl__tetraphosphate_c @c:P1_P4_Bis__5_guanosyl__tetraphosphate() #P1,P4-Bis(5'-guanosyl) tetraphosphate
	Species Geranyldiphosphate_c @c:Geranyldiphosphate() #Geranyl diphosphate
	Species glutaredoxin__oxidized___c @c:glutaredoxin__oxidized__() #glutaredoxin (oxidized)
	Species glutaredoxin__reduced___c @c:glutaredoxin__reduced__() #glutaredoxin (reduced)
	Species Glutathiolselenolate_c @c:Glutathiolselenolate() #Glutathiolselenolate
	Species Guanosine_c @c:Guanosine() #Guanosine
	Species Oxidizedglutathione_c @c:Oxidizedglutathione() #Oxidized glutathione
	Species Reducedglutathione_c @c:Reducedglutathione() #Reduced glutathione
	Species GTP_c @c:GTP() #GTP
	Species Glutathionylspermidine_c @c:Glutathionylspermidine() #Glutathionylspermidine
	Species Guanine_c @c:Guanine() #Guanine
	Species Hpl_c @c:Hpl() #H+
	Species H2_c @c:H2() #H2
	Species s1_hydroxy_2_methyl_2___E___butenyl4_diphosphate_c @c:s1_hydroxy_2_methyl_2___E___butenyl4_diphosphate() #1-hydroxy-2-methyl-2-(E)-butenyl 4-diphosphate
	Species H2O_c @c:H2O() #H2O
	Species Hydrogenperoxide_c @c:Hydrogenperoxide() #Hydrogen peroxide
	Species Hydrogensulfide_c @c:Hydrogensulfide() #Hydrogen sulfide
	Species Bicarbonate_c @c:Bicarbonate() #Bicarbonate
	Species L_Homocysteine_c @c:L_Homocysteine() #L-Homocysteine
	Species Hexadecanoate__n_C16_0___c @c:Hexadecanoate__n_C16_0__() #Hexadecanoate (n-C16:0)
	Species Hexadecanoyl_phosphate__n_C16_0___c @c:Hexadecanoyl_phosphate__n_C16_0__() #Hexadecanoyl-phosphate (n-C16:0)
	Species Hexadecenoate__n_C16_1___c @c:Hexadecenoate__n_C16_1__() #Hexadecenoate (n-C16:1)
	Species Hexadecanoyl_phosphate__n_C16_1___c @c:Hexadecanoyl_phosphate__n_C16_1__() #Hexadecanoyl-phosphate (n-C16:1)
	Species Hexadecenoyl_CoA__n_C16_1CoA___c @c:Hexadecenoyl_CoA__n_C16_1CoA__() #Hexadecenoyl-CoA (n-C16:1CoA)
	Species trans_Hexadec_2_enoyl_CoA_c @c:trans_Hexadec_2_enoyl_CoA() #trans-Hexadec-2-enoyl-CoA
	Species cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1___c @c:cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__() #cis-hexadec-9-enoyl-[acyl-carrier protein] (n-C16:1)
	Species HemeO_c @c:HemeO() #Heme O
	Species Hexanoyl_ACP__n_C6_0ACP___c @c:Hexanoyl_ACP__n_C6_0ACP__() #Hexanoyl-ACP (n-C6:0ACP)
	Species Hg2pl_c @c:Hg2pl() #Hg2+
	Species s3_Hydroxyglutaryl___acyl_carrierprotein__methylester_c @c:s3_Hydroxyglutaryl___acyl_carrierprotein__methylester() #3-Hydroxyglutaryl-[acyl-carrier protein] methyl ester
	Species heptosyl_heptosyl_kdo2_lipidA_c @c:heptosyl_heptosyl_kdo2_lipidA() #heptosyl-heptosyl-kdo2-lipidA
	Species L_Histidine_c @c:L_Histidine() #L-Histidine
	Species L_Histidinolphosphate_c @c:L_Histidinolphosphate() #L-Histidinol phosphate
	Species L_Histidinol_c @c:L_Histidinol() #L-Histidinol
	Species L_Histidyl_tRNA__His___c @c:L_Histidyl_tRNA__His__() #L-Histidyl-tRNA(His)
	Species s2_Hydroxy_6_oxonona_2_4_diene_1_9_dioate_c @c:s2_Hydroxy_6_oxonona_2_4_diene_1_9_dioate() #2-Hydroxy-6-oxonona-2,4-diene-1,9-dioate
	Species s2_hydroxy_6_ketononatrienedioate_c @c:s2_hydroxy_6_ketononatrienedioate() #2-hydroxy-6-ketononatrienedioate
	Species heptosyl_kdo2_lipidA_c @c:heptosyl_kdo2_lipidA() #heptosyl-kdo2-lipidA
	Species Hydroxymethylbilane_c @c:Hydroxymethylbilane() #Hydroxymethylbilane
	Species hydroxymethylglutathione_c @c:hydroxymethylglutathione() #hydroxymethylglutathione
	Species L_Homoserine_c @c:L_Homoserine() #L-Homoserine
	Species heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA_c @c:heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA() #heptosyl-phospho-heptosyl-heptosyl-kdo2-lipidA
	Species s3_Hydroxypimeloyl___acyl_carrierprotein__methylester_c @c:s3_Hydroxypimeloyl___acyl_carrierprotein__methylester() #3-Hydroxypimeloyl-[acyl-carrier protein] methyl ester
	Species Hydroxypyruvate_c @c:Hydroxypyruvate() #Hydroxypyruvate
	Species Hydroquinone_c @c:Hydroquinone() #Hydroquinone
	Species trans_Hex_2_enoyl_CoA_c @c:trans_Hex_2_enoyl_CoA() #trans-Hex-2-enoyl-CoA
	Species Hexanoate__n_C6_0___c @c:Hexanoate__n_C6_0__() #Hexanoate (n-C6:0)
	Species Hypoxanthine_c @c:Hypoxanthine() #Hypoxanthine
	Species Hexanoyl_CoA__n_C6_0CoA___c @c:Hexanoyl_CoA__n_C6_0CoA__() #Hexanoyl-CoA (n-C6:0CoA)
	Species Iminoaspartate_c @c:Iminoaspartate() #Iminoaspartate
	Species Isochorismate_c @c:Isochorismate() #Isochorismate
	Species Isocitrate_c @c:Isocitrate() #Isocitrate
	Species innercoreoligosaccharidelipidA__Ecoli___c @c:innercoreoligosaccharidelipidA__Ecoli__() #inner core oligosaccharide lipid A (E coli)
	Species L_Idonate_c @c:L_Idonate() #L-Idonate
	Species IDP_c @c:IDP() #IDP
	Species L_Isoleucine_c @c:L_Isoleucine() #L-Isoleucine
	Species L_Isoleucyl_tRNA__Ile___c @c:L_Isoleucyl_tRNA__Ile__() #L-Isoleucyl-tRNA(Ile)
	Species s3___Imidazol_4_yl___2_oxopropylphosphate_c @c:s3___Imidazol_4_yl___2_oxopropylphosphate() #3-(Imidazol-4-yl)-2-oxopropyl phosphate
	Species IMP_c @c:IMP() #IMP
	Species Indole_c @c:Indole() #Indole
	Species myo_Inositol_c @c:myo_Inositol() #myo-Inositol
	Species Inosine_c @c:Inosine() #Inosine
	Species Isopentenyldiphosphate_c @c:Isopentenyldiphosphate() #Isopentenyl diphosphate
	Species IscSsulfuracceptorprotein_c @c:IscSsulfuracceptorprotein() #IscS sulfur acceptor protein
	Species IscSwithboundsulfur_c @c:IscSwithboundsulfur() #IscS with bound sulfur
	Species IscUscaffoldprotein_c @c:IscUscaffoldprotein() #IscU scaffold protein
	Species IscUwithbound__2Fe_2S__cluster_c @c:IscUwithbound__2Fe_2S__cluster() #IscU with bound [2Fe-2S] cluster
	Species IscUwithtwobound__2Fe_2S__clusters_c @c:IscUwithtwobound__2Fe_2S__clusters() #IscU with two bound [2Fe-2S] clusters
	Species IscUwithbound__4Fe_4S__cluster_c @c:IscUwithbound__4Fe_4S__cluster() #IscU with bound [4Fe-4S] cluster
	Species Isethionicacid_c @c:Isethionicacid() #Isethionic acid
	Species ITP_c @c:ITP() #ITP
	Species potassium_c @c:potassium() #potassium
	Species s3_Deoxy_D_manno_2_octulosonate_c @c:s3_Deoxy_D_manno_2_octulosonate() #3-Deoxy-D-manno-2-octulosonate
	Species KDO__2___lipidIV__A___c @c:KDO__2___lipidIV__A__() #KDO(2)-lipid IV(A)
	Species KDO__2___lipidIV__A__withlaurate_c @c:KDO__2___lipidIV__A__withlaurate() #KDO(2)-lipid IV(A) with laurate
	Species KDO__2___lipidIV__A__withpalmitoleoyl_c @c:KDO__2___lipidIV__A__withpalmitoleoyl() #KDO(2)-lipid IV(A) with palmitoleoyl
	Species s3_Deoxy_D_manno_octulosonate8_phosphate_c @c:s3_Deoxy_D_manno_octulosonate8_phosphate() #3-Deoxy-D-manno-octulosonate 8-phosphate
	Species KDO_lipidIV__A___c @c:KDO_lipidIV__A__() #KDO-lipid IV(A)
	Species kdo_phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA_c @c:kdo_phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA() #kdo-phospho-heptosyl-phospho-heptosyl-heptosyl-kdo2-lipidA
	Species D_Lactate_c @c:D_Lactate() #D-Lactate
	Species L_Lactate_c @c:L_Lactate() #L-Lactate
	Species D_Lactaldehyde_c @c:D_Lactaldehyde() #D-Lactaldehyde
	Species L_Lactaldehyde_c @c:L_Lactaldehyde() #L-Lactaldehyde
	Species Lactose_c @c:Lactose() #Lactose
	Species L_Leucine_c @c:L_Leucine() #L-Leucine
	Species L_Leucyl_tRNA__Leu___c @c:L_Leucyl_tRNA__Leu__() #L-Leucyl-tRNA(Leu)
	Species __R___S_Lactoylglutathione_c @c:__R___S_Lactoylglutathione() #(R)-S-Lactoylglutathione
	Species KDO__2___lipid__A___c @c:KDO__2___lipid__A__() #KDO(2)-lipid (A)
	Species coldadaptedKDO__2___lipid__A___c @c:coldadaptedKDO__2___lipid__A__() #cold adapted KDO(2)-lipid (A)
	Species s2_3_23_Tetrakis__beta_hydroxymyristoyl___D_glucosaminyl_1_6_beta_D_glucosamine1_4_bisphosphate_c @c:s2_3_23_Tetrakis__beta_hydroxymyristoyl___D_glucosaminyl_1_6_beta_D_glucosamine1_4_bisphosphate() #2,3,2'3'-Tetrakis(beta-hydroxymyristoyl)-D-glucosaminyl-1,6-beta-D-glucosamine 1,4'-bisphosphate
	Species LipidADisaccharide_c @c:LipidADisaccharide() #Lipid A Disaccharide
	Species s2_3_Bis__3_hydroxytetradecanoyl___beta_D_glucosaminyl1_phosphate_c @c:s2_3_Bis__3_hydroxytetradecanoyl___beta_D_glucosaminyl1_phosphate() #2,3-Bis(3-hydroxytetradecanoyl)-beta-D-glucosaminyl 1-phosphate
	Species lipoyl_AMP_c @c:lipoyl_AMP() #lipoyl-AMP
	Species Lipoate_c @c:Lipoate() #Lipoate
	Species lipoate__proteinbound___c @c:lipoate__proteinbound__() #lipoate (protein bound)
	Species L_Lysine_c @c:L_Lysine() #L-Lysine
	Species L_Lysine_tRNA__Lys___c @c:L_Lysine_tRNA__Lys__() #L-Lysine-tRNA (Lys)
	Species L_Lyxose_c @c:L_Lyxose() #L-Lyxose
	Species D_Malate_c @c:D_Malate() #D-Malate
	Species L_Malate_c @c:L_Malate() #L-Malate
	Species Malonyl___acyl_carrierprotein___c @c:Malonyl___acyl_carrierprotein__() #Malonyl-[acyl-carrier protein]
	Species Malonyl_CoA_c @c:Malonyl_CoA() #Malonyl-CoA
	Species malonyl_CoAmethylester_c @c:malonyl_CoAmethylester() #malonyl-CoA methyl ester
	Species Maltose_c @c:Maltose() #Maltose
	Species Maltose6_phosphate_c @c:Maltose6_phosphate() #Maltose 6'-phosphate
	Species Maltoheptaose_c @c:Maltoheptaose() #Maltoheptaose
	Species Maltohexaose_c @c:Maltohexaose() #Maltohexaose
	Species Maltopentaose_c @c:Maltopentaose() #Maltopentaose
	Species Maltotriose_c @c:Maltotriose() #Maltotriose
	Species Maltotetraose_c @c:Maltotetraose() #Maltotetraose
	Species D_Mannose_c @c:D_Mannose() #D-Mannose
	Species D_Mannose1_phosphate_c @c:D_Mannose1_phosphate() #D-Mannose 1-phosphate
	Species D_Mannose6_phosphate_c @c:D_Mannose6_phosphate() #D-Mannose 6-phosphate
	Species s2__alpha_D_Mannosyl_6_phosphate___D_glycerate_c @c:s2__alpha_D_Mannosyl_6_phosphate___D_glycerate() #2(alpha-D-Mannosyl-6-phosphate)-D-glycerate
	Species D_Mannonate_c @c:D_Mannonate() #D-Mannonate
	Species __2R_4S___2_methyl_2_4_dihydroxydihydrofuran_3_one_c @c:__2R_4S___2_methyl_2_4_dihydroxydihydrofuran_3_one() #(2R,4S)-2-methyl-2,4-dihydroxydihydrofuran-3-one
	Species Melibiose_c @c:Melibiose() #Melibiose
	Species Methanol_c @c:Methanol() #Methanol
	Species Mercaptopyruvate_c @c:Mercaptopyruvate() #Mercaptopyruvate
	Species D_Methionine_c @c:D_Methionine() #D-Methionine
	Species L_Methionine_c @c:L_Methionine() #L-Methionine
	Species s5_10_Methenyltetrahydrofolate_c @c:s5_10_Methenyltetrahydrofolate() #5,10-Methenyltetrahydrofolate
	Species L_methionine_R_sulfoxide_c @c:L_methionine_R_sulfoxide() #L-methionine-R-sulfoxide
	Species L_MethionineSulfoxide_c @c:L_MethionineSulfoxide() #L-Methionine Sulfoxide
	Species L_Methionyl_tRNA__Met___c @c:L_Methionyl_tRNA__Met__() #L-Methionyl-tRNA (Met)
	Species magnesium_c @c:magnesium() #magnesium
	Species s1D_myo_Inositol1_phosphate_c @c:s1D_myo_Inositol1_phosphate() #1D-myo-Inositol 1-phosphate
	Species methylisocitrate_c @c:methylisocitrate() #methylisocitrate
	Species s5_10_Methylenetetrahydrofolate_c @c:s5_10_Methylenetetrahydrofolate() #5,10-Methylenetetrahydrofolate
	Species __S___Methylmalonyl_CoA_c @c:__S___Methylmalonyl_CoA() #(S)-Methylmalonyl-CoA
	Species S_Methyl_L_methionine_c @c:S_Methyl_L_methionine() #S-Methyl-L-methionine
	Species Mn2pl_c @c:Mn2pl() #Mn2+
	Species D_Mannitol1_phosphate_c @c:D_Mannitol1_phosphate() #D-Mannitol 1-phosphate
	Species MoaDProteinwithboundAMP_c @c:MoaDProteinwithboundAMP() #MoaD Protein with bound AMP
	Species MoaDProteinwithcarboxylate_c @c:MoaDProteinwithcarboxylate() #MoaD Protein with carboxylate
	Species MoaDProteinwiththiocarboxylate_c @c:MoaDProteinwiththiocarboxylate() #MoaD Protein with thiocarboxylate
	Species Molybdate_c @c:Molybdate() #Molybdate
	Species molybdenumcofactor_c @c:molybdenumcofactor() #molybdenum cofactor
	Species molybdopterincytosinedinucleotide_c @c:molybdopterincytosinedinucleotide() #molybdopterin cytosine dinucleotide
	Species molybdopteringuaninedinucleotide_c @c:molybdopteringuaninedinucleotide() #molybdopterin guanine dinucleotide
	Species molybdopterin_c @c:molybdopterin() #molybdopterin
	Species adenylatedmolybdopterin_c @c:adenylatedmolybdopterin() #adenylated molybdopterin
	Species Menaquinol8_c @c:Menaquinol8() #Menaquinol 8
	Species Menaquinone8_c @c:Menaquinone8() #Menaquinone 8
	Species Malonatesemialdehyde_c @c:Malonatesemialdehyde() #Malonate semialdehyde
	Species methanesulfonate_c @c:methanesulfonate() #methanesulfonate
	Species Methylglyoxal_c @c:Methylglyoxal() #Methylglyoxal
	Species __2R_4S___2_methyl_2_3_3_4_tetrahydroxytetrahydrofuran_c @c:__2R_4S___2_methyl_2_3_3_4_tetrahydroxytetrahydrofuran() #(2R,4S)-2-methyl-2,3,3,4-tetrahydroxytetrahydrofuran
	Species Myristoyl_ACP__n_C14_0ACP___c @c:Myristoyl_ACP__n_C14_0ACP__() #Myristoyl-ACP (n-C14:0ACP)
	Species Nitrousoxide_c @c:Nitrousoxide() #Nitrous oxide
	Species N8_Acetylspermidine_c @c:N8_Acetylspermidine() #N8-Acetylspermidine
	Species Sodium_c @c:Sodium() #Sodium
	Species N_3_aminopropyl_1_5_diaminopentane_c @c:N_3_aminopropyl_1_5_diaminopentane() #N-3-aminopropyl-1,5-diaminopentane
	Species Nicotinate_c @c:Nicotinate() #Nicotinate
	Species Nicotinamideadeninedinucleotide_c @c:Nicotinamideadeninedinucleotide() #Nicotinamide adenine dinucleotide
	Species Nicotinamideadeninedinucleotide_reduced_c @c:Nicotinamideadeninedinucleotide_reduced() #Nicotinamide adenine dinucleotide - reduced
	Species Nicotinamideadeninedinucleotidephosphate_c @c:Nicotinamideadeninedinucleotidephosphate() #Nicotinamide adenine dinucleotide phosphate
	Species Nicotinamideadeninedinucleotidephosphate_reduced_c @c:Nicotinamideadeninedinucleotidephosphate_reduced() #Nicotinamide adenine dinucleotide phosphate - reduced
	Species Nicotinamide_c @c:Nicotinamide() #Nicotinamide
	Species Ammonium_c @c:Ammonium() #Ammonium
	Species nickel_c @c:nickel() #nickel
	Species NicotinateD_ribonucleotide_c @c:NicotinateD_ribonucleotide() #Nicotinate D-ribonucleotide
	Species NMN_c @c:NMN() #NMN
	Species Nitricoxide_c @c:Nitricoxide() #Nitric oxide
	Species Nitrite_c @c:Nitrite() #Nitrite
	Species Nitrate_c @c:Nitrate() #Nitrate
	Species O16antigenundecaprenyldiphosphate_c @c:O16antigenundecaprenyldiphosphate() #O16 antigen undecaprenyl diphosphate
	Species O2_c @c:O2() #O2
	Species Superoxideanion_c @c:Superoxideanion() #Superoxide anion
	Species Oxaloacetate_c @c:Oxaloacetate() #Oxaloacetate
	Species trans_Oct_2_enoyl_CoA_c @c:trans_Oct_2_enoyl_CoA() #trans-Oct-2-enoyl-CoA
	Species Octanoyl_ACP__n_C8_0ACP___c @c:Octanoyl_ACP__n_C8_0ACP__() #Octanoyl-ACP (n-C8:0ACP)
	Species Octanoyl_CoA__n_C8_0CoA___c @c:Octanoyl_CoA__n_C8_0CoA__() #Octanoyl-CoA (n-C8:0CoA)
	Species octadecanoate__n_C18_0___c @c:octadecanoate__n_C18_0__() #octadecanoate (n-C18:0)
	Species Octadecanoyl_ACP__n_C18_0ACP___c @c:Octadecanoyl_ACP__n_C18_0ACP__() #Octadecanoyl-ACP (n-C18:0ACP)
	Species Octadecanoyl_phosphate__n_C18_0___c @c:Octadecanoyl_phosphate__n_C18_0__() #Octadecanoyl-phosphate (n-C18:0)
	Species octadecenoate__n_C18_1___c @c:octadecenoate__n_C18_1__() #octadecenoate (n-C18:1)
	Species Octadecanoyl_phosphate__n_C18_1___c @c:Octadecanoyl_phosphate__n_C18_1__() #Octadecanoyl-phosphate (n-C18:1)
	Species octanoate__n_C8_0___c @c:octanoate__n_C8_0__() #octanoate (n-C8:0)
	Species octanoate__proteinbound___c @c:octanoate__proteinbound__() #octanoate (protein bound)
	Species all_trans_Octaprenyldiphosphate_c @c:all_trans_Octaprenyldiphosphate() #all-trans-Octaprenyl diphosphate
	Species cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1___c @c:cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__() #cis-octadec-11-enoyl-[acyl-carrier protein] (n-C18:1)
	Species trans_Octadec_2_enoyl_CoA_c @c:trans_Octadec_2_enoyl_CoA() #trans-Octadec-2-enoyl-CoA
	Species Octadecenoyl_CoA__n_C18_1CoA___c @c:Octadecenoyl_CoA__n_C18_1CoA__() #Octadecenoyl-CoA (n-C18:1CoA)
	Species s3_Oxo_glutaryl___acyl_carrierprotein__methylester_c @c:s3_Oxo_glutaryl___acyl_carrierprotein__methylester() #3-Oxo-glutaryl-[acyl-carrier protein] methyl ester
	Species s2_Oxo_3_hydroxy_4_phosphobutanoate_c @c:s2_Oxo_3_hydroxy_4_phosphobutanoate() #2-Oxo-3-hydroxy-4-phosphobutanoate
	Species s2_Oxopent_4_enoate_c @c:s2_Oxopent_4_enoate() #2-Oxopent-4-enoate
	Species s3_Oxo_pimeloyl___acyl_carrierprotein__methylester_c @c:s3_Oxo_pimeloyl___acyl_carrierprotein__methylester() #3-Oxo-pimeloyl-[acyl-carrier protein] methyl ester
	Species Ornithine_c @c:Ornithine() #Ornithine
	Species Orotate_c @c:Orotate() #Orotate
	Species Orotidine5_phosphate_c @c:Orotidine5_phosphate() #Orotidine 5'-phosphate
	Species Oxalate_c @c:Oxalate() #Oxalate
	Species s3_Oxoadipyl_CoA_c @c:s3_Oxoadipyl_CoA() #3-Oxoadipyl-CoA
	Species Oxalyl_CoA_c @c:Oxalyl_CoA() #Oxalyl-CoA
	Species Oxamate_c @c:Oxamate() #Oxamate
	Species Oxalureate_c @c:Oxalureate() #Oxalureate
	Species s1_2_didodecanoyl_sn_glycerol3_phosphate_c @c:s1_2_didodecanoyl_sn_glycerol3_phosphate() #1,2-didodecanoyl-sn-glycerol 3-phosphate
	Species s1_2_ditetradecanoyl_sn_glycerol3_phosphate_c @c:s1_2_ditetradecanoyl_sn_glycerol3_phosphate() #1,2-ditetradecanoyl-sn-glycerol 3-phosphate
	Species s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate_c @c:s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate() #1,2-ditetradec-7-enoyl-sn-glycerol 3-phosphate
	Species s1_2_dihexadecanoyl_sn_glycerol3_phosphate_c @c:s1_2_dihexadecanoyl_sn_glycerol3_phosphate() #1,2-dihexadecanoyl-sn-glycerol 3-phosphate
	Species s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate_c @c:s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate() #1,2-dihexadec-9-enoyl-sn-glycerol 3-phosphate
	Species s1_2_dioctadecanoyl_sn_glycerol3_phosphate_c @c:s1_2_dioctadecanoyl_sn_glycerol3_phosphate() #1,2-dioctadecanoyl-sn-glycerol 3-phosphate
	Species s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate_c @c:s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate() #1,2-dioctadec-11-enoyl-sn-glycerol 3-phosphate
	Species Phenylaceticacid_c @c:Phenylaceticacid() #Phenylacetic acid
	Species Phenylacetaldehyde_c @c:Phenylacetaldehyde() #Phenylacetaldehyde
	Species Palmitoyl_ACP__n_C16_0ACP___c @c:Palmitoyl_ACP__n_C16_0ACP__() #Palmitoyl-ACP (n-C16:0ACP)
	Species Pantetheine4_phosphate_c @c:Pantetheine4_phosphate() #Pantetheine 4'-phosphate
	Species __R___Pantoate_c @c:__R___Pantoate() #(R)-Pantoate
	Species Adenosine3_5_bisphosphate_c @c:Adenosine3_5_bisphosphate() #Adenosine 3',5'-bisphosphate
	Species s3_Phosphoadenylylsulfate_c @c:s3_Phosphoadenylylsulfate() #3'-Phosphoadenylyl sulfate
	Species Pyridoxine5_phosphate_c @c:Pyridoxine5_phosphate() #Pyridoxine 5'-phosphate
	Species phosphatidylethanolamine__didodecanoyl_n_C12_0___c @c:phosphatidylethanolamine__didodecanoyl_n_C12_0__() #phosphatidylethanolamine (didodecanoyl, n-C12:0)
	Species phosphatidylethanolamine__ditetradecanoyl_n_C14_0___c @c:phosphatidylethanolamine__ditetradecanoyl_n_C14_0__() #phosphatidylethanolamine (ditetradecanoyl, n-C14:0)
	Species phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1___c @c:phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__() #phosphatidylethanolamine (ditetradec-7-enoyl, n-C14:1)
	Species phosphatidylethanolamine__dihexadecanoyl_n_C16_0___c @c:phosphatidylethanolamine__dihexadecanoyl_n_C16_0__() #phosphatidylethanolamine (dihexadecanoyl, n-C16:0)
	Species phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1___c @c:phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__() #phosphatidylethanolamine (dihexadec-9enoyl, n-C16:1)
	Species phosphatidylethanolamine__dioctadecanoyl_n_C18_0___c @c:phosphatidylethanolamine__dioctadecanoyl_n_C18_0__() #phosphatidylethanolamine (dioctadecanoyl, n-C18:0)
	Species phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1___c @c:phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__() #phosphatidylethanolamine (dioctadec-11-enoyl, n-C18:1)
	Species Phosphoenolpyruvate_c @c:Phosphoenolpyruvate() #Phosphoenolpyruvate
	Species Phosphatidylglycerol__didodecanoyl_n_C12_0___c @c:Phosphatidylglycerol__didodecanoyl_n_C12_0__() #Phosphatidylglycerol (didodecanoyl, n-C12:0)
	Species Phosphatidylglycerol__ditetradecanoyl_n_C14_0___c @c:Phosphatidylglycerol__ditetradecanoyl_n_C14_0__() #Phosphatidylglycerol (ditetradecanoyl, n-C14:0)
	Species Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1___c @c:Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__() #Phosphatidylglycerol (ditetradec-7-enoyl, n-C14:1)
	Species Phosphatidylglycerol__dihexadecanoyl_n_C16_0___c @c:Phosphatidylglycerol__dihexadecanoyl_n_C16_0__() #Phosphatidylglycerol (dihexadecanoyl, n-C16:0)
	Species Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1___c @c:Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__() #Phosphatidylglycerol (dihexadec-9-enoyl, n-C16:1)
	Species Phosphatidylglycerol__dioctadecanoyl_n_C18_0___c @c:Phosphatidylglycerol__dioctadecanoyl_n_C18_0__() #Phosphatidylglycerol (dioctadecanoyl, n-C18:0)
	Species Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1___c @c:Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__() #Phosphatidylglycerol (dioctadec-11-enoyl, n-C18:1)
	Species Phosphatidylglycerophosphate__didodecanoyl_n_C12_0___c @c:Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__() #Phosphatidylglycerophosphate (didodecanoyl, n-C12:0)
	Species Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0___c @c:Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__() #Phosphatidylglycerophosphate (ditetradecanoyl, n-C14:0)
	Species Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1___c @c:Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__() #Phosphatidylglycerophosphate (ditetradec-7-enoyl, n-C14:1)
	Species Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0___c @c:Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__() #Phosphatidylglycerophosphate (dihexadecanoyl, n-C16:0)
	Species Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1___c @c:Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__() #Phosphatidylglycerophosphate (dihexadec-9-enoyl, n-C16:1)
	Species Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0___c @c:Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__() #Phosphatidylglycerophosphate (dioctadecanoyl, n-C18:0)
	Species Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1___c @c:Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__() #Phosphatidylglycerophosphate (dioctadec-11-enoyl, n-C18:1)
	Species Phenylacetyl_CoA_c @c:Phenylacetyl_CoA() #Phenylacetyl-CoA
	Species L_Phenylalanine_c @c:L_Phenylalanine() #L-Phenylalanine
	Species Protoheme_c @c:Protoheme() #Protoheme
	Species L_Phenylalanyl_tRNA__Phe___c @c:L_Phenylalanyl_tRNA__Phe__() #L-Phenylalanyl-tRNA(Phe)
	Species phospho_heptosyl_heptosyl_kdo2_lipidA_c @c:phospho_heptosyl_heptosyl_kdo2_lipidA() #phospho-heptosyl-heptosyl-kdo2-lipidA
	Species O_Phospho_L_homoserine_c @c:O_Phospho_L_homoserine() #O-Phospho-L-homoserine
	Species phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA_c @c:phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA() #phospho-heptosyl-phospho-heptosyl-heptosyl-kdo2-lipidA
	Species Phenylpyruvate_c @c:Phenylpyruvate() #Phenylpyruvate
	Species O_Phospho_4_hydroxy_L_threonine_c @c:O_Phospho_4_hydroxy_L_threonine() #O-Phospho-4-hydroxy-L-threonine
	Species Phosphate_c @c:Phosphate() #Phosphate
	Species Pimeloyl___acyl_carrierprotein___c @c:Pimeloyl___acyl_carrierprotein__() #Pimeloyl-[acyl-carrier protein]
	Species Pimeloyl___acyl_carrierprotein__methylester_c @c:Pimeloyl___acyl_carrierprotein__methylester() #Pimeloyl-[acyl-carrier protein] methyl ester
	Species Palmitoyl_CoA__n_C16_0CoA___c @c:Palmitoyl_CoA__n_C16_0CoA__() #Palmitoyl-CoA (n-C16:0CoA)
	Species __R___Pantothenate_c @c:__R___Pantothenate() #(R)-Pantothenate
	Species Peroxyaminoacrylate_c @c:Peroxyaminoacrylate() #Peroxyaminoacrylate
	Species Propionate__n_C3_0___c @c:Propionate__n_C3_0__() #Propionate (n-C3:0)
	Species Propanal_c @c:Propanal() #Propanal
	Species Propanoylphosphate_c @c:Propanoylphosphate() #Propanoyl phosphate
	Species Porphobilinogen_c @c:Porphobilinogen() #Porphobilinogen
	Species Propanoyl_CoA_c @c:Propanoyl_CoA() #Propanoyl-CoA
	Species Guanosine3_5_bis__diphosphate___c @c:Guanosine3_5_bis__diphosphate__() #Guanosine 3',5'-bis(diphosphate)
	Species Prephenate_c @c:Prephenate() #Prephenate
	Species Diphosphate_c @c:Diphosphate() #Diphosphate
	Species Protoporphyrin_c @c:Protoporphyrin() #Protoporphyrin
	Species ProtoporphyrinogenIX_c @c:ProtoporphyrinogenIX() #Protoporphyrinogen IX
	Species Inorganictriphosphate_c @c:Inorganictriphosphate() #Inorganic triphosphate
	Species Phenylpropanoate_c @c:Phenylpropanoate() #Phenylpropanoate
	Species s5_Phospho_beta_D_ribosylamine_c @c:s5_Phospho_beta_D_ribosylamine() #5-Phospho-beta-D-ribosylamine
	Species N___5_Phospho_D_ribosyl__anthranilate_c @c:N___5_Phospho_D_ribosyl__anthranilate() #N-(5-Phospho-D-ribosyl)anthranilate
	Species s1___5_Phosphoribosyl___AMP_c @c:s1___5_Phosphoribosyl___AMP() #1-(5-Phosphoribosyl)-AMP
	Species s1___5_Phosphoribosyl___ATP_c @c:s1___5_Phosphoribosyl___ATP() #1-(5-Phosphoribosyl)-ATP
	Species s7_cyano_7_carbaguanine_c @c:s7_cyano_7_carbaguanine() #7-cyano-7-carbaguanine
	Species s7_aminomethyl_7_deazaguanine_c @c:s7_aminomethyl_7_deazaguanine() #7-aminomethyl-7-deazaguanine
	Species s1___5_Phosphoribosyl___5_____5_phosphoribosylamino__methylideneamino__imidazole_4_carboxamide_c @c:s1___5_Phosphoribosyl___5_____5_phosphoribosylamino__methylideneamino__imidazole_4_carboxamide() #1-(5-Phosphoribosyl)-5-[(5-phosphoribosylamino)methylideneamino]imidazole-4-carboxamide
	Species s5_____5_phospho_1_deoxyribulos_1_ylamino__methylideneamino___1___5_phosphoribosyl__imidazole_4_carboxamide_c @c:s5_____5_phospho_1_deoxyribulos_1_ylamino__methylideneamino___1___5_phosphoribosyl__imidazole_4_carboxamide() #5-[(5-phospho-1-deoxyribulos-1-ylamino)methylideneamino]-1-(5-phosphoribosyl)imidazole-4-carboxamide
	Species L_Proline_c @c:L_Proline() #L-Proline
	Species L_Prolinylglycine_c @c:L_Prolinylglycine() #L-Prolinylglycine
	Species L_Prolyl_tRNA__Pro___c @c:L_Prolyl_tRNA__Pro__() #L-Prolyl-tRNA(Pro)
	Species s5_Phospho_alpha_D_ribose1_diphosphate_c @c:s5_Phospho_alpha_D_ribose1_diphosphate() #5-Phospho-alpha-D-ribose 1-diphosphate
	Species phosphatidylserine__didodecanoyl_n_C12_0___c @c:phosphatidylserine__didodecanoyl_n_C12_0__() #phosphatidylserine (didodecanoyl, n-C12:0)
	Species phosphatidylserine__ditetradecanoyl_n_C14_0___c @c:phosphatidylserine__ditetradecanoyl_n_C14_0__() #phosphatidylserine (ditetradecanoyl, n-C14:0)
	Species phosphatidylserine__ditetradec_7_enoyl_n_C14_1___c @c:phosphatidylserine__ditetradec_7_enoyl_n_C14_1__() #phosphatidylserine (ditetradec-7-enoyl, n-C14:1)
	Species phosphatidylserine__dihexadecanoyl_n_C16_0___c @c:phosphatidylserine__dihexadecanoyl_n_C16_0__() #phosphatidylserine (dihexadecanoyl, n-C16:0)
	Species phosphatidylserine__dihexadec_9_enoyl_n_C16_1___c @c:phosphatidylserine__dihexadec_9_enoyl_n_C16_1__() #phosphatidylserine (dihexadec-9-enoyl, n-C16:1)
	Species phosphatidylserine__dioctadecanoyl_n_C18_0___c @c:phosphatidylserine__dioctadecanoyl_n_C18_0__() #phosphatidylserine (dioctadecanoyl, n-C18:0)
	Species phosphatidylserine__dioctadec_11_enoyl_n_C18_1___c @c:phosphatidylserine__dioctadec_11_enoyl_n_C18_1__() #phosphatidylserine (dioctadec-11-enoyl, n-C18:1)
	Species psicoselysine_c @c:psicoselysine() #psicoselysine
	Species O_Phospho_L_serine_c @c:O_Phospho_L_serine() #O-Phospho-L-serine
	Species Putrescine_c @c:Putrescine() #Putrescine
	Species Pyridoxamine5_phosphate_c @c:Pyridoxamine5_phosphate() #Pyridoxamine 5'-phosphate
	Species Pyridoxamine_c @c:Pyridoxamine() #Pyridoxamine
	Species Pyridoxal_c @c:Pyridoxal() #Pyridoxal
	Species Pyridoxal5_phosphate_c @c:Pyridoxal5_phosphate() #Pyridoxal 5'-phosphate
	Species Pyridoxine_c @c:Pyridoxine() #Pyridoxine
	Species Pyruvate_c @c:Pyruvate() #Pyruvate
	Species Ubiquinone_8_c @c:Ubiquinone_8() #Ubiquinone-8
	Species Ubiquinol_8_c @c:Ubiquinol_8() #Ubiquinol-8
	Species Quinate_c @c:Quinate() #Quinate
	Species Quinolinate_c @c:Quinolinate() #Quinolinate
	Species D_Ribose1_5_bisphosphate_c @c:D_Ribose1_5_bisphosphate() #D-Ribose 1,5-bisphosphate
	Species alpha_D_Ribose1_phosphate_c @c:alpha_D_Ribose1_phosphate() #alpha-D-Ribose 1-phosphate
	Species alpha_D_Ribose5_phosphate_c @c:alpha_D_Ribose5_phosphate() #alpha-D-Ribose 5-phosphate
	Species rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate_c @c:rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate() #rhamanosyl-N-acetylglucosamyl-undecaprenyl diphosphate
	Species Reducedriboflavin_c @c:Reducedriboflavin() #Reduced riboflavin
	Species L_Ribulose_c @c:L_Ribulose() #L-Ribulose
	Species N1___alpha_D_ribosyl___5_6_dimethylbenzimidazole_c @c:N1___alpha_D_ribosyl___5_6_dimethylbenzimidazole() #N1-(alpha-D-ribosyl)-5,6-dimethylbenzimidazole
	Species Ring1_2_epoxyphenylacetyl_CoA_c @c:Ring1_2_epoxyphenylacetyl_CoA() #Ring 1,2-epoxyphenylacetyl-CoA
	Species S_Ribosyl_L_homocysteine_c @c:S_Ribosyl_L_homocysteine() #S-Ribosyl-L-homocysteine
	Species D_Ribose_c @c:D_Ribose() #D-Ribose
	Species Riboflavin_c @c:Riboflavin() #Riboflavin
	Species L_Rhamnulose_c @c:L_Rhamnulose() #L-Rhamnulose
	Species L_Rhamnulose1_phosphate_c @c:L_Rhamnulose1_phosphate() #L-Rhamnulose 1-phosphate
	Species L_Rhamnose_c @c:L_Rhamnose() #L-Rhamnose
	Species D_Ribulose5_phosphate_c @c:D_Ribulose5_phosphate() #D-Ribulose 5-phosphate
	Species L_Ribulose5_phosphate_c @c:L_Ribulose5_phosphate() #L-Ribulose 5-phosphate
	Species Sedoheptulose1_7_bisphosphate_c @c:Sedoheptulose1_7_bisphosphate() #Sedoheptulose 1,7-bisphosphate
	Species Sedoheptulose7_phosphate_c @c:Sedoheptulose7_phosphate() #Sedoheptulose 7-phosphate
	Species Sarcosine_c @c:Sarcosine() #Sarcosine
	Species D_Sorbitol6_phosphate_c @c:D_Sorbitol6_phosphate() #D-Sorbitol 6-phosphate
	Species O_Succinylbenzoyl_CoA_c @c:O_Succinylbenzoyl_CoA() #O-Succinylbenzoyl-CoA
	Species sirohydrochlorin_c @c:sirohydrochlorin() #sirohydrochlorin
	Species L_Selenocysteinyl_tRNA__Sec___c @c:L_Selenocysteinyl_tRNA__Sec__() #L-Selenocysteinyl-tRNA(Sec)
	Species Selenate_c @c:Selenate() #Selenate
	Species Selenide_c @c:Selenide() #Selenide
	Species Selenophosphate_c @c:Selenophosphate() #Selenophosphate
	Species D_Serine_c @c:D_Serine() #D-Serine
	Species L_Serine_c @c:L_Serine() #L-Serine
	Species L_seryl_AMP_c @c:L_seryl_AMP() #L-seryl-AMP
	Species L_Seryl_tRNA__Ser___c @c:L_Seryl_tRNA__Ser__() #L-Seryl-tRNA(Ser)
	Species L_Seryl_tRNA__Sec___c @c:L_Seryl_tRNA__Sec__() #L-Seryl-tRNA(Sec)
	Species Siroheme_c @c:Siroheme() #Siroheme
	Species Shikimate_c @c:Shikimate() #Shikimate
	Species Shikimate5_phosphate_c @c:Shikimate5_phosphate() #Shikimate 5-phosphate
	Species N_Succinyl_LL_2_6_diaminoheptanedioate_c @c:N_Succinyl_LL_2_6_diaminoheptanedioate() #N-Succinyl-LL-2,6-diaminoheptanedioate
	Species N_Succinyl_2_L_amino_6_oxoheptanedioate_c @c:N_Succinyl_2_L_amino_6_oxoheptanedioate() #N-Succinyl-2-L-amino-6-oxoheptanedioate
	Species selenite_c @c:selenite() #selenite
	Species sulfurdioxide_c @c:sulfurdioxide() #sulfur dioxide
	Species Sulfite_c @c:Sulfite() #Sulfite
	Species Sulfate_c @c:Sulfate() #Sulfate
	Species Spermidine_c @c:Spermidine() #Spermidine
	Species Stearoyl_CoA__n_C18_0CoA___c @c:Stearoyl_CoA__n_C18_0CoA__() #Stearoyl-CoA (n-C18:0CoA)
	Species Sucrose6_phosphate_c @c:Sucrose6_phosphate() #Sucrose 6-phosphate
	Species N2_Succinyl_L_arginine_c @c:N2_Succinyl_L_arginine() #N2-Succinyl-L-arginine
	Species o_Succinylbenzoate_c @c:o_Succinylbenzoate() #o-Succinylbenzoate
	Species Succinate_c @c:Succinate() #Succinate
	Species Succinyl_CoA_c @c:Succinyl_CoA() #Succinyl-CoA
	Species N2_Succinyl_L_glutamate_c @c:N2_Succinyl_L_glutamate() #N2-Succinyl-L-glutamate
	Species N2_Succinyl_L_glutamate5_semialdehyde_c @c:N2_Succinyl_L_glutamate5_semialdehyde() #N2-Succinyl-L-glutamate 5-semialdehyde
	Species O_Succinyl_L_homoserine_c @c:O_Succinyl_L_homoserine() #O-Succinyl-L-homoserine
	Species N2_Succinyl_L_ornithine_c @c:N2_Succinyl_L_ornithine() #N2-Succinyl-L-ornithine
	Species Succinicsemialdehyde_c @c:Succinicsemialdehyde() #Succinic semialdehyde
	Species SufBCDscaffoldcomplex_c @c:SufBCDscaffoldcomplex() #SufBCD scaffold complex
	Species SufBCDwithbound__2Fe_2S__cluster_c @c:SufBCDwithbound__2Fe_2S__cluster() #SufBCD with bound [2Fe-2S] cluster
	Species SufBCDwithtwobound__2Fe_2S__clusters_c @c:SufBCDwithtwobound__2Fe_2S__clusters() #SufBCD with two bound [2Fe-2S] clusters
	Species SufBCDwithbound__4Fe_4S__cluster_c @c:SufBCDwithbound__4Fe_4S__cluster() #SufBCD with bound [4Fe-4S] cluster
	Species SufSEsulfuracceptorcomplex_c @c:SufSEsulfuracceptorcomplex() #SufSE sulfur acceptor complex
	Species SufSEwithboundsulfur_c @c:SufSEwithboundsulfur() #SufSE with bound sulfur
	Species sulfoacetate_c @c:sulfoacetate() #sulfoacetate
	Species trans_3_cis_11_vacceoyl___acyl_carrierprotein___c @c:trans_3_cis_11_vacceoyl___acyl_carrierprotein__() #trans-3-cis-11-vacceoyl-[acyl-carrier protein]
	Species trans_3_cis_5_dodecenoyl___acyl_carrierprotein___c @c:trans_3_cis_5_dodecenoyl___acyl_carrierprotein__() #trans-3-cis-5-dodecenoyl-[acyl-carrier protein]
	Species trans_3_cis_7_myristoleoyl___acyl_carrierprotein___c @c:trans_3_cis_7_myristoleoyl___acyl_carrierprotein__() #trans-3-cis-7-myristoleoyl-[acyl-carrier protein]
	Species trans_3_cis_9_palmitoleoyl___acyl_carrierprotein___c @c:trans_3_cis_9_palmitoleoyl___acyl_carrierprotein__() #trans-3-cis-9-palmitoleoyl-[acyl-carrier protein]
	Species D_Tagatose6_phosphate_c @c:D_Tagatose6_phosphate() #D-Tagatose 6-phosphate
	Species D_Tagatose1_6_biphosphate_c @c:D_Tagatose1_6_biphosphate() #D-Tagatose 1,6-biphosphate
	Species D_Tagaturonate_c @c:D_Tagaturonate() #D-Tagaturonate
	Species D_tartrate_c @c:D_tartrate() #D-tartrate
	Species L_tartrate_c @c:L_tartrate() #L-tartrate
	Species Taurine_c @c:Taurine() #Taurine
	Species Thiocyanate_c @c:Thiocyanate() #Thiocyanate
	Species trans_Tetradec_2_enoyl_CoA_c @c:trans_Tetradec_2_enoyl_CoA() #trans-Tetradec-2-enoyl-CoA
	Species Tetradecanoyl_CoA__n_C14_0CoA___c @c:Tetradecanoyl_CoA__n_C14_0CoA__() #Tetradecanoyl-CoA (n-C14:0CoA)
	Species trans_Dodec_2_enoyl___acyl_carrierprotein___c @c:trans_Dodec_2_enoyl___acyl_carrierprotein__() #trans-Dodec-2-enoyl-[acyl-carrier protein]
	Species cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1___c @c:cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__() #cis-tetradec-7-enoyl-[acyl-carrier protein] (n-C14:1)
	Species trans_Dec_2_enoyl___acyl_carrierprotein___c @c:trans_Dec_2_enoyl___acyl_carrierprotein__() #trans-Dec-2-enoyl-[acyl-carrier protein]
	Species Tetradecenoyl_CoA__n_C14_1CoA___c @c:Tetradecenoyl_CoA__n_C14_1CoA__() #Tetradecenoyl-CoA (n-C14:1CoA)
	Species s2_3_4_5_Tetrahydrodipicolinate_c @c:s2_3_4_5_Tetrahydrodipicolinate() #2,3,4,5-Tetrahydrodipicolinate
	Species trans_Hex_2_enoyl___acyl_carrierprotein___c @c:trans_Hex_2_enoyl___acyl_carrierprotein__() #trans-Hex-2-enoyl-[acyl-carrier protein]
	Species s5_6_7_8_Tetrahydrofolate_c @c:s5_6_7_8_Tetrahydrofolate() #5,6,7,8-Tetrahydrofolate
	Species Thiamin_c @c:Thiamin() #Thiamin
	Species Thiaminmonophosphate_c @c:Thiaminmonophosphate() #Thiamin monophosphate
	Species Tetrahydromonapterin_c @c:Tetrahydromonapterin() #Tetrahydromonapterin
	Species Thiaminediphosphate_c @c:Thiaminediphosphate() #Thiamine diphosphate
	Species s5_6_7_8_tetrahydropteridine_c @c:s5_6_7_8_tetrahydropteridine() #5,6,7,8-tetrahydropteridine
	Species L_Threonine_c @c:L_Threonine() #L-Threonine
	Species L_Threonyl_tRNA__Thr___c @c:L_Threonyl_tRNA__Thr__() #L-Threonyl-tRNA(Thr)
	Species Thymine_c @c:Thymine() #Thymine
	Species Thymidine_c @c:Thymidine() #Thymidine
	Species trimethylamine_c @c:trimethylamine() #trimethylamine
	Species TrimethylamineN_oxide_c @c:TrimethylamineN_oxide() #Trimethylamine N-oxide
	Species trans_Tetradec_2_enoyl___acyl_carrierprotein___c @c:trans_Tetradec_2_enoyl___acyl_carrierprotein__() #trans-Tetradec-2-enoyl-[acyl-carrier protein]
	Species trans_Oct_2_enoyl___acyl_carrierprotein___c @c:trans_Oct_2_enoyl___acyl_carrierprotein__() #trans-Oct-2-enoyl-[acyl-carrier protein]
	Species trans_octadec_2_enoyl___acyl_carrierprotein___c @c:trans_octadec_2_enoyl___acyl_carrierprotein__() #trans-octadec-2-enoyl-[acyl-carrier protein]
	Species trans_Hexadec_2_enoyl___acyl_carrierprotein___c @c:trans_Hexadec_2_enoyl___acyl_carrierprotein__() #trans-Hexadec-2-enoyl-[acyl-carrier protein]
	Species Oxidizedthioredoxin_c @c:Oxidizedthioredoxin() #Oxidized thioredoxin
	Species Reducedthioredoxin_c @c:Reducedthioredoxin() #Reduced thioredoxin
	Species Trehalose_c @c:Trehalose() #Trehalose
	Species alpha_alpha_Trehalose6_phosphate_c @c:alpha_alpha_Trehalose6_phosphate() #alpha,alpha'-Trehalose 6-phosphate
	Species tRNA__Ala___c @c:tRNA__Ala__() #tRNA(Ala)
	Species tRNA__Arg___c @c:tRNA__Arg__() #tRNA(Arg)
	Species tRNA__Asn___c @c:tRNA__Asn__() #tRNA(Asn)
	Species tRNA__Asp___c @c:tRNA__Asp__() #tRNA(Asp)
	Species tRNA__Cys___c @c:tRNA__Cys__() #tRNA(Cys)
	Species tRNA__Gln___c @c:tRNA__Gln__() #tRNA(Gln)
	Species tRNA__Glu___c @c:tRNA__Glu__() #tRNA (Glu)
	Species tRNA__Gly___c @c:tRNA__Gly__() #tRNA(Gly)
	Species tRNA__His___c @c:tRNA__His__() #tRNA(His)
	Species tRNA__Ile___c @c:tRNA__Ile__() #tRNA(Ile)
	Species tRNA__Leu___c @c:tRNA__Leu__() #tRNA(Leu)
	Species tRNA__Lys___c @c:tRNA__Lys__() #tRNA(Lys)
	Species tRNA__Met___c @c:tRNA__Met__() #tRNA(Met)
	Species tRNA__Phe___c @c:tRNA__Phe__() #tRNA(Phe)
	Species tRNA__Pro___c @c:tRNA__Pro__() #tRNA(Pro)
	Species tRNA__SeCys___c @c:tRNA__SeCys__() #tRNA(SeCys)
	Species tRNA__Ser___c @c:tRNA__Ser__() #tRNA(Ser)
	Species tRNA__Thr___c @c:tRNA__Thr__() #tRNA(Thr)
	Species tRNA__Trp___c @c:tRNA__Trp__() #tRNA(Trp)
	Species tRNA__Tyr___c @c:tRNA__Tyr__() #tRNA(Tyr)
	Species tRNA__Val___c @c:tRNA__Val__() #tRNA(Val)
	Species L_Tryptophan_c @c:L_Tryptophan() #L-Tryptophan
	Species L_Tryptophanyl_tRNA__Trp___c @c:L_Tryptophanyl_tRNA__Trp__() #L-Tryptophanyl-tRNA(Trp)
	Species Thiosulfate_c @c:Thiosulfate() #Thiosulfate
	Species tetradecanoate__n_C14_0___c @c:tetradecanoate__n_C14_0__() #tetradecanoate (n-C14:0)
	Species Tetradecanoyl_phosphate__n_C14_0___c @c:Tetradecanoyl_phosphate__n_C14_0__() #Tetradecanoyl-phosphate (n-C14:0)
	Species tetradecenoate__n_C14_1___c @c:tetradecenoate__n_C14_1__() #tetradecenoate (n-C14:1)
	Species Tetradecanoyl_phosphate__n_C14_1___c @c:Tetradecanoyl_phosphate__n_C14_1__() #Tetradecanoyl-phosphate (n-C14:1)
	Species tungstate_c @c:tungstate() #tungstate
	Species L_Tyrosine_c @c:L_Tyrosine() #L-Tyrosine
	Species L_Tyrosyl_tRNA__Tyr___c @c:L_Tyrosyl_tRNA__Tyr__() #L-Tyrosyl-tRNA(Tyr)
	Species UDP_2_3_bis__3_hydroxytetradecanoyl__glucosamine_c @c:UDP_2_3_bis__3_hydroxytetradecanoyl__glucosamine() #UDP-2,3-bis(3-hydroxytetradecanoyl)glucosamine
	Species UDP_3_O___3_hydroxytetradecanoyl___N_acetylglucosamine_c @c:UDP_3_O___3_hydroxytetradecanoyl___N_acetylglucosamine() #UDP-3-O-(3-hydroxytetradecanoyl)-N-acetylglucosamine
	Species UDP_3_O___3_hydroxytetradecanoyl___D_glucosamine_c @c:UDP_3_O___3_hydroxytetradecanoyl___D_glucosamine() #UDP-3-O-(3-hydroxytetradecanoyl)-D-glucosamine
	Species undecaprenylphosphate_4_amino_4_formyl_L_arabinose_c @c:undecaprenylphosphate_4_amino_4_formyl_L_arabinose() #undecaprenyl phosphate-4-amino-4-formyl-L-arabinose
	Species undecaprenylphosphate_4_amino_4_deoxy_L_arabinose_c @c:undecaprenylphosphate_4_amino_4_deoxy_L_arabinose() #undecaprenyl phosphate-4-amino-4-deoxy-L-arabinose
	Species Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala_c @c:Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala() #Undecaprenyl-diphospho-N-acetylmuramoyl-(N-acetylglucosamine)-L-ala-D-glu-meso-2,6-diaminopimeloyl-D-ala-D-ala
	Species UDP_N_acetyl_3_O___1_carboxyvinyl___D_glucosamine_c @c:UDP_N_acetyl_3_O___1_carboxyvinyl___D_glucosamine() #UDP-N-acetyl-3-O-(1-carboxyvinyl)-D-glucosamine
	Species UDP_N_acetyl_D_glucosamine_c @c:UDP_N_acetyl_D_glucosamine() #UDP-N-acetyl-D-glucosamine
	Species UDP_N_acetyl_D_mannosamine_c @c:UDP_N_acetyl_D_mannosamine() #UDP-N-acetyl-D-mannosamine
	Species UDP_N_acetyl_D_mannosaminouronate_c @c:UDP_N_acetyl_D_mannosaminouronate() #UDP-N-acetyl-D-mannosaminouronate
	Species Undecaprenyl_diphospho_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine_c @c:Undecaprenyl_diphospho_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine() #Undecaprenyl-diphospho-N-acetylmuramoyl-L-alanyl-D-glutamyl-meso-2,6-diaminopimeloyl-D-alanyl-D-alanine
	Species UDP_N_acetylmuramoyl_L_alanine_c @c:UDP_N_acetylmuramoyl_L_alanine() #UDP-N-acetylmuramoyl-L-alanine
	Species UDP_N_acetylmuramoyl_L_alanyl_D_glutamate_c @c:UDP_N_acetylmuramoyl_L_alanyl_D_glutamate() #UDP-N-acetylmuramoyl-L-alanyl-D-glutamate
	Species UDP_N_acetylmuramate_c @c:UDP_N_acetylmuramate() #UDP-N-acetylmuramate
	Species Undecaprenyldiphosphate_c @c:Undecaprenyldiphosphate() #Undecaprenyl diphosphate
	Species Undecaprenylphosphate_c @c:Undecaprenylphosphate() #Undecaprenyl phosphate
	Species UDP_c @c:UDP() #UDP
	Species uridine5_diphospho_beta_4_deoxy_4_formamido_L_arabinose_c @c:uridine5_diphospho_beta_4_deoxy_4_formamido_L_arabinose() #uridine 5''-diphospho-{beta}-4-deoxy-4-formamido-L-arabinose
	Species uridine5_diphospho_beta_4_deoxy_4_amino_L_arabinose_c @c:uridine5_diphospho_beta_4_deoxy_4_amino_L_arabinose() #uridine 5''-diphospho-{beta}-4-deoxy-4-amino-L-arabinose
	Species UDP_4_keto_pyranose_c @c:UDP_4_keto_pyranose() #UDP-4-keto-pyranose
	Species UDPglucose_c @c:UDPglucose() #UDPglucose
	Species UDPgalactose_c @c:UDPgalactose() #UDPgalactose
	Species UDP_D_galacto_1_4_furanose_c @c:UDP_D_galacto_1_4_furanose() #UDP-D-galacto-1,4-furanose
	Species UDP_D_glucuronate_c @c:UDP_D_glucuronate() #UDP-D-glucuronate
	Species UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate_c @c:UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate() #UDP-N-acetylmuramoyl-L-alanyl-D-gamma-glutamyl-meso-2,6-diaminopimelate
	Species UDP_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine_c @c:UDP_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine() #UDP-N-acetylmuramoyl-L-alanyl-D-glutamyl-meso-2,6-diaminopimeloyl-D-alanyl-D-alanine
	Species UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate_D_alanine_c @c:UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate_D_alanine() #UDP-N-acetylmuramoyl-L-alanyl-D-gamma-glutamyl-meso-2,6-diaminopimelate-D-alanine
	Species UMP_c @c:UMP() #UMP
	Species UndecaprenyldiphosphoN_acetyl_glucosamine_c @c:UndecaprenyldiphosphoN_acetyl_glucosamine() #Undecaprenyl diphospho N-acetyl-glucosamine
	Species Undecaprenyl_diphospho_N_acetylglucosamine_N_acetylmannosaminuronate_c @c:Undecaprenyl_diphospho_N_acetylglucosamine_N_acetylmannosaminuronate() #Undecaprenyl-diphospho-N-acetylglucosamine-N-acetylmannosaminuronate
	Species Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose_c @c:Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose() #Undecaprenyl-diphospho N-acetylglucosamine-N-acetylmannosaminuronate-N-acetamido-4,6-dideoxy-D-galactose
	Species UroporphyrinogenIII_c @c:UroporphyrinogenIII() #Uroporphyrinogen III
	Species Uracil_c @c:Uracil() #Uracil
	Species Ureidoacrylateperacid_c @c:Ureidoacrylateperacid() #Ureidoacrylate peracid
	Species Urate_c @c:Urate() #Urate
	Species ______Ureidoglycolate_c @c:______Ureidoglycolate() #(-)-Ureidoglycolate
	Species Urea_c @c:Urea() #Urea
	Species Uridine_c @c:Uridine() #Uridine
	Species UTP_c @c:UTP() #UTP
	Species L_Valine_c @c:L_Valine() #L-Valine
	Species L_Valyl_tRNA__Val___c @c:L_Valyl_tRNA__Val__() #L-Valyl-tRNA(Val)
	Species tungstenbindingcofactor_c @c:tungstenbindingcofactor() #tungsten binding cofactor
	Species Xanthine_c @c:Xanthine() #Xanthine
	Species XDP_c @c:XDP() #XDP
	Species Xanthosine5_phosphate_c @c:Xanthosine5_phosphate() #Xanthosine 5'-phosphate
	Species XTP_c @c:XTP() #XTP
	Species Xanthosine_c @c:Xanthosine() #Xanthosine
	Species D_Xylulose5_phosphate_c @c:D_Xylulose5_phosphate() #D-Xylulose 5-phosphate
	Species L_Xylulose5_phosphate_c @c:L_Xylulose5_phosphate() #L-Xylulose 5-phosphate
	Species D_Xylose_c @c:D_Xylose() #D-Xylose
	Species D_Xylulose_c @c:D_Xylulose() #D-Xylulose
	Species L_Xylulose_c @c:L_Xylulose() #L-Xylulose
	Species Zinc_c @c:Zinc() #Zinc
	Species __R___Propane_1_2_diol_e @e:__R___Propane_1_2_diol() #(R)-Propane-1,2-diol
	Species __S___Propane_1_2_diol_e @e:__S___Propane_1_2_diol() #(S)-Propane-1,2-diol
	Species s1_4_alpha_D_glucan_e @e:s1_4_alpha_D_glucan() #1,4-alpha-D-glucan
	Species s1_5_Diaminopentane_e @e:s1_5_Diaminopentane() #1,5-Diaminopentane
	Species s2_3_CyclicAMP_e @e:s2_3_CyclicAMP() #2',3'-Cyclic AMP
	Species s2_3_CyclicCMP_e @e:s2_3_CyclicCMP() #2',3'-Cyclic CMP
	Species s2_3_CyclicGMP_e @e:s2_3_CyclicGMP() #2',3'-Cyclic GMP
	Species s2_3_CyclicUMP_e @e:s2_3_CyclicUMP() #2',3'-Cyclic UMP
	Species s2_3_diaminopropionate_e @e:s2_3_diaminopropionate() #2,3-diaminopropionate
	Species meso_2_6_Diaminoheptanedioate_e @e:meso_2_6_Diaminoheptanedioate() #meso-2,6-Diaminoheptanedioate
	Species s2_Dehydro_3_deoxy_D_gluconate_e @e:s2_Dehydro_3_deoxy_D_gluconate() #2-Dehydro-3-deoxy-D-gluconate
	Species s3_4_Dihydroxyphenylacetaldehyde_e @e:s3_4_Dihydroxyphenylacetaldehyde() #3,4-Dihydroxyphenylacetaldehyde
	Species s3_AMP_e @e:s3_AMP() #3'-AMP
	Species s3_cmp_e @e:s3_cmp() #3'-cmp
	Species s3_GMP_e @e:s3_GMP() #3'-GMP
	Species s3_hydroxycinnamicacid_e @e:s3_hydroxycinnamicacid() #3-hydroxycinnamic acid
	Species s3_Hydroxypropanoate_e @e:s3_Hydroxypropanoate() #3-Hydroxypropanoate
	Species s3___3_hydroxy_phenyl__propionate_e @e:s3___3_hydroxy_phenyl__propionate() #3-(3-hydroxy-phenyl)propionate
	Species s3_UMP_e @e:s3_UMP() #3'-UMP
	Species s4_Aminobutanoate_e @e:s4_Aminobutanoate() #4-Aminobutanoate
	Species s4_Hydroxyphenylacetaldehyde_e @e:s4_Hydroxyphenylacetaldehyde() #4-Hydroxyphenylacetaldehyde
	Species s5_Dehydro_D_gluconate_e @e:s5_Dehydro_D_gluconate() #5-Dehydro-D-gluconate
	Species s5_Methylthio_D_ribose_e @e:s5_Methylthio_D_ribose() #5-Methylthio-D-ribose
	Species L_alanine_D_glutamate_e @e:L_alanine_D_glutamate() #L-alanine-D-glutamate
	Species L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_e @e:L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate() #L-alanine-D-glutamate-meso-2,6-diaminoheptanedioate
	Species L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine_e @e:L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine() #L-alanine-D-glutamate-meso-2,6-diaminoheptanedioate-D-alanine
	Species L_alanine_L_glutamate_e @e:L_alanine_L_glutamate() #L-alanine-L-glutamate
	Species Acetate_e @e:Acetate() #Acetate
	Species Acetoacetate_e @e:Acetoacetate() #Acetoacetate
	Species Acetaldehyde_e @e:Acetaldehyde() #Acetaldehyde
	Species N_Acetyl_D_galactosamine_e @e:N_Acetyl_D_galactosamine() #N-Acetyl-D-galactosamine
	Species N_Acetyl_D_galactosamine1_phosphate_e @e:N_Acetyl_D_galactosamine1_phosphate() #N-Acetyl-D-galactosamine 1-phosphate
	Species N_Acetyl_D_glucosamine_e @e:N_Acetyl_D_glucosamine() #N-Acetyl-D-glucosamine
	Species N_Acetyl_D_glucosamine1_phosphate_e @e:N_Acetyl_D_glucosamine1_phosphate() #N-Acetyl-D-glucosamine 1-phosphate
	Species N_Acetyl_D_mannosamine_e @e:N_Acetyl_D_mannosamine() #N-Acetyl-D-mannosamine
	Species N_Acetylmuramate_e @e:N_Acetylmuramate() #N-Acetylmuramate
	Species N_Acetylneuraminate_e @e:N_Acetylneuraminate() #N-Acetylneuraminate
	Species s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA_e @e:s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA() #4-Amino-4-deoxy-L-arabinose modified core oligosaccharide lipid A
	Species O_Acetyl_L_serine_e @e:O_Acetyl_L_serine() #O-Acetyl-L-serine
	Species Adenine_e @e:Adenine() #Adenine
	Species Adenosine_e @e:Adenosine() #Adenosine
	Species Adenosylcobalamin_e @e:Adenosylcobalamin() #Adenosylcobalamin
	Species silver_e @e:silver() #silver
	Species Agmatine_e @e:Agmatine() #Agmatine
	Species s2_Oxoglutarate_e @e:s2_Oxoglutarate() #2-Oxoglutarate
	Species beta_Alanine_e @e:beta_Alanine() #beta-Alanine
	Species D_Alanine_e @e:D_Alanine() #D-Alanine
	Species L_Alanine_e @e:L_Alanine() #L-Alanine
	Species D_Alanyl_D_alanine_e @e:D_Alanyl_D_alanine() #D-Alanyl-D-alanine
	Species D_Allose_e @e:D_Allose() #D-Allose
	Species Allantoin_e @e:Allantoin() #Allantoin
	Species AMP_e @e:AMP() #AMP
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid_e @e:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramic acid
	Species L_Arabinose_e @e:L_Arabinose() #L-Arabinose
	Species Arbutin_e @e:Arbutin() #Arbutin
	Species aerobactinminusFe3_e @e:aerobactinminusFe3() #aerobactin minus Fe3
	Species Aerobactin_e @e:Aerobactin() #Aerobactin
	Species L_Arginine_e @e:L_Arginine() #L-Arginine
	Species L_Ascorbate_e @e:L_Ascorbate() #L-Ascorbate
	Species L_Asparagine_e @e:L_Asparagine() #L-Asparagine
	Species arsenite_e @e:arsenite() #arsenite
	Species L_Aspartate_e @e:L_Aspartate() #L-Aspartate
	Species Biotin_e @e:Biotin() #Biotin
	Species Butyrate__n_C4_0___e @e:Butyrate__n_C4_0__() #Butyrate (n-C4:0)
	Species butanesulfonate_e @e:butanesulfonate() #butanesulfonate
	Species Calcium_e @e:Calcium() #Calcium
	Species Cobinamide_e @e:Cobinamide() #Cobinamide
	Species Cob__I__alamin_e @e:Cob__I__alamin() #Cob(I)alamin
	Species Cadmium_e @e:Cadmium() #Cadmium
	Species Cys_Gly_e @e:Cys_Gly() #Cys-Gly
	Species Choline_e @e:Choline() #Choline
	Species N_N_diacetylchitobiose_e @e:N_N_diacetylchitobiose() #N,N'-diacetylchitobiose
	Species Citrate_e @e:Citrate() #Citrate
	Species Chloride_e @e:Chloride() #Chloride
	Species Chloramphenicol_e @e:Chloramphenicol() #Chloramphenicol
	Species CMP_e @e:CMP() #CMP
	Species CO2_e @e:CO2() #CO2
	Species Co2pl_e @e:Co2pl() #Co2+
	Species coreoligosaccharidelipidA_e @e:coreoligosaccharidelipidA() #core oligosaccharide lipid A
	Species coreoligosaccharidelipidAdiphosphate_e @e:coreoligosaccharidelipidAdiphosphate() #core oligosaccharide lipid A diphosphate
	Species coprogen_e @e:coprogen() #coprogen
	Species coprogenunloaded__noFe__III_____e @e:coprogenunloaded__noFe__III____() #coprogen unloaded (no Fe(III))
	Species L_Carnitine_e @e:L_Carnitine() #L-Carnitine
	Species D_Carnitine_e @e:D_Carnitine() #D-Carnitine
	Species Cytosine_e @e:Cytosine() #Cytosine
	Species Cupl_e @e:Cupl() #Cu+
	Species Cu2pl_e @e:Cu2pl() #Cu2+
	Species Hydrogencyanide_e @e:Hydrogencyanide() #Hydrogen cyanide
	Species Cyanate_e @e:Cyanate() #Cyanate
	Species D_Cysteine_e @e:D_Cysteine() #D-Cysteine
	Species L_Cysteine_e @e:L_Cysteine() #L-Cysteine
	Species Cytidine_e @e:Cytidine() #Cytidine
	Species Deoxyadenosine_e @e:Deoxyadenosine() #Deoxyadenosine
	Species dAMP_e @e:dAMP() #dAMP
	Species Decanoate__n_C10_0___e @e:Decanoate__n_C10_0__() #Decanoate (n-C10:0)
	Species dCMP_e @e:dCMP() #dCMP
	Species Deoxycytidine_e @e:Deoxycytidine() #Deoxycytidine
	Species Dodecanoate__n_C12_0___e @e:Dodecanoate__n_C12_0__() #Dodecanoate (n-C12:0)
	Species dGMP_e @e:dGMP() #dGMP
	Species Deoxyguanosine_e @e:Deoxyguanosine() #Deoxyguanosine
	Species Dihydroxyacetone_e @e:Dihydroxyacetone() #Dihydroxyacetone
	Species dIMP_e @e:dIMP() #dIMP
	Species Deoxyinosine_e @e:Deoxyinosine() #Deoxyinosine
	Species Dimethylsulfide_e @e:Dimethylsulfide() #Dimethyl sulfide
	Species Dimethylsulfoxide_e @e:Dimethylsulfoxide() #Dimethyl sulfoxide
	Species Dopamine_e @e:Dopamine() #Dopamine
	Species doxorubicin_e @e:doxorubicin() #doxorubicin
	Species dTMP_e @e:dTMP() #dTMP
	Species dUMP_e @e:dUMP() #dUMP
	Species Deoxyuridine_e @e:Deoxyuridine() #Deoxyuridine
	Species __enterobacterialcommonantigen__x4coreoligosaccharidelipidA_e @e:__enterobacterialcommonantigen__x4coreoligosaccharidelipidA() #(enterobacterial common antigen)x4 core oligosaccharide lipid A
	Species phosphoethanolamineKDO__2___lipid__A___e @e:phosphoethanolamineKDO__2___lipid__A__() #phosphoethanolamine KDO(2)-lipid (A)
	Species Enterochelin_e @e:Enterochelin() #Enterochelin
	Species Ethanolamine_e @e:Ethanolamine() #Ethanolamine
	Species ethanesulfonate_e @e:ethanesulfonate() #ethanesulfonate
	Species Ethanol_e @e:Ethanol() #Ethanol
	Species D_Fructose6_phosphate_e @e:D_Fructose6_phosphate() #D-Fructose 6-phosphate
	Species Formaldehyde_e @e:Formaldehyde() #Formaldehyde
	Species Fe2pl_e @e:Fe2pl() #Fe2+
	Species Fe3pl_e @e:Fe3pl() #Fe3+
	Species Fe__III__dicitrate_e @e:Fe__III__dicitrate() #Fe(III)dicitrate
	Species ferric2_3_dihydroxybenzoylserine_e @e:ferric2_3_dihydroxybenzoylserine() #ferric 2,3-dihydroxybenzoylserine
	Species Fe__III__hydroxamate_e @e:Fe__III__hydroxamate() #Fe(III)hydroxamate
	Species Fe__III__hydoxamate_unloaded_e @e:Fe__III__hydoxamate_unloaded() #Fe(III)hydoxamate, unloaded
	Species Ferrichrome_e @e:Ferrichrome() #Ferrichrome
	Species FerrichromeminusFe__III___e @e:FerrichromeminusFe__III__() #Ferrichrome minus Fe(III)
	Species Fe_enterobactin_e @e:Fe_enterobactin() #Fe-enterobactin
	Species ferroxamine_e @e:ferroxamine() #ferroxamine
	Species ferroxamineminusFe__3___e @e:ferroxamineminusFe__3__() #ferroxamine minus Fe(3)
	Species Formate_e @e:Formate() #Formate
	Species D_Fructose_e @e:D_Fructose() #D-Fructose
	Species fructoselysine_e @e:fructoselysine() #fructoselysine
	Species D_Fructuronate_e @e:D_Fructuronate() #D-Fructuronate
	Species L_Fucose_e @e:L_Fucose() #L-Fucose
	Species Fumarate_e @e:Fumarate() #Fumarate
	Species fusidicacid_e @e:fusidicacid() #fusidic acid
	Species D_Glucose1_phosphate_e @e:D_Glucose1_phosphate() #D-Glucose 1-phosphate
	Species sn_Glycero_3_phosphocholine_e @e:sn_Glycero_3_phosphocholine() #sn-Glycero-3-phosphocholine
	Species sn_Glycero_3_phosphoethanolamine_e @e:sn_Glycero_3_phosphoethanolamine() #sn-Glycero-3-phosphoethanolamine
	Species Glycerophosphoglycerol_e @e:Glycerophosphoglycerol() #Glycerophosphoglycerol
	Species sn_Glycero_3_phospho_1_inositol_e @e:sn_Glycero_3_phospho_1_inositol() #sn-Glycero-3-phospho-1-inositol
	Species Glycerophosphoserine_e @e:Glycerophosphoserine() #Glycerophosphoserine
	Species D_Glucose6_phosphate_e @e:D_Glucose6_phosphate() #D-Glucose 6-phosphate
	Species D_Galactose_e @e:D_Galactose() #D-Galactose
	Species betaD_Galactose_e @e:betaD_Galactose() #beta D-Galactose
	Species alpha_D_Galactose1_phosphate_e @e:alpha_D_Galactose1_phosphate() #alpha-D-Galactose 1-phosphate
	Species D_Galactarate_e @e:D_Galactarate() #D-Galactarate
	Species D_Galactonate_e @e:D_Galactonate() #D-Galactonate
	Species L_Galactonate_e @e:L_Galactonate() #L-Galactonate
	Species Galactitol_e @e:Galactitol() #Galactitol
	Species D_Galacturonate_e @e:D_Galacturonate() #D-Galacturonate
	Species D_Glucosamine_e @e:D_Glucosamine() #D-Glucosamine
	Species D_Glucosamine6_phosphate_e @e:D_Glucosamine6_phosphate() #D-Glucosamine 6-phosphate
	Species gamma_butyrobetaine_e @e:gamma_butyrobetaine() #gamma-butyrobetaine
	Species GDP_e @e:GDP() #GDP
	Species D_Glucose_e @e:D_Glucose() #D-Glucose
	Species D_Gluconate_e @e:D_Gluconate() #D-Gluconate
	Species D_Glucarate_e @e:D_Glucarate() #D-Glucarate
	Species D_Glucuronate_e @e:D_Glucuronate() #D-Glucuronate
	Species D_Glucuronate1_phosphate_e @e:D_Glucuronate1_phosphate() #D-Glucuronate 1-phosphate
	Species L_Glutamine_e @e:L_Glutamine() #L-Glutamine
	Species L_Glutamate_e @e:L_Glutamate() #L-Glutamate
	Species Glycine_e @e:Glycine() #Glycine
	Species D_Glyceraldehyde_e @e:D_Glyceraldehyde() #D-Glyceraldehyde
	Species Glycinebetaine_e @e:Glycinebetaine() #Glycine betaine
	Species Glycerol_e @e:Glycerol() #Glycerol
	Species __R___Glycerate_e @e:__R___Glycerate() #(R)-Glycerate
	Species Glycerol2_phosphate_e @e:Glycerol2_phosphate() #Glycerol 2-phosphate
	Species Glycerol3_phosphate_e @e:Glycerol3_phosphate() #Glycerol 3-phosphate
	Species Glycolate_e @e:Glycolate() #Glycolate
	Species GMP_e @e:GMP() #GMP
	Species Guanosine_e @e:Guanosine() #Guanosine
	Species Oxidizedglutathione_e @e:Oxidizedglutathione() #Oxidized glutathione
	Species Reducedglutathione_e @e:Reducedglutathione() #Reduced glutathione
	Species GTP_e @e:GTP() #GTP
	Species Guanine_e @e:Guanine() #Guanine
	Species Hpl_e @e:Hpl() #H+
	Species H2_e @e:H2() #H2
	Species H2O_e @e:H2O() #H2O
	Species Hydrogenperoxide_e @e:Hydrogenperoxide() #Hydrogen peroxide
	Species Hydrogensulfide_e @e:Hydrogensulfide() #Hydrogen sulfide
	Species hepta_acylatedcoreoligosaccharidelipidA__E_coli___e @e:hepta_acylatedcoreoligosaccharidelipidA__E_coli__() #hepta-acylated core oligosaccharide lipid A (E. coli)
	Species hepta_acylatedKDO__2___lipid__A___e @e:hepta_acylatedKDO__2___lipid__A__() #hepta-acylated KDO(2)-lipid (A)
	Species Hexadecanoate__n_C16_0___e @e:Hexadecanoate__n_C16_0__() #Hexadecanoate (n-C16:0)
	Species Hexadecenoate__n_C16_1___e @e:Hexadecenoate__n_C16_1__() #Hexadecenoate (n-C16:1)
	Species Hg2pl_e @e:Hg2pl() #Hg2+
	Species L_Histidine_e @e:L_Histidine() #L-Histidine
	Species L_Homoserine_e @e:L_Homoserine() #L-Homoserine
	Species Hexanoate__n_C6_0___e @e:Hexanoate__n_C6_0__() #Hexanoate (n-C6:0)
	Species Hypoxanthine_e @e:Hypoxanthine() #Hypoxanthine
	Species L_Idonate_e @e:L_Idonate() #L-Idonate
	Species L_Isoleucine_e @e:L_Isoleucine() #L-Isoleucine
	Species IMP_e @e:IMP() #IMP
	Species Indole_e @e:Indole() #Indole
	Species myo_Inositol_e @e:myo_Inositol() #myo-Inositol
	Species Inosine_e @e:Inosine() #Inosine
	Species Isethionicacid_e @e:Isethionicacid() #Isethionic acid
	Species potassium_e @e:potassium() #potassium
	Species KDO__2___lipidIV__A___e @e:KDO__2___lipidIV__A__() #KDO(2)-lipid IV(A)
	Species D_Lactate_e @e:D_Lactate() #D-Lactate
	Species L_Lactate_e @e:L_Lactate() #L-Lactate
	Species Lactose_e @e:Lactose() #Lactose
	Species L_Leucine_e @e:L_Leucine() #L-Leucine
	Species KDO__2___lipid__A___e @e:KDO__2___lipid__A__() #KDO(2)-lipid (A)
	Species coldadaptedKDO__2___lipid__A___e @e:coldadaptedKDO__2___lipid__A__() #cold adapted KDO(2)-lipid (A)
	Species Lipoate_e @e:Lipoate() #Lipoate
	Species L_Lysine_e @e:L_Lysine() #L-Lysine
	Species L_Lyxose_e @e:L_Lyxose() #L-Lyxose
	Species D_Malate_e @e:D_Malate() #D-Malate
	Species L_Malate_e @e:L_Malate() #L-Malate
	Species Maltose_e @e:Maltose() #Maltose
	Species Maltohexaose_e @e:Maltohexaose() #Maltohexaose
	Species Maltopentaose_e @e:Maltopentaose() #Maltopentaose
	Species Maltotriose_e @e:Maltotriose() #Maltotriose
	Species Maltotetraose_e @e:Maltotetraose() #Maltotetraose
	Species D_Mannose_e @e:D_Mannose() #D-Mannose
	Species D_Mannose6_phosphate_e @e:D_Mannose6_phosphate() #D-Mannose 6-phosphate
	Species s2__alpha_D_Mannosyl___D_glycerate_e @e:s2__alpha_D_Mannosyl___D_glycerate() #2(alpha-D-Mannosyl)-D-glycerate
	Species Melibiose_e @e:Melibiose() #Melibiose
	Species Methanol_e @e:Methanol() #Methanol
	Species D_Methionine_e @e:D_Methionine() #D-Methionine
	Species L_Methionine_e @e:L_Methionine() #L-Methionine
	Species L_methionine_R_sulfoxide_e @e:L_methionine_R_sulfoxide() #L-methionine-R-sulfoxide
	Species L_MethionineSulfoxide_e @e:L_MethionineSulfoxide() #L-Methionine Sulfoxide
	Species magnesium_e @e:magnesium() #magnesium
	Species minocycline_e @e:minocycline() #minocycline
	Species myo_Inositolhexakisphosphate_e @e:myo_Inositolhexakisphosphate() #myo-Inositol hexakisphosphate
	Species S_Methyl_L_methionine_e @e:S_Methyl_L_methionine() #S-Methyl-L-methionine
	Species Mn2pl_e @e:Mn2pl() #Mn2+
	Species D_Mannitol_e @e:D_Mannitol() #D-Mannitol
	Species Molybdate_e @e:Molybdate() #Molybdate
	Species methanesulfonate_e @e:methanesulfonate() #methanesulfonate
	Species Nitrousoxide_e @e:Nitrousoxide() #Nitrous oxide
	Species Sodium_e @e:Sodium() #Sodium
	Species Nicotinate_e @e:Nicotinate() #Nicotinate
	Species Ammonium_e @e:Ammonium() #Ammonium
	Species nickel_e @e:nickel() #nickel
	Species NMN_e @e:NMN() #NMN
	Species Nitricoxide_e @e:Nitricoxide() #Nitric oxide
	Species Nitrite_e @e:Nitrite() #Nitrite
	Species Nitrate_e @e:Nitrate() #Nitrate
	Species novobiocin_e @e:novobiocin() #novobiocin
	Species __O16antigen__x4coreoligosaccharidelipidA_e @e:__O16antigen__x4coreoligosaccharidelipidA() #(O16 antigen)x4 core oligosaccharide lipid A
	Species O2_e @e:O2() #O2
	Species Superoxideanion_e @e:Superoxideanion() #Superoxide anion
	Species octadecanoate__n_C18_0___e @e:octadecanoate__n_C18_0__() #octadecanoate (n-C18:0)
	Species octadecenoate__n_C18_1___e @e:octadecenoate__n_C18_1__() #octadecenoate (n-C18:1)
	Species octanoate__n_C8_0___e @e:octanoate__n_C8_0__() #octanoate (n-C8:0)
	Species Ornithine_e @e:Ornithine() #Ornithine
	Species Orotate_e @e:Orotate() #Orotate
	Species Phenylacetaldehyde_e @e:Phenylacetaldehyde() #Phenylacetaldehyde
	Species Phenethylamine_e @e:Phenethylamine() #Phenethylamine
	Species L_Phenylalanine_e @e:L_Phenylalanine() #L-Phenylalanine
	Species Protoheme_e @e:Protoheme() #Protoheme
	Species Phosphate_e @e:Phosphate() #Phosphate
	Species __R___Pantothenate_e @e:__R___Pantothenate() #(R)-Pantothenate
	Species Propionate__n_C3_0___e @e:Propionate__n_C3_0__() #Propionate (n-C3:0)
	Species Propanal_e @e:Propanal() #Propanal
	Species Phenylpropanoate_e @e:Phenylpropanoate() #Phenylpropanoate
	Species Phosphonate_e @e:Phosphonate() #Phosphonate
	Species L_Proline_e @e:L_Proline() #L-Proline
	Species L_Prolinylglycine_e @e:L_Prolinylglycine() #L-Prolinylglycine
	Species psicoselysine_e @e:psicoselysine() #psicoselysine
	Species O_Phospho_L_serine_e @e:O_Phospho_L_serine() #O-Phospho-L-serine
	Species Putrescine_e @e:Putrescine() #Putrescine
	Species Pyridoxamine_e @e:Pyridoxamine() #Pyridoxamine
	Species Pyridoxal_e @e:Pyridoxal() #Pyridoxal
	Species Pyridoxine_e @e:Pyridoxine() #Pyridoxine
	Species Pyruvate_e @e:Pyruvate() #Pyruvate
	Species Quinate_e @e:Quinate() #Quinate
	Species alpha_D_Ribose5_phosphate_e @e:alpha_D_Ribose5_phosphate() #alpha-D-Ribose 5-phosphate
	Species rifampin_e @e:rifampin() #rifampin
	Species D_Ribose_e @e:D_Ribose() #D-Ribose
	Species L_Rhamnose_e @e:L_Rhamnose() #L-Rhamnose
	Species D_Sorbitol_e @e:D_Sorbitol() #D-Sorbitol
	Species Selenate_e @e:Selenate() #Selenate
	Species D_Serine_e @e:D_Serine() #D-Serine
	Species L_Serine_e @e:L_Serine() #L-Serine
	Species Shikimate_e @e:Shikimate() #Shikimate
	Species selenite_e @e:selenite() #selenite
	Species sulfurdioxide_e @e:sulfurdioxide() #sulfur dioxide
	Species Sulfite_e @e:Sulfite() #Sulfite
	Species Sulfate_e @e:Sulfate() #Sulfate
	Species Spermidine_e @e:Spermidine() #Spermidine
	Species Succinate_e @e:Succinate() #Succinate
	Species Sucrose_e @e:Sucrose() #Sucrose
	Species sulfoacetate_e @e:sulfoacetate() #sulfoacetate
	Species D_tartrate_e @e:D_tartrate() #D-tartrate
	Species L_tartrate_e @e:L_tartrate() #L-tartrate
	Species Taurine_e @e:Taurine() #Taurine
	Species Thiocyanate_e @e:Thiocyanate() #Thiocyanate
	Species Thiamin_e @e:Thiamin() #Thiamin
	Species L_Threonine_e @e:L_Threonine() #L-Threonine
	Species L_ThreonineO_3_phosphate_e @e:L_ThreonineO_3_phosphate() #L-Threonine O-3-phosphate
	Species Thymine_e @e:Thymine() #Thymine
	Species Thymidine_e @e:Thymidine() #Thymidine
	Species trimethylamine_e @e:trimethylamine() #trimethylamine
	Species TrimethylamineN_oxide_e @e:TrimethylamineN_oxide() #Trimethylamine N-oxide
	Species Trehalose_e @e:Trehalose() #Trehalose
	Species L_Tryptophan_e @e:L_Tryptophan() #L-Tryptophan
	Species Thiosulfate_e @e:Thiosulfate() #Thiosulfate
	Species tetradecanoate__n_C14_0___e @e:tetradecanoate__n_C14_0__() #tetradecanoate (n-C14:0)
	Species tetradecenoate__n_C14_1___e @e:tetradecenoate__n_C14_1__() #tetradecenoate (n-C14:1)
	Species tetracycline_e @e:tetracycline() #tetracycline
	Species tungstate_e @e:tungstate() #tungstate
	Species Tyramine_e @e:Tyramine() #Tyramine
	Species L_Tyrosine_e @e:L_Tyrosine() #L-Tyrosine
	Species Phosphotyrosine_e @e:Phosphotyrosine() #Phosphotyrosine
	Species UDP_N_acetyl_D_glucosamine_e @e:UDP_N_acetyl_D_glucosamine() #UDP-N-acetyl-D-glucosamine
	Species UDP_N_acetyl_D_galactosamine_e @e:UDP_N_acetyl_D_galactosamine() #UDP-N-acetyl-D-galactosamine
	Species UDPglucose_e @e:UDPglucose() #UDPglucose
	Species UDPgalactose_e @e:UDPgalactose() #UDPgalactose
	Species UDP_D_glucuronate_e @e:UDP_D_glucuronate() #UDP-D-glucuronate
	Species UMP_e @e:UMP() #UMP
	Species Uracil_e @e:Uracil() #Uracil
	Species Urea_e @e:Urea() #Urea
	Species Uridine_e @e:Uridine() #Uridine
	Species L_Valine_e @e:L_Valine() #L-Valine
	Species Xanthine_e @e:Xanthine() #Xanthine
	Species Xanthosine5_phosphate_e @e:Xanthosine5_phosphate() #Xanthosine 5'-phosphate
	Species Xanthosine_e @e:Xanthosine() #Xanthosine
	Species D_Xylose_e @e:D_Xylose() #D-Xylose
	Species L_Xylulose_e @e:L_Xylulose() #L-Xylulose
	Species Zinc_e @e:Zinc() #Zinc
	Species s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0___p @p:s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__() #1,2-Diacyl-sn-glycerol (didodecanoyl, n-C12:0)
	Species s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0___p @p:s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__() #1,2-Diacyl-sn-glycerol (ditetradecanoyl, n-C14:0)
	Species s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1___p @p:s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__() #1,2-Diacyl-sn-glycerol (ditetradec-7-enoyl, n-C14:1)
	Species s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0___p @p:s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__() #1,2-Diacyl-sn-glycerol (dihexadecanoyl, n-C16:0)
	Species s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1___p @p:s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__() #1,2-Diacyl-sn-glycerol (dihexadec-9-enoyl, n-C16:1)
	Species s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0___p @p:s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__() #1,2-Diacyl-sn-glycerol (dioctadecanoyl, n-C18:0)
	Species s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1___p @p:s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__() #1,2-Diacyl-sn-glycerol (dioctadec-11-enoyl, n-C18:1)
	Species __R___Propane_1_2_diol_p @p:__R___Propane_1_2_diol() #(R)-Propane-1,2-diol
	Species __S___Propane_1_2_diol_p @p:__S___Propane_1_2_diol() #(S)-Propane-1,2-diol
	Species s1_4_alpha_D_glucan_p @p:s1_4_alpha_D_glucan() #1,4-alpha-D-glucan
	Species s1_5_Diaminopentane_p @p:s1_5_Diaminopentane() #1,5-Diaminopentane
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C12:0)
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C14:0)
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C14:1)
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C16:0)
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C16:1)
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C18:0)
	Species s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1___p @p:s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__() #1-Acyl-sn-glycero-3-phosphoethanolamine (n-C18:1)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C12:0)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C14:0)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C14:1)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C16:0)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C16:1)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C18:0)
	Species s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1___p @p:s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__() #1-Acyl-sn-glycero-3-phosphoglycerol (n-C18:1)
	Species s1_dodecanoyl_sn_glycerol3_phosphate_p @p:s1_dodecanoyl_sn_glycerol3_phosphate() #1-dodecanoyl-sn-glycerol 3-phosphate
	Species s1_hexadec_9_enoyl_sn_glycerol3_phosphate_p @p:s1_hexadec_9_enoyl_sn_glycerol3_phosphate() #1-hexadec-9-enoyl-sn-glycerol 3-phosphate
	Species s1_hexadecanoyl_sn_glycerol3_phosphate_p @p:s1_hexadecanoyl_sn_glycerol3_phosphate() #1-hexadecanoyl-sn-glycerol 3-phosphate
	Species s1_octadec_11_enoyl_sn_glycerol3_phosphate_p @p:s1_octadec_11_enoyl_sn_glycerol3_phosphate() #1-octadec-11-enoyl-sn-glycerol 3-phosphate
	Species s1_octadecanoyl_sn_glycerol3_phosphate_p @p:s1_octadecanoyl_sn_glycerol3_phosphate() #1-octadecanoyl-sn-glycerol 3-phosphate
	Species s1_tetradec_7_enoyl_sn_glycerol3_phosphate_p @p:s1_tetradec_7_enoyl_sn_glycerol3_phosphate() #1-tetradec-7-enoyl-sn-glycerol 3-phosphate
	Species s1_tetradecanoyl_sn_glycerol3_phosphate_p @p:s1_tetradecanoyl_sn_glycerol3_phosphate() #1-tetradecanoyl-sn-glycerol 3-phosphate
	Species s2_3_CyclicAMP_p @p:s2_3_CyclicAMP() #2',3'-Cyclic AMP
	Species s2_3_CyclicCMP_p @p:s2_3_CyclicCMP() #2',3'-Cyclic CMP
	Species s2_3_CyclicGMP_p @p:s2_3_CyclicGMP() #2',3'-Cyclic GMP
	Species s2_3_CyclicUMP_p @p:s2_3_CyclicUMP() #2',3'-Cyclic UMP
	Species s2_3_diaminopropionate_p @p:s2_3_diaminopropionate() #2,3-diaminopropionate
	Species meso_2_6_Diaminoheptanedioate_p @p:meso_2_6_Diaminoheptanedioate() #meso-2,6-Diaminoheptanedioate
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C12:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C14:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C14:1)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C16:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C16:1)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C18:0)
	Species s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1___p @p:s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__() #2-Acyl-sn-glycero-3-phosphoethanolamine (n-C18:1)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C12:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C14:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C14:1)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C16:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C16:1)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C18:0)
	Species s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1___p @p:s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__() #2-Acyl-sn-glycero-3-phosphoglycerol (n-C18:1)
	Species s2_dodecanoyl_sn_glycerol3_phosphate_p @p:s2_dodecanoyl_sn_glycerol3_phosphate() #2-dodecanoyl-sn-glycerol 3-phosphate
	Species s2_Dehydro_3_deoxy_D_gluconate_p @p:s2_Dehydro_3_deoxy_D_gluconate() #2-Dehydro-3-deoxy-D-gluconate
	Species s2_hexadec_9_enoyl_sn_glycerol3_phosphate_p @p:s2_hexadec_9_enoyl_sn_glycerol3_phosphate() #2-hexadec-9-enoyl-sn-glycerol 3-phosphate
	Species s2_hexadecanoyl_sn_glycerol3_phosphate_p @p:s2_hexadecanoyl_sn_glycerol3_phosphate() #2-hexadecanoyl-sn-glycerol 3-phosphate
	Species s2_octadec_11_enoyl_sn_glycerol3_phosphate_p @p:s2_octadec_11_enoyl_sn_glycerol3_phosphate() #2-octadec-11-enoyl-sn-glycerol 3-phosphate
	Species s2_octadecanoyl_sn_glycerol3_phosphate_p @p:s2_octadecanoyl_sn_glycerol3_phosphate() #2-octadecanoyl-sn-glycerol 3-phosphate
	Species s2_tetradec_7_enoyl_sn_glycerol3_phosphate_p @p:s2_tetradec_7_enoyl_sn_glycerol3_phosphate() #2-tetradec-7-enoyl-sn-glycerol 3-phosphate
	Species s2_tetradecanoyl_sn_glycerol3_phosphate_p @p:s2_tetradecanoyl_sn_glycerol3_phosphate() #2-tetradecanoyl-sn-glycerol 3-phosphate
	Species s3_4_Dihydroxyphenylacetaldehyde_p @p:s3_4_Dihydroxyphenylacetaldehyde() #3,4-Dihydroxyphenylacetaldehyde
	Species s3_AMP_p @p:s3_AMP() #3'-AMP
	Species s3_cmp_p @p:s3_cmp() #3'-cmp
	Species s3_GMP_p @p:s3_GMP() #3'-GMP
	Species s3_hydroxycinnamicacid_p @p:s3_hydroxycinnamicacid() #3-hydroxycinnamic acid
	Species s3_Hydroxypropanoate_p @p:s3_Hydroxypropanoate() #3-Hydroxypropanoate
	Species s3___3_hydroxy_phenyl__propionate_p @p:s3___3_hydroxy_phenyl__propionate() #3-(3-hydroxy-phenyl)propionate
	Species s3_UMP_p @p:s3_UMP() #3'-UMP
	Species s4_Aminobutanoate_p @p:s4_Aminobutanoate() #4-Aminobutanoate
	Species s4_Hydroxyphenylacetaldehyde_p @p:s4_Hydroxyphenylacetaldehyde() #4-Hydroxyphenylacetaldehyde
	Species s5_Dehydro_D_gluconate_p @p:s5_Dehydro_D_gluconate() #5-Dehydro-D-gluconate
	Species s5_Methylthio_D_ribose_p @p:s5_Methylthio_D_ribose() #5-Methylthio-D-ribose
	Species L_alanine_D_glutamate_p @p:L_alanine_D_glutamate() #L-alanine-D-glutamate
	Species L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_p @p:L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate() #L-alanine-D-glutamate-meso-2,6-diaminoheptanedioate
	Species L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine_p @p:L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine() #L-alanine-D-glutamate-meso-2,6-diaminoheptanedioate-D-alanine
	Species L_alanine_L_glutamate_p @p:L_alanine_L_glutamate() #L-alanine-L-glutamate
	Species Acetate_p @p:Acetate() #Acetate
	Species Acetoacetate_p @p:Acetoacetate() #Acetoacetate
	Species Acetaldehyde_p @p:Acetaldehyde() #Acetaldehyde
	Species N_Acetyl_D_galactosamine_p @p:N_Acetyl_D_galactosamine() #N-Acetyl-D-galactosamine
	Species N_Acetyl_D_galactosamine1_phosphate_p @p:N_Acetyl_D_galactosamine1_phosphate() #N-Acetyl-D-galactosamine 1-phosphate
	Species N_Acetyl_D_glucosamine_p @p:N_Acetyl_D_glucosamine() #N-Acetyl-D-glucosamine
	Species N_Acetyl_D_glucosamine1_phosphate_p @p:N_Acetyl_D_glucosamine1_phosphate() #N-Acetyl-D-glucosamine 1-phosphate
	Species N_Acetyl_D_mannosamine_p @p:N_Acetyl_D_mannosamine() #N-Acetyl-D-mannosamine
	Species N_Acetylmuramate_p @p:N_Acetylmuramate() #N-Acetylmuramate
	Species N_Acetylneuraminate_p @p:N_Acetylneuraminate() #N-Acetylneuraminate
	Species s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA_p @p:s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA() #4-Amino-4-deoxy-L-arabinose modified core oligosaccharide lipid A
	Species O_Acetyl_L_serine_p @p:O_Acetyl_L_serine() #O-Acetyl-L-serine
	Species Adenine_p @p:Adenine() #Adenine
	Species Adenosine_p @p:Adenosine() #Adenosine
	Species Adenosylcobalamin_p @p:Adenosylcobalamin() #Adenosylcobalamin
	Species Agmatine_p @p:Agmatine() #Agmatine
	Species s2_Oxoglutarate_p @p:s2_Oxoglutarate() #2-Oxoglutarate
	Species beta_Alanine_p @p:beta_Alanine() #beta-Alanine
	Species D_Alanine_p @p:D_Alanine() #D-Alanine
	Species L_Alanine_p @p:L_Alanine() #L-Alanine
	Species D_Alanyl_D_alanine_p @p:D_Alanyl_D_alanine() #D-Alanyl-D-alanine
	Species D_Allose_p @p:D_Allose() #D-Allose
	Species Allantoin_p @p:Allantoin() #Allantoin
	Species applipoprotein_p @p:applipoprotein() #applipoprotein
	Species AMP_p @p:AMP() #AMP
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid_p @p:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramic acid
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide_p @p:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramyl-tripeptide
	Species N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide_p @p:N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide() #N-Acetyl-D-glucosamine(anhydrous)N-Acetylmuramyl-tetrapeptide
	Species L_Arabinose_p @p:L_Arabinose() #L-Arabinose
	Species Arbutin_p @p:Arbutin() #Arbutin
	Species aerobactinminusFe3_p @p:aerobactinminusFe3() #aerobactin minus Fe3
	Species Aerobactin_p @p:Aerobactin() #Aerobactin
	Species L_Arginine_p @p:L_Arginine() #L-Arginine
	Species L_Ascorbate_p @p:L_Ascorbate() #L-Ascorbate
	Species L_Asparagine_p @p:L_Asparagine() #L-Asparagine
	Species arsenite_p @p:arsenite() #arsenite
	Species L_Aspartate_p @p:L_Aspartate() #L-Aspartate
	Species Biotin_p @p:Biotin() #Biotin
	Species Butyrate__n_C4_0___p @p:Butyrate__n_C4_0__() #Butyrate (n-C4:0)
	Species butanesulfonate_p @p:butanesulfonate() #butanesulfonate
	Species Calcium_p @p:Calcium() #Calcium
	Species Cobinamide_p @p:Cobinamide() #Cobinamide
	Species Cob__I__alamin_p @p:Cob__I__alamin() #Cob(I)alamin
	Species Cadmium_p @p:Cadmium() #Cadmium
	Species Cys_Gly_p @p:Cys_Gly() #Cys-Gly
	Species Choline_p @p:Choline() #Choline
	Species N_N_diacetylchitobiose_p @p:N_N_diacetylchitobiose() #N,N'-diacetylchitobiose
	Species Citrate_p @p:Citrate() #Citrate
	Species Chloride_p @p:Chloride() #Chloride
	Species cardiolipin__tetradodecanoyl_n_C12_0___p @p:cardiolipin__tetradodecanoyl_n_C12_0__() #cardiolipin (tetradodecanoyl, n-C12:0)
	Species cardiolipin__tetratetradecanoyl_n_C14_0___p @p:cardiolipin__tetratetradecanoyl_n_C14_0__() #cardiolipin (tetratetradecanoyl, n-C14:0)
	Species cardiolipin__tetratetradec_7_enoyl_n_C14_1___p @p:cardiolipin__tetratetradec_7_enoyl_n_C14_1__() #cardiolipin (tetratetradec-7-enoyl, n-C14:1)
	Species cardiolipin__tetrahexadecanoyl_n_C16_0___p @p:cardiolipin__tetrahexadecanoyl_n_C16_0__() #cardiolipin (tetrahexadecanoyl, n-C16:0)
	Species cardiolipin__tetrahexadec_9_enoyl_n_C16_1___p @p:cardiolipin__tetrahexadec_9_enoyl_n_C16_1__() #cardiolipin (tetrahexadec-9-enoyl, n-C16:1)
	Species cardiolipin__tetraoctadecanoyl_n_C18_0___p @p:cardiolipin__tetraoctadecanoyl_n_C18_0__() #cardiolipin (tetraoctadecanoyl, n-C18:0)
	Species cardiolipin__tetraoctadec_11_enoyl_n_C18_1___p @p:cardiolipin__tetraoctadec_11_enoyl_n_C18_1__() #cardiolipin (tetraoctadec-11-enoyl, n-C18:1)
	Species Chloramphenicol_p @p:Chloramphenicol() #Chloramphenicol
	Species CMP_p @p:CMP() #CMP
	Species CO2_p @p:CO2() #CO2
	Species Co2pl_p @p:Co2pl() #Co2+
	Species coreoligosaccharidelipidA_p @p:coreoligosaccharidelipidA() #core oligosaccharide lipid A
	Species coreoligosaccharidelipidAdiphosphate_p @p:coreoligosaccharidelipidAdiphosphate() #core oligosaccharide lipid A diphosphate
	Species coprogen_p @p:coprogen() #coprogen
	Species coprogenunloaded__noFe__III_____p @p:coprogenunloaded__noFe__III____() #coprogen unloaded (no Fe(III))
	Species L_Carnitine_p @p:L_Carnitine() #L-Carnitine
	Species D_Carnitine_p @p:D_Carnitine() #D-Carnitine
	Species Cytosine_p @p:Cytosine() #Cytosine
	Species crotonobetaine_p @p:crotonobetaine() #crotonobetaine
	Species Cupl_p @p:Cupl() #Cu+
	Species Cu2pl_p @p:Cu2pl() #Cu2+
	Species Hydrogencyanide_p @p:Hydrogencyanide() #Hydrogen cyanide
	Species Cyanate_p @p:Cyanate() #Cyanate
	Species D_Cysteine_p @p:D_Cysteine() #D-Cysteine
	Species L_Cysteine_p @p:L_Cysteine() #L-Cysteine
	Species Cytidine_p @p:Cytidine() #Cytidine
	Species Deoxyadenosine_p @p:Deoxyadenosine() #Deoxyadenosine
	Species dAMP_p @p:dAMP() #dAMP
	Species Decanoate__n_C10_0___p @p:Decanoate__n_C10_0__() #Decanoate (n-C10:0)
	Species dCMP_p @p:dCMP() #dCMP
	Species Deoxycytidine_p @p:Deoxycytidine() #Deoxycytidine
	Species Dodecanoate__n_C12_0___p @p:Dodecanoate__n_C12_0__() #Dodecanoate (n-C12:0)
	Species dGMP_p @p:dGMP() #dGMP
	Species Deoxyguanosine_p @p:Deoxyguanosine() #Deoxyguanosine
	Species Dihydroxyacetone_p @p:Dihydroxyacetone() #Dihydroxyacetone
	Species dIMP_p @p:dIMP() #dIMP
	Species Deoxyinosine_p @p:Deoxyinosine() #Deoxyinosine
	Species Dimethylsulfide_p @p:Dimethylsulfide() #Dimethyl sulfide
	Species Dimethylsulfoxide_p @p:Dimethylsulfoxide() #Dimethyl sulfoxide
	Species Dopamine_p @p:Dopamine() #Dopamine
	Species doxorubicin_p @p:doxorubicin() #doxorubicin
	Species periplasmicproteindisulfideisomeraseI__oxidized___p @p:periplasmicproteindisulfideisomeraseI__oxidized__() #periplasmic protein disulfide isomerase I (oxidized)
	Species periplasmicproteindisulfideisomeraseI__reduced___p @p:periplasmicproteindisulfideisomeraseI__reduced__() #periplasmic protein disulfide isomerase I (reduced)
	Species proteindisulfideisomeraseII__oxidized___p @p:proteindisulfideisomeraseII__oxidized__() #protein disulfide isomerase II (oxidized)
	Species proteindisulfideisomeraseII__reduced___p @p:proteindisulfideisomeraseII__reduced__() #protein disulfide isomerase II (reduced)
	Species periplasmicdisulfideisomerase_thiol_disulphideoxidase__oxidized___p @p:periplasmicdisulfideisomerase_thiol_disulphideoxidase__oxidized__() #periplasmic disulfide isomerase/thiol-disulphide oxidase (oxidized)
	Species periplasmicdisulfideisomerase_thiol_disulphideoxidase__reduced___p @p:periplasmicdisulfideisomerase_thiol_disulphideoxidase__reduced__() #periplasmic disulfide isomerase/thiol-disulphide oxidase (reduced)
	Species dTMP_p @p:dTMP() #dTMP
	Species dUMP_p @p:dUMP() #dUMP
	Species Deoxyuridine_p @p:Deoxyuridine() #Deoxyuridine
	Species __enterobacterialcommonantigen__x2undecaprenyl_diphosphate_p @p:__enterobacterialcommonantigen__x2undecaprenyl_diphosphate() #(enterobacterial common antigen)x2 undecaprenyl-diphosphate
	Species __enterobacterialcommonantigen__x3undecaprenyl_diphosphate_p @p:__enterobacterialcommonantigen__x3undecaprenyl_diphosphate() #(enterobacterial common antigen)x3 undecaprenyl-diphosphate
	Species __enterobacterialcommonantigen__x4coreoligosaccharidelipidA_p @p:__enterobacterialcommonantigen__x4coreoligosaccharidelipidA() #(enterobacterial common antigen)x4 core oligosaccharide lipid A
	Species __enterobacterialcommonantigen__x4undecaprenyl_diphosphate_p @p:__enterobacterialcommonantigen__x4undecaprenyl_diphosphate() #(enterobacterial common antigen)x4 undecaprenyl-diphosphate
	Species phosphoethanolamineKDO__2___lipid__A___p @p:phosphoethanolamineKDO__2___lipid__A__() #phosphoethanolamine KDO(2)-lipid (A)
	Species Enterochelin_p @p:Enterochelin() #Enterochelin
	Species Ethanolamine_p @p:Ethanolamine() #Ethanolamine
	Species ethanesulfonate_p @p:ethanesulfonate() #ethanesulfonate
	Species Ethanol_p @p:Ethanol() #Ethanol
	Species D_Fructose6_phosphate_p @p:D_Fructose6_phosphate() #D-Fructose 6-phosphate
	Species Formaldehyde_p @p:Formaldehyde() #Formaldehyde
	Species Fe2pl_p @p:Fe2pl() #Fe2+
	Species Fe3pl_p @p:Fe3pl() #Fe3+
	Species Fe__III__dicitrate_p @p:Fe__III__dicitrate() #Fe(III)dicitrate
	Species ferric2_3_dihydroxybenzoylserine_p @p:ferric2_3_dihydroxybenzoylserine() #ferric 2,3-dihydroxybenzoylserine
	Species Fe__III__hydroxamate_p @p:Fe__III__hydroxamate() #Fe(III)hydroxamate
	Species Fe__III__hydoxamate_unloaded_p @p:Fe__III__hydoxamate_unloaded() #Fe(III)hydoxamate, unloaded
	Species Ferrichrome_p @p:Ferrichrome() #Ferrichrome
	Species FerrichromeminusFe__III___p @p:FerrichromeminusFe__III__() #Ferrichrome minus Fe(III)
	Species Fe_enterobactin_p @p:Fe_enterobactin() #Fe-enterobactin
	Species ferroxamine_p @p:ferroxamine() #ferroxamine
	Species ferroxamineminusFe__3___p @p:ferroxamineminusFe__3__() #ferroxamine minus Fe(3)
	Species Formate_p @p:Formate() #Formate
	Species D_Fructose_p @p:D_Fructose() #D-Fructose
	Species fructoselysine_p @p:fructoselysine() #fructoselysine
	Species D_Fructuronate_p @p:D_Fructuronate() #D-Fructuronate
	Species L_Fucose_p @p:L_Fucose() #L-Fucose
	Species Fumarate_p @p:Fumarate() #Fumarate
	Species fusidicacid_p @p:fusidicacid() #fusidic acid
	Species D_Glucose1_phosphate_p @p:D_Glucose1_phosphate() #D-Glucose 1-phosphate
	Species sn_Glycero_3_phosphocholine_p @p:sn_Glycero_3_phosphocholine() #sn-Glycero-3-phosphocholine
	Species sn_Glycero_3_phosphoethanolamine_p @p:sn_Glycero_3_phosphoethanolamine() #sn-Glycero-3-phosphoethanolamine
	Species Glycerophosphoglycerol_p @p:Glycerophosphoglycerol() #Glycerophosphoglycerol
	Species sn_Glycero_3_phospho_1_inositol_p @p:sn_Glycero_3_phospho_1_inositol() #sn-Glycero-3-phospho-1-inositol
	Species Glycerophosphoserine_p @p:Glycerophosphoserine() #Glycerophosphoserine
	Species D_Glucose6_phosphate_p @p:D_Glucose6_phosphate() #D-Glucose 6-phosphate
	Species D_Galactose_p @p:D_Galactose() #D-Galactose
	Species betaD_Galactose_p @p:betaD_Galactose() #beta D-Galactose
	Species alpha_D_Galactose1_phosphate_p @p:alpha_D_Galactose1_phosphate() #alpha-D-Galactose 1-phosphate
	Species D_Galactarate_p @p:D_Galactarate() #D-Galactarate
	Species D_Galactonate_p @p:D_Galactonate() #D-Galactonate
	Species L_Galactonate_p @p:L_Galactonate() #L-Galactonate
	Species Galactitol_p @p:Galactitol() #Galactitol
	Species D_Galacturonate_p @p:D_Galacturonate() #D-Galacturonate
	Species D_Glucosamine_p @p:D_Glucosamine() #D-Glucosamine
	Species D_Glucosamine6_phosphate_p @p:D_Glucosamine6_phosphate() #D-Glucosamine 6-phosphate
	Species gamma_butyrobetaine_p @p:gamma_butyrobetaine() #gamma-butyrobetaine
	Species GDP_p @p:GDP() #GDP
	Species D_Glucose_p @p:D_Glucose() #D-Glucose
	Species D_Gluconate_p @p:D_Gluconate() #D-Gluconate
	Species D_Glucarate_p @p:D_Glucarate() #D-Glucarate
	Species D_Glucuronate_p @p:D_Glucuronate() #D-Glucuronate
	Species D_Glucuronate1_phosphate_p @p:D_Glucuronate1_phosphate() #D-Glucuronate 1-phosphate
	Species L_Glutamine_p @p:L_Glutamine() #L-Glutamine
	Species L_Glutamate_p @p:L_Glutamate() #L-Glutamate
	Species Glycine_p @p:Glycine() #Glycine
	Species D_Glyceraldehyde_p @p:D_Glyceraldehyde() #D-Glyceraldehyde
	Species Glycinebetaine_p @p:Glycinebetaine() #Glycine betaine
	Species Glycerol_p @p:Glycerol() #Glycerol
	Species __R___Glycerate_p @p:__R___Glycerate() #(R)-Glycerate
	Species Glycerol2_phosphate_p @p:Glycerol2_phosphate() #Glycerol 2-phosphate
	Species Glycerol3_phosphate_p @p:Glycerol3_phosphate() #Glycerol 3-phosphate
	Species Glycolate_p @p:Glycolate() #Glycolate
	Species GMP_p @p:GMP() #GMP
	Species Guanosine_p @p:Guanosine() #Guanosine
	Species Oxidizedglutathione_p @p:Oxidizedglutathione() #Oxidized glutathione
	Species Reducedglutathione_p @p:Reducedglutathione() #Reduced glutathione
	Species GTP_p @p:GTP() #GTP
	Species Guanine_p @p:Guanine() #Guanine
	Species Hpl_p @p:Hpl() #H+
	Species H2_p @p:H2() #H2
	Species H2O_p @p:H2O() #H2O
	Species Hydrogenperoxide_p @p:Hydrogenperoxide() #Hydrogen peroxide
	Species Hydrogensulfide_p @p:Hydrogensulfide() #Hydrogen sulfide
	Species Hexadecanoate__n_C16_0___p @p:Hexadecanoate__n_C16_0__() #Hexadecanoate (n-C16:0)
	Species Hexadecenoate__n_C16_1___p @p:Hexadecenoate__n_C16_1__() #Hexadecenoate (n-C16:1)
	Species Hg2pl_p @p:Hg2pl() #Hg2+
	Species L_Histidine_p @p:L_Histidine() #L-Histidine
	Species L_Homoserine_p @p:L_Homoserine() #L-Homoserine
	Species Hexanoate__n_C6_0___p @p:Hexanoate__n_C6_0__() #Hexanoate (n-C6:0)
	Species Hypoxanthine_p @p:Hypoxanthine() #Hypoxanthine
	Species L_Idonate_p @p:L_Idonate() #L-Idonate
	Species L_Isoleucine_p @p:L_Isoleucine() #L-Isoleucine
	Species IMP_p @p:IMP() #IMP
	Species Indole_p @p:Indole() #Indole
	Species myo_Inositol_p @p:myo_Inositol() #myo-Inositol
	Species Inosine_p @p:Inosine() #Inosine
	Species Isethionicacid_p @p:Isethionicacid() #Isethionic acid
	Species potassium_p @p:potassium() #potassium
	Species KDO__2___lipidIV__A___p @p:KDO__2___lipidIV__A__() #KDO(2)-lipid IV(A)
	Species D_Lactate_p @p:D_Lactate() #D-Lactate
	Species L_Lactate_p @p:L_Lactate() #L-Lactate
	Species Lactose_p @p:Lactose() #Lactose
	Species L_Leucine_p @p:L_Leucine() #L-Leucine
	Species KDO__2___lipid__A___p @p:KDO__2___lipid__A__() #KDO(2)-lipid (A)
	Species coldadaptedKDO__2___lipid__A___p @p:coldadaptedKDO__2___lipid__A__() #cold adapted KDO(2)-lipid (A)
	Species Lipoate_p @p:Lipoate() #Lipoate
	Species lipoprotein_p @p:lipoprotein() #lipoprotein
	Species L_Lysine_p @p:L_Lysine() #L-Lysine
	Species L_Lyxose_p @p:L_Lyxose() #L-Lyxose
	Species D_Malate_p @p:D_Malate() #D-Malate
	Species L_Malate_p @p:L_Malate() #L-Malate
	Species Maltose_p @p:Maltose() #Maltose
	Species Maltohexaose_p @p:Maltohexaose() #Maltohexaose
	Species Maltopentaose_p @p:Maltopentaose() #Maltopentaose
	Species Maltotriose_p @p:Maltotriose() #Maltotriose
	Species Maltotetraose_p @p:Maltotetraose() #Maltotetraose
	Species D_Mannose_p @p:D_Mannose() #D-Mannose
	Species D_Mannose6_phosphate_p @p:D_Mannose6_phosphate() #D-Mannose 6-phosphate
	Species s2__alpha_D_Mannosyl___D_glycerate_p @p:s2__alpha_D_Mannosyl___D_glycerate() #2(alpha-D-Mannosyl)-D-glycerate
	Species Melibiose_p @p:Melibiose() #Melibiose
	Species Methanol_p @p:Methanol() #Methanol
	Species D_Methionine_p @p:D_Methionine() #D-Methionine
	Species L_Methionine_p @p:L_Methionine() #L-Methionine
	Species L_methionine_R_sulfoxide_p @p:L_methionine_R_sulfoxide() #L-methionine-R-sulfoxide
	Species L_MethionineSulfoxide_p @p:L_MethionineSulfoxide() #L-Methionine Sulfoxide
	Species magnesium_p @p:magnesium() #magnesium
	Species minocycline_p @p:minocycline() #minocycline
	Species myo_Inositolhexakisphosphate_p @p:myo_Inositolhexakisphosphate() #myo-Inositol hexakisphosphate
	Species S_Methyl_L_methionine_p @p:S_Methyl_L_methionine() #S-Methyl-L-methionine
	Species Mn2pl_p @p:Mn2pl() #Mn2+
	Species D_Mannitol_p @p:D_Mannitol() #D-Mannitol
	Species Molybdate_p @p:Molybdate() #Molybdate
	Species methanesulfonate_p @p:methanesulfonate() #methanesulfonate
	Species twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain___p @p:twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain__() #two linked disacharide tripeptide murein units (uncrosslinked, middle of chain)
	Species twodisacharidelinkedmureinunits_tripeptidecrosslinkedtripeptide__A2pm__A2pm____middleofchain___p @p:twodisacharidelinkedmureinunits_tripeptidecrosslinkedtripeptide__A2pm__A2pm____middleofchain__() #two disacharide linked murein units, tripeptide crosslinked tripeptide (A2pm->A2pm) (middle of chain)
	Species twodisacharidelinkedmureinunits_tripeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain___p @p:twodisacharidelinkedmureinunits_tripeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__() #two disacharide linked murein units, tripeptide crosslinked tetrapeptide (A2pm->D-ala) (middle of chain)
	Species twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain___p @p:twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__() #two linked disacharide tetrapeptide and tripeptide murein units (uncrosslinked, middle of chain)
	Species twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain___p @p:twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__() #two linked disacharide tetrapeptide murein units (uncrosslinked, middle of chain)
	Species twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain___p @p:twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain__() #two disacharide linked murein units, tetrapeptide corsslinked tetrapeptide (A2pm->D-ala) (middle of chain)
	Species threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala___oneuncrosslinkedtetrapaptide____middleofchain___p @p:threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala___oneuncrosslinkedtetrapaptide____middleofchain__() #three disacharide linked murein units (tetrapeptide crosslinked tetrapeptide (A2pm->D-ala), one uncrosslinked tetrapaptide) (middle of chain)
	Species threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain___p @p:threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__() #three disacharide linked murein units (tetrapeptide crosslinked tetrapeptide (A2pm->D-ala) & tetrapeptide corsslinked tetrapeptide (A2pm->D-ala)) (middle of chain)
	Species twolinkeddisacharidepentapeptideandtripeptidemureinunits__uncrosslinked_middleofchain___p @p:twolinkeddisacharidepentapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__() #two linked disacharide pentapeptide and tripeptide murein units (uncrosslinked, middle of chain)
	Species twolinkeddisacharidepentapeptideandtetrapeptidemureinunits__uncrosslinked_middleofchain___p @p:twolinkeddisacharidepentapeptideandtetrapeptidemureinunits__uncrosslinked_middleofchain__() #two linked disacharide pentapeptide and tetrapeptide murein units (uncrosslinked, middle of chain)
	Species twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain___p @p:twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__() #two linked disacharide pentapeptide murein units (uncrosslinked, middle of chain)
	Species threelinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain___p @p:threelinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__() #three linked disacharide pentapeptide murein units (uncrosslinked, middle of chain)
	Species twodisacharidelinkedmureinunits_pentapeptidecorsslinkedtripeptide__A2pm__A2pm____middleofchain___p @p:twodisacharidelinkedmureinunits_pentapeptidecorsslinkedtripeptide__A2pm__A2pm____middleofchain__() #two disacharide linked murein units, pentapeptide corsslinked tripeptide (A2pm->A2pm) (middle of chain)
	Species twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain___p @p:twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__() #two disacharide linked murein units, pentapeptide crosslinked tetrapeptide (A2pm->D-ala) (middle of chain)
	Species threedisacharidelinkedmureinunits__pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain___p @p:threedisacharidelinkedmureinunits__pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__() #three disacharide linked murein units (pentapeptide crosslinked tetrapeptide (A2pm->D-ala) tetrapeptide corsslinked tetrapeptide (A2pm->D-ala)) (middle of chain)
	Species Nitrousoxide_p @p:Nitrousoxide() #Nitrous oxide
	Species Sodium_p @p:Sodium() #Sodium
	Species Nicotinate_p @p:Nicotinate() #Nicotinate
	Species Ammonium_p @p:Ammonium() #Ammonium
	Species nickel_p @p:nickel() #nickel
	Species NMN_p @p:NMN() #NMN
	Species Nitricoxide_p @p:Nitricoxide() #Nitric oxide
	Species Nitrite_p @p:Nitrite() #Nitrite
	Species Nitrate_p @p:Nitrate() #Nitrate
	Species novobiocin_p @p:novobiocin() #novobiocin
	Species __O16antigen__x2undecaprenyldiphosphate_p @p:__O16antigen__x2undecaprenyldiphosphate() #(O16 antigen)x2 undecaprenyl diphosphate
	Species __O16antigen__x3undecaprenyldiphosphate_p @p:__O16antigen__x3undecaprenyldiphosphate() #(O16 antigen)x3 undecaprenyl diphosphate
	Species __O16antigen__x4coreoligosaccharidelipidA_p @p:__O16antigen__x4coreoligosaccharidelipidA() #(O16 antigen)x4 core oligosaccharide lipid A
	Species __O16antigen__x4undecaprenyldiphosphate_p @p:__O16antigen__x4undecaprenyldiphosphate() #(O16 antigen)x4 undecaprenyl diphosphate
	Species O16antigenundecaprenyldiphosphate_p @p:O16antigenundecaprenyldiphosphate() #O16 antigen undecaprenyl diphosphate
	Species O2_p @p:O2() #O2
	Species Superoxideanion_p @p:Superoxideanion() #Superoxide anion
	Species octadecanoate__n_C18_0___p @p:octadecanoate__n_C18_0__() #octadecanoate (n-C18:0)
	Species octadecenoate__n_C18_1___p @p:octadecenoate__n_C18_1__() #octadecenoate (n-C18:1)
	Species octanoate__n_C8_0___p @p:octanoate__n_C8_0__() #octanoate (n-C8:0)
	Species Ornithine_p @p:Ornithine() #Ornithine
	Species Orotate_p @p:Orotate() #Orotate
	Species s1_2_didodecanoyl_sn_glycerol3_phosphate_p @p:s1_2_didodecanoyl_sn_glycerol3_phosphate() #1,2-didodecanoyl-sn-glycerol 3-phosphate
	Species s1_2_ditetradecanoyl_sn_glycerol3_phosphate_p @p:s1_2_ditetradecanoyl_sn_glycerol3_phosphate() #1,2-ditetradecanoyl-sn-glycerol 3-phosphate
	Species s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate_p @p:s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate() #1,2-ditetradec-7-enoyl-sn-glycerol 3-phosphate
	Species s1_2_dihexadecanoyl_sn_glycerol3_phosphate_p @p:s1_2_dihexadecanoyl_sn_glycerol3_phosphate() #1,2-dihexadecanoyl-sn-glycerol 3-phosphate
	Species s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate_p @p:s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate() #1,2-dihexadec-9-enoyl-sn-glycerol 3-phosphate
	Species s1_2_dioctadecanoyl_sn_glycerol3_phosphate_p @p:s1_2_dioctadecanoyl_sn_glycerol3_phosphate() #1,2-dioctadecanoyl-sn-glycerol 3-phosphate
	Species s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate_p @p:s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate() #1,2-dioctadec-11-enoyl-sn-glycerol 3-phosphate
	Species Phenylacetaldehyde_p @p:Phenylacetaldehyde() #Phenylacetaldehyde
	Species phosphatidylethanolamine__didodecanoyl_n_C12_0___p @p:phosphatidylethanolamine__didodecanoyl_n_C12_0__() #phosphatidylethanolamine (didodecanoyl, n-C12:0)
	Species phosphatidylethanolamine__ditetradecanoyl_n_C14_0___p @p:phosphatidylethanolamine__ditetradecanoyl_n_C14_0__() #phosphatidylethanolamine (ditetradecanoyl, n-C14:0)
	Species phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1___p @p:phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__() #phosphatidylethanolamine (ditetradec-7-enoyl, n-C14:1)
	Species phosphatidylethanolamine__dihexadecanoyl_n_C16_0___p @p:phosphatidylethanolamine__dihexadecanoyl_n_C16_0__() #phosphatidylethanolamine (dihexadecanoyl, n-C16:0)
	Species phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1___p @p:phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__() #phosphatidylethanolamine (dihexadec-9enoyl, n-C16:1)
	Species phosphatidylethanolamine__dioctadecanoyl_n_C18_0___p @p:phosphatidylethanolamine__dioctadecanoyl_n_C18_0__() #phosphatidylethanolamine (dioctadecanoyl, n-C18:0)
	Species phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1___p @p:phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__() #phosphatidylethanolamine (dioctadec-11-enoyl, n-C18:1)
	Species Phenethylamine_p @p:Phenethylamine() #Phenethylamine
	Species Phosphatidylglycerol__didodecanoyl_n_C12_0___p @p:Phosphatidylglycerol__didodecanoyl_n_C12_0__() #Phosphatidylglycerol (didodecanoyl, n-C12:0)
	Species Phosphatidylglycerol__ditetradecanoyl_n_C14_0___p @p:Phosphatidylglycerol__ditetradecanoyl_n_C14_0__() #Phosphatidylglycerol (ditetradecanoyl, n-C14:0)
	Species Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1___p @p:Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__() #Phosphatidylglycerol (ditetradec-7-enoyl, n-C14:1)
	Species Phosphatidylglycerol__dihexadecanoyl_n_C16_0___p @p:Phosphatidylglycerol__dihexadecanoyl_n_C16_0__() #Phosphatidylglycerol (dihexadecanoyl, n-C16:0)
	Species Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1___p @p:Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__() #Phosphatidylglycerol (dihexadec-9-enoyl, n-C16:1)
	Species Phosphatidylglycerol__dioctadecanoyl_n_C18_0___p @p:Phosphatidylglycerol__dioctadecanoyl_n_C18_0__() #Phosphatidylglycerol (dioctadecanoyl, n-C18:0)
	Species Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1___p @p:Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__() #Phosphatidylglycerol (dioctadec-11-enoyl, n-C18:1)
	Species Phosphatidylglycerophosphate__didodecanoyl_n_C12_0___p @p:Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__() #Phosphatidylglycerophosphate (didodecanoyl, n-C12:0)
	Species Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0___p @p:Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__() #Phosphatidylglycerophosphate (ditetradecanoyl, n-C14:0)
	Species Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1___p @p:Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__() #Phosphatidylglycerophosphate (ditetradec-7-enoyl, n-C14:1)
	Species Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0___p @p:Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__() #Phosphatidylglycerophosphate (dihexadecanoyl, n-C16:0)
	Species Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1___p @p:Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__() #Phosphatidylglycerophosphate (dihexadec-9-enoyl, n-C16:1)
	Species Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0___p @p:Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__() #Phosphatidylglycerophosphate (dioctadecanoyl, n-C18:0)
	Species Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1___p @p:Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__() #Phosphatidylglycerophosphate (dioctadec-11-enoyl, n-C18:1)
	Species L_Phenylalanine_p @p:L_Phenylalanine() #L-Phenylalanine
	Species Protoheme_p @p:Protoheme() #Protoheme
	Species Phosphate_p @p:Phosphate() #Phosphate
	Species __R___Pantothenate_p @p:__R___Pantothenate() #(R)-Pantothenate
	Species Propionate__n_C3_0___p @p:Propionate__n_C3_0__() #Propionate (n-C3:0)
	Species Propanal_p @p:Propanal() #Propanal
	Species Phenylpropanoate_p @p:Phenylpropanoate() #Phenylpropanoate
	Species Phosphonate_p @p:Phosphonate() #Phosphonate
	Species L_Proline_p @p:L_Proline() #L-Proline
	Species L_Prolinylglycine_p @p:L_Prolinylglycine() #L-Prolinylglycine
	Species psicoselysine_p @p:psicoselysine() #psicoselysine
	Species O_Phospho_L_serine_p @p:O_Phospho_L_serine() #O-Phospho-L-serine
	Species Putrescine_p @p:Putrescine() #Putrescine
	Species Pyridoxamine_p @p:Pyridoxamine() #Pyridoxamine
	Species Pyridoxal_p @p:Pyridoxal() #Pyridoxal
	Species Pyridoxine_p @p:Pyridoxine() #Pyridoxine
	Species Pyruvate_p @p:Pyruvate() #Pyruvate
	Species Quinate_p @p:Quinate() #Quinate
	Species alpha_D_Ribose5_phosphate_p @p:alpha_D_Ribose5_phosphate() #alpha-D-Ribose 5-phosphate
	Species rifampin_p @p:rifampin() #rifampin
	Species D_Ribose_p @p:D_Ribose() #D-Ribose
	Species L_Rhamnose_p @p:L_Rhamnose() #L-Rhamnose
	Species D_Sorbitol_p @p:D_Sorbitol() #D-Sorbitol
	Species Selenate_p @p:Selenate() #Selenate
	Species D_Serine_p @p:D_Serine() #D-Serine
	Species L_Serine_p @p:L_Serine() #L-Serine
	Species Shikimate_p @p:Shikimate() #Shikimate
	Species selenite_p @p:selenite() #selenite
	Species sulfurdioxide_p @p:sulfurdioxide() #sulfur dioxide
	Species Sulfite_p @p:Sulfite() #Sulfite
	Species Sulfate_p @p:Sulfate() #Sulfate
	Species Spermidine_p @p:Spermidine() #Spermidine
	Species Succinate_p @p:Succinate() #Succinate
	Species Sucrose_p @p:Sucrose() #Sucrose
	Species sulfoacetate_p @p:sulfoacetate() #sulfoacetate
	Species D_tartrate_p @p:D_tartrate() #D-tartrate
	Species L_tartrate_p @p:L_tartrate() #L-tartrate
	Species Taurine_p @p:Taurine() #Taurine
	Species Thiocyanate_p @p:Thiocyanate() #Thiocyanate
	Species Thiamin_p @p:Thiamin() #Thiamin
	Species L_Threonine_p @p:L_Threonine() #L-Threonine
	Species L_ThreonineO_3_phosphate_p @p:L_ThreonineO_3_phosphate() #L-Threonine O-3-phosphate
	Species Thymine_p @p:Thymine() #Thymine
	Species Thymidine_p @p:Thymidine() #Thymidine
	Species trimethylamine_p @p:trimethylamine() #trimethylamine
	Species TrimethylamineN_oxide_p @p:TrimethylamineN_oxide() #Trimethylamine N-oxide
	Species Trehalose_p @p:Trehalose() #Trehalose
	Species L_Tryptophan_p @p:L_Tryptophan() #L-Tryptophan
	Species Thiosulfate_p @p:Thiosulfate() #Thiosulfate
	Species tetradecanoate__n_C14_0___p @p:tetradecanoate__n_C14_0__() #tetradecanoate (n-C14:0)
	Species tetradecenoate__n_C14_1___p @p:tetradecenoate__n_C14_1__() #tetradecenoate (n-C14:1)
	Species tetracycline_p @p:tetracycline() #tetracycline
	Species tungstate_p @p:tungstate() #tungstate
	Species Tyramine_p @p:Tyramine() #Tyramine
	Species L_Tyrosine_p @p:L_Tyrosine() #L-Tyrosine
	Species Phosphotyrosine_p @p:Phosphotyrosine() #Phosphotyrosine
	Species undecaprenylphosphate_4_amino_4_deoxy_L_arabinose_p @p:undecaprenylphosphate_4_amino_4_deoxy_L_arabinose() #undecaprenyl phosphate-4-amino-4-deoxy-L-arabinose
	Species UDP_N_acetyl_D_glucosamine_p @p:UDP_N_acetyl_D_glucosamine() #UDP-N-acetyl-D-glucosamine
	Species Undecaprenyldiphosphate_p @p:Undecaprenyldiphosphate() #Undecaprenyl diphosphate
	Species Undecaprenylphosphate_p @p:Undecaprenylphosphate() #Undecaprenyl phosphate
	Species UDP_N_acetyl_D_galactosamine_p @p:UDP_N_acetyl_D_galactosamine() #UDP-N-acetyl-D-galactosamine
	Species UDPglucose_p @p:UDPglucose() #UDPglucose
	Species UDPgalactose_p @p:UDPgalactose() #UDPgalactose
	Species UDP_D_glucuronate_p @p:UDP_D_glucuronate() #UDP-D-glucuronate
	Species UMP_p @p:UMP() #UMP
	Species Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose_p @p:Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose() #Undecaprenyl-diphospho N-acetylglucosamine-N-acetylmannosaminuronate-N-acetamido-4,6-dideoxy-D-galactose
	Species Uracil_p @p:Uracil() #Uracil
	Species Urea_p @p:Urea() #Urea
	Species Uridine_p @p:Uridine() #Uridine
	Species L_Valine_p @p:L_Valine() #L-Valine
	Species Xanthine_p @p:Xanthine() #Xanthine
	Species Xanthosine5_phosphate_p @p:Xanthosine5_phosphate() #Xanthosine 5'-phosphate
	Species Xanthosine_p @p:Xanthosine() #Xanthosine
	Species D_Xylose_p @p:D_Xylose() #D-Xylose
	Species L_Xylulose_p @p:L_Xylulose() #L-Xylulose
	Species Zinc_p @p:Zinc() #Zinc
end observables
begin reaction rules
	R_DM_4CRSOL: p_Cresol()@c -> 0  0
	R_DM_5DRIB: s5_deoxyribose()@c -> 0  0
	R_DM_AACALD: Aminoacetaldehyde()@c -> 0  0
	R_DM_AMOB: S_Adenosyl_4_methylthio_2_oxobutanoate()@c -> 0  0
	R_DM_MTHTHF: __2R_4S___2_methyl_2_3_3_4_tetrahydroxytetrahydrofuran()@c -> 0  0
	R_DM_OXAM: Oxamate()@c -> 0  0
	R_Ec_biomass_iJO1366_WT_53p95M: phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@c + twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__()@p + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c + phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@p + twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + chorismate()@c + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p + L_Tryptophan()@c + L_Glutamate()@c + __4Fe_4S__iron_sulfurcluster()@c + nickel()@c + Malonyl_CoA()@c + Undecaprenyldiphosphate()@c + GTP()@c + Nicotinamideadeninedinucleotidephosphate()@c + H2O()@c + Thiaminediphosphate()@c + s5_Methyltetrahydrofolate()@c + bis_molybdopteringuaninedinucleotide()@c + Adenosylcobalamin()@c + s2_Demethylmenaquinol8()@c + Succinyl_CoA()@c + Ammonium()@c + L_Leucine()@c + Ubiquinol_8()@c + Enterochelin()@c + Co2pl()@c + Cu2pl()@c + Pyridoxal5_phosphate()@c + Calcium()@c + L_Asparagine()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p + L_Aspartate()@c + dCTP()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@c + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@c + CoenzymeA()@c + Fe2pl()@c + magnesium()@c + glycogen()@c + Spermidine()@c + L_Alanine()@c + Siroheme()@c + Putrescine()@c + L_Arginine()@c + s5_6_7_8_Tetrahydrofolate()@c + L_Tyrosine()@c + L_Threonine()@c + CTP()@c + L_Serine()@c + dTTP()@c + Flavinadeninedinucleotideoxidized()@c + ATP()@c + L_Glutamine()@c + Protoheme()@c + Biotin()@c + Reducedglutathione()@c + Fe3pl()@c + L_Methionine()@c + L_Lysine()@c + cardiolipin__tetraoctadec_11_enoyl_n_C18_1__()@p + S_Adenosyl_L_methionine()@c + Riboflavin()@c + Molybdate()@c + __2Fe_2S__iron_sulfurcluster()@c + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c + Acetyl_CoA()@c + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + molybdopteringuaninedinucleotide()@c + twodisacharidelinkedmureinunits_tripeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + L_Cysteine()@c + s10_Formyltetrahydrofolate()@c + twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain__()@p + dGTP()@c + cardiolipin__tetrahexadec_9_enoyl_n_C16_1__()@p + s5_10_Methylenetetrahydrofolate()@c + coreoligosaccharidelipidA()@e + threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()@p + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@c + L_Histidine()@c + L_Valine()@c + UTP()@c + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@p + potassium()@c + HemeO()@c + L_Isoleucine()@c + Sulfate()@c + Zinc()@c + Chloride()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Nicotinamideadeninedinucleotide()@c + Mn2pl()@c + L_Proline()@c + lipoate__proteinbound__()@c + Nicotinamideadeninedinucleotide_reduced()@c + L_Phenylalanine()@c + cardiolipin__tetrahexadecanoyl_n_C16_0__()@p + molybdopterincytosinedinucleotide()@c + Glycine()@c + Menaquinol8()@c + dATP()@c -> Diphosphate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_Ec_biomass_iJO1366_core_53p95M: s5_10_Methylenetetrahydrofolate()@c + L_Asparagine()@c + phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@c + L_Tryptophan()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@p + __2Fe_2S__iron_sulfurcluster()@c + Nicotinamideadeninedinucleotidephosphate()@c + S_Adenosyl_L_methionine()@c + phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@p + L_Aspartate()@c + Flavinadeninedinucleotideoxidized()@c + L_Valine()@c + UTP()@c + dCTP()@c + twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + ATP()@c + CoenzymeA()@c + L_Glutamate()@c + Fe2pl()@c + __4Fe_4S__iron_sulfurcluster()@c + KDO__2___lipidIV__A__()@e + L_Glutamine()@c + nickel()@c + magnesium()@c + Protoheme()@c + Biotin()@c + dTTP()@c + Fe3pl()@c + L_Methionine()@c + L_Lysine()@c + L_Isoleucine()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@c + dGTP()@c + H2O()@c + Sulfate()@c + Thiaminediphosphate()@c + Riboflavin()@c + Molybdate()@c + bis_molybdopteringuaninedinucleotide()@c + L_Alanine()@c + Siroheme()@c + Zinc()@c + Chloride()@c + Ammonium()@c + L_Leucine()@c + potassium()@c + Nicotinamideadeninedinucleotide()@c + L_Arginine()@c + s5_6_7_8_Tetrahydrofolate()@c + Mn2pl()@c + L_Proline()@c + L_Cysteine()@c + s10_Formyltetrahydrofolate()@c + s2_Octaprenyl_6_hydroxyphenol()@c + GTP()@c + Co2pl()@c + L_Tyrosine()@c + L_Histidine()@c + L_Phenylalanine()@c + L_Threonine()@c + CTP()@c + dATP()@c + Glycine()@c + L_Serine()@c + Cu2pl()@c + Undecaprenyldiphosphate()@c + Pyridoxal5_phosphate()@c + Calcium()@c -> Diphosphate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_EX_12ppd__R_e: __R___Propane_1_2_diol()@e -> 0  0
	R_EX_12ppd__S_e: __S___Propane_1_2_diol()@e -> 0  0
	R_EX_14glucan_e: s1_4_alpha_D_glucan()@e -> 0  0
	R_EX_15dap_e: s1_5_Diaminopentane()@e -> 0  0
	R_EX_23camp_e: s2_3_CyclicAMP()@e -> 0  0
	R_EX_23ccmp_e: s2_3_CyclicCMP()@e -> 0  0
	R_EX_23cgmp_e: s2_3_CyclicGMP()@e -> 0  0
	R_EX_23cump_e: s2_3_CyclicUMP()@e -> 0  0
	R_EX_23dappa_e: s2_3_diaminopropionate()@e -> 0  0
	R_EX_26dap__M_e: meso_2_6_Diaminoheptanedioate()@e -> 0  0
	R_EX_2ddglcn_e: s2_Dehydro_3_deoxy_D_gluconate()@e -> 0  0
	R_EX_34dhpac_e: s3_4_Dihydroxyphenylacetaldehyde()@e -> 0  0
	R_EX_3amp_e: s3_AMP()@e -> 0  0
	R_EX_3cmp_e: s3_cmp()@e -> 0  0
	R_EX_3gmp_e: s3_GMP()@e -> 0  0
	R_EX_3hcinnm_e: s3_hydroxycinnamicacid()@e -> 0  0
	R_EX_3hpp_e: s3_Hydroxypropanoate()@e -> 0  0
	R_EX_3hpppn_e: s3___3_hydroxy_phenyl__propionate()@e -> 0  0
	R_EX_3ump_e: s3_UMP()@e -> 0  0
	R_EX_4abut_e: s4_Aminobutanoate()@e -> 0  0
	R_EX_4hoxpacd_e: s4_Hydroxyphenylacetaldehyde()@e -> 0  0
	R_EX_5dglcn_e: s5_Dehydro_D_gluconate()@e -> 0  0
	R_EX_5mtr_e: s5_Methylthio_D_ribose()@e -> 0  0
	R_EX_LalaDglu_e: L_alanine_D_glutamate()@e -> 0  0
	R_EX_LalaDgluMdap_e: L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@e -> 0  0
	R_EX_LalaDgluMdapDala_e: L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@e -> 0  0
	R_EX_LalaLglu_e: L_alanine_L_glutamate()@e -> 0  0
	R_EX_ac_e: Acetate()@e -> 0  0
	R_EX_acac_e: Acetoacetate()@e -> 0  0
	R_EX_acald_e: Acetaldehyde()@e -> 0  0
	R_EX_acgal_e: N_Acetyl_D_galactosamine()@e -> 0  0
	R_EX_acgal1p_e: N_Acetyl_D_galactosamine1_phosphate()@e -> 0  0
	R_EX_acgam_e: N_Acetyl_D_glucosamine()@e -> 0  0
	R_EX_acgam1p_e: N_Acetyl_D_glucosamine1_phosphate()@e -> 0  0
	R_EX_acmana_e: N_Acetyl_D_mannosamine()@e -> 0  0
	R_EX_acmum_e: N_Acetylmuramate()@e -> 0  0
	R_EX_acnam_e: N_Acetylneuraminate()@e -> 0  0
	R_EX_acolipa_e: s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA()@e -> 0  0
	R_EX_acser_e: O_Acetyl_L_serine()@e -> 0  0
	R_EX_ade_e: Adenine()@e -> 0  0
	R_EX_adn_e: Adenosine()@e -> 0  0
	R_EX_adocbl_e: Adenosylcobalamin()@e -> 0  0
	R_EX_ag_e: silver()@e -> 0  0
	R_EX_agm_e: Agmatine()@e -> 0  0
	R_EX_akg_e: s2_Oxoglutarate()@e -> 0  0
	R_EX_ala__B_e: beta_Alanine()@e -> 0  0
	R_EX_ala__D_e: D_Alanine()@e -> 0  0
	R_EX_ala__L_e: L_Alanine()@e -> 0  0
	R_EX_alaala_e: D_Alanyl_D_alanine()@e -> 0  0
	R_EX_all__D_e: D_Allose()@e -> 0  0
	R_EX_alltn_e: Allantoin()@e -> 0  0
	R_EX_amp_e: AMP()@e -> 0  0
	R_EX_anhgm_e: N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@e -> 0  0
	R_EX_arab__L_e: L_Arabinose()@e -> 0  0
	R_EX_arbt_e: Arbutin()@e -> 0  0
	R_EX_arbtn_e: aerobactinminusFe3()@e -> 0  0
	R_EX_arbtn__fe3_e: Aerobactin()@e -> 0  0
	R_EX_arg__L_e: L_Arginine()@e -> 0  0
	R_EX_ascb__L_e: L_Ascorbate()@e -> 0  0
	R_EX_asn__L_e: L_Asparagine()@e -> 0  0
	R_EX_aso3_e: arsenite()@e -> 0  0
	R_EX_asp__L_e: L_Aspartate()@e -> 0  0
	R_EX_btn_e: Biotin()@e -> 0  0
	R_EX_but_e: Butyrate__n_C4_0__()@e -> 0  0
	R_EX_butso3_e: butanesulfonate()@e -> 0  0
	R_EX_ca2_e: Calcium()@e <-> 0  0,0
	R_EX_cbi_e: Cobinamide()@e -> 0  0
	R_EX_cbl1_e: Cob__I__alamin()@e <-> 0  0,0
	R_EX_cd2_e: Cadmium()@e -> 0  0
	R_EX_cgly_e: Cys_Gly()@e -> 0  0
	R_EX_chol_e: Choline()@e -> 0  0
	R_EX_chtbs_e: N_N_diacetylchitobiose()@e -> 0  0
	R_EX_cit_e: Citrate()@e -> 0  0
	R_EX_cl_e: Chloride()@e <-> 0  0,0
	R_EX_cm_e: Chloramphenicol()@e -> 0  0
	R_EX_cmp_e: CMP()@e -> 0  0
	R_EX_co2_e: CO2()@e <-> 0  0,0
	R_EX_cobalt2_e: Co2pl()@e <-> 0  0,0
	R_EX_colipa_e: coreoligosaccharidelipidA()@e -> 0  0
	R_EX_colipap_e: coreoligosaccharidelipidAdiphosphate()@e -> 0  0
	R_EX_cpgn_e: coprogen()@e -> 0  0
	R_EX_cpgn__un_e: coprogenunloaded__noFe__III____()@e -> 0  0
	R_EX_crn_e: L_Carnitine()@e -> 0  0
	R_EX_crn__D_e: D_Carnitine()@e -> 0  0
	R_EX_csn_e: Cytosine()@e -> 0  0
	R_EX_cu_e: Cupl()@e -> 0  0
	R_EX_cu2_e: Cu2pl()@e <-> 0  0,0
	R_EX_cyan_e: Hydrogencyanide()@e -> 0  0
	R_EX_cynt_e: Cyanate()@e -> 0  0
	R_EX_cys__D_e: D_Cysteine()@e -> 0  0
	R_EX_cys__L_e: L_Cysteine()@e -> 0  0
	R_EX_cytd_e: Cytidine()@e -> 0  0
	R_EX_dad__2_e: Deoxyadenosine()@e -> 0  0
	R_EX_damp_e: dAMP()@e -> 0  0
	R_EX_dca_e: Decanoate__n_C10_0__()@e -> 0  0
	R_EX_dcmp_e: dCMP()@e -> 0  0
	R_EX_dcyt_e: Deoxycytidine()@e -> 0  0
	R_EX_ddca_e: Dodecanoate__n_C12_0__()@e -> 0  0
	R_EX_dgmp_e: dGMP()@e -> 0  0
	R_EX_dgsn_e: Deoxyguanosine()@e -> 0  0
	R_EX_dha_e: Dihydroxyacetone()@e -> 0  0
	R_EX_dimp_e: dIMP()@e -> 0  0
	R_EX_din_e: Deoxyinosine()@e -> 0  0
	R_EX_dms_e: Dimethylsulfide()@e -> 0  0
	R_EX_dmso_e: Dimethylsulfoxide()@e -> 0  0
	R_EX_dopa_e: Dopamine()@e -> 0  0
	R_EX_doxrbcn_e: doxorubicin()@e -> 0  0
	R_EX_dtmp_e: dTMP()@e -> 0  0
	R_EX_dump_e: dUMP()@e -> 0  0
	R_EX_duri_e: Deoxyuridine()@e -> 0  0
	R_EX_eca4colipa_e: __enterobacterialcommonantigen__x4coreoligosaccharidelipidA()@e -> 0  0
	R_EX_enlipa_e: phosphoethanolamineKDO__2___lipid__A__()@e -> 0  0
	R_EX_enter_e: Enterochelin()@e -> 0  0
	R_EX_etha_e: Ethanolamine()@e -> 0  0
	R_EX_ethso3_e: ethanesulfonate()@e -> 0  0
	R_EX_etoh_e: Ethanol()@e -> 0  0
	R_EX_f6p_e: D_Fructose6_phosphate()@e -> 0  0
	R_EX_fald_e: Formaldehyde()@e -> 0  0
	R_EX_fe2_e: Fe2pl()@e <-> 0  0,0
	R_EX_fe3_e: Fe3pl()@e <-> 0  0,0
	R_EX_fe3dcit_e: Fe__III__dicitrate()@e -> 0  0
	R_EX_fe3dhbzs_e: ferric2_3_dihydroxybenzoylserine()@e -> 0  0
	R_EX_fe3hox_e: Fe__III__hydroxamate()@e -> 0  0
	R_EX_fe3hox__un_e: Fe__III__hydoxamate_unloaded()@e -> 0  0
	R_EX_fecrm_e: Ferrichrome()@e -> 0  0
	R_EX_fecrm__un_e: FerrichromeminusFe__III__()@e -> 0  0
	R_EX_feenter_e: Fe_enterobactin()@e -> 0  0
	R_EX_feoxam_e: ferroxamine()@e -> 0  0
	R_EX_feoxam__un_e: ferroxamineminusFe__3__()@e -> 0  0
	R_EX_for_e: Formate()@e -> 0  0
	R_EX_fru_e: D_Fructose()@e -> 0  0
	R_EX_frulys_e: fructoselysine()@e -> 0  0
	R_EX_fruur_e: D_Fructuronate()@e -> 0  0
	R_EX_fuc__L_e: L_Fucose()@e -> 0  0
	R_EX_fum_e: Fumarate()@e -> 0  0
	R_EX_fusa_e: fusidicacid()@e -> 0  0
	R_EX_g1p_e: D_Glucose1_phosphate()@e -> 0  0
	R_EX_g3pc_e: sn_Glycero_3_phosphocholine()@e -> 0  0
	R_EX_g3pe_e: sn_Glycero_3_phosphoethanolamine()@e -> 0  0
	R_EX_g3pg_e: Glycerophosphoglycerol()@e -> 0  0
	R_EX_g3pi_e: sn_Glycero_3_phospho_1_inositol()@e -> 0  0
	R_EX_g3ps_e: Glycerophosphoserine()@e -> 0  0
	R_EX_g6p_e: D_Glucose6_phosphate()@e -> 0  0
	R_EX_gal_e: D_Galactose()@e -> 0  0
	R_EX_gal__bD_e: betaD_Galactose()@e -> 0  0
	R_EX_gal1p_e: alpha_D_Galactose1_phosphate()@e -> 0  0
	R_EX_galct__D_e: D_Galactarate()@e -> 0  0
	R_EX_galctn__D_e: D_Galactonate()@e -> 0  0
	R_EX_galctn__L_e: L_Galactonate()@e -> 0  0
	R_EX_galt_e: Galactitol()@e -> 0  0
	R_EX_galur_e: D_Galacturonate()@e -> 0  0
	R_EX_gam_e: D_Glucosamine()@e -> 0  0
	R_EX_gam6p_e: D_Glucosamine6_phosphate()@e -> 0  0
	R_EX_gbbtn_e: gamma_butyrobetaine()@e -> 0  0
	R_EX_gdp_e: GDP()@e -> 0  0
	R_EX_glc_e: D_Glucose()@e <-> 0  0,0
	R_EX_glcn_e: D_Gluconate()@e -> 0  0
	R_EX_glcr_e: D_Glucarate()@e -> 0  0
	R_EX_glcur_e: D_Glucuronate()@e -> 0  0
	R_EX_glcur1p_e: D_Glucuronate1_phosphate()@e -> 0  0
	R_EX_gln__L_e: L_Glutamine()@e -> 0  0
	R_EX_glu__L_e: L_Glutamate()@e -> 0  0
	R_EX_gly_e: Glycine()@e -> 0  0
	R_EX_glyald_e: D_Glyceraldehyde()@e -> 0  0
	R_EX_glyb_e: Glycinebetaine()@e -> 0  0
	R_EX_glyc_e: Glycerol()@e -> 0  0
	R_EX_glyc__R_e: __R___Glycerate()@e -> 0  0
	R_EX_glyc2p_e: Glycerol2_phosphate()@e -> 0  0
	R_EX_glyc3p_e: Glycerol3_phosphate()@e -> 0  0
	R_EX_glyclt_e: Glycolate()@e -> 0  0
	R_EX_gmp_e: GMP()@e -> 0  0
	R_EX_gsn_e: Guanosine()@e -> 0  0
	R_EX_gthox_e: Oxidizedglutathione()@e -> 0  0
	R_EX_gthrd_e: Reducedglutathione()@e -> 0  0
	R_EX_gtp_e: GTP()@e -> 0  0
	R_EX_gua_e: Guanine()@e -> 0  0
	R_EX_h_e: Hpl()@e <-> 0  0,0
	R_EX_h2_e: H2()@e -> 0  0
	R_EX_h2o_e: H2O()@e <-> 0  0,0
	R_EX_h2o2_e: Hydrogenperoxide()@e -> 0  0
	R_EX_h2s_e: Hydrogensulfide()@e -> 0  0
	R_EX_hacolipa_e: hepta_acylatedcoreoligosaccharidelipidA__E_coli__()@e -> 0  0
	R_EX_halipa_e: hepta_acylatedKDO__2___lipid__A__()@e -> 0  0
	R_EX_hdca_e: Hexadecanoate__n_C16_0__()@e -> 0  0
	R_EX_hdcea_e: Hexadecenoate__n_C16_1__()@e -> 0  0
	R_EX_hg2_e: Hg2pl()@e -> 0  0
	R_EX_his__L_e: L_Histidine()@e -> 0  0
	R_EX_hom__L_e: L_Homoserine()@e -> 0  0
	R_EX_hxa_e: Hexanoate__n_C6_0__()@e -> 0  0
	R_EX_hxan_e: Hypoxanthine()@e -> 0  0
	R_EX_idon__L_e: L_Idonate()@e -> 0  0
	R_EX_ile__L_e: L_Isoleucine()@e -> 0  0
	R_EX_imp_e: IMP()@e -> 0  0
	R_EX_indole_e: Indole()@e -> 0  0
	R_EX_inost_e: myo_Inositol()@e -> 0  0
	R_EX_ins_e: Inosine()@e -> 0  0
	R_EX_isetac_e: Isethionicacid()@e -> 0  0
	R_EX_k_e: potassium()@e <-> 0  0,0
	R_EX_kdo2lipid4_e: KDO__2___lipidIV__A__()@e -> 0  0
	R_EX_lac__D_e: D_Lactate()@e -> 0  0
	R_EX_lac__L_e: L_Lactate()@e -> 0  0
	R_EX_lcts_e: Lactose()@e -> 0  0
	R_EX_leu__L_e: L_Leucine()@e -> 0  0
	R_EX_lipa_e: KDO__2___lipid__A__()@e -> 0  0
	R_EX_lipa_cold_e: coldadaptedKDO__2___lipid__A__()@e -> 0  0
	R_EX_lipoate_e: Lipoate()@e -> 0  0
	R_EX_lys__L_e: L_Lysine()@e -> 0  0
	R_EX_lyx__L_e: L_Lyxose()@e -> 0  0
	R_EX_mal__D_e: D_Malate()@e -> 0  0
	R_EX_mal__L_e: L_Malate()@e -> 0  0
	R_EX_malt_e: Maltose()@e -> 0  0
	R_EX_malthx_e: Maltohexaose()@e -> 0  0
	R_EX_maltpt_e: Maltopentaose()@e -> 0  0
	R_EX_malttr_e: Maltotriose()@e -> 0  0
	R_EX_maltttr_e: Maltotetraose()@e -> 0  0
	R_EX_man_e: D_Mannose()@e -> 0  0
	R_EX_man6p_e: D_Mannose6_phosphate()@e -> 0  0
	R_EX_manglyc_e: s2__alpha_D_Mannosyl___D_glycerate()@e -> 0  0
	R_EX_melib_e: Melibiose()@e -> 0  0
	R_EX_meoh_e: Methanol()@e -> 0  0
	R_EX_met__D_e: D_Methionine()@e -> 0  0
	R_EX_met__L_e: L_Methionine()@e -> 0  0
	R_EX_metsox__R__L_e: L_methionine_R_sulfoxide()@e -> 0  0
	R_EX_metsox__S__L_e: L_MethionineSulfoxide()@e -> 0  0
	R_EX_mg2_e: magnesium()@e <-> 0  0,0
	R_EX_mincyc_e: minocycline()@e -> 0  0
	R_EX_minohp_e: myo_Inositolhexakisphosphate()@e -> 0  0
	R_EX_mmet_e: S_Methyl_L_methionine()@e -> 0  0
	R_EX_mn2_e: Mn2pl()@e <-> 0  0,0
	R_EX_mnl_e: D_Mannitol()@e -> 0  0
	R_EX_mobd_e: Molybdate()@e <-> 0  0,0
	R_EX_mso3_e: methanesulfonate()@e -> 0  0
	R_EX_n2o_e: Nitrousoxide()@e -> 0  0
	R_EX_na1_e: Sodium()@e <-> 0  0,0
	R_EX_nac_e: Nicotinate()@e -> 0  0
	R_EX_nh4_e: Ammonium()@e <-> 0  0,0
	R_EX_ni2_e: nickel()@e <-> 0  0,0
	R_EX_nmn_e: NMN()@e -> 0  0
	R_EX_no_e: Nitricoxide()@e -> 0  0
	R_EX_no2_e: Nitrite()@e -> 0  0
	R_EX_no3_e: Nitrate()@e -> 0  0
	R_EX_novbcn_e: novobiocin()@e -> 0  0
	R_EX_o16a4colipa_e: __O16antigen__x4coreoligosaccharidelipidA()@e -> 0  0
	R_EX_o2_e: O2()@e <-> 0  0,0
	R_EX_o2s_e: Superoxideanion()@e -> 0  0
	R_EX_ocdca_e: octadecanoate__n_C18_0__()@e -> 0  0
	R_EX_ocdcea_e: octadecenoate__n_C18_1__()@e -> 0  0
	R_EX_octa_e: octanoate__n_C8_0__()@e -> 0  0
	R_EX_orn_e: Ornithine()@e -> 0  0
	R_EX_orot_e: Orotate()@e -> 0  0
	R_EX_pacald_e: Phenylacetaldehyde()@e -> 0  0
	R_EX_peamn_e: Phenethylamine()@e -> 0  0
	R_EX_phe__L_e: L_Phenylalanine()@e -> 0  0
	R_EX_pheme_e: Protoheme()@e -> 0  0
	R_EX_pi_e: Phosphate()@e <-> 0  0,0
	R_EX_pnto__R_e: __R___Pantothenate()@e -> 0  0
	R_EX_ppa_e: Propionate__n_C3_0__()@e -> 0  0
	R_EX_ppal_e: Propanal()@e -> 0  0
	R_EX_pppn_e: Phenylpropanoate()@e -> 0  0
	R_EX_ppt_e: Phosphonate()@e -> 0  0
	R_EX_pro__L_e: L_Proline()@e -> 0  0
	R_EX_progly_e: L_Prolinylglycine()@e -> 0  0
	R_EX_psclys_e: psicoselysine()@e -> 0  0
	R_EX_pser__L_e: O_Phospho_L_serine()@e -> 0  0
	R_EX_ptrc_e: Putrescine()@e -> 0  0
	R_EX_pydam_e: Pyridoxamine()@e -> 0  0
	R_EX_pydx_e: Pyridoxal()@e -> 0  0
	R_EX_pydxn_e: Pyridoxine()@e -> 0  0
	R_EX_pyr_e: Pyruvate()@e -> 0  0
	R_EX_quin_e: Quinate()@e -> 0  0
	R_EX_r5p_e: alpha_D_Ribose5_phosphate()@e -> 0  0
	R_EX_rfamp_e: rifampin()@e -> 0  0
	R_EX_rib__D_e: D_Ribose()@e -> 0  0
	R_EX_rmn_e: L_Rhamnose()@e -> 0  0
	R_EX_sbt__D_e: D_Sorbitol()@e -> 0  0
	R_EX_sel_e: Selenate()@e <-> 0  0,0
	R_EX_ser__D_e: D_Serine()@e -> 0  0
	R_EX_ser__L_e: L_Serine()@e -> 0  0
	R_EX_skm_e: Shikimate()@e -> 0  0
	R_EX_slnt_e: selenite()@e <-> 0  0,0
	R_EX_so2_e: sulfurdioxide()@e -> 0  0
	R_EX_so3_e: Sulfite()@e -> 0  0
	R_EX_so4_e: Sulfate()@e <-> 0  0,0
	R_EX_spmd_e: Spermidine()@e -> 0  0
	R_EX_succ_e: Succinate()@e -> 0  0
	R_EX_sucr_e: Sucrose()@e -> 0  0
	R_EX_sulfac_e: sulfoacetate()@e -> 0  0
	R_EX_tartr__D_e: D_tartrate()@e -> 0  0
	R_EX_tartr__L_e: L_tartrate()@e -> 0  0
	R_EX_taur_e: Taurine()@e -> 0  0
	R_EX_tcynt_e: Thiocyanate()@e -> 0  0
	R_EX_thm_e: Thiamin()@e -> 0  0
	R_EX_thr__L_e: L_Threonine()@e -> 0  0
	R_EX_thrp_e: L_ThreonineO_3_phosphate()@e -> 0  0
	R_EX_thym_e: Thymine()@e -> 0  0
	R_EX_thymd_e: Thymidine()@e -> 0  0
	R_EX_tma_e: trimethylamine()@e -> 0  0
	R_EX_tmao_e: TrimethylamineN_oxide()@e -> 0  0
	R_EX_tre_e: Trehalose()@e -> 0  0
	R_EX_trp__L_e: L_Tryptophan()@e -> 0  0
	R_EX_tsul_e: Thiosulfate()@e -> 0  0
	R_EX_ttdca_e: tetradecanoate__n_C14_0__()@e -> 0  0
	R_EX_ttdcea_e: tetradecenoate__n_C14_1__()@e -> 0  0
	R_EX_ttrcyc_e: tetracycline()@e -> 0  0
	R_EX_tungs_e: tungstate()@e <-> 0  0,0
	R_EX_tym_e: Tyramine()@e -> 0  0
	R_EX_tyr__L_e: L_Tyrosine()@e -> 0  0
	R_EX_tyrp_e: Phosphotyrosine()@e -> 0  0
	R_EX_uacgam_e: UDP_N_acetyl_D_glucosamine()@e -> 0  0
	R_EX_udpacgal_e: UDP_N_acetyl_D_galactosamine()@e -> 0  0
	R_EX_udpg_e: UDPglucose()@e -> 0  0
	R_EX_udpgal_e: UDPgalactose()@e -> 0  0
	R_EX_udpglcur_e: UDP_D_glucuronate()@e -> 0  0
	R_EX_ump_e: UMP()@e -> 0  0
	R_EX_ura_e: Uracil()@e -> 0  0
	R_EX_urea_e: Urea()@e -> 0  0
	R_EX_uri_e: Uridine()@e -> 0  0
	R_EX_val__L_e: L_Valine()@e -> 0  0
	R_EX_xan_e: Xanthine()@e -> 0  0
	R_EX_xmp_e: Xanthosine5_phosphate()@e -> 0  0
	R_EX_xtsn_e: Xanthosine()@e -> 0  0
	R_EX_xyl__D_e: D_Xylose()@e -> 0  0
	R_EX_xylu__L_e: L_Xylulose()@e -> 0  0
	R_EX_zn2_e: Zinc()@e <-> 0  0,0
	R_12DGR120tipp: s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__()@p -> s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__()@c 0
	R_12DGR140tipp: s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__()@p -> s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__()@c 0
	R_12DGR141tipp: s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__()@p -> s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__()@c 0
	R_12DGR160tipp: s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__()@p -> s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__()@c 0
	R_12DGR161tipp: s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()@p -> s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()@c 0
	R_12DGR180tipp: s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__()@p -> s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__()@c 0
	R_12DGR181tipp: s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()@p -> s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()@c 0
	R_12PPDRtex: __R___Propane_1_2_diol()@e <-> __R___Propane_1_2_diol()@p 0,0
	R_12PPDRtpp: __R___Propane_1_2_diol()@p <-> __R___Propane_1_2_diol()@c 0,0
	R_12PPDStex: __S___Propane_1_2_diol()@e <-> __S___Propane_1_2_diol()@p 0,0
	R_12PPDStpp: __S___Propane_1_2_diol()@p <-> __S___Propane_1_2_diol()@c 0,0
	R_14GLUCANabcpp: H2O()@c + ATP()@c + s1_4_alpha_D_glucan()@p -> Phosphate()@c + Hpl()@c + ADP()@c + s1_4_alpha_D_glucan()@c 0
	R_14GLUCANtexi: s1_4_alpha_D_glucan()@e -> s1_4_alpha_D_glucan()@p 0
	R_23CAMPtex: s2_3_CyclicAMP()@e <-> s2_3_CyclicAMP()@p 0,0
	R_23CCMPtex: s2_3_CyclicCMP()@e <-> s2_3_CyclicCMP()@p 0,0
	R_23CGMPtex: s2_3_CyclicGMP()@e <-> s2_3_CyclicGMP()@p 0,0
	R_23CUMPtex: s2_3_CyclicUMP()@e <-> s2_3_CyclicUMP()@p 0,0
	R_23DAPPAt2pp: Hpl()@p + s2_3_diaminopropionate()@p -> Hpl()@c + s2_3_diaminopropionate()@c 0
	R_23DAPPAtex: s2_3_diaminopropionate()@e <-> s2_3_diaminopropionate()@p 0,0
	R_23PDE2pp: s2_3_CyclicUMP()@p + H2O()@p -> Hpl()@p + s3_UMP()@p 0
	R_23PDE4pp: H2O()@p + s2_3_CyclicCMP()@p -> Hpl()@p + s3_cmp()@p 0
	R_23PDE7pp: H2O()@p + s2_3_CyclicAMP()@p -> Hpl()@p + s3_AMP()@p 0
	R_23PDE9pp: H2O()@p + s2_3_CyclicGMP()@p -> Hpl()@p + s3_GMP()@p 0
	R_26DAHtex: meso_2_6_Diaminoheptanedioate()@e <-> meso_2_6_Diaminoheptanedioate()@p 0,0
	R_2AGPA120tipp: s2_dodecanoyl_sn_glycerol3_phosphate()@p -> s2_dodecanoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPA140tipp: s2_tetradecanoyl_sn_glycerol3_phosphate()@p -> s2_tetradecanoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPA141tipp: s2_tetradec_7_enoyl_sn_glycerol3_phosphate()@p -> s2_tetradec_7_enoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPA160tipp: s2_hexadecanoyl_sn_glycerol3_phosphate()@p -> s2_hexadecanoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPA161tipp: s2_hexadec_9_enoyl_sn_glycerol3_phosphate()@p -> s2_hexadec_9_enoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPA180tipp: s2_octadecanoyl_sn_glycerol3_phosphate()@p -> s2_octadecanoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPA181tipp: s2_octadec_11_enoyl_sn_glycerol3_phosphate()@p -> s2_octadec_11_enoyl_sn_glycerol3_phosphate()@c 0
	R_2AGPE120tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@c 0
	R_2AGPE140tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@c 0
	R_2AGPE141tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@c 0
	R_2AGPE160tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@c 0
	R_2AGPE161tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@c 0
	R_2AGPE180tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@c 0
	R_2AGPE181tipp: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@c 0
	R_2AGPEAT120: ATP()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@c + Dodecanoate__n_C12_0__()@c -> Diphosphate()@c + phosphatidylethanolamine__didodecanoyl_n_C12_0__()@c + AMP()@c 0
	R_2AGPEAT140: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@c + tetradecanoate__n_C14_0__()@c + ATP()@c -> Diphosphate()@c + phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()@c + AMP()@c 0
	R_2AGPEAT141: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@c + ATP()@c + tetradecenoate__n_C14_1__()@c -> phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()@c + Diphosphate()@c + AMP()@c 0
	R_2AGPEAT160: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@c + Hexadecanoate__n_C16_0__()@c + ATP()@c -> Diphosphate()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@c + AMP()@c 0
	R_2AGPEAT161: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@c + ATP()@c + Hexadecenoate__n_C16_1__()@c -> Diphosphate()@c + phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@c + AMP()@c 0
	R_2AGPEAT180: octadecanoate__n_C18_0__()@c + ATP()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@c -> Diphosphate()@c + phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()@c + AMP()@c 0
	R_2AGPEAT181: octadecenoate__n_C18_1__()@c + ATP()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@c -> Diphosphate()@c + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@c + AMP()@c 0
	R_2AGPG120tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@c 0
	R_2AGPG140tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@c 0
	R_2AGPG141tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@c 0
	R_2AGPG160tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@c 0
	R_2AGPG161tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@c 0
	R_2AGPG180tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@c 0
	R_2AGPG181tipp: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@c 0
	R_2AGPGAT120: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@c + ATP()@c + Dodecanoate__n_C12_0__()@c -> Diphosphate()@c + Phosphatidylglycerol__didodecanoyl_n_C12_0__()@c + AMP()@c 0
	R_2AGPGAT140: ATP()@c + tetradecanoate__n_C14_0__()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@c -> Diphosphate()@c + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@c + AMP()@c 0
	R_2AGPGAT141: ATP()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@c + tetradecenoate__n_C14_1__()@c -> Diphosphate()@c + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@c + AMP()@c 0
	R_2AGPGAT160: Hexadecanoate__n_C16_0__()@c + ATP()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@c -> Diphosphate()@c + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@c + AMP()@c 0
	R_2AGPGAT161: ATP()@c + Hexadecenoate__n_C16_1__()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@c -> Diphosphate()@c + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c + AMP()@c 0
	R_2AGPGAT180: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@c + octadecanoate__n_C18_0__()@c + ATP()@c -> Diphosphate()@c + Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@c + AMP()@c 0
	R_2AGPGAT181: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@c + octadecenoate__n_C18_1__()@c + ATP()@c -> Diphosphate()@c + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c + AMP()@c 0
	R_2DGULRGx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s2_Dehydro_L_gulonate()@c -> D_Gluconate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_2DGULRGy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_Dehydro_L_gulonate()@c -> D_Gluconate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_2DGULRx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s2_Dehydro_L_gulonate()@c -> L_Idonate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_2DGULRy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_Dehydro_L_gulonate()@c -> L_Idonate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_2MAHMP: H2O()@c + s2_Methyl_4_amino_5_hydroxymethylpyrimidinediphosphate()@c -> Phosphate()@c + Hpl()@c + s4_Amino_2_methyl_5_phosphomethylpyrimidine()@c 0
	R_34dhpactex: s3_4_Dihydroxyphenylacetaldehyde()@e <-> s3_4_Dihydroxyphenylacetaldehyde()@p 0,0
	R_3AMACHYD: H2O()@c + Hpl()@c + s3_Aminoacrylate()@c -> Malonatesemialdehyde()@c + Ammonium()@c 0
	R_3AMPtex: s3_AMP()@e <-> s3_AMP()@p 0,0
	R_3CMPtex: s3_cmp()@e <-> s3_cmp()@p 0,0
	R_3GMPtex: s3_GMP()@e <-> s3_GMP()@p 0,0
	R_3HAD100: __R___3_Hydroxydecanoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_Dec_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD120: __R___3_Hydroxydodecanoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_Dodec_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD121: __R___3_hydroxy_cis_dodec_5_enoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_3_cis_5_dodecenoyl___acyl_carrierprotein__()@c 0
	R_3HAD140: __R___3_Hydroxytetradecanoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_Tetradec_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD141: __R___3_hydroxy_cis_myristol_7_eoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_3_cis_7_myristoleoyl___acyl_carrierprotein__()@c 0
	R_3HAD160: R_3_hydroxypalmitoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_Hexadec_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD161: __R___3_hydroxy_cis_palm_9_eoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_3_cis_9_palmitoleoyl___acyl_carrierprotein__()@c 0
	R_3HAD180: __R___3_Hydroxyoctadecanoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_octadec_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD181: __R___3_hydroxy_cis_vacc_11_enoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_3_cis_11_vacceoyl___acyl_carrierprotein__()@c 0
	R_3HAD40: __3R___3_Hydroxyacyl___acyl_carrierprotein__()@c -> H2O()@c + But_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD60: __R___3_Hydroxyhexanoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_Hex_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HAD80: __R___3_Hydroxyoctanoyl___acyl_carrierprotein__()@c -> H2O()@c + trans_Oct_2_enoyl___acyl_carrierprotein__()@c 0
	R_3HCINNMH: Hpl()@c + O2()@c + Nicotinamideadeninedinucleotide_reduced()@c + s3_hydroxycinnamicacid()@c -> s2_3_dihydroxicinnamicacid()@c + H2O()@c + Nicotinamideadeninedinucleotide()@c 0
	R_3HPPPNH: O2()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s3___3_hydroxy_phenyl__propionate()@c -> H2O()@c + s3___2_3_Dihydroxyphenyl__propanoate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_3HPPtex: s3_Hydroxypropanoate()@e <-> s3_Hydroxypropanoate()@p 0,0
	R_3HPPtpp: Hpl()@c + s3_Hydroxypropanoate()@c -> Hpl()@p + s3_Hydroxypropanoate()@p 0
	R_3KGK: ATP()@c + s3_Dehydro_L_gulonate()@c -> Hpl()@c + ADP()@c + s3_keto_L_gulonate_6_phosphate()@c 0
	R_3NTD2pp: s3_UMP()@p + H2O()@p -> Uridine()@p + Phosphate()@p 0
	R_3NTD4pp: H2O()@p + s3_cmp()@p -> Phosphate()@p + Cytidine()@p 0
	R_3NTD7pp: H2O()@p + s3_AMP()@p -> Phosphate()@p + Adenosine()@p 0
	R_3NTD9pp: s3_GMP()@p + H2O()@p -> Phosphate()@p + Guanosine()@p 0
	R_3OAR100: s3_Oxodecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> __R___3_Hydroxydecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAR120: s3_Oxododecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> __R___3_Hydroxydodecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAR121: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_oxo_cis_dodec_5_enoyl___acyl_carrierprotein__()@c -> __R___3_hydroxy_cis_dodec_5_enoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_3OAR140: s3_Oxotetradecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> __R___3_Hydroxytetradecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAR141: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_oxo_cis_myristol_7_eoyl___acyl_carrierprotein__()@c -> Nicotinamideadeninedinucleotidephosphate()@c + __R___3_hydroxy_cis_myristol_7_eoyl___acyl_carrierprotein__()@c 0
	R_3OAR160: s3_Oxohexadecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> R_3_hydroxypalmitoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAR161: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_oxo_cis_palm_9_eoyl___acyl_carrierprotein__()@c -> __R___3_hydroxy_cis_palm_9_eoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_3OAR180: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_Oxooctadecanoyl___acyl_carrierprotein__()@c <-> __R___3_Hydroxyoctadecanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAR181: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_oxo_cis_vacc_11_enoyl___acyl_carrierprotein__()@c -> __R___3_hydroxy_cis_vacc_11_enoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_3OAR40: Acetoacetyl_ACP()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> __3R___3_Hydroxyacyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAR60: s3_Oxohexanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> Nicotinamideadeninedinucleotidephosphate()@c + __R___3_Hydroxyhexanoyl___acyl_carrierprotein__()@c 0,0
	R_3OAR80: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_Oxooctanoyl___acyl_carrierprotein__()@c <-> __R___3_Hydroxyoctanoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_3OAS100: Hpl()@c + Octanoyl_ACP__n_C8_0ACP__()@c + Malonyl___acyl_carrierprotein__()@c -> s3_Oxodecanoyl___acyl_carrierprotein__()@c + acylcarrierprotein()@c + CO2()@c 0
	R_3OAS120: Decanoyl_ACP__n_C10_0ACP__()@c + Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> s3_Oxododecanoyl___acyl_carrierprotein__()@c + acylcarrierprotein()@c + CO2()@c 0
	R_3OAS121: cis_dec_3_enoyl___acyl_carrierprotein____n_C10_1__()@c + Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + s3_oxo_cis_dodec_5_enoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OAS140: Hpl()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c + Malonyl___acyl_carrierprotein__()@c -> s3_Oxotetradecanoyl___acyl_carrierprotein__()@c + acylcarrierprotein()@c + CO2()@c 0
	R_3OAS141: Hpl()@c + Malonyl___acyl_carrierprotein__()@c + cis_dodec_5_enoyl___acyl_carrierprotein____n_C12_1__()@c -> acylcarrierprotein()@c + s3_oxo_cis_myristol_7_eoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OAS160: Hpl()@c + Myristoyl_ACP__n_C14_0ACP__()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + s3_Oxohexadecanoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OAS161: cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c + Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + s3_oxo_cis_palm_9_eoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OAS180: Hpl()@c + Palmitoyl_ACP__n_C16_0ACP__()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + s3_Oxooctadecanoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OAS181: Hpl()@c + Malonyl___acyl_carrierprotein__()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c -> acylcarrierprotein()@c + s3_oxo_cis_vacc_11_enoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OAS60: Butyryl_ACP__n_C4_0ACP__()@c + Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + CO2()@c + s3_Oxohexanoyl___acyl_carrierprotein__()@c 0
	R_3OAS80: Hexanoyl_ACP__n_C6_0ACP__()@c + Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + s3_Oxooctanoyl___acyl_carrierprotein__()@c + CO2()@c 0
	R_3OXCOAT: s3_Oxoadipyl_CoA()@c + CoenzymeA()@c -> Acetyl_CoA()@c + Succinyl_CoA()@c 0
	R_3PEPTabcpp: H2O()@c + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@p + ATP()@c -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_3PEPTtex: L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@e <-> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@p 0,0
	R_3UMPtex: s3_UMP()@e <-> s3_UMP()@p 0,0
	R_42A12BOOXpp: O2()@p + H2O()@p + Dopamine()@p -> Ammonium()@p + s3_4_Dihydroxyphenylacetaldehyde()@p + Hydrogenperoxide()@p 0
	R_4HOXPACDtex: s4_Hydroxyphenylacetaldehyde()@e <-> s4_Hydroxyphenylacetaldehyde()@p 0,0
	R_4HTHRS: H2O()@c + O_Phospho_4_hydroxy_L_threonine()@c -> Phosphate()@c + s4_Hydroxy_L_threonine()@c 0
	R_4PCP: H2O()@c + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@c -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@c + D_Alanine()@c 0
	R_4PCPpp: H2O()@p + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@p -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@p + D_Alanine()@p 0
	R_4PEPTabcpp: H2O()@c + ATP()@c + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@p -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_4PEPTtex: L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@e <-> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@p 0,0
	R_5DGLCNR: s5_Dehydro_D_gluconate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> D_Gluconate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_5DGLCNt2rpp: Hpl()@p + s5_Dehydro_D_gluconate()@p <-> s5_Dehydro_D_gluconate()@c + Hpl()@c 0,0
	R_5DGLCNtex: s5_Dehydro_D_gluconate()@e <-> s5_Dehydro_D_gluconate()@p 0,0
	R_5DOAN: H2O()@c + s5_Deoxyadenosine()@c -> Adenine()@c + s5_deoxyribose()@c 0
	R_5MTRtex: s5_Methylthio_D_ribose()@e <-> s5_Methylthio_D_ribose()@p 0,0
	R_5MTRtpp: s5_Methylthio_D_ribose()@c + Hpl()@c -> Hpl()@p + s5_Methylthio_D_ribose()@p 0
	R_A5PISO: D_Ribulose5_phosphate()@c <-> D_Arabinose5_phosphate()@c 0,0
	R_AACPS1: acylcarrierprotein()@c + tetradecanoate__n_C14_0__()@c + ATP()@c -> Diphosphate()@c + Myristoyl_ACP__n_C14_0ACP__()@c + AMP()@c 0
	R_AACPS2: acylcarrierprotein()@c + ATP()@c + tetradecenoate__n_C14_1__()@c -> Diphosphate()@c + cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c + AMP()@c 0
	R_AACPS3: acylcarrierprotein()@c + Hexadecanoate__n_C16_0__()@c + ATP()@c -> Diphosphate()@c + Palmitoyl_ACP__n_C16_0ACP__()@c + AMP()@c 0
	R_AACPS4: acylcarrierprotein()@c + ATP()@c + Hexadecenoate__n_C16_1__()@c -> Diphosphate()@c + AMP()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c 0
	R_AACPS5: acylcarrierprotein()@c + octadecenoate__n_C18_1__()@c + ATP()@c -> cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()@c + Diphosphate()@c + AMP()@c 0
	R_AACPS6: acylcarrierprotein()@c + ATP()@c + octadecanoate__n_C18_0__()@c -> Diphosphate()@c + Octadecanoyl_ACP__n_C18_0ACP__()@c + AMP()@c 0
	R_AACPS7: acylcarrierprotein()@c + ATP()@c + Dodecanoate__n_C12_0__()@c -> Diphosphate()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c + AMP()@c 0
	R_AACPS8: acylcarrierprotein()@c + ATP()@c + Decanoate__n_C10_0__()@c -> Decanoyl_ACP__n_C10_0ACP__()@c + Diphosphate()@c + AMP()@c 0
	R_AACPS9: acylcarrierprotein()@c + ATP()@c + octanoate__n_C8_0__()@c -> Diphosphate()@c + Octanoyl_ACP__n_C8_0ACP__()@c + AMP()@c 0
	R_AACTOOR: H2O()@c + Aminoacetone()@c + O2()@c -> Ammonium()@c + Methylglyoxal()@c + Hydrogenperoxide()@c 0
	R_AADDGT: Undecaprenyl_diphospho_N_acetylglucosamine_N_acetylmannosaminuronate()@c + dTDP_4_acetamido_4_6_dideoxy_D_galactose()@c -> dTDP()@c + Hpl()@c + Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@c 0
	R_AAMYL: s1_4_alpha_D_glucan()@c -> Maltohexaose()@c 0
	R_AAMYLpp: s1_4_alpha_D_glucan()@p -> Maltohexaose()@p 0
	R_AB6PGH: H2O()@c + Arbutin6_phosphate()@c -> D_Glucose6_phosphate()@c + Hydroquinone()@c 0
	R_ABTA: s4_Aminobutanoate()@c + s2_Oxoglutarate()@c -> L_Glutamate()@c + Succinicsemialdehyde()@c 0
	R_ABUTD: H2O()@c + Nicotinamideadeninedinucleotide()@c + s4_Aminobutanal()@c -> s4_Aminobutanoate()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_ABUTt2pp: Hpl()@p + s4_Aminobutanoate()@p -> s4_Aminobutanoate()@c + Hpl()@c 0
	R_ABUTtex: s4_Aminobutanoate()@e <-> s4_Aminobutanoate()@p 0,0
	R_ACACCT: Acetyl_CoA()@c + Acetoacetate()@c -> Acetate()@c + Acetoacetyl_CoA()@c 0
	R_ACACT1r: Acetyl_CoA()@c + Acetyl_CoA()@c <-> CoenzymeA()@c + Acetoacetyl_CoA()@c 0,0
	R_ACACT2r: Acetyl_CoA()@c + Butanoyl_CoA()@c <-> s3_Oxohexanoyl_CoA()@c + CoenzymeA()@c 0,0
	R_ACACT3r: Acetyl_CoA()@c + Hexanoyl_CoA__n_C6_0CoA__()@c <-> s3_Oxooctanoyl_CoA()@c + CoenzymeA()@c 0,0
	R_ACACT4r: Acetyl_CoA()@c + Octanoyl_CoA__n_C8_0CoA__()@c <-> s3_Oxodecanoyl_CoA()@c + CoenzymeA()@c 0,0
	R_ACACT5r: Acetyl_CoA()@c + Decanoyl_CoA__n_C10_0CoA__()@c <-> s3_Oxododecanoyl_CoA()@c + CoenzymeA()@c 0,0
	R_ACACT6r: Acetyl_CoA()@c + Dodecanoyl_CoA__n_C12_0CoA__()@c <-> s3_Oxotetradecanoyl_CoA()@c + CoenzymeA()@c 0,0
	R_ACACT7r: Acetyl_CoA()@c + Tetradecanoyl_CoA__n_C14_0CoA__()@c <-> s3_Oxohexadecanoyl_CoA()@c + CoenzymeA()@c 0,0
	R_ACACT8r: s3_Oxooctadecanoyl_CoA()@c + CoenzymeA()@c <-> Acetyl_CoA()@c + Palmitoyl_CoA__n_C16_0CoA__()@c 0,0
	R_ACACt2pp: Hpl()@p + Acetoacetate()@p <-> Hpl()@c + Acetoacetate()@c 0,0
	R_ACACtex: Acetoacetate()@e <-> Acetoacetate()@p 0,0
	R_ACALD: Nicotinamideadeninedinucleotide()@c + Acetaldehyde()@c + CoenzymeA()@c <-> Acetyl_CoA()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_ACALDtex: Acetaldehyde()@e <-> Acetaldehyde()@p 0,0
	R_ACALDtpp: Acetaldehyde()@p <-> Acetaldehyde()@c 0,0
	R_ACANTHAT: Acetyl_CoA()@c + Anthranilate()@c -> N_Acetylanthranilate()@c + CoenzymeA()@c 0
	R_ACBIPGT: Adenosylcobinamidephosphate()@c + Hpl()@c + GTP()@c -> Diphosphate()@c + Adenosine_GDP_cobinamide()@c 0
	R_ACCOAC: Acetyl_CoA()@c + ATP()@c + Bicarbonate()@c -> Malonyl_CoA()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_ACCOAL: Propionate__n_C3_0__()@c + ATP()@c + CoenzymeA()@c -> Propanoyl_CoA()@c + Phosphate()@c + ADP()@c 0
	R_ACGAL1PPpp: N_Acetyl_D_galactosamine1_phosphate()@p + H2O()@p -> Phosphate()@p + N_Acetyl_D_galactosamine()@p 0
	R_ACGAL1Ptex: N_Acetyl_D_galactosamine1_phosphate()@e <-> N_Acetyl_D_galactosamine1_phosphate()@p 0,0
	R_ACGALtex: N_Acetyl_D_galactosamine()@e <-> N_Acetyl_D_galactosamine()@p 0,0
	R_ACGAM1PPpp: H2O()@p + N_Acetyl_D_glucosamine1_phosphate()@p -> Phosphate()@p + N_Acetyl_D_glucosamine()@p 0
	R_ACGAM1Ptex: N_Acetyl_D_glucosamine1_phosphate()@e <-> N_Acetyl_D_glucosamine1_phosphate()@p 0,0
	R_ACGAMK: ATP()@c + N_Acetyl_D_glucosamine()@c -> Hpl()@c + ADP()@c + N_Acetyl_D_glucosamine6_phosphate()@c 0
	R_ACGAMT: Undecaprenylphosphate()@c + UDP_N_acetyl_D_glucosamine()@c -> UndecaprenyldiphosphoN_acetyl_glucosamine()@c + UMP()@c 0
	R_ACGAptspp: Phosphoenolpyruvate()@c + N_Acetyl_D_glucosamine()@p -> Pyruvate()@c + N_Acetyl_D_glucosamine6_phosphate()@c 0
	R_ACGAtex: N_Acetyl_D_glucosamine()@e <-> N_Acetyl_D_glucosamine()@p 0,0
	R_ACGK: ATP()@c + N_Acetyl_L_glutamate()@c -> ADP()@c + N_Acetyl_L_glutamyl5_phosphate()@c 0
	R_ACGS: L_Glutamate()@c + Acetyl_CoA()@c -> Hpl()@c + N_Acetyl_L_glutamate()@c + CoenzymeA()@c 0
	R_ACHBS: Pyruvate()@c + Hpl()@c + s2_Oxobutanoate()@c -> CO2()@c + __S___2_Aceto_2_hydroxybutanoate()@c 0
	R_ACKr: Acetate()@c + ATP()@c <-> Acetylphosphate()@c + ADP()@c 0,0
	R_ACLS: Pyruvate()@c + Pyruvate()@c + Hpl()@c -> CO2()@c + __S___2_Acetolactate()@c 0
	R_ACM6PH: N_acetylmuramate6_phosphate()@c + H2O()@c -> N_Acetyl_D_glucosamine6_phosphate()@c + D_Lactate()@c 0
	R_ACMAMUT: UndecaprenyldiphosphoN_acetyl_glucosamine()@c + UDP_N_acetyl_D_mannosaminouronate()@c -> UDP()@c + Undecaprenyl_diphospho_N_acetylglucosamine_N_acetylmannosaminuronate()@c + Hpl()@c 0
	R_ACMANAptspp: N_Acetyl_D_mannosamine()@p + Phosphoenolpyruvate()@c -> Pyruvate()@c + N_Acetyl_D_mannosamine6_phosphate()@c 0
	R_ACMANAtex: N_Acetyl_D_mannosamine()@e <-> N_Acetyl_D_mannosamine()@p 0,0
	R_ACMUMptspp: Phosphoenolpyruvate()@c + N_Acetylmuramate()@p -> Pyruvate()@c + N_acetylmuramate6_phosphate()@c 0
	R_ACMUMtex: N_Acetylmuramate()@e -> N_Acetylmuramate()@p 0
	R_ACNAMt2pp: N_Acetylneuraminate()@p + Hpl()@p -> Hpl()@c + N_Acetylneuraminate()@c 0
	R_ACNAMtex: N_Acetylneuraminate()@e <-> N_Acetylneuraminate()@p 0,0
	R_ACNML: N_Acetylneuraminate()@c -> Pyruvate()@c + N_Acetyl_D_mannosamine()@c 0
	R_ACOAD1f: Flavinadeninedinucleotideoxidized()@c + Butanoyl_CoA()@c <-> Crotonoyl_CoA()@c + Flavinadeninedinucleotidereduced()@c 0,0
	R_ACOAD2f: Hexanoyl_CoA__n_C6_0CoA__()@c + Flavinadeninedinucleotideoxidized()@c <-> Flavinadeninedinucleotidereduced()@c + trans_Hex_2_enoyl_CoA()@c 0,0
	R_ACOAD3f: Octanoyl_CoA__n_C8_0CoA__()@c + Flavinadeninedinucleotideoxidized()@c <-> trans_Oct_2_enoyl_CoA()@c + Flavinadeninedinucleotidereduced()@c 0,0
	R_ACOAD4f: Flavinadeninedinucleotideoxidized()@c + Decanoyl_CoA__n_C10_0CoA__()@c <-> Flavinadeninedinucleotidereduced()@c + trans_Dec_2_enoyl_CoA()@c 0,0
	R_ACOAD5f: Dodecanoyl_CoA__n_C12_0CoA__()@c + Flavinadeninedinucleotideoxidized()@c <-> Flavinadeninedinucleotidereduced()@c + trans_Dodec_2_enoyl_CoA()@c 0,0
	R_ACOAD6f: Tetradecanoyl_CoA__n_C14_0CoA__()@c + Flavinadeninedinucleotideoxidized()@c <-> Flavinadeninedinucleotidereduced()@c + trans_Tetradec_2_enoyl_CoA()@c 0,0
	R_ACOAD7f: Palmitoyl_CoA__n_C16_0CoA__()@c + Flavinadeninedinucleotideoxidized()@c <-> trans_Hexadec_2_enoyl_CoA()@c + Flavinadeninedinucleotidereduced()@c 0,0
	R_ACOAD8f: Flavinadeninedinucleotideoxidized()@c + Stearoyl_CoA__n_C18_0CoA__()@c <-> trans_Octadec_2_enoyl_CoA()@c + Flavinadeninedinucleotidereduced()@c 0,0
	R_ACOATA: Acetyl_CoA()@c + acylcarrierprotein()@c <-> CoenzymeA()@c + Acetyl_ACP()@c 0,0
	R_ACODA: H2O()@c + N2_Acetyl_L_ornithine()@c -> Acetate()@c + Ornithine()@c 0
	R_ACOLIPAabctex: H2O()@c + s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA()@p + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA()@e 0
	R_ACONIs: trans_Aconitate()@c <-> cis_Aconitate()@c 0,0
	R_ACONMT: trans_Aconitate()@c + S_Adenosyl_L_methionine()@c -> E_3_carboxy_2_pentenedioate6_methylester()@c + S_Adenosyl_L_homocysteine()@c 0
	R_ACONTa: Citrate()@c <-> H2O()@c + cis_Aconitate()@c 0,0
	R_ACONTb: H2O()@c + cis_Aconitate()@c <-> Isocitrate()@c 0,0
	R_ACOTA: N2_Acetyl_L_ornithine()@c + s2_Oxoglutarate()@c <-> L_Glutamate()@c + N_Acetyl_L_glutamate5_semialdehyde()@c 0,0
	R_ACPPAT120: Phosphate()@c + Hpl()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c -> acylcarrierprotein()@c + Dodecanoly_phosphate__n_C12_0__()@c 0
	R_ACPPAT140: Phosphate()@c + Hpl()@c + Myristoyl_ACP__n_C14_0ACP__()@c -> Tetradecanoyl_phosphate__n_C14_0__()@c + acylcarrierprotein()@c 0
	R_ACPPAT141: cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c + Phosphate()@c + Hpl()@c -> acylcarrierprotein()@c + Tetradecanoyl_phosphate__n_C14_1__()@c 0
	R_ACPPAT160: Phosphate()@c + Hpl()@c + Palmitoyl_ACP__n_C16_0ACP__()@c -> acylcarrierprotein()@c + Hexadecanoyl_phosphate__n_C16_0__()@c 0
	R_ACPPAT161: Phosphate()@c + Hpl()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c -> acylcarrierprotein()@c + Hexadecanoyl_phosphate__n_C16_1__()@c 0
	R_ACPPAT180: Phosphate()@c + Hpl()@c + Octadecanoyl_ACP__n_C18_0ACP__()@c -> acylcarrierprotein()@c + Octadecanoyl_phosphate__n_C18_0__()@c 0
	R_ACPPAT181: cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()@c + Phosphate()@c + Hpl()@c -> acylcarrierprotein()@c + Octadecanoyl_phosphate__n_C18_1__()@c 0
	R_ACPS1: CoenzymeA()@c + apoprotein__acylcarrierprotein__()@c -> acylcarrierprotein()@c + Hpl()@c + Adenosine3_5_bisphosphate()@c 0
	R_ACS: Acetate()@c + ATP()@c + CoenzymeA()@c -> Acetyl_CoA()@c + Diphosphate()@c + AMP()@c 0
	R_ACSERtex: O_Acetyl_L_serine()@e <-> O_Acetyl_L_serine()@p 0,0
	R_ACSERtpp: O_Acetyl_L_serine()@c -> O_Acetyl_L_serine()@p 0
	R_ACt2rpp: Hpl()@p + Acetate()@p <-> Acetate()@c + Hpl()@c 0,0
	R_ACt4pp: Sodium()@p + Acetate()@p -> Acetate()@c + Sodium()@c 0
	R_ACtex: Acetate()@e <-> Acetate()@p 0,0
	R_ADA: H2O()@c + Hpl()@c + Adenosine()@c -> Inosine()@c + Ammonium()@c 0
	R_ADCL: s4_amino_4_deoxychorismate()@c -> Pyruvate()@c + Hpl()@c + s4_Aminobenzoate()@c 0
	R_ADCS: chorismate()@c + L_Glutamine()@c -> L_Glutamate()@c + s4_amino_4_deoxychorismate()@c 0
	R_ADD: H2O()@c + Adenine()@c + Hpl()@c -> Hypoxanthine()@c + Ammonium()@c 0
	R_ADEt2rpp: Hpl()@p + Adenine()@p <-> Adenine()@c + Hpl()@c 0,0
	R_ADEtex: Adenine()@e <-> Adenine()@p 0,0
	R_ADK1: ATP()@c + AMP()@c <-> ADP()@c + ADP()@c 0,0
	R_ADK3: GTP()@c + AMP()@c <-> ADP()@c + GDP()@c 0,0
	R_ADK4: ITP()@c + AMP()@c <-> IDP()@c + ADP()@c 0,0
	R_ADMDC: Hpl()@c + S_Adenosyl_L_methionine()@c -> CO2()@c + S_Adenosylmethioninamine()@c 0
	R_ADNCYC: ATP()@c -> Diphosphate()@c + cAMP()@c 0
	R_ADNK1: ATP()@c + Adenosine()@c -> Hpl()@c + ADP()@c + AMP()@c 0
	R_ADNUC: H2O()@c + Adenosine()@c -> Adenine()@c + D_Ribose()@c 0
	R_ADNt2pp: Hpl()@p + Adenosine()@p -> Hpl()@c + Adenosine()@c 0
	R_ADNt2rpp: Hpl()@p + Adenosine()@p <-> Hpl()@c + Adenosine()@c 0,0
	R_ADNtex: Adenosine()@e <-> Adenosine()@p 0,0
	R_ADOCBIK: ATP()@c + Adenosylcobinamide()@c -> Adenosylcobinamidephosphate()@c + Hpl()@c + ADP()@c 0
	R_ADOCBLS: N1___alpha_D_ribosyl___5_6_dimethylbenzimidazole()@c + Adenosine_GDP_cobinamide()@c -> GMP()@c + Adenosylcobalamin()@c + Hpl()@c 0
	R_ADOCBLabcpp: Adenosylcobalamin()@p + H2O()@c + ATP()@c -> Adenosylcobalamin()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_ADOCBLtonex: Hpl()@p + Adenosylcobalamin()@e -> Adenosylcobalamin()@p + Hpl()@c 0
	R_ADPRDP: H2O()@c + ADPribose()@c -> alpha_D_Ribose5_phosphate()@c + Hpl()@c + Hpl()@c + AMP()@c 0
	R_ADPT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Adenine()@c -> Diphosphate()@c + AMP()@c 0
	R_ADSK: ATP()@c + Adenosine5_phosphosulfate()@c -> s3_Phosphoadenylylsulfate()@c + Hpl()@c + ADP()@c 0
	R_ADSL1r: N6___1_2_Dicarboxyethyl___AMP()@c <-> Fumarate()@c + AMP()@c 0,0
	R_ADSL2r: __S___2___5_Amino_1___5_phospho_D_ribosyl__imidazole_4_carboxamido__succinate()@c <-> Fumarate()@c + s5_Amino_1___5_Phospho_D_ribosyl__imidazole_4_carboxamide()@c 0,0
	R_ADSS: L_Aspartate()@c + GTP()@c + IMP()@c -> N6___1_2_Dicarboxyethyl___AMP()@c + Phosphate()@c + Hpl()@c + Hpl()@c + GDP()@c 0
	R_AGDC: H2O()@c + N_Acetyl_D_glucosamine6_phosphate()@c -> Acetate()@c + D_Glucosamine6_phosphate()@c 0
	R_AGM3PA: H2O()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@c -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@c 0
	R_AGM3PApp: H2O()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@p + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@p 0
	R_AGM3PH: H2O()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@c -> s1_6_anhydrous_N_Acetylmuramyl_tripeptide()@c + N_Acetyl_D_glucosamine()@c 0
	R_AGM3Pt2pp: Hpl()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@p -> Hpl()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@c 0
	R_AGM4PA: H2O()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@c -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@c + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@c 0
	R_AGM4PApp: H2O()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@p + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@p 0
	R_AGM4PCP: H2O()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@c -> D_Alanine()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@c 0
	R_AGM4PCPpp: H2O()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@p + D_Alanine()@p 0
	R_AGM4PH: H2O()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@c -> s1_6_anhydrous_N_Acetylmuramyl_tetrapeptide()@c + N_Acetyl_D_glucosamine()@c 0
	R_AGM4Pt2pp: Hpl()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p -> Hpl()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@c 0
	R_AGMH: H2O()@c + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@c -> N_Acetyl_D_glucosamine()@c + s1_6_anhydrous_N_Acetylmuramate()@c 0
	R_AGMHE: ADP_D_glycero_D_manno_heptose()@c -> ADP_L_glycero_D_manno_heptose()@c 0
	R_AGMT: Agmatine()@c + H2O()@c -> Urea()@c + Putrescine()@c 0
	R_AGMt2pp: Hpl()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@c + Hpl()@c 0
	R_AGMtex: Agmatine()@e <-> Agmatine()@p 0,0
	R_AGPAT120: Dodecanoyl_ACP__n_C12_0ACP__()@c + s1_dodecanoyl_sn_glycerol3_phosphate()@c -> acylcarrierprotein()@c + s1_2_didodecanoyl_sn_glycerol3_phosphate()@c 0
	R_AGPAT140: Myristoyl_ACP__n_C14_0ACP__()@c + s1_tetradecanoyl_sn_glycerol3_phosphate()@c -> acylcarrierprotein()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@c 0
	R_AGPAT141: cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c + s1_tetradec_7_enoyl_sn_glycerol3_phosphate()@c -> acylcarrierprotein()@c + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@c 0
	R_AGPAT160: s1_hexadecanoyl_sn_glycerol3_phosphate()@c + Palmitoyl_ACP__n_C16_0ACP__()@c -> acylcarrierprotein()@c + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@c 0
	R_AGPAT161: s1_hexadec_9_enoyl_sn_glycerol3_phosphate()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c -> acylcarrierprotein()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@c 0
	R_AGPAT180: s1_octadecanoyl_sn_glycerol3_phosphate()@c + Octadecanoyl_ACP__n_C18_0ACP__()@c -> s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@c + acylcarrierprotein()@c 0
	R_AGPAT181: cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()@c + s1_octadec_11_enoyl_sn_glycerol3_phosphate()@c -> s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@c + acylcarrierprotein()@c 0
	R_AGPR: Phosphate()@c + N_Acetyl_L_glutamate5_semialdehyde()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + N_Acetyl_L_glutamyl5_phosphate()@c 0,0
	R_AGt3: silver()@c + Hpl()@e -> silver()@e + Hpl()@c 0
	R_AHCYSNS: H2O()@c + S_Adenosyl_L_homocysteine()@c -> Adenine()@c + S_Ribosyl_L_homocysteine()@c 0
	R_AICART: s10_Formyltetrahydrofolate()@c + s5_Amino_1___5_Phospho_D_ribosyl__imidazole_4_carboxamide()@c <-> s5_Formamido_1___5_phospho_D_ribosyl__imidazole_4_carboxamide()@c + s5_6_7_8_Tetrahydrofolate()@c 0,0
	R_AIRC2: ATP()@c + s5_amino_1___5_phospho_D_ribosyl__imidazole()@c + Bicarbonate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + s5_phosphoribosyl_5_carboxyaminoimidazole()@c 0
	R_AIRC3: s5_amino_1___5_phospho_D_ribosyl__imidazole_4_carboxylate()@c <-> s5_phosphoribosyl_5_carboxyaminoimidazole()@c 0,0
	R_AKGDH: s2_Oxoglutarate()@c + Nicotinamideadeninedinucleotide()@c + CoenzymeA()@c -> CO2()@c + Nicotinamideadeninedinucleotide_reduced()@c + Succinyl_CoA()@c 0
	R_AKGt2rpp: Hpl()@p + s2_Oxoglutarate()@p <-> s2_Oxoglutarate()@c + Hpl()@c 0,0
	R_AKGtex: s2_Oxoglutarate()@e <-> s2_Oxoglutarate()@p 0,0
	R_ALAALAD: H2O()@c + D_Alanyl_D_alanine()@c -> D_Alanine()@c + D_Alanine()@c 0
	R_ALAALAabcpp: H2O()@c + ATP()@c + D_Alanyl_D_alanine()@p -> D_Alanyl_D_alanine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_ALAALAr: ATP()@c + D_Alanine()@c + D_Alanine()@c <-> D_Alanyl_D_alanine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0,0
	R_ALAALAtex: D_Alanyl_D_alanine()@e <-> D_Alanyl_D_alanine()@p 0,0
	R_ALAGLUE: L_alanine_D_glutamate()@c <-> L_alanine_L_glutamate()@c 0,0
	R_ALAR: L_Alanine()@c <-> D_Alanine()@c 0,0
	R_ALATA_D2: Pyridoxal5_phosphate()@c + D_Alanine()@c -> Pyridoxamine5_phosphate()@c + Pyruvate()@c 0
	R_ALATA_L: s2_Oxoglutarate()@c + L_Alanine()@c <-> Pyruvate()@c + L_Glutamate()@c 0,0
	R_ALATA_L2: Pyridoxal5_phosphate()@c + L_Alanine()@c -> Pyridoxamine5_phosphate()@c + Pyruvate()@c 0
	R_ALATRS: tRNA__Ala__()@c + ATP()@c + L_Alanine()@c -> Diphosphate()@c + L_Alanyl_tRNA__Ala__()@c + AMP()@c 0
	R_ALAabcpp: H2O()@c + ATP()@c + L_Alanine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Alanine()@c 0
	R_ALAt2pp: Hpl()@p + L_Alanine()@p -> Hpl()@c + L_Alanine()@c 0
	R_ALAt2rpp: Hpl()@p + L_Alanine()@p <-> Hpl()@c + L_Alanine()@c 0,0
	R_ALAt4pp: Sodium()@p + L_Alanine()@p -> Sodium()@c + L_Alanine()@c 0
	R_ALAtex: L_Alanine()@e <-> L_Alanine()@p 0,0
	R_ALCD19: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + D_Glyceraldehyde()@c <-> Glycerol()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_ALCD2x: Ethanol()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Acetaldehyde()@c 0,0
	R_ALDD19xr: H2O()@c + Nicotinamideadeninedinucleotide()@c + Phenylacetaldehyde()@c <-> Phenylaceticacid()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_ALDD2x: H2O()@c + Nicotinamideadeninedinucleotide()@c + Acetaldehyde()@c -> Acetate()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_ALDD2y: H2O()@c + Nicotinamideadeninedinucleotidephosphate()@c + Acetaldehyde()@c -> Acetate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c 0
	R_ALDD3y: H2O()@c + Nicotinamideadeninedinucleotidephosphate()@c + Propanal()@c -> Propionate__n_C3_0__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c 0
	R_ALDD4: H2O()@c + Nicotinamideadeninedinucleotide()@c + Butanal()@c -> Hpl()@c + Hpl()@c + Butyrate__n_C4_0__()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_ALLK: D_Allose()@c + ATP()@c -> ADP()@c + Hpl()@c + D_Allose6_phosphate()@c 0
	R_ALLPI: D_Allose6_phosphate()@c <-> Allulose6_phosphate()@c 0,0
	R_ALLTAMH: H2O()@c + H2O()@c + Hpl()@c + Hpl()@c + Allantoate()@c -> CO2()@c + ______Ureidoglycolate()@c + Ammonium()@c + Ammonium()@c 0
	R_ALLTN: H2O()@c + Allantoin()@c -> Hpl()@c + Allantoate()@c 0
	R_ALLTNt2rpp: Hpl()@p + Allantoin()@p <-> Allantoin()@c + Hpl()@c 0,0
	R_ALLTNtex: Allantoin()@e <-> Allantoin()@p 0,0
	R_ALLULPE: Allulose6_phosphate()@c <-> D_Fructose6_phosphate()@c 0,0
	R_ALLabcpp: H2O()@c + D_Allose()@p + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + D_Allose()@c 0
	R_ALLtex: D_Allose()@e <-> D_Allose()@p 0,0
	R_ALPATE160pp: phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@p + applipoprotein()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@p + lipoprotein()@p 0
	R_ALPATG160pp: applipoprotein()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p -> s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@p + lipoprotein()@p 0
	R_ALR2: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Methylglyoxal()@c -> Nicotinamideadeninedinucleotidephosphate()@c + Acetol()@c 0
	R_ALR4x: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Acetol()@c -> __R___Propane_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c 0
	R_ALTRH: D_Altronate()@c -> H2O()@c + s2_Dehydro_3_deoxy_D_gluconate()@c 0
	R_AM3PA: H2O()@c + s1_6_anhydrous_N_Acetylmuramyl_tripeptide()@c -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@c + s1_6_anhydrous_N_Acetylmuramate()@c 0
	R_AM4PA: H2O()@c + s1_6_anhydrous_N_Acetylmuramyl_tetrapeptide()@c -> L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@c + s1_6_anhydrous_N_Acetylmuramate()@c 0
	R_AM4PCP: H2O()@c + s1_6_anhydrous_N_Acetylmuramyl_tetrapeptide()@c -> s1_6_anhydrous_N_Acetylmuramyl_tripeptide()@c + D_Alanine()@c 0
	R_AMALT1: Maltose()@c + Maltotriose()@c -> D_Glucose()@c + Maltotetraose()@c 0
	R_AMALT2: Maltose()@c + Maltotetraose()@c -> Maltopentaose()@c + D_Glucose()@c 0
	R_AMALT3: Maltopentaose()@c + Maltose()@c -> D_Glucose()@c + Maltohexaose()@c 0
	R_AMALT4: Maltose()@c + Maltohexaose()@c -> D_Glucose()@c + Maltoheptaose()@c 0
	R_AMANAPEr: N_Acetyl_D_mannosamine6_phosphate()@c <-> N_Acetyl_D_glucosamine6_phosphate()@c 0,0
	R_AMANK: N_Acetyl_D_mannosamine()@c + ATP()@c -> Hpl()@c + ADP()@c + N_Acetyl_D_mannosamine6_phosphate()@c 0
	R_AMAOTr: S_Adenosyl_L_methionine()@c + s8_Amino_7_oxononanoate()@c <-> S_Adenosyl_4_methylthio_2_oxobutanoate()@c + s7_8_Diaminononanoate()@c 0,0
	R_AMMQLT8: s2_Demethylmenaquinol8()@c + S_Adenosyl_L_methionine()@c -> Menaquinol8()@c + Hpl()@c + S_Adenosyl_L_homocysteine()@c 0
	R_AMPMS2: H2O()@c + Nicotinamideadeninedinucleotide()@c + s5_amino_1___5_phospho_D_ribosyl__imidazole()@c -> s4_Amino_2_methyl_5_phosphomethylpyrimidine()@c + Hpl()@c + Hpl()@c + Hpl()@c + Formate()@c + Formate()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_AMPN: H2O()@c + AMP()@c -> alpha_D_Ribose5_phosphate()@c + Adenine()@c 0
	R_AMPTASECG: H2O()@c + Cys_Gly()@c -> L_Cysteine()@c + Glycine()@c 0
	R_AMPTASEPG: H2O()@c + L_Prolinylglycine()@c -> L_Proline()@c + Glycine()@c 0
	R_AMPtex: AMP()@e <-> AMP()@p 0,0
	R_ANHGMtex: N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@e <-> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramicacid()@p 0,0
	R_ANHMK: H2O()@c + ATP()@c + s1_6_anhydrous_N_Acetylmuramate()@c -> N_acetylmuramate6_phosphate()@c + Hpl()@c + ADP()@c 0
	R_ANPRT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Anthranilate()@c -> Diphosphate()@c + N___5_Phospho_D_ribosyl__anthranilate()@c 0
	R_ANS: chorismate()@c + L_Glutamine()@c -> L_Glutamate()@c + Pyruvate()@c + Hpl()@c + Anthranilate()@c 0
	R_AOBUTDs: Hpl()@c + L_2_Amino_3_oxobutanoate()@c -> Aminoacetone()@c + CO2()@c 0
	R_AOXSr2: Pimeloyl___acyl_carrierprotein__()@c + L_Alanine()@c -> acylcarrierprotein()@c + CO2()@c + s8_Amino_7_oxononanoate()@c 0
	R_AP4AH: H2O()@c + P1_P4_Bis__5_adenosyl__tetraphosphate()@c -> Hpl()@c + Hpl()@c + ADP()@c + ADP()@c 0
	R_AP4AS: Hpl()@c + ATP()@c + ATP()@c -> Diphosphate()@c + P1_P4_Bis__5_adenosyl__tetraphosphate()@c 0
	R_AP5AH: H2O()@c + P1_P5_Bis__5_adenosyl__pentaphosphate()@c -> ADP()@c + Hpl()@c + Hpl()@c + ATP()@c 0
	R_APCS: S_Adenosylmethioninamine()@c + s1_5_Diaminopentane()@c -> Hpl()@c + s5_Methylthioadenosine()@c + N_3_aminopropyl_1_5_diaminopentane()@c 0
	R_APG3PAT120: Glycerol3_phosphate()@c + Dodecanoly_phosphate__n_C12_0__()@c -> Phosphate()@c + Hpl()@c + s1_dodecanoyl_sn_glycerol3_phosphate()@c 0
	R_APG3PAT140: Tetradecanoyl_phosphate__n_C14_0__()@c + Glycerol3_phosphate()@c -> Phosphate()@c + Hpl()@c + s1_tetradecanoyl_sn_glycerol3_phosphate()@c 0
	R_APG3PAT141: Glycerol3_phosphate()@c + Tetradecanoyl_phosphate__n_C14_1__()@c -> Phosphate()@c + Hpl()@c + s1_tetradec_7_enoyl_sn_glycerol3_phosphate()@c 0
	R_APG3PAT160: Glycerol3_phosphate()@c + Hexadecanoyl_phosphate__n_C16_0__()@c -> Phosphate()@c + Hpl()@c + s1_hexadecanoyl_sn_glycerol3_phosphate()@c 0
	R_APG3PAT161: Glycerol3_phosphate()@c + Hexadecanoyl_phosphate__n_C16_1__()@c -> Phosphate()@c + s1_hexadec_9_enoyl_sn_glycerol3_phosphate()@c + Hpl()@c 0
	R_APG3PAT180: Glycerol3_phosphate()@c + Octadecanoyl_phosphate__n_C18_0__()@c -> s1_octadecanoyl_sn_glycerol3_phosphate()@c + Phosphate()@c + Hpl()@c 0
	R_APG3PAT181: Glycerol3_phosphate()@c + Octadecanoyl_phosphate__n_C18_1__()@c -> Phosphate()@c + s1_octadec_11_enoyl_sn_glycerol3_phosphate()@c + Hpl()@c 0
	R_APH120: H2O()@c + Dodecanoly_phosphate__n_C12_0__()@c -> Phosphate()@c + Hpl()@c + Hpl()@c + Dodecanoate__n_C12_0__()@c 0
	R_APH140: H2O()@c + Tetradecanoyl_phosphate__n_C14_0__()@c -> Phosphate()@c + Hpl()@c + Hpl()@c + tetradecanoate__n_C14_0__()@c 0
	R_APH141: H2O()@c + Tetradecanoyl_phosphate__n_C14_1__()@c -> Phosphate()@c + Hpl()@c + Hpl()@c + tetradecenoate__n_C14_1__()@c 0
	R_APH160: H2O()@c + Hexadecanoyl_phosphate__n_C16_0__()@c -> Phosphate()@c + Hexadecanoate__n_C16_0__()@c + Hpl()@c + Hpl()@c 0
	R_APH161: H2O()@c + Hexadecanoyl_phosphate__n_C16_1__()@c -> Phosphate()@c + Hpl()@c + Hpl()@c + Hexadecenoate__n_C16_1__()@c 0
	R_APH180: H2O()@c + Octadecanoyl_phosphate__n_C18_0__()@c -> Phosphate()@c + Hpl()@c + Hpl()@c + octadecanoate__n_C18_0__()@c 0
	R_APH181: H2O()@c + Octadecanoyl_phosphate__n_C18_1__()@c -> Phosphate()@c + octadecenoate__n_C18_1__()@c + Hpl()@c + Hpl()@c 0
	R_APPLDHr: Aminoacetone()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> Nicotinamideadeninedinucleotide()@c + s1_Aminopropan_2_ol()@c 0,0
	R_APRAUR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s5_Amino_6___5_phosphoribosylamino__uracil()@c -> Nicotinamideadeninedinucleotidephosphate()@c + s5_Amino_6___5_phosphoribitylamino__uracil()@c 0
	R_ARAI: L_Arabinose()@c <-> L_Ribulose()@c 0,0
	R_ARBTNR1: Aerobactin()@c + Aerobactin()@c + Flavinadeninedinucleotidereduced()@c -> aerobactinminusFe3()@c + aerobactinminusFe3()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_ARBTNR2: Aerobactin()@c + Aerobactin()@c + ReducedFMN()@c -> aerobactinminusFe3()@c + aerobactinminusFe3()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + FMN()@c 0
	R_ARBTNR3: Aerobactin()@c + Aerobactin()@c + Reducedriboflavin()@c -> aerobactinminusFe3()@c + aerobactinminusFe3()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Riboflavin()@c 0
	R_ARBTNabcpp: H2O()@c + Aerobactin()@p + ATP()@c -> Aerobactin()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_ARBTNexs: Fe3pl()@e + aerobactinminusFe3()@e -> Aerobactin()@e 0
	R_ARBTNtex: Hpl()@p + aerobactinminusFe3()@p -> Hpl()@c + aerobactinminusFe3()@e 0
	R_ARBTNtonex: Hpl()@p + Aerobactin()@e -> Aerobactin()@p + Hpl()@c 0
	R_ARBTNtpp: Hpl()@p + aerobactinminusFe3()@c -> Hpl()@c + aerobactinminusFe3()@p 0
	R_ARBTptspp: Phosphoenolpyruvate()@c + Arbutin()@p -> Pyruvate()@c + Arbutin6_phosphate()@c 0
	R_ARBTtex: Arbutin()@e -> Arbutin()@p 0
	R_ARBabcpp: H2O()@c + ATP()@c + L_Arabinose()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Arabinose()@c 0
	R_ARBt2rpp: Hpl()@p + L_Arabinose()@p <-> Hpl()@c + L_Arabinose()@c 0,0
	R_ARBt3ipp: Hpl()@p + L_Arabinose()@c -> Hpl()@c + L_Arabinose()@p 0
	R_ARBtex: L_Arabinose()@e <-> L_Arabinose()@p 0,0
	R_ARGAGMt7pp: Agmatine()@c + L_Arginine()@p <-> Agmatine()@p + L_Arginine()@c 0,0
	R_ARGDC: Hpl()@c + L_Arginine()@c -> Agmatine()@c + CO2()@c 0
	R_ARGDCpp: Hpl()@p + L_Arginine()@p -> CO2()@p + Agmatine()@p 0
	R_ARGORNt7pp: L_Arginine()@p + Ornithine()@c <-> Ornithine()@p + L_Arginine()@c 0,0
	R_ARGSL: N__omega_____L_Arginino__succinate()@c <-> Fumarate()@c + L_Arginine()@c 0,0
	R_ARGSS: L_Citrulline()@c + L_Aspartate()@c + ATP()@c -> Diphosphate()@c + Hpl()@c + N__omega_____L_Arginino__succinate()@c + AMP()@c 0
	R_ARGTRS: ATP()@c + L_Arginine()@c + tRNA__Arg__()@c -> Diphosphate()@c + L_Arginyl_tRNA__Arg__()@c + AMP()@c 0
	R_ARGabcpp: H2O()@c + ATP()@c + L_Arginine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Arginine()@c 0
	R_ARGt3pp: Hpl()@p + L_Arginine()@c -> Hpl()@c + L_Arginine()@p 0
	R_ARGtex: L_Arginine()@e <-> L_Arginine()@p 0,0
	R_ASAD: Phosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c + L_Aspartate4_semialdehyde()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s4_Phospho_L_aspartate()@c 0,0
	R_ASCBPL: H2O()@c + L_ascorbate_6_phosphate()@c -> Hpl()@c + s3_keto_L_gulonate_6_phosphate()@c 0
	R_ASCBptspp: L_Ascorbate()@p + Phosphoenolpyruvate()@c -> Pyruvate()@c + L_ascorbate_6_phosphate()@c 0
	R_ASCBtex: L_Ascorbate()@e <-> L_Ascorbate()@p 0,0
	R_ASNN: L_Asparagine()@c + H2O()@c -> L_Aspartate()@c + Ammonium()@c 0
	R_ASNNpp: H2O()@p + L_Asparagine()@p -> L_Aspartate()@p + Ammonium()@p 0
	R_ASNS1: H2O()@c + L_Aspartate()@c + ATP()@c + L_Glutamine()@c -> L_Glutamate()@c + L_Asparagine()@c + Hpl()@c + Diphosphate()@c + AMP()@c 0
	R_ASNS2: L_Aspartate()@c + ATP()@c + Ammonium()@c -> L_Asparagine()@c + Diphosphate()@c + Hpl()@c + AMP()@c 0
	R_ASNTRS: tRNA__Asn__()@c + L_Asparagine()@c + ATP()@c -> Diphosphate()@c + L_Asparaginyl_tRNA__Asn__()@c + AMP()@c 0
	R_ASNabcpp: H2O()@c + L_Asparagine()@p + ATP()@c -> L_Asparagine()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_ASNt2rpp: Hpl()@p + L_Asparagine()@p <-> L_Asparagine()@c + Hpl()@c 0,0
	R_ASNtex: L_Asparagine()@e <-> L_Asparagine()@p 0,0
	R_ASO3t8pp: H2O()@c + ATP()@c + arsenite()@c -> Phosphate()@c + Hpl()@c + ADP()@c + arsenite()@p 0
	R_ASO3tex: arsenite()@e <-> arsenite()@p 0,0
	R_ASP1DC: L_Aspartate()@c + Hpl()@c -> CO2()@c + beta_Alanine()@c 0
	R_ASPCT: Carbamoylphosphate()@c + L_Aspartate()@c -> Phosphate()@c + Hpl()@c + N_Carbamoyl_L_aspartate()@c 0
	R_ASPK: L_Aspartate()@c + ATP()@c <-> s4_Phospho_L_aspartate()@c + ADP()@c 0,0
	R_ASPO3: L_Aspartate()@c + Ubiquinone_8()@c -> Hpl()@c + Iminoaspartate()@c + Ubiquinol_8()@c 0
	R_ASPO4: Menaquinone8()@c + L_Aspartate()@c -> Menaquinol8()@c + Hpl()@c + Iminoaspartate()@c 0
	R_ASPO5: Fumarate()@c + L_Aspartate()@c -> Hpl()@c + Succinate()@c + Iminoaspartate()@c 0
	R_ASPO6: L_Aspartate()@c + O2()@c -> Hpl()@c + Iminoaspartate()@c + Hydrogenperoxide()@c 0
	R_ASPT: L_Aspartate()@c -> Fumarate()@c + Ammonium()@c 0
	R_ASPTA: L_Aspartate()@c + s2_Oxoglutarate()@c <-> L_Glutamate()@c + Oxaloacetate()@c 0,0
	R_ASPTRS: tRNA__Asp__()@c + ATP()@c + L_Aspartate()@c -> L_Aspartyl_tRNA__Asp__()@c + Diphosphate()@c + AMP()@c 0
	R_ASPabcpp: H2O()@c + L_Aspartate()@p + ATP()@c -> Phosphate()@c + L_Aspartate()@c + Hpl()@c + ADP()@c 0
	R_ASPt2_2pp: Hpl()@p + Hpl()@p + L_Aspartate()@p -> L_Aspartate()@c + Hpl()@c + Hpl()@c 0
	R_ASPt2_3pp: Hpl()@p + Hpl()@p + Hpl()@p + L_Aspartate()@p -> L_Aspartate()@c + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_ASPt2pp: Hpl()@p + L_Aspartate()@p -> L_Aspartate()@c + Hpl()@c 0
	R_ASPt2rpp: Hpl()@p + L_Aspartate()@p <-> L_Aspartate()@c + Hpl()@c 0,0
	R_ASPtex: L_Aspartate()@e <-> L_Aspartate()@p 0,0
	R_ASR: Reducedglutathione()@c + Reducedglutathione()@c + arsenate()@c -> H2O()@c + Oxidizedglutathione()@c + arsenite()@c 0
	R_AST: Succinyl_CoA()@c + L_Arginine()@c -> N2_Succinyl_L_arginine()@c + Hpl()@c + CoenzymeA()@c 0
	R_ATHRDHr: L_Allo_threonine()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + L_2_Amino_3_oxobutanoate()@c 0,0
	R_ATPHs: H2O()@c + Hpl()@c + ATP()@c -> ITP()@c + Ammonium()@c 0
	R_ATPM: H2O()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c 0
	R_ATPPRT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + ATP()@c -> Diphosphate()@c + s1___5_Phosphoribosyl___ATP()@c 0
	R_ATPS4rpp: Hpl()@p + Hpl()@p + Hpl()@p + Hpl()@p + Phosphate()@c + ADP()@c <-> H2O()@c + Hpl()@c + Hpl()@c + Hpl()@c + ATP()@c 0,0
	R_BALAt2pp: Hpl()@p + beta_Alanine()@p -> Hpl()@c + beta_Alanine()@c 0
	R_BALAtex: beta_Alanine()@e <-> beta_Alanine()@p 0,0
	R_BETALDHx: H2O()@c + Nicotinamideadeninedinucleotide()@c + Betainealdehyde()@c -> Glycinebetaine()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_BETALDHy: H2O()@c + Nicotinamideadeninedinucleotidephosphate()@c + Betainealdehyde()@c -> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + Glycinebetaine()@c 0
	R_BMOCOS: molybdenumcofactor()@c + adenylatedmolybdopterin()@c -> Cu2pl()@c + bis_molybdenumcofactor()@c + AMP()@c 0
	R_BMOGDS1: Hpl()@c + bis_molybdenumcofactor()@c + GTP()@c -> Diphosphate()@c + bis_molybdopterinmono_guaninedinucleotide()@c 0
	R_BMOGDS2: Hpl()@c + GTP()@c + bis_molybdopterinmono_guaninedinucleotide()@c -> Diphosphate()@c + bis_molybdopteringuaninedinucleotide()@c 0
	R_BPNT: H2O()@c + Adenosine3_5_bisphosphate()@c -> Phosphate()@c + AMP()@c 0
	R_BSORx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + d_biotind_sulfoxide()@c -> H2O()@c + Biotin()@c + Nicotinamideadeninedinucleotide()@c 0
	R_BSORy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + d_biotind_sulfoxide()@c -> H2O()@c + Biotin()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_BTNt2ipp: Hpl()@p + Biotin()@p -> Biotin()@c + Hpl()@c 0
	R_BTNtex: Biotin()@e <-> Biotin()@p 0,0
	R_BTS5: Dethiobiotin()@c + __2Fe_2S__iron_sulfurcluster()@c + S_Adenosyl_L_methionine()@c -> Biotin()@c + s5_Deoxyadenosine()@c + Hpl()@c + L_Methionine()@c + __2Fe_1S__desulfuratediron_sulfurcluster()@c 0
	R_BUTCT: Acetyl_CoA()@c + Butyrate__n_C4_0__()@c -> Acetate()@c + Butanoyl_CoA()@c 0
	R_BUTSO3abcpp: H2O()@c + butanesulfonate()@p + ATP()@c -> Phosphate()@c + butanesulfonate()@c + Hpl()@c + ADP()@c 0
	R_BUTSO3tex: butanesulfonate()@e <-> butanesulfonate()@p 0,0
	R_BUTt2rpp: Hpl()@p + Butyrate__n_C4_0__()@p <-> Hpl()@c + Butyrate__n_C4_0__()@c 0,0
	R_BUTtex: Butyrate__n_C4_0__()@e <-> Butyrate__n_C4_0__()@p 0,0
	R_BWCOGDS1: Hpl()@c + tungstenbispterincofactor()@c + GTP()@c -> Diphosphate()@c + tungstenbispterincofactormono_guaninedinucleotide()@c 0
	R_BWCOGDS2: tungstenbispterincofactormono_guaninedinucleotide()@c + Hpl()@c + GTP()@c -> Diphosphate()@c + tungstenbispterincofactorguaninedinucleotide()@c 0
	R_BWCOS: tungstenbindingcofactor()@c + adenylatedmolybdopterin()@c -> Cu2pl()@c + tungstenbispterincofactor()@c + AMP()@c 0
	R_CA2t3pp: Hpl()@p + Calcium()@c -> Hpl()@c + Calcium()@p 0
	R_CA2tex: Calcium()@e <-> Calcium()@p 0,0
	R_CADVtpp: Hpl()@p + L_Lysine()@p + s1_5_Diaminopentane()@c -> Hpl()@c + s1_5_Diaminopentane()@p + L_Lysine()@c 0
	R_CAT: Hydrogenperoxide()@c + Hydrogenperoxide()@c -> H2O()@c + H2O()@c + O2()@c 0
	R_CAt6pp: Sodium()@p + Calcium()@c <-> Sodium()@c + Calcium()@p 0,0
	R_CBIAT: Cobinamide()@c + Hpl()@c + ATP()@c <-> Adenosylcobinamide()@c + Inorganictriphosphate()@c 0,0
	R_CBItonex: Hpl()@p + Cobinamide()@e -> Cobinamide()@p + Hpl()@c 0
	R_CBIuabcpp: H2O()@c + Cobinamide()@p + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Cobinamide()@c 0
	R_CBL1abcpp: H2O()@c + ATP()@c + Cob__I__alamin()@p -> Cob__I__alamin()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_CBL1tonex: Hpl()@p + Cob__I__alamin()@e -> Hpl()@c + Cob__I__alamin()@p 0
	R_CBLAT: Cob__I__alamin()@c + Hpl()@c + ATP()@c <-> Adenosylcobalamin()@c + Inorganictriphosphate()@c 0,0
	R_CBMD: Hpl()@c + Hpl()@c + Carbamate()@c -> CO2()@c + Ammonium()@c 0
	R_CBMKr: CO2()@c + ATP()@c + Ammonium()@c <-> Carbamoylphosphate()@c + Hpl()@c + Hpl()@c + ADP()@c 0,0
	R_CBPS: H2O()@c + ATP()@c + ATP()@c + L_Glutamine()@c + Bicarbonate()@c -> Carbamoylphosphate()@c + L_Glutamate()@c + Hpl()@c + Hpl()@c + ADP()@c + ADP()@c + Phosphate()@c 0
	R_CCGS: s7_deaza_7_carboxyguanine()@c + ATP()@c + Ammonium()@c -> H2O()@c + Phosphate()@c + Hpl()@c + ADP()@c + s7_cyano_7_carbaguanine()@c 0
	R_CD2abcpp: H2O()@c + ATP()@c + Cadmium()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Cadmium()@p 0
	R_CD2t3pp: Hpl()@p + Cadmium()@c -> Hpl()@c + Cadmium()@p 0
	R_CD2tex: Cadmium()@e <-> Cadmium()@p 0,0
	R_CD2tpp: Cadmium()@p -> Cadmium()@c 0
	R_CDAPPA120: H2O()@c + CDP_1_2_didodecanoylglycerol()@c -> Hpl()@c + Hpl()@c + s1_2_didodecanoyl_sn_glycerol3_phosphate()@c + CMP()@c 0
	R_CDAPPA140: H2O()@c + CDP_1_2_ditetradecanoylglycerol()@c -> Hpl()@c + Hpl()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@c + CMP()@c 0
	R_CDAPPA141: H2O()@c + CDP_1_2_ditetradec_7_enoylglycerol()@c -> Hpl()@c + Hpl()@c + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@c + CMP()@c 0
	R_CDAPPA160: H2O()@c + CDP_1_2_dihexadecanoylglycerol()@c -> Hpl()@c + Hpl()@c + CMP()@c + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@c 0
	R_CDAPPA161: H2O()@c + CDP_1_2_dihexadec_9_enoylglycerol()@c -> Hpl()@c + Hpl()@c + CMP()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@c 0
	R_CDAPPA180: H2O()@c + CDP_1_2_dioctadecanoylglycerol()@c -> s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + CMP()@c 0
	R_CDAPPA181: H2O()@c + CDP_1_2_dioctadec_11_enoylglycerol()@c -> s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + CMP()@c 0
	R_CDGR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + Hpl()@c + s7_cyano_7_carbaguanine()@c -> Nicotinamideadeninedinucleotidephosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c + s7_aminomethyl_7_deazaguanine()@c 0
	R_CDGS: Hpl()@c + s6_carboxy_5_6_7_8_tetrahydropterin()@c -> s7_deaza_7_carboxyguanine()@c + Ammonium()@c 0
	R_CDPMEK: s4___cytidine5_diphospho___2_C_methyl_D_erythritol()@c + ATP()@c -> Hpl()@c + ADP()@c + s2_phospho_4___cytidine5_diphospho___2_C_methyl_D_erythritol()@c 0
	R_CFAS160E: phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@c + S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c -> cyclopropanephosphatidylethanolamine__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo__()@c + Hpl()@c + Hpl()@c + S_Adenosyl_L_homocysteine()@c + S_Adenosyl_L_homocysteine()@c 0
	R_CFAS160G: Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c + S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + Hpl()@c + cyclopropanephosphatidylglycerol__dihexadec_9_10_cyclo_anoyl_n_C16_0cyclo__()@c + S_Adenosyl_L_homocysteine()@c + S_Adenosyl_L_homocysteine()@c 0
	R_CFAS180E: phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@c + S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + Hpl()@c + cyclopropanephosphatidylethanolamine__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo__()@c + S_Adenosyl_L_homocysteine()@c + S_Adenosyl_L_homocysteine()@c 0
	R_CFAS180G: Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c + S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c -> cyclopropanephosphatidylglycerol__dioctadec_11_12_cyclo_anoyl_n_C18_0cyclo__()@c + Hpl()@c + Hpl()@c + S_Adenosyl_L_homocysteine()@c + S_Adenosyl_L_homocysteine()@c 0
	R_CGLYabcpp: H2O()@c + Cys_Gly()@p + ATP()@c -> Cys_Gly()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_CGLYtex: Cys_Gly()@e <-> Cys_Gly()@p 0,0
	R_CHLabcpp: H2O()@c + ATP()@c + Choline()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Choline()@c 0
	R_CHLt2pp: Hpl()@p + Choline()@p -> Hpl()@c + Choline()@c 0
	R_CHLtex: Choline()@e <-> Choline()@p 0,0
	R_CHOLD: Nicotinamideadeninedinucleotide()@c + Choline()@c -> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Betainealdehyde()@c 0
	R_CHORM: chorismate()@c -> Prephenate()@c 0
	R_CHORS: s5_O___1_Carboxyvinyl___3_phosphoshikimate()@c -> Phosphate()@c + chorismate()@c 0
	R_CHRPL: chorismate()@c -> Pyruvate()@c + s4_Hydroxybenzoate()@c 0
	R_CHTBSptspp: Phosphoenolpyruvate()@c + N_N_diacetylchitobiose()@p -> Pyruvate()@c + diacetylchitobiose_6_phosphate()@c 0
	R_CHTBStex: N_N_diacetylchitobiose()@e <-> N_N_diacetylchitobiose()@p 0,0
	R_CINNDO: Hpl()@c + O2()@c + Nicotinamideadeninedinucleotide_reduced()@c + trans_Cinnamate()@c -> cis_3___3_carboxyethenyl___3_5_cyclohexadiene_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c 0
	R_CITL: Citrate()@c -> Acetate()@c + Oxaloacetate()@c 0
	R_CITt3pp: Hpl()@p + Citrate()@c -> Hpl()@c + Citrate()@p 0
	R_CITt7pp: Succinate()@c + Citrate()@p -> Citrate()@c + Succinate()@p 0
	R_CITtex: Citrate()@e <-> Citrate()@p 0,0
	R_CLIPAabctex: H2O()@c + coldadaptedKDO__2___lipid__A__()@p + ATP()@c -> coldadaptedKDO__2___lipid__A__()@e + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_CLPNH120pp: H2O()@p + cardiolipin__tetradodecanoyl_n_C12_0__()@p -> Hpl()@p + s1_2_didodecanoyl_sn_glycerol3_phosphate()@p + Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p 0
	R_CLPNH140pp: cardiolipin__tetratetradecanoyl_n_C14_0__()@p + H2O()@p -> Hpl()@p + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@p 0
	R_CLPNH141pp: H2O()@p + cardiolipin__tetratetradec_7_enoyl_n_C14_1__()@p -> Hpl()@p + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@p 0
	R_CLPNH160pp: cardiolipin__tetrahexadecanoyl_n_C16_0__()@p + H2O()@p -> Hpl()@p + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p 0
	R_CLPNH161pp: cardiolipin__tetrahexadec_9_enoyl_n_C16_1__()@p + H2O()@p -> Hpl()@p + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@p + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p 0
	R_CLPNH180pp: H2O()@p + cardiolipin__tetraoctadecanoyl_n_C18_0__()@p -> Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p + Hpl()@p + s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@p 0
	R_CLPNH181pp: H2O()@p + cardiolipin__tetraoctadec_11_enoyl_n_C18_1__()@p -> Hpl()@p + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@p 0
	R_CLPNS120pp: Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p + Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p <-> Glycerol()@p + cardiolipin__tetradodecanoyl_n_C12_0__()@p 0,0
	R_CLPNS140pp: Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p <-> Glycerol()@p + cardiolipin__tetratetradecanoyl_n_C14_0__()@p 0,0
	R_CLPNS141pp: Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p <-> Glycerol()@p + cardiolipin__tetratetradec_7_enoyl_n_C14_1__()@p 0,0
	R_CLPNS160pp: Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p <-> cardiolipin__tetrahexadecanoyl_n_C16_0__()@p + Glycerol()@p 0,0
	R_CLPNS161pp: Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p <-> Glycerol()@p + cardiolipin__tetrahexadec_9_enoyl_n_C16_1__()@p 0,0
	R_CLPNS180pp: Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p + Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p <-> Glycerol()@p + cardiolipin__tetraoctadecanoyl_n_C18_0__()@p 0,0
	R_CLPNS181pp: Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p <-> Glycerol()@p + cardiolipin__tetraoctadec_11_enoyl_n_C18_1__()@p 0,0
	R_CLt3_2pp: Hpl()@c + Chloride()@p + Chloride()@p -> Hpl()@p + Chloride()@c + Chloride()@c 0
	R_CLtex: Chloride()@e <-> Chloride()@p 0,0
	R_CMPN: H2O()@c + CMP()@c -> alpha_D_Ribose5_phosphate()@c + Cytosine()@c 0
	R_CMPtex: CMP()@e <-> CMP()@p 0,0
	R_CMtex: Chloramphenicol()@e <-> Chloramphenicol()@p 0,0
	R_CMtpp: Hpl()@p + Chloramphenicol()@p -> Chloramphenicol()@e + Hpl()@c 0
	R_CO2tex: CO2()@e <-> CO2()@p 0,0
	R_CO2tpp: CO2()@p <-> CO2()@c 0,0
	R_COBALT2abcpp: H2O()@c + ATP()@c + Co2pl()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Co2pl()@p 0
	R_COBALT2t3pp: Hpl()@p + Co2pl()@c -> Hpl()@c + Co2pl()@p 0
	R_COBALT2tex: Co2pl()@e <-> Co2pl()@p 0,0
	R_COBALT2tpp: Co2pl()@p -> Co2pl()@c 0
	R_COLIPAKpp: coreoligosaccharidelipidA()@p + Undecaprenyldiphosphate()@p -> Undecaprenylphosphate()@p + coreoligosaccharidelipidAdiphosphate()@p 0
	R_COLIPAPabctex: H2O()@c + ATP()@c + coreoligosaccharidelipidAdiphosphate()@p -> coreoligosaccharidelipidAdiphosphate()@e + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_COLIPAabcpp: H2O()@c + coreoligosaccharidelipidA()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + coreoligosaccharidelipidA()@p 0
	R_COLIPAabctex: H2O()@c + coreoligosaccharidelipidA()@p + ATP()@c -> coreoligosaccharidelipidA()@e + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_CPGNR1: coprogen()@c + coprogen()@c + Flavinadeninedinucleotidereduced()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c + coprogenunloaded__noFe__III____()@c + coprogenunloaded__noFe__III____()@c 0
	R_CPGNR2: coprogen()@c + coprogen()@c + ReducedFMN()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + FMN()@c + coprogenunloaded__noFe__III____()@c + coprogenunloaded__noFe__III____()@c 0
	R_CPGNR3: coprogen()@c + coprogen()@c + Reducedriboflavin()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Riboflavin()@c + coprogenunloaded__noFe__III____()@c + coprogenunloaded__noFe__III____()@c 0
	R_CPGNUtex: Hpl()@p + coprogenunloaded__noFe__III____()@p -> coprogenunloaded__noFe__III____()@e + Hpl()@c 0
	R_CPGNUtpp: Hpl()@p + coprogenunloaded__noFe__III____()@c -> Hpl()@c + coprogenunloaded__noFe__III____()@p 0
	R_CPGNabcpp: H2O()@c + coprogen()@p + ATP()@c -> coprogen()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_CPGNexs: coprogenunloaded__noFe__III____()@e + Fe3pl()@e -> coprogen()@e 0
	R_CPGNtonex: Hpl()@p + coprogen()@e -> Hpl()@c + coprogen()@p 0
	R_CPH4S: H2O()@c + s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate()@c -> Hpl()@c + s6_carboxy_5_6_7_8_tetrahydropterin()@c + Acetaldehyde()@c + Inorganictriphosphate()@c 0
	R_CPMPS: H2O()@c + GTP()@c -> cyclicpyranopterinmonophosphate()@c + Diphosphate()@c 0
	R_CPPPGO: Hpl()@c + Hpl()@c + O2()@c + CoproporphyrinogenIII()@c -> H2O()@c + H2O()@c + CO2()@c + CO2()@c + ProtoporphyrinogenIX()@c 0
	R_CPPPGO2: S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c + CoproporphyrinogenIII()@c -> CO2()@c + CO2()@c + s5_Deoxyadenosine()@c + s5_Deoxyadenosine()@c + ProtoporphyrinogenIX()@c + L_Methionine()@c + L_Methionine()@c 0
	R_CRNBTCT: L_Carnitine()@c + gamma_butyrobetainyl_CoA()@c <-> gamma_butyrobetaine()@c + L_Carnitinyl_CoA()@c 0,0
	R_CRNCAL2: L_Carnitine()@c + ATP()@c + CoenzymeA()@c -> Phosphate()@c + ADP()@c + L_Carnitinyl_CoA()@c 0
	R_CRNCAR: L_Carnitinyl_CoA()@c <-> D_carnitinyl_CoA()@c 0,0
	R_CRNCBCT: L_Carnitine()@c + crotonobetainyl_CoA()@c <-> crotonobetaine()@c + L_Carnitinyl_CoA()@c 0,0
	R_CRNCDH: L_Carnitinyl_CoA()@c <-> H2O()@c + crotonobetainyl_CoA()@c 0,0
	R_CRNDCAL2: ATP()@c + CoenzymeA()@c + D_Carnitine()@c -> D_carnitinyl_CoA()@c + ADP()@c + Phosphate()@c 0
	R_CRNDabcpp: H2O()@c + ATP()@c + D_Carnitine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + D_Carnitine()@c 0
	R_CRNDt2rpp: Hpl()@p + D_Carnitine()@p <-> Hpl()@c + D_Carnitine()@c 0,0
	R_CRNDtex: D_Carnitine()@e <-> D_Carnitine()@p 0,0
	R_CRNabcpp: H2O()@c + L_Carnitine()@p + ATP()@c -> Phosphate()@c + L_Carnitine()@c + Hpl()@c + ADP()@c 0
	R_CRNt2rpp: Hpl()@p + L_Carnitine()@p <-> L_Carnitine()@c + Hpl()@c 0,0
	R_CRNt7pp: L_Carnitine()@p + gamma_butyrobetaine()@c -> gamma_butyrobetaine()@p + L_Carnitine()@c 0
	R_CRNt8pp: L_Carnitine()@p + D_Carnitine()@c -> L_Carnitine()@c + D_Carnitine()@p 0
	R_CRNtex: L_Carnitine()@e <-> L_Carnitine()@p 0,0
	R_CS: Acetyl_CoA()@c + H2O()@c + Oxaloacetate()@c -> Hpl()@c + Citrate()@c + CoenzymeA()@c 0
	R_CSND: H2O()@c + Cytosine()@c + Hpl()@c -> Uracil()@c + Ammonium()@c 0
	R_CSNt2pp: Hpl()@p + Cytosine()@p -> Cytosine()@c + Hpl()@c 0
	R_CSNtex: Cytosine()@e <-> Cytosine()@p 0,0
	R_CTBTCAL2: crotonobetaine()@c + ATP()@c + CoenzymeA()@c -> Phosphate()@c + crotonobetainyl_CoA()@c + ADP()@c 0
	R_CTBTabcpp: H2O()@c + crotonobetaine()@p + ATP()@c -> crotonobetaine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_CTBTt2rpp: Hpl()@p + crotonobetaine()@p <-> crotonobetaine()@c + Hpl()@c 0,0
	R_CTECOAI6: Tetradecenoyl_CoA__n_C14_1CoA__()@c <-> trans_Tetradec_2_enoyl_CoA()@c 0,0
	R_CTECOAI7: Hexadecenoyl_CoA__n_C16_1CoA__()@c <-> trans_Hexadec_2_enoyl_CoA()@c 0,0
	R_CTECOAI8: Octadecenoyl_CoA__n_C18_1CoA__()@c <-> trans_Octadec_2_enoyl_CoA()@c 0,0
	R_CTPS2: UTP()@c + H2O()@c + ATP()@c + L_Glutamine()@c -> L_Glutamate()@c + Phosphate()@c + CTP()@c + Hpl()@c + Hpl()@c + ADP()@c 0
	R_CU1Opp: Hpl()@p + Hpl()@p + Hpl()@p + Hpl()@p + O2()@p + Cupl()@p + Cupl()@p + Cupl()@p + Cupl()@p -> Cu2pl()@p + Cu2pl()@p + Cu2pl()@p + Cu2pl()@p + H2O()@p + H2O()@p 0
	R_CU1abcpp: H2O()@c + Cupl()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Cupl()@p 0
	R_CU2abcpp: H2O()@c + Cu2pl()@c + ATP()@c -> Cu2pl()@p + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_CU2tex: Cu2pl()@e <-> Cu2pl()@p 0,0
	R_CU2tpp: Cu2pl()@p -> Cu2pl()@c 0
	R_CUt3: Cupl()@c + Hpl()@e -> Cupl()@e + Hpl()@c 0
	R_CUtex: Cupl()@e <-> Cupl()@p 0,0
	R_CYANST: Thiosulfate()@c + Hydrogencyanide()@c -> Sulfite()@c + Thiocyanate()@c + Hpl()@c 0
	R_CYANSTpp: Hydrogencyanide()@p + Thiosulfate()@p -> Hpl()@p + Thiocyanate()@p + Sulfite()@p 0
	R_CYANtex: Hydrogencyanide()@e <-> Hydrogencyanide()@p 0,0
	R_CYNTAH: Hpl()@c + Hpl()@c + Hpl()@c + Cyanate()@c + Bicarbonate()@c -> CO2()@c + CO2()@c + Ammonium()@c 0
	R_CYNTt2pp: Hpl()@p + Cyanate()@p -> Hpl()@c + Cyanate()@c 0
	R_CYNTtex: Cyanate()@e <-> Cyanate()@p 0,0
	R_CYSDDS: H2O()@c + D_Cysteine()@c -> Pyruvate()@c + Hydrogensulfide()@c + Ammonium()@c 0
	R_CYSDS: H2O()@c + L_Cysteine()@c -> Pyruvate()@c + Hydrogensulfide()@c + Ammonium()@c 0
	R_CYSDabcpp: D_Cysteine()@p + H2O()@c + ATP()@c -> Hpl()@c + D_Cysteine()@c + ADP()@c + Phosphate()@c 0
	R_CYSDtex: D_Cysteine()@e <-> D_Cysteine()@p 0,0
	R_CYSS: Hydrogensulfide()@c + O_Acetyl_L_serine()@c -> Acetate()@c + Hpl()@c + L_Cysteine()@c 0
	R_CYSSADS: s3_Sulfino_L_alanine()@c + Hpl()@c + Hpl()@c -> sulfurdioxide()@c + L_Alanine()@c 0
	R_CYSTL: H2O()@c + L_Cystathionine()@c -> Pyruvate()@c + L_Homocysteine()@c + Ammonium()@c 0
	R_CYSTRS: tRNA__Cys__()@c + L_Cysteine()@c + ATP()@c -> Diphosphate()@c + L_Cysteinyl_tRNA__Cys__()@c + AMP()@c 0
	R_CYSabc2pp: H2O()@c + L_Cysteine()@c + ATP()@c -> L_Cysteine()@p + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_CYSabcpp: L_Cysteine()@p + H2O()@c + ATP()@c -> L_Cysteine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_CYStex: L_Cysteine()@e <-> L_Cysteine()@p 0,0
	R_CYStpp: L_Cysteine()@c -> L_Cysteine()@p 0
	R_CYTBD2pp: Menaquinol8()@c + Hpl()@c + Hpl()@c + O2()@c -> Hpl()@p + Hpl()@p + H2O()@c + Menaquinone8()@c 0
	R_CYTBDpp: Hpl()@c + Hpl()@c + O2()@c + Ubiquinol_8()@c -> H2O()@c + Hpl()@p + Hpl()@p + Ubiquinone_8()@c 0
	R_CYTBO3_4pp: Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + O2()@c + Ubiquinol_8()@c -> H2O()@c + Hpl()@p + Hpl()@p + Hpl()@p + Hpl()@p + Ubiquinone_8()@c 0
	R_CYTD: H2O()@c + Hpl()@c + Cytidine()@c -> Uridine()@c + Ammonium()@c 0
	R_CYTDH: H2O()@c + Cytidine()@c -> Cytosine()@c + D_Ribose()@c 0
	R_CYTDK2: Cytidine()@c + GTP()@c -> Hpl()@c + CMP()@c + GDP()@c 0
	R_CYTDt2pp: Hpl()@p + Cytidine()@p -> Hpl()@c + Cytidine()@c 0
	R_CYTDt2rpp: Hpl()@p + Cytidine()@p <-> Hpl()@c + Cytidine()@c 0,0
	R_CYTDtex: Cytidine()@e <-> Cytidine()@p 0,0
	R_CYTK1: ATP()@c + CMP()@c <-> CDP()@c + ADP()@c 0,0
	R_CYTK2: ATP()@c + dCMP()@c <-> dCDP()@c + ADP()@c 0,0
	R_D__LACt2pp: Hpl()@p + D_Lactate()@p <-> Hpl()@c + D_Lactate()@c 0,0
	R_D__LACtex: D_Lactate()@e <-> D_Lactate()@p 0,0
	R_DAAD: H2O()@c + Flavinadeninedinucleotideoxidized()@c + D_Alanine()@c -> Pyruvate()@c + Flavinadeninedinucleotidereduced()@c + Ammonium()@c 0
	R_DADA: H2O()@c + Deoxyadenosine()@c + Hpl()@c -> Deoxyinosine()@c + Ammonium()@c 0
	R_DADK: dAMP()@c + ATP()@c <-> ADP()@c + dADP()@c 0,0
	R_DADNt2pp: Hpl()@p + Deoxyadenosine()@p -> Deoxyadenosine()@c + Hpl()@c 0
	R_DADNtex: Deoxyadenosine()@e <-> Deoxyadenosine()@p 0,0
	R_DAGK120: s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__()@c + ATP()@c -> Hpl()@c + s1_2_didodecanoyl_sn_glycerol3_phosphate()@c + ADP()@c 0
	R_DAGK140: s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__()@c + ATP()@c -> Hpl()@c + ADP()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@c 0
	R_DAGK141: s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__()@c + ATP()@c -> s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@c + Hpl()@c + ADP()@c 0
	R_DAGK160: ATP()@c + s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__()@c -> Hpl()@c + ADP()@c + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@c 0
	R_DAGK161: s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()@c + ATP()@c -> Hpl()@c + ADP()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@c 0
	R_DAGK180: ATP()@c + s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__()@c -> s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@c + Hpl()@c + ADP()@c 0
	R_DAGK181: ATP()@c + s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()@c -> s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@c + Hpl()@c + ADP()@c 0
	R_DALAt2pp: Hpl()@p + D_Alanine()@p -> Hpl()@c + D_Alanine()@c 0
	R_DALAtex: D_Alanine()@e <-> D_Alanine()@p 0,0
	R_DAMPtex: dAMP()@e <-> dAMP()@p 0,0
	R_DAPAL: H2O()@c + s2_3_diaminopropionate()@c -> Pyruvate()@c + Ammonium()@c + Ammonium()@c 0
	R_DAPDC: meso_2_6_Diaminoheptanedioate()@c + Hpl()@c -> CO2()@c + L_Lysine()@c 0
	R_DAPE: LL_2_6_Diaminoheptanedioate()@c <-> meso_2_6_Diaminoheptanedioate()@c 0,0
	R_DAPabcpp: H2O()@c + meso_2_6_Diaminoheptanedioate()@p + ATP()@c -> meso_2_6_Diaminoheptanedioate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_DAPtex: s1_5_Diaminopentane()@e <-> s1_5_Diaminopentane()@p 0,0
	R_DASYN120: Hpl()@c + CTP()@c + s1_2_didodecanoyl_sn_glycerol3_phosphate()@c -> Diphosphate()@c + CDP_1_2_didodecanoylglycerol()@c 0
	R_DASYN140: CTP()@c + Hpl()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@c -> Diphosphate()@c + CDP_1_2_ditetradecanoylglycerol()@c 0
	R_DASYN141: CTP()@c + Hpl()@c + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@c -> Diphosphate()@c + CDP_1_2_ditetradec_7_enoylglycerol()@c 0
	R_DASYN160: CTP()@c + Hpl()@c + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@c -> Diphosphate()@c + CDP_1_2_dihexadecanoylglycerol()@c 0
	R_DASYN161: CTP()@c + Hpl()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@c -> Diphosphate()@c + CDP_1_2_dihexadec_9_enoylglycerol()@c 0
	R_DASYN180: s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@c + CTP()@c + Hpl()@c -> Diphosphate()@c + CDP_1_2_dioctadecanoylglycerol()@c 0
	R_DASYN181: s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@c + CTP()@c + Hpl()@c -> Diphosphate()@c + CDP_1_2_dioctadec_11_enoylglycerol()@c 0
	R_DATPHs: H2O()@c + Hpl()@c + dATP()@c -> dITP()@c + Ammonium()@c 0
	R_DB4PS: D_Ribulose5_phosphate()@c -> s3_4_dihydroxy_2_butanone4_phosphate()@c + Hpl()@c + Formate()@c 0
	R_DBTS: CO2()@c + s7_8_Diaminononanoate()@c + ATP()@c -> Dethiobiotin()@c + Phosphate()@c + Hpl()@c + Hpl()@c + Hpl()@c + ADP()@c 0
	R_DC6PH: H2O()@c + diacetylchitobiose_6_phosphate()@c -> N_Acetyl_D_glucosamine()@c + N_Acetyl_D_glucosamine6_phosphate()@c 0
	R_DCAtex: Decanoate__n_C10_0__()@e <-> Decanoate__n_C10_0__()@p 0,0
	R_DCMPtex: dCMP()@e <-> dCMP()@p 0,0
	R_DCTPD: H2O()@c + dCTP()@c + Hpl()@c -> dUTP()@c + Ammonium()@c 0
	R_DCYTD: H2O()@c + Hpl()@c + Deoxycytidine()@c -> Deoxyuridine()@c + Ammonium()@c 0
	R_DCYTt2pp: Hpl()@p + Deoxycytidine()@p -> Hpl()@c + Deoxycytidine()@c 0
	R_DCYTtex: Deoxycytidine()@e <-> Deoxycytidine()@p 0,0
	R_DDCAtexi: Dodecanoate__n_C12_0__()@e -> Dodecanoate__n_C12_0__()@p 0
	R_DDGALK: s2_Dehydro_3_deoxy_D_galactonate()@c + ATP()@c -> Hpl()@c + ADP()@c + s2_Dehydro_3_deoxy_D_galactonate6_phosphate()@c 0
	R_DDGLCNt2rpp: Hpl()@p + s2_Dehydro_3_deoxy_D_gluconate()@p <-> s2_Dehydro_3_deoxy_D_gluconate()@c + Hpl()@c 0,0
	R_DDGLCNtex: s2_Dehydro_3_deoxy_D_gluconate()@e <-> s2_Dehydro_3_deoxy_D_gluconate()@p 0,0
	R_DDGLK: s2_Dehydro_3_deoxy_D_gluconate()@c + ATP()@c -> Hpl()@c + ADP()@c + s2_Dehydro_3_deoxy_D_gluconate6_phosphate()@c 0
	R_DDPA: H2O()@c + D_Erythrose4_phosphate()@c + Phosphoenolpyruvate()@c -> Phosphate()@c + s2_Dehydro_3_deoxy_D_arabino_heptonate7_phosphate()@c 0
	R_DDPGALA: s2_Dehydro_3_deoxy_D_galactonate6_phosphate()@c <-> Pyruvate()@c + Glyceraldehyde3_phosphate()@c 0,0
	R_DGK1: dGMP()@c + ATP()@c <-> ADP()@c + dGDP()@c 0,0
	R_DGMPtex: dGMP()@e <-> dGMP()@p 0,0
	R_DGSNt2pp: Hpl()@p + Deoxyguanosine()@p -> Hpl()@c + Deoxyguanosine()@c 0
	R_DGSNtex: Deoxyguanosine()@e <-> Deoxyguanosine()@p 0,0
	R_DHACOAH: H2O()@c + s2_3_dehydroadipyl_CoA()@c <-> __3S___3_Hydroxyadipyl_CoA()@c 0,0
	R_DHAD1: __R___2_3_Dihydroxy_3_methylbutanoate()@c -> H2O()@c + s3_Methyl_2_oxobutanoate()@c 0
	R_DHAD2: __R___2_3_Dihydroxy_3_methylpentanoate()@c -> H2O()@c + __S___3_Methyl_2_oxopentanoate()@c 0
	R_DHAPT: Phosphoenolpyruvate()@c + Dihydroxyacetone()@c -> Pyruvate()@c + Dihydroxyacetonephosphate()@c 0
	R_DHAtex: Dihydroxyacetone()@e <-> Dihydroxyacetone()@p 0,0
	R_DHAtpp: Dihydroxyacetone()@p <-> Dihydroxyacetone()@c 0,0
	R_DHBD: Nicotinamideadeninedinucleotide()@c + s2_3_Dihydro_2_3_dihydroxybenzoate()@c <-> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s2_3_Dihydroxybenzoate()@c 0,0
	R_DHBS: Hpl()@c + ATP()@c + s2_3_Dihydroxybenzoate()@c -> Diphosphate()@c + __2_3_Dihydroxybenzoyl__adenylate()@c 0
	R_DHBSH: H2O()@c + s2_3_dihydroxybenzoylserine()@c -> L_Serine()@c + s2_3_Dihydroxybenzoate()@c 0
	R_DHCIND: cis_3___3_carboxyethenyl___3_5_cyclohexadiene_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c -> s2_3_dihydroxicinnamicacid()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_DHCINDO: s2_3_dihydroxicinnamicacid()@c + O2()@c -> Hpl()@c + s2_hydroxy_6_ketononatrienedioate()@c 0
	R_DHDPRy: s2_3_Dihydrodipicolinate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> Nicotinamideadeninedinucleotidephosphate()@c + s2_3_4_5_Tetrahydrodipicolinate()@c 0
	R_DHDPS: Pyruvate()@c + L_Aspartate4_semialdehyde()@c -> H2O()@c + H2O()@c + s2_3_Dihydrodipicolinate()@c + Hpl()@c 0
	R_DHFR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s7_8_Dihydrofolate()@c <-> Nicotinamideadeninedinucleotidephosphate()@c + s5_6_7_8_Tetrahydrofolate()@c 0,0
	R_DHFS: L_Glutamate()@c + ATP()@c + Dihydropteroate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + s7_8_Dihydrofolate()@c 0
	R_DHMPTR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Dihydromonapterin()@c -> Tetrahydromonapterin()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_DHNAOT4: all_trans_Octaprenyldiphosphate()@c + Hpl()@c + s1_4_Dihydroxy_2_naphthoate()@c -> Diphosphate()@c + CO2()@c + s2_Demethylmenaquinol8()@c 0
	R_DHNCOAS: O_Succinylbenzoyl_CoA()@c + Hpl()@c -> s1_4_dihydroxy_2_napthoyl_CoA()@c + H2O()@c 0
	R_DHNCOAT: s1_4_dihydroxy_2_napthoyl_CoA()@c + H2O()@c -> Hpl()@c + s1_4_Dihydroxy_2_naphthoate()@c + CoenzymeA()@c 0
	R_DHNPA2r: Dihydroneopterin()@c <-> Glycolaldehyde()@c + s6_hydroxymethyldihydropterin()@c 0,0
	R_DHNPTE: Dihydroneopterin()@c <-> Dihydromonapterin()@c 0,0
	R_DHORD2: __S___Dihydroorotate()@c + Ubiquinone_8()@c -> Orotate()@c + Ubiquinol_8()@c 0
	R_DHORD5: __S___Dihydroorotate()@c + Menaquinone8()@c -> Menaquinol8()@c + Orotate()@c 0
	R_DHORDfum: __S___Dihydroorotate()@c + Fumarate()@c -> Orotate()@c + Succinate()@c 0
	R_DHORTS: H2O()@c + __S___Dihydroorotate()@c <-> Hpl()@c + N_Carbamoyl_L_aspartate()@c 0,0
	R_DHPPD: cis_3___3_carboxyethyl___3_5_cyclohexadiene_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c -> s3___2_3_Dihydroxyphenyl__propanoate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_DHPPDA2: H2O()@c + Hpl()@c + s2_5_Diamino_6___ribosylamino___4___3H___pyrimidinone5_phosphate()@c -> s5_Amino_6___5_phosphoribosylamino__uracil()@c + Ammonium()@c 0
	R_DHPS2: s4_Aminobenzoate()@c + s6_hydroxymethyl_dihydropterinpyrophosphate()@c -> Diphosphate()@c + Dihydropteroate()@c 0
	R_DHPTDCs2: s4_5_dihydroxy_2_3_pentanedione()@c -> __2R_4S___2_methyl_2_4_dihydroxydihydrofuran_3_one()@c 0
	R_DHPTDNR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + Hpl()@c + s6_7_Dihydropteridine()@c -> s5_6_7_8_tetrahydropteridine()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_DHPTDNRN: s6_7_Dihydropteridine()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> s5_6_7_8_tetrahydropteridine()@c + Nicotinamideadeninedinucleotide()@c 0
	R_DHPTPE: s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate()@c <-> dihydromonapterin_triphosphate()@c 0,0
	R_DHQS: s2_Dehydro_3_deoxy_D_arabino_heptonate7_phosphate()@c -> Phosphate()@c + s3_Dehydroquinate()@c 0
	R_DHQTi: s3_Dehydroquinate()@c -> H2O()@c + s3_Dehydroshikimate()@c 0
	R_DIMPtex: dIMP()@e <-> dIMP()@p 0,0
	R_DINSt2pp: Hpl()@p + Deoxyinosine()@p -> Deoxyinosine()@c + Hpl()@c 0
	R_DINStex: Deoxyinosine()@e <-> Deoxyinosine()@p 0,0
	R_DKGLCNR1: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_5_diketo_D_gluconate()@c -> s2_Dehydro_L_gulonate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_DKGLCNR2x: Hpl()@c + s2_5_diketo_D_gluconate()@c + Nicotinamideadeninedinucleotide_reduced()@c -> s5_Dehydro_D_gluconate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_DKGLCNR2y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_5_diketo_D_gluconate()@c -> s5_Dehydro_D_gluconate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_DMATT: Isopentenyldiphosphate()@c + Dimethylallyldiphosphate()@c -> Diphosphate()@c + Geranyldiphosphate()@c 0
	R_DMPPS: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s1_hydroxy_2_methyl_2___E___butenyl4_diphosphate()@c -> H2O()@c + Nicotinamideadeninedinucleotide()@c + Dimethylallyldiphosphate()@c 0
	R_DMQMT: s2_Octaprenyl_3_methyl_5_hydroxy_6_methoxy_1_4_benzoquinol()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + S_Adenosyl_L_homocysteine()@c + Ubiquinol_8()@c 0
	R_DMSOR1: Menaquinol8()@c + Dimethylsulfoxide()@c -> H2O()@c + Dimethylsulfide()@c + Menaquinone8()@c 0
	R_DMSOR1pp: Menaquinol8()@c + Dimethylsulfoxide()@p -> Menaquinone8()@c + H2O()@p + Dimethylsulfide()@p 0
	R_DMSOR2: s2_Demethylmenaquinol8()@c + Dimethylsulfoxide()@c -> H2O()@c + Dimethylsulfide()@c + s2_Demethylmenaquinone8()@c 0
	R_DMSOR2pp: s2_Demethylmenaquinol8()@c + Dimethylsulfoxide()@p -> Dimethylsulfide()@p + H2O()@p + s2_Demethylmenaquinone8()@c 0
	R_DMSOtex: Dimethylsulfoxide()@e <-> Dimethylsulfoxide()@p 0,0
	R_DMSOtpp: Dimethylsulfoxide()@p <-> Dimethylsulfoxide()@c 0,0
	R_DMStex: Dimethylsulfide()@e <-> Dimethylsulfide()@p 0,0
	R_DNMPPA: Dihydroneopterinmonophosphate()@c + H2O()@c -> Phosphate()@c + Dihydroneopterin()@c 0
	R_DNTPPA: H2O()@c + s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate()@c -> Diphosphate()@c + Dihydroneopterinmonophosphate()@c + Hpl()@c 0
	R_DOGULNR: s2_3_Dioxo_L_gulonate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> s3_Dehydro_L_gulonate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_DOPAtex: Dopamine()@e <-> Dopamine()@p 0,0
	R_DOXRBCNtex: doxorubicin()@e <-> doxorubicin()@p 0,0
	R_DOXRBCNtpp: Hpl()@p + doxorubicin()@p -> doxorubicin()@e + Hpl()@c 0
	R_DPCOAK: Dephospho_CoA()@c + ATP()@c -> Hpl()@c + ADP()@c + CoenzymeA()@c 0
	R_DPR: s2_Dehydropantoate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> __R___Pantoate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_DRPA: s2_Deoxy_D_ribose5_phosphate()@c -> Acetaldehyde()@c + Glyceraldehyde3_phosphate()@c 0
	R_DSBAO1: periplasmicproteindisulfideisomeraseI__reduced__()@p + Ubiquinone_8()@c -> periplasmicproteindisulfideisomeraseI__oxidized__()@p + Ubiquinol_8()@c 0
	R_DSBAO2: Menaquinone8()@c + periplasmicproteindisulfideisomeraseI__reduced__()@p -> Menaquinol8()@c + periplasmicproteindisulfideisomeraseI__oxidized__()@p 0
	R_DSBCGT: Reducedglutathione()@p + Reducedglutathione()@p + proteindisulfideisomeraseII__oxidized__()@p -> Oxidizedglutathione()@p + proteindisulfideisomeraseII__reduced__()@p 0
	R_DSBDR: fusedthiol_disulfideinterchangeprotein__oxidized__()@c + Reducedthioredoxin()@c -> Oxidizedthioredoxin()@c + fusedthiol_disulfideinterchangeprotein__reduced__()@c 0
	R_DSBGGT: periplasmicdisulfideisomerase_thiol_disulphideoxidase__oxidized__()@p + Reducedglutathione()@p + Reducedglutathione()@p -> Oxidizedglutathione()@p + periplasmicdisulfideisomerase_thiol_disulphideoxidase__reduced__()@p 0
	R_DSERDHr: D_Serine()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_Aminomalonatesemialdehyde()@c 0,0
	R_DSERt2pp: Hpl()@p + D_Serine()@p -> D_Serine()@c + Hpl()@c 0
	R_DSERtex: D_Serine()@e <-> D_Serine()@p 0,0
	R_DTARTD: D_tartrate()@c -> H2O()@c + Oxaloacetate()@c 0
	R_DTMPK: ATP()@c + dTMP()@c <-> dTDP()@c + ADP()@c 0,0
	R_DTMPtex: dTMP()@e <-> dTMP()@p 0,0
	R_DUMPtex: dUMP()@e <-> dUMP()@p 0,0
	R_DURADx: Nicotinamideadeninedinucleotide()@c + s5_6_dihydrouracil()@c <-> Hpl()@c + Uracil()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_DURIK1: Deoxyuridine()@c + ATP()@c -> dUMP()@c + Hpl()@c + ADP()@c 0
	R_DURIPP: Deoxyuridine()@c + Phosphate()@c <-> Uracil()@c + s2_Deoxy_D_ribose1_phosphate()@c 0,0
	R_DURIt2pp: Hpl()@p + Deoxyuridine()@p -> Deoxyuridine()@c + Hpl()@c 0
	R_DURItex: Deoxyuridine()@e <-> Deoxyuridine()@p 0,0
	R_DUTPDP: H2O()@c + dUTP()@c -> Diphosphate()@c + dUMP()@c + Hpl()@c 0
	R_DXPRIi: s1_deoxy_D_xylulose5_phosphate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> Nicotinamideadeninedinucleotidephosphate()@c + s2_C_methyl_D_erythritol4_phosphate()@c 0
	R_DXPS: Pyruvate()@c + Hpl()@c + Glyceraldehyde3_phosphate()@c -> s1_deoxy_D_xylulose5_phosphate()@c + CO2()@c 0
	R_DXYLK: s1_deoxy_D_xylulose()@c + ATP()@c -> s1_deoxy_D_xylulose5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_E4PD: D_Erythrose4_phosphate()@c + H2O()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s4_Phospho_D_erythronate()@c 0,0
	R_EAR100x: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + trans_Dec_2_enoyl___acyl_carrierprotein__()@c -> Decanoyl_ACP__n_C10_0ACP__()@c + Nicotinamideadeninedinucleotide()@c 0
	R_EAR100y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + trans_Dec_2_enoyl___acyl_carrierprotein__()@c -> Decanoyl_ACP__n_C10_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR120x: trans_Dodec_2_enoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Nicotinamideadeninedinucleotide()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c 0
	R_EAR120y: trans_Dodec_2_enoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> Dodecanoyl_ACP__n_C12_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR121x: trans_3_cis_5_dodecenoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Nicotinamideadeninedinucleotide()@c + cis_dodec_5_enoyl___acyl_carrierprotein____n_C12_1__()@c 0
	R_EAR121y: trans_3_cis_5_dodecenoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c -> Nicotinamideadeninedinucleotidephosphate()@c + cis_dodec_5_enoyl___acyl_carrierprotein____n_C12_1__()@c 0
	R_EAR140x: trans_Tetradec_2_enoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Myristoyl_ACP__n_C14_0ACP__()@c + Nicotinamideadeninedinucleotide()@c 0
	R_EAR140y: trans_Tetradec_2_enoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c -> Myristoyl_ACP__n_C14_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR141x: trans_3_cis_7_myristoleoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c + Nicotinamideadeninedinucleotide()@c 0
	R_EAR141y: trans_3_cis_7_myristoleoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR160x: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + trans_Hexadec_2_enoyl___acyl_carrierprotein__()@c -> Nicotinamideadeninedinucleotide()@c + Palmitoyl_ACP__n_C16_0ACP__()@c 0
	R_EAR160y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + trans_Hexadec_2_enoyl___acyl_carrierprotein__()@c -> Palmitoyl_ACP__n_C16_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR161x: trans_3_cis_9_palmitoleoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Nicotinamideadeninedinucleotide()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c 0
	R_EAR161y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + trans_3_cis_9_palmitoleoyl___acyl_carrierprotein__()@c -> Nicotinamideadeninedinucleotidephosphate()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c 0
	R_EAR180x: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + trans_octadec_2_enoyl___acyl_carrierprotein__()@c -> Nicotinamideadeninedinucleotide()@c + Octadecanoyl_ACP__n_C18_0ACP__()@c 0
	R_EAR180y: Hpl()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + trans_octadec_2_enoyl___acyl_carrierprotein__()@c -> Octadecanoyl_ACP__n_C18_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR181x: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + trans_3_cis_11_vacceoyl___acyl_carrierprotein__()@c -> cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()@c + Nicotinamideadeninedinucleotide()@c 0
	R_EAR181y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + trans_3_cis_11_vacceoyl___acyl_carrierprotein__()@c -> cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR40x: Hpl()@c + But_2_enoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Butyryl_ACP__n_C4_0ACP__()@c + Nicotinamideadeninedinucleotide()@c 0
	R_EAR40y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + But_2_enoyl___acyl_carrierprotein__()@c -> Butyryl_ACP__n_C4_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR60x: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + trans_Hex_2_enoyl___acyl_carrierprotein__()@c -> Hexanoyl_ACP__n_C6_0ACP__()@c + Nicotinamideadeninedinucleotide()@c 0
	R_EAR60y: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + trans_Hex_2_enoyl___acyl_carrierprotein__()@c -> Hexanoyl_ACP__n_C6_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_EAR80x: trans_Oct_2_enoyl___acyl_carrierprotein__()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Nicotinamideadeninedinucleotide()@c + Octanoyl_ACP__n_C8_0ACP__()@c 0
	R_EAR80y: trans_Oct_2_enoyl___acyl_carrierprotein__()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> Octanoyl_ACP__n_C8_0ACP__()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_ECA4COLIPAabctex: H2O()@c + ATP()@c + __enterobacterialcommonantigen__x4coreoligosaccharidelipidA()@p -> Hpl()@c + __enterobacterialcommonantigen__x4coreoligosaccharidelipidA()@e + ADP()@c + Phosphate()@c 0
	R_ECA4OALpp: __enterobacterialcommonantigen__x4undecaprenyl_diphosphate()@p + coreoligosaccharidelipidA()@p -> Hpl()@p + Undecaprenyldiphosphate()@p + __enterobacterialcommonantigen__x4coreoligosaccharidelipidA()@p 0
	R_ECAP1pp: Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@p + Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@p -> Hpl()@p + Undecaprenyldiphosphate()@p + __enterobacterialcommonantigen__x2undecaprenyl_diphosphate()@p 0
	R_ECAP2pp: __enterobacterialcommonantigen__x2undecaprenyl_diphosphate()@p + Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@p -> Hpl()@p + __enterobacterialcommonantigen__x3undecaprenyl_diphosphate()@p + Undecaprenyldiphosphate()@p 0
	R_ECAP3pp: __enterobacterialcommonantigen__x3undecaprenyl_diphosphate()@p + Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@p -> Hpl()@p + __enterobacterialcommonantigen__x4undecaprenyl_diphosphate()@p + Undecaprenyldiphosphate()@p 0
	R_ECAtpp: Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@c -> Undecaprenyl_diphosphoN_acetylglucosamine_N_acetylmannosaminuronate_N_acetamido_4_6_dideoxy_D_galactose()@p 0
	R_ECOAH1: __S___3_Hydroxybutanoyl_CoA()@c <-> H2O()@c + Crotonoyl_CoA()@c 0,0
	R_ECOAH2: __S___3_Hydroxyhexanoyl_CoA()@c <-> H2O()@c + trans_Hex_2_enoyl_CoA()@c 0,0
	R_ECOAH3: __S___3_Hydroxyoctanoyl_CoA()@c <-> H2O()@c + trans_Oct_2_enoyl_CoA()@c 0,0
	R_ECOAH4: __S___3_Hydroxydecanoyl_CoA()@c <-> H2O()@c + trans_Dec_2_enoyl_CoA()@c 0,0
	R_ECOAH5: __S___3_Hydroxydodecanoyl_CoA()@c <-> H2O()@c + trans_Dodec_2_enoyl_CoA()@c 0,0
	R_ECOAH6: __S___3_Hydroxytetradecanoyl_CoA()@c <-> H2O()@c + trans_Tetradec_2_enoyl_CoA()@c 0,0
	R_ECOAH7: __S___3_Hydroxyhexadecanoyl_CoA()@c <-> H2O()@c + trans_Hexadec_2_enoyl_CoA()@c 0,0
	R_ECOAH8: __S___3_Hydroxyoctadecanoyl_CoA()@c <-> trans_Octadec_2_enoyl_CoA()@c + H2O()@c 0,0
	R_EDA: s2_Dehydro_3_deoxy_D_gluconate6_phosphate()@c -> Pyruvate()@c + Glyceraldehyde3_phosphate()@c 0
	R_EDD: s6_Phospho_D_gluconate()@c -> H2O()@c + s2_Dehydro_3_deoxy_D_gluconate6_phosphate()@c 0
	R_EDTXS1: KDO__2___lipidIV__A__()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c -> acylcarrierprotein()@c + KDO__2___lipidIV__A__withlaurate()@c 0
	R_EDTXS2: KDO__2___lipidIV__A__withlaurate()@c + Myristoyl_ACP__n_C14_0ACP__()@c -> acylcarrierprotein()@c + KDO__2___lipid__A__()@c 0
	R_EDTXS3: KDO__2___lipidIV__A__()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c -> acylcarrierprotein()@c + KDO__2___lipidIV__A__withpalmitoleoyl()@c 0
	R_EDTXS4: Myristoyl_ACP__n_C14_0ACP__()@c + KDO__2___lipidIV__A__withpalmitoleoyl()@c -> acylcarrierprotein()@c + coldadaptedKDO__2___lipid__A__()@c 0
	R_EGMEACPR: Hpl()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Enoylglutaryl___acyl_carrierprotein__methylester()@c -> Glutaryl___acyl_carrierprotein__methylester()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_ENLIPAabctex: H2O()@c + phosphoethanolamineKDO__2___lipid__A__()@p + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + phosphoethanolamineKDO__2___lipid__A__()@e 0
	R_ENO: D_Glycerate2_phosphate()@c <-> H2O()@c + Phosphoenolpyruvate()@c 0,0
	R_ENTCS: L_seryl_AMP()@c + L_seryl_AMP()@c + L_seryl_AMP()@c + __2_3_Dihydroxybenzoyl__adenylate()@c + __2_3_Dihydroxybenzoyl__adenylate()@c + __2_3_Dihydroxybenzoyl__adenylate()@c -> Enterochelin()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + AMP()@c + AMP()@c + AMP()@c + AMP()@c + AMP()@c + AMP()@c 0
	R_ENTERES: H2O()@c + H2O()@c + H2O()@c + Enterochelin()@c -> Hpl()@c + Hpl()@c + Hpl()@c + s2_3_dihydroxybenzoylserine()@c + s2_3_dihydroxybenzoylserine()@c + s2_3_dihydroxybenzoylserine()@c 0
	R_ENTERES2: H2O()@c + H2O()@c + H2O()@c + Fe_enterobactin()@c -> Hpl()@c + Hpl()@c + Hpl()@c + Fe3pl()@c + s2_3_dihydroxybenzoylserine()@c + s2_3_dihydroxybenzoylserine()@c + s2_3_dihydroxybenzoylserine()@c 0
	R_EPMEACPR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Enoylpimeloyl___acyl_carrierprotein__methylester()@c -> Pimeloyl___acyl_carrierprotein__methylester()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_ETHAAL: Ethanolamine()@c -> Acetaldehyde()@c + Ammonium()@c 0
	R_ETHAt2pp: Hpl()@p + Ethanolamine()@p -> Ethanolamine()@c + Hpl()@c 0
	R_ETHAtex: Ethanolamine()@e <-> Ethanolamine()@p 0,0
	R_ETHSO3abcpp: H2O()@c + ATP()@c + ethanesulfonate()@p -> Phosphate()@c + Hpl()@c + ADP()@c + ethanesulfonate()@c 0
	R_ETHSO3tex: ethanesulfonate()@e <-> ethanesulfonate()@p 0,0
	R_ETOHtex: Ethanol()@e <-> Ethanol()@p 0,0
	R_ETOHtrpp: Ethanol()@p <-> Ethanol()@c 0,0
	R_F6PA: D_Fructose6_phosphate()@c <-> Dihydroxyacetone()@c + Glyceraldehyde3_phosphate()@c 0,0
	R_F6PP: H2O()@c + D_Fructose6_phosphate()@c -> Phosphate()@c + D_Fructose()@c 0
	R_F6Pt6_2pp: Phosphate()@c + Phosphate()@c + D_Fructose6_phosphate()@p -> Phosphate()@p + Phosphate()@p + D_Fructose6_phosphate()@c 0
	R_F6Ptex: D_Fructose6_phosphate()@e <-> D_Fructose6_phosphate()@p 0,0
	R_FA100ACPHi: H2O()@c + Decanoyl_ACP__n_C10_0ACP__()@c -> acylcarrierprotein()@c + Hpl()@c + Decanoate__n_C10_0__()@c 0
	R_FA120ACPHi: H2O()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c -> acylcarrierprotein()@c + Hpl()@c + Dodecanoate__n_C12_0__()@c 0
	R_FA140ACPHi: H2O()@c + Myristoyl_ACP__n_C14_0ACP__()@c -> acylcarrierprotein()@c + tetradecanoate__n_C14_0__()@c + Hpl()@c 0
	R_FA141ACPHi: H2O()@c + cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c -> acylcarrierprotein()@c + Hpl()@c + tetradecenoate__n_C14_1__()@c 0
	R_FA160ACPHi: H2O()@c + Palmitoyl_ACP__n_C16_0ACP__()@c -> acylcarrierprotein()@c + Hexadecanoate__n_C16_0__()@c + Hpl()@c 0
	R_FA161ACPHi: H2O()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c -> acylcarrierprotein()@c + Hpl()@c + Hexadecenoate__n_C16_1__()@c 0
	R_FA80ACPHi: H2O()@c + Octanoyl_ACP__n_C8_0ACP__()@c -> acylcarrierprotein()@c + Hpl()@c + octanoate__n_C8_0__()@c 0
	R_FACOAE100: H2O()@c + Decanoyl_CoA__n_C10_0CoA__()@c -> Hpl()@c + Decanoate__n_C10_0__()@c + CoenzymeA()@c 0
	R_FACOAE120: H2O()@c + Dodecanoyl_CoA__n_C12_0CoA__()@c -> Hpl()@c + Dodecanoate__n_C12_0__()@c + CoenzymeA()@c 0
	R_FACOAE140: H2O()@c + Tetradecanoyl_CoA__n_C14_0CoA__()@c -> Hpl()@c + tetradecanoate__n_C14_0__()@c + CoenzymeA()@c 0
	R_FACOAE141: H2O()@c + Tetradecenoyl_CoA__n_C14_1CoA__()@c -> Hpl()@c + tetradecenoate__n_C14_1__()@c + CoenzymeA()@c 0
	R_FACOAE160: H2O()@c + Palmitoyl_CoA__n_C16_0CoA__()@c -> Hexadecanoate__n_C16_0__()@c + Hpl()@c + CoenzymeA()@c 0
	R_FACOAE161: H2O()@c + Hexadecenoyl_CoA__n_C16_1CoA__()@c -> Hpl()@c + CoenzymeA()@c + Hexadecenoate__n_C16_1__()@c 0
	R_FACOAE180: H2O()@c + Stearoyl_CoA__n_C18_0CoA__()@c -> octadecanoate__n_C18_0__()@c + Hpl()@c + CoenzymeA()@c 0
	R_FACOAE181: H2O()@c + Octadecenoyl_CoA__n_C18_1CoA__()@c -> Hpl()@c + octadecenoate__n_C18_1__()@c + CoenzymeA()@c 0
	R_FACOAE60: Hexanoyl_CoA__n_C6_0CoA__()@c + H2O()@c -> Hexanoate__n_C6_0__()@c + Hpl()@c + CoenzymeA()@c 0
	R_FACOAE80: H2O()@c + Octanoyl_CoA__n_C8_0CoA__()@c -> octanoate__n_C8_0__()@c + Hpl()@c + CoenzymeA()@c 0
	R_FACOAL100t2pp: Hpl()@p + ATP()@c + Decanoate__n_C10_0__()@p + CoenzymeA()@c -> Diphosphate()@c + AMP()@c + Hpl()@c + Decanoyl_CoA__n_C10_0CoA__()@c 0
	R_FACOAL120t2pp: Hpl()@p + ATP()@c + Dodecanoate__n_C12_0__()@p + CoenzymeA()@c -> Diphosphate()@c + Dodecanoyl_CoA__n_C12_0CoA__()@c + Hpl()@c + AMP()@c 0
	R_FACOAL140t2pp: Hpl()@p + tetradecanoate__n_C14_0__()@p + ATP()@c + CoenzymeA()@c -> Diphosphate()@c + Tetradecanoyl_CoA__n_C14_0CoA__()@c + Hpl()@c + AMP()@c 0
	R_FACOAL141t2pp: Hpl()@p + ATP()@c + tetradecenoate__n_C14_1__()@p + CoenzymeA()@c -> Diphosphate()@c + Hpl()@c + Tetradecenoyl_CoA__n_C14_1CoA__()@c + AMP()@c 0
	R_FACOAL160t2pp: Hpl()@p + Hexadecanoate__n_C16_0__()@p + ATP()@c + CoenzymeA()@c -> Diphosphate()@c + Palmitoyl_CoA__n_C16_0CoA__()@c + Hpl()@c + AMP()@c 0
	R_FACOAL161t2pp: Hpl()@p + ATP()@c + Hexadecenoate__n_C16_1__()@p + CoenzymeA()@c -> Diphosphate()@c + Hpl()@c + Hexadecenoyl_CoA__n_C16_1CoA__()@c + AMP()@c 0
	R_FACOAL180t2pp: Hpl()@p + octadecanoate__n_C18_0__()@p + ATP()@c + CoenzymeA()@c -> Diphosphate()@c + AMP()@c + Hpl()@c + Stearoyl_CoA__n_C18_0CoA__()@c 0
	R_FACOAL181t2pp: Hpl()@p + octadecenoate__n_C18_1__()@p + ATP()@c + CoenzymeA()@c -> Diphosphate()@c + Octadecenoyl_CoA__n_C18_1CoA__()@c + Hpl()@c + AMP()@c 0
	R_FACOAL60t2pp: Hpl()@p + Hexanoate__n_C6_0__()@p + ATP()@c + CoenzymeA()@c -> Hexanoyl_CoA__n_C6_0CoA__()@c + Diphosphate()@c + Hpl()@c + AMP()@c 0
	R_FACOAL80t2pp: Hpl()@p + octanoate__n_C8_0__()@p + ATP()@c + CoenzymeA()@c -> Diphosphate()@c + Octanoyl_CoA__n_C8_0CoA__()@c + Hpl()@c + AMP()@c 0
	R_FADRx: Hpl()@c + Flavinadeninedinucleotideoxidized()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Nicotinamideadeninedinucleotide()@c + Flavinadeninedinucleotidereduced()@c 0
	R_FADRx2: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c -> Flavinadeninedinucleotidereduced()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_FALDH2: hydroxymethylglutathione()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + S_Formylglutathione()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_FALDtex: Formaldehyde()@e <-> Formaldehyde()@p 0,0
	R_FALDtpp: Formaldehyde()@p <-> Formaldehyde()@c 0,0
	R_FALGTHLs: Formaldehyde()@c + Reducedglutathione()@c <-> hydroxymethylglutathione()@c 0,0
	R_FBA: D_Fructose1_6_bisphosphate()@c <-> Dihydroxyacetonephosphate()@c + Glyceraldehyde3_phosphate()@c 0,0
	R_FBA3: Sedoheptulose1_7_bisphosphate()@c <-> D_Erythrose4_phosphate()@c + Dihydroxyacetonephosphate()@c 0,0
	R_FBP: H2O()@c + D_Fructose1_6_bisphosphate()@c -> Phosphate()@c + D_Fructose6_phosphate()@c 0
	R_FCI: L_Fucose()@c <-> L_fuculose()@c 0,0
	R_FCLK: ATP()@c + L_fuculose()@c -> ADP()@c + Hpl()@c + L_Fuculose1_phosphate()@c 0
	R_FCLPA: L_Fuculose1_phosphate()@c <-> L_Lactaldehyde()@c + Dihydroxyacetonephosphate()@c 0,0
	R_FCLT: Fe2pl()@c + Protoporphyrin()@c -> Protoheme()@c + Hpl()@c + Hpl()@c 0
	R_FDH4pp: Hpl()@c + Hpl()@c + Ubiquinone_8()@c + Formate()@p -> Hpl()@p + CO2()@p + Ubiquinol_8()@c 0
	R_FDH5pp: Menaquinone8()@c + Hpl()@c + Hpl()@c + Formate()@p -> Menaquinol8()@c + Hpl()@p + CO2()@p 0
	R_FDMO: O2()@c + ReducedFMN()@c + Isethionicacid()@c -> Sulfite()@c + H2O()@c + Hpl()@c + Glycolaldehyde()@c + FMN()@c 0
	R_FDMO2: methanesulfonate()@c + O2()@c + ReducedFMN()@c -> Sulfite()@c + H2O()@c + Hpl()@c + FMN()@c + Formaldehyde()@c 0
	R_FDMO3: O2()@c + ReducedFMN()@c + ethanesulfonate()@c -> Sulfite()@c + H2O()@c + Hpl()@c + Acetaldehyde()@c + FMN()@c 0
	R_FDMO4: butanesulfonate()@c + O2()@c + ReducedFMN()@c -> Sulfite()@c + H2O()@c + Hpl()@c + FMN()@c + Butanal()@c 0
	R_FDMO6: sulfoacetate()@c + O2()@c + ReducedFMN()@c -> Sulfite()@c + H2O()@c + Hpl()@c + FMN()@c + Glyoxylate()@c 0
	R_FE2abcpp: H2O()@c + Fe2pl()@p + ATP()@c -> Phosphate()@c + Fe2pl()@c + Hpl()@c + ADP()@c 0
	R_FE2t2pp: Hpl()@p + Fe2pl()@p -> Fe2pl()@c + Hpl()@c 0
	R_FE2t3pp: Hpl()@p + Fe2pl()@c -> Fe2pl()@p + Hpl()@c 0
	R_FE2tex: Fe2pl()@e <-> Fe2pl()@p 0,0
	R_FE2tpp: Fe2pl()@p -> Fe2pl()@c 0
	R_FE3DCITabcpp: H2O()@c + Fe__III__dicitrate()@p + ATP()@c -> Fe3pl()@c + Hpl()@c + ADP()@c + Citrate()@c + Citrate()@c + Phosphate()@c 0
	R_FE3DCITtonex: Hpl()@p + Fe__III__dicitrate()@e -> Fe__III__dicitrate()@p + Hpl()@c 0
	R_FE3DHBZR: ferric2_3_dihydroxybenzoylserine()@c -> Fe3pl()@c + s2_3_dihydroxybenzoylserine()@c 0
	R_FE3DHBZSabcpp: ferric2_3_dihydroxybenzoylserine()@p + H2O()@c + ATP()@c -> Hpl()@c + ferric2_3_dihydroxybenzoylserine()@c + ADP()@c + Phosphate()@c 0
	R_FE3DHBZStonex: Hpl()@p + ferric2_3_dihydroxybenzoylserine()@e -> ferric2_3_dihydroxybenzoylserine()@p + Hpl()@c 0
	R_FE3HOXR1: Fe__III__hydroxamate()@c + Fe__III__hydroxamate()@c + Flavinadeninedinucleotidereduced()@c -> Fe__III__hydoxamate_unloaded()@c + Fe__III__hydoxamate_unloaded()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_FE3HOXR2: Fe__III__hydroxamate()@c + Fe__III__hydroxamate()@c + ReducedFMN()@c -> Fe__III__hydoxamate_unloaded()@c + Fe__III__hydoxamate_unloaded()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + FMN()@c 0
	R_FE3HOXR3: Fe__III__hydroxamate()@c + Fe__III__hydroxamate()@c + Reducedriboflavin()@c -> Fe__III__hydoxamate_unloaded()@c + Fe__III__hydoxamate_unloaded()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Riboflavin()@c 0
	R_FE3HOXUtex: Fe__III__hydoxamate_unloaded()@c + Hpl()@p -> Hpl()@c + Fe__III__hydoxamate_unloaded()@p 0
	R_FE3HOXUtpp: Hpl()@p + Fe__III__hydoxamate_unloaded()@p -> Hpl()@c + Fe__III__hydoxamate_unloaded()@e 0
	R_FE3HOXabcpp: Fe__III__hydroxamate()@p + H2O()@c + ATP()@c -> Hpl()@c + Fe__III__hydroxamate()@c + ADP()@c + Phosphate()@c 0
	R_FE3HOXexs: Fe3pl()@e + Fe__III__hydoxamate_unloaded()@e -> Fe__III__hydroxamate()@e 0
	R_FE3HOXtonex: Hpl()@p + Fe__III__hydroxamate()@e -> Fe__III__hydroxamate()@p + Hpl()@c 0
	R_FE3Ri: Fe3pl()@c + Fe3pl()@c + Flavinadeninedinucleotidereduced()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_FE3abcpp: H2O()@c + Fe3pl()@p + ATP()@c -> Fe3pl()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_FE3tex: Fe3pl()@e <-> Fe3pl()@p 0,0
	R_FECRMR1: Ferrichrome()@c + Ferrichrome()@c + Flavinadeninedinucleotidereduced()@c -> FerrichromeminusFe__III__()@c + FerrichromeminusFe__III__()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_FECRMR2: Ferrichrome()@c + Ferrichrome()@c + ReducedFMN()@c -> FerrichromeminusFe__III__()@c + FerrichromeminusFe__III__()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + FMN()@c 0
	R_FECRMR3: Ferrichrome()@c + Ferrichrome()@c + Reducedriboflavin()@c -> FerrichromeminusFe__III__()@c + FerrichromeminusFe__III__()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Riboflavin()@c 0
	R_FECRMUtex: Hpl()@p + FerrichromeminusFe__III__()@p -> Hpl()@c + FerrichromeminusFe__III__()@e 0
	R_FECRMUtpp: Hpl()@p + FerrichromeminusFe__III__()@c -> FerrichromeminusFe__III__()@p + Hpl()@c 0
	R_FECRMabcpp: H2O()@c + Ferrichrome()@p + ATP()@c -> Phosphate()@c + Ferrichrome()@c + Hpl()@c + ADP()@c 0
	R_FECRMexs: Fe3pl()@e + FerrichromeminusFe__III__()@e -> Ferrichrome()@e 0
	R_FECRMtonex: Hpl()@p + Ferrichrome()@e -> Ferrichrome()@p + Hpl()@c 0
	R_FEENTERR1: Flavinadeninedinucleotidereduced()@c + Fe_enterobactin()@c + Fe_enterobactin()@c -> Enterochelin()@c + Enterochelin()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_FEENTERR2: Fe_enterobactin()@c + Fe_enterobactin()@c + ReducedFMN()@c -> Enterochelin()@c + Enterochelin()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + FMN()@c 0
	R_FEENTERR3: Reducedriboflavin()@c + Fe_enterobactin()@c + Fe_enterobactin()@c -> Enterochelin()@c + Enterochelin()@c + Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Riboflavin()@c 0
	R_FEENTERabcpp: H2O()@c + ATP()@c + Fe_enterobactin()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Fe_enterobactin()@c 0
	R_FEENTERexs: Fe3pl()@e + Enterochelin()@e -> Fe_enterobactin()@e 0
	R_FEENTERtex: Hpl()@p + Enterochelin()@p -> Hpl()@c + Enterochelin()@e 0
	R_FEENTERtonex: Fe_enterobactin()@e + Hpl()@p -> Hpl()@c + Fe_enterobactin()@p 0
	R_FEENTERtpp: Hpl()@p + Enterochelin()@c -> Enterochelin()@p + Hpl()@c 0
	R_FEOXAMR1: ferroxamine()@c + ferroxamine()@c + Flavinadeninedinucleotidereduced()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c + ferroxamineminusFe__3__()@c + ferroxamineminusFe__3__()@c 0
	R_FEOXAMR2: ferroxamine()@c + ferroxamine()@c + ReducedFMN()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + FMN()@c + ferroxamineminusFe__3__()@c + ferroxamineminusFe__3__()@c 0
	R_FEOXAMR3: ferroxamine()@c + ferroxamine()@c + Reducedriboflavin()@c -> Fe2pl()@c + Fe2pl()@c + Hpl()@c + Hpl()@c + Riboflavin()@c + ferroxamineminusFe__3__()@c + ferroxamineminusFe__3__()@c 0
	R_FEOXAMUtex: Hpl()@p + ferroxamineminusFe__3__()@p -> ferroxamineminusFe__3__()@e + Hpl()@c 0
	R_FEOXAMUtpp: Hpl()@p + ferroxamineminusFe__3__()@c -> Hpl()@c + ferroxamineminusFe__3__()@p 0
	R_FEOXAMabcpp: H2O()@c + ferroxamine()@p + ATP()@c -> ferroxamine()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_FEOXAMexs: ferroxamineminusFe__3__()@e + Fe3pl()@e -> ferroxamine()@e 0
	R_FEOXAMtonex: Hpl()@p + ferroxamine()@e -> Hpl()@c + ferroxamine()@p 0
	R_FEROpp: Hpl()@p + Hpl()@p + Hpl()@p + Hpl()@p + Fe2pl()@p + Fe2pl()@p + Fe2pl()@p + Fe2pl()@p + O2()@p -> Fe3pl()@p + Fe3pl()@p + Fe3pl()@p + Fe3pl()@p + H2O()@p + H2O()@p 0
	R_FESD1s: Hpl()@c + Hpl()@c + __4Fe_4S__iron_sulfurcluster()@c + __4Fe_4S__iron_sulfurcluster()@c + Hydrogenperoxide()@c -> H2O()@c + H2O()@c + Fe3pl()@c + Fe3pl()@c + __3Fe_4S__damagediron_sulfurcluster()@c + __3Fe_4S__damagediron_sulfurcluster()@c 0
	R_FESD2s: Hpl()@c + Hpl()@c + __4Fe_4S__iron_sulfurcluster()@c + __4Fe_4S__iron_sulfurcluster()@c + Nitricoxide()@c + Nitricoxide()@c -> H2O()@c + Nitrousoxide()@c + Fe3pl()@c + Fe3pl()@c + __3Fe_4S__damagediron_sulfurcluster()@c + __3Fe_4S__damagediron_sulfurcluster()@c 0
	R_FESR: Fe2pl()@c + __3Fe_4S__damagediron_sulfurcluster()@c -> __4Fe_4S__iron_sulfurcluster()@c 0
	R_FFSD: H2O()@c + Sucrose6_phosphate()@c -> D_Glucose6_phosphate()@c + D_Fructose()@c 0
	R_FHL: Hpl()@c + Formate()@c -> CO2()@c + H2()@c 0
	R_FLDR2: Nicotinamideadeninedinucleotidephosphate_reduced()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c -> Flavodoxinreduced()@c + Flavodoxinreduced()@c + Hpl()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_FLVR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Riboflavin()@c -> Reducedriboflavin()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_FLVRx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Riboflavin()@c -> Reducedriboflavin()@c + Nicotinamideadeninedinucleotide()@c 0
	R_FMETTRS: L_Methionyl_tRNA__Met__()@c + s10_Formyltetrahydrofolate()@c -> Hpl()@c + N_Formylmethionyl_tRNA()@c + s5_6_7_8_Tetrahydrofolate()@c 0
	R_FMNAT: Hpl()@c + ATP()@c + FMN()@c -> Diphosphate()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_FMNRx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + FMN()@c -> Nicotinamideadeninedinucleotide()@c + ReducedFMN()@c 0
	R_FMNRx2: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + FMN()@c -> Nicotinamideadeninedinucleotidephosphate()@c + ReducedFMN()@c 0
	R_FOMETRi: Hpl()@c + s5_Formyltetrahydrofolate()@c -> H2O()@c + s5_10_Methenyltetrahydrofolate()@c 0
	R_FORCT: Oxalate()@c + Formyl_CoA()@c <-> Oxalyl_CoA()@c + Formate()@c 0,0
	R_FORt2pp: Hpl()@p + Formate()@p -> Hpl()@c + Formate()@c 0
	R_FORtex: Formate()@e <-> Formate()@p 0,0
	R_FORtppi: Formate()@c -> Formate()@p 0
	R_FRD2: Menaquinol8()@c + Fumarate()@c -> Menaquinone8()@c + Succinate()@c 0
	R_FRD3: Fumarate()@c + s2_Demethylmenaquinol8()@c -> Succinate()@c + s2_Demethylmenaquinone8()@c 0
	R_FRUK: D_Fructose1_phosphate()@c + ATP()@c -> Hpl()@c + ADP()@c + D_Fructose1_6_bisphosphate()@c 0
	R_FRULYSDG: H2O()@c + fructoselysinePhosphate()@c <-> D_Glucose6_phosphate()@c + L_Lysine()@c 0,0
	R_FRULYSE: psicoselysine()@c <-> fructoselysine()@c 0,0
	R_FRULYSK: fructoselysine()@c + ATP()@c -> ADP()@c + Hpl()@c + fructoselysinePhosphate()@c 0
	R_FRULYSt2pp: Hpl()@p + fructoselysine()@p -> Hpl()@c + fructoselysine()@c 0
	R_FRULYStex: fructoselysine()@e <-> fructoselysine()@p 0,0
	R_FRUURt2rpp: D_Fructuronate()@p + Hpl()@p <-> Hpl()@c + D_Fructuronate()@c 0,0
	R_FRUURtex: D_Fructuronate()@e <-> D_Fructuronate()@p 0,0
	R_FRUpts2pp: Phosphoenolpyruvate()@c + D_Fructose()@p -> Pyruvate()@c + D_Fructose6_phosphate()@c 0
	R_FRUptspp: Phosphoenolpyruvate()@c + D_Fructose()@p -> D_Fructose1_phosphate()@c + Pyruvate()@c 0
	R_FRUtex: D_Fructose()@e <-> D_Fructose()@p 0,0
	R_FTHFD: H2O()@c + s10_Formyltetrahydrofolate()@c -> Hpl()@c + Formate()@c + s5_6_7_8_Tetrahydrofolate()@c 0
	R_FTHFLi: ATP()@c + Formate()@c + s5_6_7_8_Tetrahydrofolate()@c -> Phosphate()@c + ADP()@c + s10_Formyltetrahydrofolate()@c 0
	R_FUCtex: L_Fucose()@e <-> L_Fucose()@p 0,0
	R_FUCtpp: Hpl()@p + L_Fucose()@p <-> L_Fucose()@c + Hpl()@c 0,0
	R_FUM: H2O()@c + Fumarate()@c <-> L_Malate()@c 0,0
	R_FUMt2_2pp: Hpl()@p + Hpl()@p + Fumarate()@p -> Fumarate()@c + Hpl()@c + Hpl()@c 0
	R_FUMt2_3pp: Hpl()@p + Hpl()@p + Hpl()@p + Fumarate()@p -> Fumarate()@c + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_FUMtex: Fumarate()@e <-> Fumarate()@p 0,0
	R_FUSAtex: fusidicacid()@e <-> fusidicacid()@p 0,0
	R_FUSAtpp: Hpl()@p + fusidicacid()@p -> Hpl()@c + fusidicacid()@e 0
	R_G1PACT: Acetyl_CoA()@c + D_Glucosamine1_phosphate()@c -> Hpl()@c + CoenzymeA()@c + N_Acetyl_D_glucosamine1_phosphate()@c 0
	R_G1PPpp: H2O()@p + D_Glucose1_phosphate()@p -> D_Glucose()@p + Phosphate()@p 0
	R_G1PTT: dTTP()@c + Hpl()@c + D_Glucose1_phosphate()@c -> Diphosphate()@c + dTDPglucose()@c 0
	R_G1Ptex: D_Glucose1_phosphate()@e <-> D_Glucose1_phosphate()@p 0,0
	R_G1SAT: L_Glutamate1_semialdehyde()@c <-> s5_Amino_4_oxopentanoate()@c 0,0
	R_G2PP: H2O()@c + Glycerol2_phosphate()@c -> Phosphate()@c + Glycerol()@c 0
	R_G2PPpp: H2O()@p + Glycerol2_phosphate()@p -> Glycerol()@p + Phosphate()@p 0
	R_G3PAT120: Glycerol3_phosphate()@c + Dodecanoyl_ACP__n_C12_0ACP__()@c -> acylcarrierprotein()@c + s1_dodecanoyl_sn_glycerol3_phosphate()@c 0
	R_G3PAT140: Glycerol3_phosphate()@c + Myristoyl_ACP__n_C14_0ACP__()@c -> acylcarrierprotein()@c + s1_tetradecanoyl_sn_glycerol3_phosphate()@c 0
	R_G3PAT141: Glycerol3_phosphate()@c + cis_tetradec_7_enoyl___acyl_carrierprotein____n_C14_1__()@c -> acylcarrierprotein()@c + s1_tetradec_7_enoyl_sn_glycerol3_phosphate()@c 0
	R_G3PAT160: Glycerol3_phosphate()@c + Palmitoyl_ACP__n_C16_0ACP__()@c -> acylcarrierprotein()@c + s1_hexadecanoyl_sn_glycerol3_phosphate()@c 0
	R_G3PAT161: Glycerol3_phosphate()@c + cis_hexadec_9_enoyl___acyl_carrierprotein____n_C16_1__()@c -> acylcarrierprotein()@c + s1_hexadec_9_enoyl_sn_glycerol3_phosphate()@c 0
	R_G3PAT180: Glycerol3_phosphate()@c + Octadecanoyl_ACP__n_C18_0ACP__()@c -> s1_octadecanoyl_sn_glycerol3_phosphate()@c + acylcarrierprotein()@c 0
	R_G3PAT181: cis_octadec_11_enoyl___acyl_carrierprotein____n_C18_1__()@c + Glycerol3_phosphate()@c -> acylcarrierprotein()@c + s1_octadec_11_enoyl_sn_glycerol3_phosphate()@c 0
	R_G3PCabcpp: sn_Glycero_3_phosphocholine()@p + H2O()@c + ATP()@c -> Hpl()@c + sn_Glycero_3_phosphocholine()@c + ADP()@c + Phosphate()@c 0
	R_G3PCtex: sn_Glycero_3_phosphocholine()@e <-> sn_Glycero_3_phosphocholine()@p 0,0
	R_G3PD2: Glycerol3_phosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Dihydroxyacetonephosphate()@c 0,0
	R_G3PD5: Glycerol3_phosphate()@c + Ubiquinone_8()@c -> Dihydroxyacetonephosphate()@c + Ubiquinol_8()@c 0
	R_G3PD6: Glycerol3_phosphate()@c + Menaquinone8()@c -> Menaquinol8()@c + Dihydroxyacetonephosphate()@c 0
	R_G3PD7: Glycerol3_phosphate()@c + s2_Demethylmenaquinone8()@c -> s2_Demethylmenaquinol8()@c + Dihydroxyacetonephosphate()@c 0
	R_G3PEabcpp: H2O()@c + sn_Glycero_3_phosphoethanolamine()@p + ATP()@c -> sn_Glycero_3_phosphoethanolamine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_G3PEtex: sn_Glycero_3_phosphoethanolamine()@e <-> sn_Glycero_3_phosphoethanolamine()@p 0,0
	R_G3PGabcpp: H2O()@c + ATP()@c + Glycerophosphoglycerol()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Glycerophosphoglycerol()@c 0
	R_G3PGtex: Glycerophosphoglycerol()@e <-> Glycerophosphoglycerol()@p 0,0
	R_G3PIabcpp: H2O()@c + ATP()@c + sn_Glycero_3_phospho_1_inositol()@p -> Phosphate()@c + Hpl()@c + ADP()@c + sn_Glycero_3_phospho_1_inositol()@c 0
	R_G3PItex: sn_Glycero_3_phospho_1_inositol()@e <-> sn_Glycero_3_phospho_1_inositol()@p 0,0
	R_G3PSabcpp: Glycerophosphoserine()@p + H2O()@c + ATP()@c -> Glycerophosphoserine()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_G3PStex: Glycerophosphoserine()@e <-> Glycerophosphoserine()@p 0,0
	R_G3PT: H2O()@c + Glycerol3_phosphate()@c -> Phosphate()@c + Glycerol()@c 0
	R_G5SADs: L_Glutamate5_semialdehyde()@c -> H2O()@c + s1_Pyrroline_5_carboxylate()@c + Hpl()@c 0
	R_G5SD: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + L_Glutamate5_phosphate()@c -> Phosphate()@c + L_Glutamate5_semialdehyde()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_G6PDA: H2O()@c + D_Glucosamine6_phosphate()@c -> D_Fructose6_phosphate()@c + Ammonium()@c 0
	R_G6PDH2r: D_Glucose6_phosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s6_phospho_D_glucono_1_5_lactone()@c 0,0
	R_G6PP: H2O()@c + D_Glucose6_phosphate()@c -> Phosphate()@c + D_Glucose()@c 0
	R_G6Pt6_2pp: Phosphate()@c + Phosphate()@c + D_Glucose6_phosphate()@p -> D_Glucose6_phosphate()@c + Phosphate()@p + Phosphate()@p 0
	R_G6Ptex: D_Glucose6_phosphate()@e <-> D_Glucose6_phosphate()@p 0,0
	R_GAL1PPpp: alpha_D_Galactose1_phosphate()@p + H2O()@p -> Phosphate()@p + D_Galactose()@p 0
	R_GAL1Ptex: alpha_D_Galactose1_phosphate()@e <-> alpha_D_Galactose1_phosphate()@p 0,0
	R_GALBDtex: betaD_Galactose()@e <-> betaD_Galactose()@p 0,0
	R_GALCTD: D_Galactarate()@c -> H2O()@c + s5_Dehydro_4_deoxy_D_glucarate()@c 0
	R_GALCTLO: Nicotinamideadeninedinucleotide()@c + L_Galactonate()@c -> D_Tagaturonate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_GALCTND: D_Galactonate()@c -> H2O()@c + s2_Dehydro_3_deoxy_D_galactonate()@c 0
	R_GALCTNLt2pp: Hpl()@p + L_Galactonate()@p -> Hpl()@c + L_Galactonate()@c 0
	R_GALCTNLtex: L_Galactonate()@e <-> L_Galactonate()@p 0,0
	R_GALCTNt2pp: Hpl()@p + D_Galactonate()@p -> Hpl()@c + D_Galactonate()@c 0
	R_GALCTNtex: D_Galactonate()@e <-> D_Galactonate()@p 0,0
	R_GALCTt2rpp: Hpl()@p + D_Galactarate()@p <-> Hpl()@c + D_Galactarate()@c 0,0
	R_GALCTtex: D_Galactarate()@e <-> D_Galactarate()@p 0,0
	R_GALKr: D_Galactose()@c + ATP()@c <-> alpha_D_Galactose1_phosphate()@c + Hpl()@c + ADP()@c 0,0
	R_GALM2pp: betaD_Galactose()@p -> D_Galactose()@p 0
	R_GALS3: H2O()@c + Melibiose()@c -> D_Galactose()@c + D_Glucose()@c 0
	R_GALT1: glucosyl_innercoreoligosaccharidelipidA()@c + UDPglucose()@c -> UDP()@c + Hpl()@c + galactosyl_glucosyl_innercoreoligosaccharidelipidA()@c 0
	R_GALTptspp: Galactitol()@p + Phosphoenolpyruvate()@c -> Pyruvate()@c + Galactitol1_phosphate()@c 0
	R_GALTtex: Galactitol()@e <-> Galactitol()@p 0,0
	R_GALURt2rpp: Hpl()@p + D_Galacturonate()@p <-> D_Galacturonate()@c + Hpl()@c 0,0
	R_GALURtex: D_Galacturonate()@e <-> D_Galacturonate()@p 0,0
	R_GALUi: UTP()@c + Hpl()@c + D_Glucose1_phosphate()@c -> Diphosphate()@c + UDPglucose()@c 0
	R_GALabcpp: H2O()@c + D_Galactose()@p + ATP()@c -> D_Galactose()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_GALt2pp: Hpl()@p + D_Galactose()@p -> D_Galactose()@c + Hpl()@c 0
	R_GALtex: D_Galactose()@e <-> D_Galactose()@p 0,0
	R_GAM6Pt6_2pp: Phosphate()@c + Phosphate()@c + D_Glucosamine6_phosphate()@p -> Phosphate()@p + Phosphate()@p + D_Glucosamine6_phosphate()@c 0
	R_GAMAN6Ptex: D_Glucosamine6_phosphate()@e <-> D_Glucosamine6_phosphate()@p 0,0
	R_GAMptspp: Phosphoenolpyruvate()@c + D_Glucosamine()@p -> Pyruvate()@c + D_Glucosamine6_phosphate()@c 0
	R_GAMtex: D_Glucosamine()@e <-> D_Glucosamine()@p 0,0
	R_GAPD: Phosphate()@c + Nicotinamideadeninedinucleotide()@c + Glyceraldehyde3_phosphate()@c <-> s3_Phospho_D_glyceroylphosphate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_GARFT: N1___5_Phospho_D_ribosyl__glycinamide()@c + s10_Formyltetrahydrofolate()@c <-> Hpl()@c + N2_Formyl_N1___5_phospho_D_ribosyl__glycinamide()@c + s5_6_7_8_Tetrahydrofolate()@c 0,0
	R_GART: ATP()@c + N1___5_Phospho_D_ribosyl__glycinamide()@c + Formate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + N2_Formyl_N1___5_phospho_D_ribosyl__glycinamide()@c 0
	R_GBBTNtex: gamma_butyrobetaine()@e <-> gamma_butyrobetaine()@p 0,0
	R_GCALDD: H2O()@c + Glycolaldehyde()@c + Nicotinamideadeninedinucleotide()@c -> Glycolate()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_GDMANE: GDP_4_dehydro_6_deoxy_D_mannose()@c -> GDP_4_oxo_L_fucose()@c 0
	R_GDPDPK: ATP()@c + GDP()@c -> Hpl()@c + Guanosine3_5_bis__diphosphate__()@c + AMP()@c 0
	R_GDPMNH: GDP_D_mannose()@c + H2O()@c -> Hpl()@c + D_Mannose()@c + GDP()@c 0
	R_GDPMNP: GDP_D_mannose()@c + H2O()@c -> GMP()@c + Hpl()@c + Hpl()@c + D_Mannose1_phosphate()@c 0
	R_GDPTPDP: H2O()@c + Guanosine3_diphosphate5_triphosphate()@c -> Diphosphate()@c + GTP()@c 0
	R_GDPtex: GDP()@e <-> GDP()@p 0,0
	R_GF6PTA: L_Glutamine()@c + D_Fructose6_phosphate()@c -> L_Glutamate()@c + D_Glucosamine6_phosphate()@c 0
	R_GGGABADr: H2O()@c + gamma_glutamyl_gamma_butyraldehyde()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> gamma_glutamyl_gammaaminobutyricacid()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c 0,0
	R_GGGABAH: H2O()@c + gamma_glutamyl_gammaaminobutyricacid()@c -> L_Glutamate()@c + s4_Aminobutanoate()@c 0
	R_GGPTRCO: H2O()@c + O2()@c + gamma_glutamyl_putrescine()@c -> Ammonium()@c + gamma_glutamyl_gamma_butyraldehyde()@c + Hydrogenperoxide()@c 0
	R_GGPTRCS: L_Glutamate()@c + ATP()@c + Putrescine()@c -> Phosphate()@c + Hpl()@c + ADP()@c + gamma_glutamyl_putrescine()@c 0
	R_GHBDHx: Succinicsemialdehyde()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> Nicotinamideadeninedinucleotide()@c + gamma_hydroxybutyrate()@c 0,0
	R_GHMT2r: L_Serine()@c + s5_6_7_8_Tetrahydrofolate()@c <-> H2O()@c + s5_10_Methylenetetrahydrofolate()@c + Glycine()@c 0,0
	R_GK1: GMP()@c + ATP()@c <-> ADP()@c + GDP()@c 0,0
	R_GLBRAN2: glycogen()@c -> branchingglycogen()@c 0
	R_GLCATr: Acetyl_CoA()@c + D_Glucose()@c <-> s6_Acetyl_D_glucose()@c + CoenzymeA()@c 0,0
	R_GLCDpp: D_Glucose()@p + H2O()@p + Ubiquinone_8()@c -> Hpl()@p + Ubiquinol_8()@c + D_Gluconate()@p 0
	R_GLCNt2rpp: Hpl()@p + D_Gluconate()@p <-> Hpl()@c + D_Gluconate()@c 0,0
	R_GLCNtex: D_Gluconate()@e <-> D_Gluconate()@p 0,0
	R_GLCP: glycogen()@c + Phosphate()@c -> D_Glucose1_phosphate()@c 0
	R_GLCP2: Phosphate()@c + branchingglycogen()@c -> D_Glucose1_phosphate()@c 0
	R_GLCRAL: s5_Dehydro_4_deoxy_D_glucarate()@c -> Pyruvate()@c + s2_Hydroxy_3_oxopropanoate()@c 0
	R_GLCRD: D_Glucarate()@c -> H2O()@c + s5_Dehydro_4_deoxy_D_glucarate()@c 0
	R_GLCRt2rpp: Hpl()@p + D_Glucarate()@p <-> D_Glucarate()@c + Hpl()@c 0,0
	R_GLCRtex: D_Glucarate()@e <-> D_Glucarate()@p 0,0
	R_GLCS1: ADPglucose()@c -> glycogen()@c + Hpl()@c + ADP()@c 0
	R_GLCTR1: UDPglucose()@c + innercoreoligosaccharidelipidA__Ecoli__()@c -> UDP()@c + glucosyl_innercoreoligosaccharidelipidA()@c + Hpl()@c 0
	R_GLCTR2: UDPglucose()@c + galactosyl_glucosyl_innercoreoligosaccharidelipidA()@c -> UDP()@c + glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA()@c + Hpl()@c 0
	R_GLCTR3: glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA()@c + UDPglucose()@c -> UDP()@c + glucosyl_glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA()@c + Hpl()@c 0
	R_GLCUR1Ptex: D_Glucuronate1_phosphate()@e <-> D_Glucuronate1_phosphate()@p 0,0
	R_GLCURt2rpp: Hpl()@p + D_Glucuronate()@p <-> D_Glucuronate()@c + Hpl()@c 0,0
	R_GLCURtex: D_Glucuronate()@e <-> D_Glucuronate()@p 0,0
	R_GLCabcpp: H2O()@c + D_Glucose()@p + ATP()@c -> Phosphate()@c + D_Glucose()@c + Hpl()@c + ADP()@c 0
	R_GLCptspp: D_Glucose()@p + Phosphoenolpyruvate()@c -> D_Glucose6_phosphate()@c + Pyruvate()@c 0
	R_GLCt2pp: Hpl()@p + D_Glucose()@p -> D_Glucose()@c + Hpl()@c 0
	R_GLCtex: D_Glucose()@e <-> D_Glucose()@p 0,0
	R_GLCtexi: D_Glucose()@e -> D_Glucose()@p 0
	R_GLDBRAN2: branchingglycogen()@c -> glycogen()@c 0
	R_GLGC: Hpl()@c + ATP()@c + D_Glucose1_phosphate()@c -> Diphosphate()@c + ADPglucose()@c 0
	R_GLNS: L_Glutamate()@c + ATP()@c + Ammonium()@c -> Phosphate()@c + Hpl()@c + ADP()@c + L_Glutamine()@c 0
	R_GLNTRS: tRNA__Gln__()@c + ATP()@c + L_Glutamine()@c -> Diphosphate()@c + L_Glutaminyl_tRNA__Gln__()@c + AMP()@c 0
	R_GLNabcpp: H2O()@c + ATP()@c + L_Glutamine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Glutamine()@c 0
	R_GLNtex: L_Glutamine()@e <-> L_Glutamine()@p 0,0
	R_GLTPD: Nicotinamideadeninedinucleotide()@c + Galactitol1_phosphate()@c <-> D_Tagatose6_phosphate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_GLU5K: L_Glutamate()@c + ATP()@c -> L_Glutamate5_phosphate()@c + ADP()@c 0
	R_GLUABUTt7pp: s4_Aminobutanoate()@c + L_Glutamate()@p <-> L_Glutamate()@c + s4_Aminobutanoate()@p 0,0
	R_GLUCYS: L_Glutamate()@c + L_Cysteine()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + gamma_L_Glutamyl_L_cysteine()@c 0
	R_GLUDC: L_Glutamate()@c + Hpl()@c -> CO2()@c + s4_Aminobutanoate()@c 0
	R_GLUDy: L_Glutamate()@c + H2O()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_Oxoglutarate()@c + Ammonium()@c 0,0
	R_GLUN: H2O()@c + L_Glutamine()@c -> L_Glutamate()@c + Ammonium()@c 0
	R_GLUNpp: H2O()@p + L_Glutamine()@p -> L_Glutamate()@p + Ammonium()@p 0
	R_GLUPRT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + H2O()@c + L_Glutamine()@c -> L_Glutamate()@c + Diphosphate()@c + s5_Phospho_beta_D_ribosylamine()@c 0
	R_GLUR: D_Glutamate()@c <-> L_Glutamate()@c 0,0
	R_GLUSy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + L_Glutamine()@c + s2_Oxoglutarate()@c -> L_Glutamate()@c + L_Glutamate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_GLUTRR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + L_Glutamyl_tRNA__Glu__()@c -> tRNA__Glu__()@c + Nicotinamideadeninedinucleotidephosphate()@c + L_Glutamate1_semialdehyde()@c 0
	R_GLUTRS: L_Glutamate()@c + ATP()@c + tRNA__Glu__()@c -> Diphosphate()@c + L_Glutamyl_tRNA__Glu__()@c + AMP()@c 0
	R_GLUabcpp: H2O()@c + L_Glutamate()@p + ATP()@c -> L_Glutamate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_GLUt2rpp: Hpl()@p + L_Glutamate()@p <-> L_Glutamate()@c + Hpl()@c 0,0
	R_GLUt4pp: Sodium()@p + L_Glutamate()@p -> L_Glutamate()@c + Sodium()@c 0
	R_GLUtex: L_Glutamate()@e <-> L_Glutamate()@p 0,0
	R_GLXCL: Hpl()@c + Glyoxylate()@c + Glyoxylate()@c -> CO2()@c + s2_Hydroxy_3_oxopropanoate()@c 0
	R_GLYALDtex: D_Glyceraldehyde()@e <-> D_Glyceraldehyde()@p 0,0
	R_GLYALDtpp: D_Glyceraldehyde()@p <-> D_Glyceraldehyde()@c 0,0
	R_GLYAT: Acetyl_CoA()@c + Glycine()@c <-> CoenzymeA()@c + L_2_Amino_3_oxobutanoate()@c 0,0
	R_GLYBabcpp: H2O()@c + Glycinebetaine()@p + ATP()@c -> Phosphate()@c + Glycinebetaine()@c + Hpl()@c + ADP()@c 0
	R_GLYBt2pp: Hpl()@p + Glycinebetaine()@p -> Glycinebetaine()@c + Hpl()@c 0
	R_GLYBtex: Glycinebetaine()@e <-> Glycinebetaine()@p 0,0
	R_GLYC2Pabcpp: H2O()@c + ATP()@c + Glycerol2_phosphate()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Glycerol2_phosphate()@c 0
	R_GLYC2Ptex: Glycerol2_phosphate()@e <-> Glycerol2_phosphate()@p 0,0
	R_GLYC3Pabcpp: H2O()@c + Glycerol3_phosphate()@p + ATP()@c -> Glycerol3_phosphate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_GLYC3Pt6pp: Phosphate()@c + Glycerol3_phosphate()@p -> Glycerol3_phosphate()@c + Phosphate()@p 0
	R_GLYC3Ptex: Glycerol3_phosphate()@e <-> Glycerol3_phosphate()@p 0,0
	R_GLYCAt2rpp: Hpl()@p + __R___Glycerate()@p <-> Hpl()@c + __R___Glycerate()@c 0,0
	R_GLYCAtex: __R___Glycerate()@e <-> __R___Glycerate()@p 0,0
	R_GLYCDx: Glycerol()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Dihydroxyacetone()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_GLYCK: ATP()@c + __R___Glycerate()@c -> Hpl()@c + ADP()@c + s3_Phospho_D_glycerate()@c 0
	R_GLYCK2: ATP()@c + __R___Glycerate()@c -> D_Glycerate2_phosphate()@c + Hpl()@c + ADP()@c 0
	R_GLYCL: s5_6_7_8_Tetrahydrofolate()@c + Nicotinamideadeninedinucleotide()@c + Glycine()@c -> s5_10_Methylenetetrahydrofolate()@c + CO2()@c + Nicotinamideadeninedinucleotide_reduced()@c + Ammonium()@c 0
	R_GLYCLTDx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Glyoxylate()@c -> Glycolate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_GLYCLTDy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Glyoxylate()@c -> Glycolate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_GLYCLTt2rpp: Hpl()@p + Glycolate()@p <-> Glycolate()@c + Hpl()@c 0,0
	R_GLYCLTt4pp: Glycolate()@p + Sodium()@p -> Sodium()@c + Glycolate()@c 0
	R_GLYCLTtex: Glycolate()@e <-> Glycolate()@p 0,0
	R_GLYCTO2: Glycolate()@c + Ubiquinone_8()@c -> Glyoxylate()@c + Ubiquinol_8()@c 0
	R_GLYCTO3: Glycolate()@c + Menaquinone8()@c -> Menaquinol8()@c + Glyoxylate()@c 0
	R_GLYCTO4: Glycolate()@c + s2_Demethylmenaquinone8()@c -> s2_Demethylmenaquinol8()@c + Glyoxylate()@c 0
	R_GLYCtex: Glycerol()@e <-> Glycerol()@p 0,0
	R_GLYCtpp: Glycerol()@c <-> Glycerol()@p 0,0
	R_GLYK: Glycerol()@c + ATP()@c -> Glycerol3_phosphate()@c + Hpl()@c + ADP()@c 0
	R_GLYOX: H2O()@c + __R___S_Lactoylglutathione()@c -> Reducedglutathione()@c + Hpl()@c + D_Lactate()@c 0
	R_GLYOX3: H2O()@c + Methylglyoxal()@c -> Hpl()@c + D_Lactate()@c 0
	R_GLYTRS: tRNA__Gly__()@c + ATP()@c + Glycine()@c -> Diphosphate()@c + Glycyl_tRNA__Gly__()@c + AMP()@c 0
	R_GLYt2pp: Hpl()@p + Glycine()@p -> Hpl()@c + Glycine()@c 0
	R_GLYt2rpp: Hpl()@p + Glycine()@p <-> Hpl()@c + Glycine()@c 0,0
	R_GLYt4pp: Sodium()@p + Glycine()@p -> Sodium()@c + Glycine()@c 0
	R_GLYtex: Glycine()@e <-> Glycine()@p 0,0
	R_GMAND: GDP_D_mannose()@c -> H2O()@c + GDP_4_dehydro_6_deoxy_D_mannose()@c 0
	R_GMHEPAT: D_Glycero_D_manno_heptose1_phosphate()@c + Hpl()@c + ATP()@c -> Diphosphate()@c + ADP_D_glycero_D_manno_heptose()@c 0
	R_GMHEPK: ATP()@c + D_Glycero_D_manno_heptose7_phosphate()@c -> D_Glycero_D_manno_heptose1_7_bisphosphate()@c + Hpl()@c + ADP()@c 0
	R_GMHEPPA: H2O()@c + D_Glycero_D_manno_heptose1_7_bisphosphate()@c -> D_Glycero_D_manno_heptose1_phosphate()@c + Phosphate()@c 0
	R_GMPR: GMP()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c -> IMP()@c + Nicotinamideadeninedinucleotidephosphate()@c + Ammonium()@c 0
	R_GMPS2: H2O()@c + Xanthosine5_phosphate()@c + ATP()@c + L_Glutamine()@c -> L_Glutamate()@c + Diphosphate()@c + Hpl()@c + Hpl()@c + GMP()@c + AMP()@c 0
	R_GMPtex: GMP()@e <-> GMP()@p 0,0
	R_GND: Nicotinamideadeninedinucleotidephosphate()@c + s6_Phospho_D_gluconate()@c -> CO2()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + D_Ribulose5_phosphate()@c 0
	R_GNK: D_Gluconate()@c + ATP()@c -> Hpl()@c + ADP()@c + s6_Phospho_D_gluconate()@c 0
	R_GOFUCR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + GDP_4_oxo_L_fucose()@c -> GDP_L_fucose()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_GP4GH: H2O()@c + P1_P4_Bis__5_guanosyl__tetraphosphate()@c -> Hpl()@c + Hpl()@c + GDP()@c + GDP()@c 0
	R_GPDDA1: H2O()@c + sn_Glycero_3_phosphocholine()@c -> Glycerol3_phosphate()@c + Hpl()@c + Choline()@c 0
	R_GPDDA1pp: sn_Glycero_3_phosphocholine()@p + H2O()@p -> Hpl()@p + Glycerol3_phosphate()@p + Choline()@p 0
	R_GPDDA2: H2O()@c + sn_Glycero_3_phosphoethanolamine()@c -> Ethanolamine()@c + Glycerol3_phosphate()@c + Hpl()@c 0
	R_GPDDA2pp: sn_Glycero_3_phosphoethanolamine()@p + H2O()@p -> Hpl()@p + Glycerol3_phosphate()@p + Ethanolamine()@p 0
	R_GPDDA3: H2O()@c + Glycerophosphoserine()@c -> Glycerol3_phosphate()@c + L_Serine()@c + Hpl()@c 0
	R_GPDDA3pp: Glycerophosphoserine()@p + H2O()@p -> Hpl()@p + Glycerol3_phosphate()@p + L_Serine()@p 0
	R_GPDDA4: H2O()@c + Glycerophosphoglycerol()@c -> Glycerol3_phosphate()@c + Hpl()@c + Glycerol()@c 0
	R_GPDDA4pp: H2O()@p + Glycerophosphoglycerol()@p -> Glycerol()@p + Hpl()@p + Glycerol3_phosphate()@p 0
	R_GPDDA5: H2O()@c + sn_Glycero_3_phospho_1_inositol()@c -> Glycerol3_phosphate()@c + myo_Inositol()@c + Hpl()@c 0
	R_GPDDA5pp: H2O()@p + sn_Glycero_3_phospho_1_inositol()@p -> Hpl()@p + myo_Inositol()@p + Glycerol3_phosphate()@p 0
	R_GRTT: Geranyldiphosphate()@c + Isopentenyldiphosphate()@c -> Diphosphate()@c + Farnesyldiphosphate()@c 0
	R_GRXR: Reducedglutathione()@c + Reducedglutathione()@c + glutaredoxin__oxidized__()@c -> glutaredoxin__reduced__()@c + Oxidizedglutathione()@c 0
	R_GSNK: ATP()@c + Guanosine()@c -> GMP()@c + Hpl()@c + ADP()@c 0
	R_GSNt2pp: Hpl()@p + Guanosine()@p -> Hpl()@c + Guanosine()@c 0
	R_GSNtex: Guanosine()@e <-> Guanosine()@p 0,0
	R_GSPMDA: H2O()@c + Glutathionylspermidine()@c -> Reducedglutathione()@c + Spermidine()@c 0
	R_GSPMDS: ATP()@c + Reducedglutathione()@c + Spermidine()@c -> Hpl()@c + Glutathionylspermidine()@c + ADP()@c + Phosphate()@c 0
	R_GTHOXtex: Oxidizedglutathione()@e <-> Oxidizedglutathione()@p 0,0
	R_GTHOr: Oxidizedglutathione()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c <-> Reducedglutathione()@c + Reducedglutathione()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_GTHPi: Reducedglutathione()@c + Reducedglutathione()@c + Hydrogenperoxide()@c -> H2O()@c + H2O()@c + Oxidizedglutathione()@c 0
	R_GTHRDHpp: Reducedglutathione()@p + H2O()@p -> Cys_Gly()@p + L_Glutamate()@p 0
	R_GTHRDabc2pp: H2O()@c + Reducedglutathione()@c + ATP()@c -> Reducedglutathione()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_GTHRDabcpp: H2O()@c + Reducedglutathione()@p + ATP()@c -> Phosphate()@c + Reducedglutathione()@c + Hpl()@c + ADP()@c 0
	R_GTHRDtex: Reducedglutathione()@e <-> Reducedglutathione()@p 0,0
	R_GTHS: gamma_L_Glutamyl_L_cysteine()@c + ATP()@c + Glycine()@c -> Phosphate()@c + Reducedglutathione()@c + Hpl()@c + ADP()@c 0
	R_GTPCI: H2O()@c + GTP()@c -> s2_Amino_4_hydroxy_6___erythro_1_2_3_trihydroxypropyl__dihydropteridinetriphosphate()@c + Hpl()@c + Formate()@c 0
	R_GTPCII2: H2O()@c + H2O()@c + H2O()@c + GTP()@c -> Diphosphate()@c + Hpl()@c + Hpl()@c + Formate()@c + s2_5_Diamino_6___ribosylamino___4___3H___pyrimidinone5_phosphate()@c 0
	R_GTPDPDP: H2O()@c + Guanosine3_diphosphate5_triphosphate()@c -> Phosphate()@c + Hpl()@c + Guanosine3_5_bis__diphosphate__()@c 0
	R_GTPDPK: ATP()@c + GTP()@c -> Hpl()@c + Guanosine3_diphosphate5_triphosphate()@c + AMP()@c 0
	R_GTPHs: H2O()@c + Hpl()@c + GTP()@c -> XTP()@c + Ammonium()@c 0
	R_GTPtex: GTP()@e <-> GTP()@p 0,0
	R_GUACYC: GTP()@c -> Diphosphate()@c + s3_5_CyclicGMP()@c 0
	R_GUAD: H2O()@c + Guanine()@c + Hpl()@c -> Xanthine()@c + Ammonium()@c 0
	R_GUAPRT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Guanine()@c -> Diphosphate()@c + GMP()@c 0
	R_GUAt2pp: Hpl()@p + Guanine()@p -> Guanine()@c + Hpl()@c 0
	R_GUAtex: Guanine()@e <-> Guanine()@p 0,0
	R_GUAtpp: Guanine()@p <-> Guanine()@c 0,0
	R_GUI1: D_Glucuronate()@c <-> D_Fructuronate()@c 0,0
	R_GUI2: D_Galacturonate()@c <-> D_Tagaturonate()@c 0,0
	R_GUR1PPpp: D_Glucuronate1_phosphate()@p + H2O()@p -> D_Glucuronate()@p + Phosphate()@p 0
	R_H2O2tex: Hydrogenperoxide()@e <-> Hydrogenperoxide()@p 0,0
	R_H2Otex: H2O()@e <-> H2O()@p 0,0
	R_H2Otpp: H2O()@p <-> H2O()@c 0,0
	R_H2SO: O2()@c + O2()@c + Hydrogensulfide()@c -> Hpl()@c + Hpl()@c + Sulfate()@c 0
	R_H2St1pp: Hydrogensulfide()@c -> Hydrogensulfide()@p 0
	R_H2Stex: Hydrogensulfide()@e <-> Hydrogensulfide()@p 0,0
	R_H2tex: H2()@e <-> H2()@p 0,0
	R_H2tpp: H2()@p <-> H2()@c 0,0
	R_HACD1: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Acetoacetyl_CoA()@c <-> __S___3_Hydroxybutanoyl_CoA()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_HACD2: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s3_Oxohexanoyl_CoA()@c <-> __S___3_Hydroxyhexanoyl_CoA()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_HACD3: Hpl()@c + s3_Oxooctanoyl_CoA()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> Nicotinamideadeninedinucleotide()@c + __S___3_Hydroxyoctanoyl_CoA()@c 0,0
	R_HACD4: s3_Oxodecanoyl_CoA()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> Nicotinamideadeninedinucleotide()@c + __S___3_Hydroxydecanoyl_CoA()@c 0,0
	R_HACD5: s3_Oxododecanoyl_CoA()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> __S___3_Hydroxydodecanoyl_CoA()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_HACD6: s3_Oxotetradecanoyl_CoA()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> __S___3_Hydroxytetradecanoyl_CoA()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_HACD7: Hpl()@c + s3_Oxohexadecanoyl_CoA()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> Nicotinamideadeninedinucleotide()@c + __S___3_Hydroxyhexadecanoyl_CoA()@c 0,0
	R_HACD8: s3_Oxooctadecanoyl_CoA()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> __S___3_Hydroxyoctadecanoyl_CoA()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_HADPCOADH3: Nicotinamideadeninedinucleotide()@c + __3S___3_Hydroxyadipyl_CoA()@c <-> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s3_Oxoadipyl_CoA()@c 0,0
	R_HBZOPT: all_trans_Octaprenyldiphosphate()@c + s4_Hydroxybenzoate()@c -> Diphosphate()@c + s3_Octaprenyl_4_hydroxybenzoate()@c 0
	R_HCINNMt2rpp: Hpl()@p + s3_hydroxycinnamicacid()@p <-> Hpl()@c + s3_hydroxycinnamicacid()@c 0,0
	R_HCINNMtex: s3_hydroxycinnamicacid()@e <-> s3_hydroxycinnamicacid()@p 0,0
	R_HCO3E: H2O()@c + CO2()@c <-> Hpl()@c + Bicarbonate()@c 0,0
	R_HCYSMT: L_Homocysteine()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + L_Methionine()@c + S_Adenosyl_L_homocysteine()@c 0
	R_HCYSMT2: L_Homocysteine()@c + S_Methyl_L_methionine()@c -> Hpl()@c + L_Methionine()@c + L_Methionine()@c 0
	R_HDCAtexi: Hexadecanoate__n_C16_0__()@e -> Hexadecanoate__n_C16_0__()@p 0
	R_HDCEAtexi: Hexadecenoate__n_C16_1__()@e -> Hexadecenoate__n_C16_1__()@p 0
	R_HEMEOS: H2O()@c + Protoheme()@c + Farnesyldiphosphate()@c -> Diphosphate()@c + HemeO()@c 0
	R_HEPK1: heptosyl_heptosyl_kdo2_lipidA()@c + ATP()@c -> phospho_heptosyl_heptosyl_kdo2_lipidA()@c + Hpl()@c + ADP()@c 0
	R_HEPK2: ATP()@c + heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()@c -> Hpl()@c + ADP()@c + phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()@c 0
	R_HEPT1: KDO__2___lipid__A__()@c + ADP_L_glycero_D_manno_heptose()@c -> Hpl()@c + heptosyl_kdo2_lipidA()@c + ADP()@c 0
	R_HEPT2: heptosyl_kdo2_lipidA()@c + ADP_L_glycero_D_manno_heptose()@c -> heptosyl_heptosyl_kdo2_lipidA()@c + Hpl()@c + ADP()@c 0
	R_HEPT3: phospho_heptosyl_heptosyl_kdo2_lipidA()@c + ADP_L_glycero_D_manno_heptose()@c -> Hpl()@c + ADP()@c + heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()@c 0
	R_HEPT4: glucosyl_glucosyl_galactosyl_glucosyl_innercoreoligosaccharidelipidA()@c + ADP_L_glycero_D_manno_heptose()@c -> coreoligosaccharidelipidA()@c + Hpl()@c + ADP()@c 0
	R_HETZK: s4_Methyl_5___2_hydroxyethyl___thiazole()@c + ATP()@c -> s4_Methyl_5___2_phosphoethyl___thiazole()@c + Hpl()@c + ADP()@c 0
	R_HEX1: D_Glucose()@c + ATP()@c -> D_Glucose6_phosphate()@c + Hpl()@c + ADP()@c 0
	R_HEX4: ATP()@c + D_Mannose()@c -> Hpl()@c + ADP()@c + D_Mannose6_phosphate()@c 0
	R_HEX7: D_Fructose()@c + ATP()@c -> Hpl()@c + ADP()@c + D_Fructose6_phosphate()@c 0
	R_HEXt2rpp: Hpl()@p + Hexanoate__n_C6_0__()@p <-> Hexanoate__n_C6_0__()@c + Hpl()@c 0,0
	R_HG2abcpp: H2O()@c + Hg2pl()@c + ATP()@c -> Hg2pl()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_HG2t3pp: Hpl()@p + Hg2pl()@c -> Hg2pl()@p + Hpl()@c 0
	R_HG2tex: Hg2pl()@e <-> Hg2pl()@p 0,0
	R_HISTD: H2O()@c + Nicotinamideadeninedinucleotide()@c + Nicotinamideadeninedinucleotide()@c + L_Histidinol()@c -> L_Histidine()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_HISTP: H2O()@c + L_Histidinolphosphate()@c -> Phosphate()@c + L_Histidinol()@c 0
	R_HISTRS: L_Histidine()@c + ATP()@c + tRNA__His__()@c -> Diphosphate()@c + L_Histidyl_tRNA__His__()@c + AMP()@c 0
	R_HISabcpp: H2O()@c + L_Histidine()@p + ATP()@c -> Phosphate()@c + L_Histidine()@c + Hpl()@c + ADP()@c 0
	R_HISt2rpp: Hpl()@p + L_Histidine()@p <-> L_Histidine()@c + Hpl()@c 0,0
	R_HIStex: L_Histidine()@e <-> L_Histidine()@p 0,0
	R_HKNDDH: H2O()@c + s2_Hydroxy_6_oxonona_2_4_diene_1_9_dioate()@c -> s2_Oxopent_4_enoate()@c + Hpl()@c + Succinate()@c 0
	R_HKNTDH: H2O()@c + s2_hydroxy_6_ketononatrienedioate()@c -> s2_Oxopent_4_enoate()@c + Hpl()@c + Fumarate()@c 0
	R_HMBS: H2O()@c + Porphobilinogen()@c + Porphobilinogen()@c + Porphobilinogen()@c + Porphobilinogen()@c -> Hydroxymethylbilane()@c + Ammonium()@c + Ammonium()@c + Ammonium()@c + Ammonium()@c 0
	R_HMPK1: ATP()@c + s4_Amino_5_hydroxymethyl_2_methylpyrimidine()@c -> ADP()@c + Hpl()@c + s4_Amino_2_methyl_5_phosphomethylpyrimidine()@c 0
	R_HOMt2pp: Hpl()@p + L_Homoserine()@c -> L_Homoserine()@p + Hpl()@c 0
	R_HOMtex: L_Homoserine()@e <-> L_Homoserine()@p 0,0
	R_HOPNTAL: s4_Hydroxy_2_oxopentanoate()@c -> Pyruvate()@c + Acetaldehyde()@c 0
	R_HPPK2: s6_hydroxymethyldihydropterin()@c + ATP()@c -> s6_hydroxymethyl_dihydropterinpyrophosphate()@c + Hpl()@c + AMP()@c 0
	R_HPPPNDO: s3___2_3_Dihydroxyphenyl__propanoate()@c + O2()@c -> Hpl()@c + s2_Hydroxy_6_oxonona_2_4_diene_1_9_dioate()@c 0
	R_HPPPNt2rpp: Hpl()@p + s3___3_hydroxy_phenyl__propionate()@p <-> Hpl()@c + s3___3_hydroxy_phenyl__propionate()@c 0,0
	R_HPPPNtex: s3___3_hydroxy_phenyl__propionate()@e <-> s3___3_hydroxy_phenyl__propionate()@p 0,0
	R_HPYRI: Hydroxypyruvate()@c <-> s2_Hydroxy_3_oxopropanoate()@c 0,0
	R_HPYRRx: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Hydroxypyruvate()@c -> Nicotinamideadeninedinucleotide()@c + __R___Glycerate()@c 0
	R_HPYRRy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hydroxypyruvate()@c -> Nicotinamideadeninedinucleotidephosphate()@c + __R___Glycerate()@c 0
	R_HSDy: L_Homoserine()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + L_Aspartate4_semialdehyde()@c 0,0
	R_HSK: L_Homoserine()@c + ATP()@c -> Hpl()@c + ADP()@c + O_Phospho_L_homoserine()@c 0
	R_HSST: L_Homoserine()@c + Succinyl_CoA()@c -> O_Succinyl_L_homoserine()@c + CoenzymeA()@c 0
	R_HSTPT: L_Glutamate()@c + s3___Imidazol_4_yl___2_oxopropylphosphate()@c -> s2_Oxoglutarate()@c + L_Histidinolphosphate()@c 0
	R_HXAND: H2O()@c + Hypoxanthine()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Xanthine()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_HXAtex: Hexanoate__n_C6_0__()@e <-> Hexanoate__n_C6_0__()@p 0,0
	R_HXCT: Acetyl_CoA()@c + Hexanoate__n_C6_0__()@c -> Hexanoyl_CoA__n_C6_0CoA__()@c + Acetate()@c 0
	R_HXPRT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Hypoxanthine()@c -> Diphosphate()@c + IMP()@c 0
	R_HYD1pp: Hpl()@c + Hpl()@c + H2()@c + Ubiquinone_8()@c -> Hpl()@p + Hpl()@p + Ubiquinol_8()@c 0
	R_HYD2pp: Menaquinone8()@c + Hpl()@c + Hpl()@c + H2()@c -> Menaquinol8()@c + Hpl()@p + Hpl()@p 0
	R_HYD3pp: Hpl()@c + Hpl()@c + H2()@c + s2_Demethylmenaquinone8()@c -> Hpl()@p + Hpl()@p + s2_Demethylmenaquinol8()@c 0
	R_HYPOE: H2O()@c + Pyridoxamine5_phosphate()@c -> Phosphate()@c + Pyridoxamine()@c 0
	R_HYXNtex: Hypoxanthine()@e <-> Hypoxanthine()@p 0,0
	R_HYXNtpp: Hypoxanthine()@p <-> Hypoxanthine()@c 0,0
	R_Htex: Hpl()@e <-> Hpl()@p 0,0
	R_I2FE2SR: IscUscaffoldprotein()@c + __2Fe_1S__desulfuratediron_sulfurcluster()@c + IscSwithboundsulfur()@c -> IscSsulfuracceptorprotein()@c + IscUwithbound__2Fe_2S__cluster()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_I2FE2SS: Fe2pl()@c + Fe2pl()@c + Flavinadeninedinucleotidereduced()@c + IscUscaffoldprotein()@c + IscSwithboundsulfur()@c + IscSwithboundsulfur()@c -> IscSsulfuracceptorprotein()@c + IscSsulfuracceptorprotein()@c + IscUwithbound__2Fe_2S__cluster()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_I2FE2SS2: Fe2pl()@c + Fe2pl()@c + IscUwithbound__2Fe_2S__cluster()@c + Flavinadeninedinucleotidereduced()@c + IscSwithboundsulfur()@c + IscSwithboundsulfur()@c -> IscSsulfuracceptorprotein()@c + IscSsulfuracceptorprotein()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotideoxidized()@c + IscUwithtwobound__2Fe_2S__clusters()@c 0
	R_I2FE2ST: IscUwithbound__2Fe_2S__cluster()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c -> IscUscaffoldprotein()@c + __2Fe_2S__iron_sulfurcluster()@c 0
	R_I4FE4SR: Hpl()@c + Hpl()@c + Flavinadeninedinucleotidereduced()@c + IscUwithtwobound__2Fe_2S__clusters()@c -> IscUwithbound__4Fe_4S__cluster()@c + Flavinadeninedinucleotideoxidized()@c 0
	R_I4FE4ST: Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + IscUwithbound__4Fe_4S__cluster()@c -> IscUscaffoldprotein()@c + __4Fe_4S__iron_sulfurcluster()@c 0
	R_ICDHyr: Isocitrate()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> CO2()@c + s2_Oxoglutarate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c 0,0
	R_ICHORS: chorismate()@c <-> Isochorismate()@c 0,0
	R_ICHORSi: chorismate()@c -> Isochorismate()@c 0
	R_ICHORT: H2O()@c + Isochorismate()@c -> Pyruvate()@c + s2_3_Dihydro_2_3_dihydroxybenzoate()@c 0
	R_ICL: Isocitrate()@c -> Succinate()@c + Glyoxylate()@c 0
	R_ICYSDS: IscSsulfuracceptorprotein()@c + L_Cysteine()@c -> L_Alanine()@c + IscSwithboundsulfur()@c 0
	R_IDOND: s5_Dehydro_D_gluconate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> L_Idonate()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_IDOND2: s5_Dehydro_D_gluconate()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> L_Idonate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_IDONt2rpp: L_Idonate()@p + Hpl()@p <-> Hpl()@c + L_Idonate()@c 0,0
	R_IDONtex: L_Idonate()@e <-> L_Idonate()@p 0,0
	R_IG3PS: s5_____5_phospho_1_deoxyribulos_1_ylamino__methylideneamino___1___5_phosphoribosyl__imidazole_4_carboxamide()@c + L_Glutamine()@c -> L_Glutamate()@c + Hpl()@c + D_erythro_1___Imidazol_4_yl__glycerol3_phosphate()@c + s5_Amino_1___5_Phospho_D_ribosyl__imidazole_4_carboxamide()@c 0
	R_IGPDH: D_erythro_1___Imidazol_4_yl__glycerol3_phosphate()@c -> H2O()@c + s3___Imidazol_4_yl___2_oxopropylphosphate()@c 0
	R_IGPS: Hpl()@c + s1___2_Carboxyphenylamino___1_deoxy_D_ribulose5_phosphate()@c -> H2O()@c + C___3_Indolyl___glycerol3_phosphate()@c + CO2()@c 0
	R_ILETA: s2_Oxoglutarate()@c + L_Isoleucine()@c <-> L_Glutamate()@c + __S___3_Methyl_2_oxopentanoate()@c 0,0
	R_ILETRS: L_Isoleucine()@c + ATP()@c + tRNA__Ile__()@c -> L_Isoleucyl_tRNA__Ile__()@c + Diphosphate()@c + AMP()@c 0
	R_ILEabcpp: H2O()@c + L_Isoleucine()@p + ATP()@c -> Phosphate()@c + L_Isoleucine()@c + Hpl()@c + ADP()@c 0
	R_ILEt2rpp: Hpl()@p + L_Isoleucine()@p <-> L_Isoleucine()@c + Hpl()@c 0,0
	R_ILEtex: L_Isoleucine()@e <-> L_Isoleucine()@p 0,0
	R_IMPC: H2O()@c + IMP()@c <-> s5_Formamido_1___5_phospho_D_ribosyl__imidazole_4_carboxamide()@c 0,0
	R_IMPD: H2O()@c + Nicotinamideadeninedinucleotide()@c + IMP()@c -> Xanthosine5_phosphate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_IMPtex: IMP()@e <-> IMP()@p 0,0
	R_INDOLEt2pp: Hpl()@c + Indole()@c -> Hpl()@p + Indole()@p 0
	R_INDOLEt2rpp: Hpl()@p + Indole()@p <-> Hpl()@c + Indole()@c 0,0
	R_INDOLEtex: Indole()@e <-> Indole()@p 0,0
	R_INOSTt4pp: myo_Inositol()@p + Sodium()@p -> Sodium()@c + myo_Inositol()@c 0
	R_INSH: H2O()@c + Inosine()@c -> Hypoxanthine()@c + D_Ribose()@c 0
	R_INSK: ATP()@c + Inosine()@c -> Hpl()@c + ADP()@c + IMP()@c 0
	R_INSTtex: myo_Inositol()@e <-> myo_Inositol()@p 0,0
	R_INSt2pp: Hpl()@p + Inosine()@p -> Hpl()@c + Inosine()@c 0
	R_INSt2rpp: Hpl()@p + Inosine()@p <-> Hpl()@c + Inosine()@c 0,0
	R_INStex: Inosine()@e <-> Inosine()@p 0,0
	R_IPDDI: Isopentenyldiphosphate()@c <-> Dimethylallyldiphosphate()@c 0,0
	R_IPDPS: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s1_hydroxy_2_methyl_2___E___butenyl4_diphosphate()@c -> H2O()@c + Nicotinamideadeninedinucleotide()@c + Isopentenyldiphosphate()@c 0
	R_IPMD: s3_Carboxy_2_hydroxy_4_methylpentanoate()@c + Nicotinamideadeninedinucleotide()@c -> s3_Carboxy_4_methyl_2_oxopentanoate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_IPPMIa: s3_Carboxy_2_hydroxy_4_methylpentanoate()@c <-> H2O()@c + s2_Isopropylmaleate()@c 0,0
	R_IPPMIb: H2O()@c + s2_Isopropylmaleate()@c <-> s3_Carboxy_3_hydroxy_4_methylpentanoate()@c 0,0
	R_IPPS: Acetyl_CoA()@c + s3_Methyl_2_oxobutanoate()@c + H2O()@c -> Hpl()@c + s3_Carboxy_3_hydroxy_4_methylpentanoate()@c + CoenzymeA()@c 0
	R_ISETACabcpp: H2O()@c + Isethionicacid()@p + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Isethionicacid()@c 0
	R_ISETACtex: Isethionicacid()@e <-> Isethionicacid()@p 0,0
	R_K2L4Aabcpp: H2O()@c + KDO__2___lipidIV__A__()@c + ATP()@c -> KDO__2___lipidIV__A__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_K2L4Aabctex: H2O()@c + KDO__2___lipidIV__A__()@p + ATP()@c -> KDO__2___lipidIV__A__()@e + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_KARA1: __R___2_3_Dihydroxy_3_methylbutanoate()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + __S___2_Acetolactate()@c 0,0
	R_KARA2: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + __S___2_Aceto_2_hydroxybutanoate()@c <-> __R___2_3_Dihydroxy_3_methylpentanoate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0,0
	R_KAS14: Hpl()@c + Malonyl___acyl_carrierprotein__()@c + Acetyl_ACP()@c -> Acetoacetyl_ACP()@c + acylcarrierprotein()@c + CO2()@c 0
	R_KAS15: Acetyl_CoA()@c + Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> Acetoacetyl_ACP()@c + CO2()@c + CoenzymeA()@c 0
	R_KDOCT2: s3_Deoxy_D_manno_2_octulosonate()@c + CTP()@c -> Diphosphate()@c + CMP_3_deoxy_D_manno_octulosonate()@c 0
	R_KDOPP: H2O()@c + s3_Deoxy_D_manno_octulosonate8_phosphate()@c -> Phosphate()@c + s3_Deoxy_D_manno_2_octulosonate()@c 0
	R_KDOPS: H2O()@c + Phosphoenolpyruvate()@c + D_Arabinose5_phosphate()@c -> Phosphate()@c + s3_Deoxy_D_manno_octulosonate8_phosphate()@c 0
	R_KG6PDC: Hpl()@c + s3_keto_L_gulonate_6_phosphate()@c -> CO2()@c + L_Xylulose5_phosphate()@c 0
	R_Kabcpp: H2O()@c + ATP()@c + potassium()@p -> potassium()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_Kt2pp: Hpl()@p + potassium()@p -> Hpl()@c + potassium()@c 0
	R_Kt3pp: Hpl()@p + potassium()@c -> Hpl()@c + potassium()@p 0
	R_Ktex: potassium()@e <-> potassium()@p 0,0
	R_L__LACD2: L_Lactate()@c + Ubiquinone_8()@c -> Pyruvate()@c + Ubiquinol_8()@c 0
	R_L__LACD3: Menaquinone8()@c + L_Lactate()@c -> Menaquinol8()@c + Pyruvate()@c 0
	R_L__LACt2rpp: Hpl()@p + L_Lactate()@p <-> Hpl()@c + L_Lactate()@c 0,0
	R_L__LACtex: L_Lactate()@e <-> L_Lactate()@p 0,0
	R_LA4NTpp: coreoligosaccharidelipidA()@p + undecaprenylphosphate_4_amino_4_deoxy_L_arabinose()@p -> s4_Amino_4_deoxy_L_arabinosemodifiedcoreoligosaccharidelipidA()@p + Undecaprenylphosphate()@p 0
	R_LACZ: H2O()@c + Lactose()@c -> D_Galactose()@c + D_Glucose()@c 0
	R_LACZpp: H2O()@p + Lactose()@p -> D_Glucose()@p + D_Galactose()@p 0
	R_LADGMDH: L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@c + H2O()@c -> meso_2_6_Diaminoheptanedioate()@c + L_alanine_D_glutamate()@c 0
	R_LALADGLUtex: L_alanine_D_glutamate()@e <-> L_alanine_D_glutamate()@p 0,0
	R_LALADGLUtpp: Hpl()@p + L_alanine_D_glutamate()@p -> Hpl()@c + L_alanine_D_glutamate()@c 0
	R_LALALGLUtex: L_alanine_L_glutamate()@e <-> L_alanine_L_glutamate()@p 0,0
	R_LALALGLUtpp: Hpl()@p + L_alanine_L_glutamate()@p -> Hpl()@c + L_alanine_L_glutamate()@c 0
	R_LALDO2x: Hpl()@c + Methylglyoxal()@c + Nicotinamideadeninedinucleotide_reduced()@c -> D_Lactaldehyde()@c + Nicotinamideadeninedinucleotide()@c 0
	R_LALDO3: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Methylglyoxal()@c -> L_Lactaldehyde()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_LALGP: H2O()@c + L_alanine_L_glutamate()@c -> L_Glutamate()@c + L_Alanine()@c 0
	R_LCADi: H2O()@c + Nicotinamideadeninedinucleotide()@c + L_Lactaldehyde()@c -> Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + L_Lactate()@c 0
	R_LCARR: Hpl()@c + D_Lactaldehyde()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> __R___Propane_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_LCARS: Hpl()@c + L_Lactaldehyde()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> __S___Propane_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c 0,0
	R_LCTSt3ipp: Hpl()@p + Lactose()@c -> Hpl()@c + Lactose()@p 0
	R_LCTStex: Lactose()@e <-> Lactose()@p 0,0
	R_LCTStpp: Hpl()@p + Lactose()@p <-> Hpl()@c + Lactose()@c 0,0
	R_LDH_D: Nicotinamideadeninedinucleotide()@c + D_Lactate()@c <-> Pyruvate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_LDH_D2: D_Lactate()@c + Ubiquinone_8()@c -> Pyruvate()@c + Ubiquinol_8()@c 0
	R_LEUTAi: L_Glutamate()@c + s4_Methyl_2_oxopentanoate()@c -> L_Leucine()@c + s2_Oxoglutarate()@c 0
	R_LEUTRS: L_Leucine()@c + tRNA__Leu__()@c + ATP()@c -> Diphosphate()@c + L_Leucyl_tRNA__Leu__()@c + AMP()@c 0
	R_LEUabcpp: H2O()@c + L_Leucine()@p + ATP()@c -> L_Leucine()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_LEUt2rpp: Hpl()@p + L_Leucine()@p <-> L_Leucine()@c + Hpl()@c 0,0
	R_LEUtex: L_Leucine()@e <-> L_Leucine()@p 0,0
	R_LGTHL: Reducedglutathione()@c + Methylglyoxal()@c -> __R___S_Lactoylglutathione()@c 0
	R_LIPACabcpp: H2O()@c + coldadaptedKDO__2___lipid__A__()@c + ATP()@c -> coldadaptedKDO__2___lipid__A__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_LIPAHT2ex: Hexadecanoate__n_C16_0__()@e + coreoligosaccharidelipidA()@e + Hpl()@e -> hepta_acylatedcoreoligosaccharidelipidA__E_coli__()@e + H2O()@e 0
	R_LIPAHTex: KDO__2___lipid__A__()@e + Hexadecanoate__n_C16_0__()@e + Hpl()@e -> H2O()@e + hepta_acylatedKDO__2___lipid__A__()@e 0
	R_LIPAMPL: lipoyl_AMP()@c -> lipoate__proteinbound__()@c + AMP()@c 0
	R_LIPATPT: ATP()@c + Lipoate()@c -> Diphosphate()@c + lipoyl_AMP()@c 0
	R_LIPAabcpp: H2O()@c + KDO__2___lipid__A__()@c + ATP()@c -> KDO__2___lipid__A__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_LIPAabctex: H2O()@c + KDO__2___lipid__A__()@p + ATP()@c -> KDO__2___lipid__A__()@e + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_LIPOCT: Hpl()@c + Octanoyl_ACP__n_C8_0ACP__()@c -> acylcarrierprotein()@c + octanoate__proteinbound__()@c 0
	R_LIPOS: Hpl()@c + __4Fe_4S__iron_sulfurcluster()@c + Nicotinamideadeninedinucleotide()@c + octanoate__proteinbound__()@c + S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c -> Fe2pl()@c + Fe2pl()@c + lipoate__proteinbound__()@c + __2Fe_2S__iron_sulfurcluster()@c + L_Methionine()@c + L_Methionine()@c + Nicotinamideadeninedinucleotide_reduced()@c + s5_Deoxyadenosine()@c + s5_Deoxyadenosine()@c 0
	R_LIPOt2pp: Hpl()@p + Lipoate()@p -> Hpl()@c + Lipoate()@c 0
	R_LIPOtex: Lipoate()@e <-> Lipoate()@p 0,0
	R_LPADSS: s2_3_Bis__3_hydroxytetradecanoyl___beta_D_glucosaminyl1_phosphate()@c + UDP_2_3_bis__3_hydroxytetradecanoyl__glucosamine()@c -> LipidADisaccharide()@c + UDP()@c + Hpl()@c 0
	R_LPLIPAL1A120pp: H2O()@p + s1_dodecanoyl_sn_glycerol3_phosphate()@p -> Hpl()@p + Glycerol3_phosphate()@p + Dodecanoate__n_C12_0__()@p 0
	R_LPLIPAL1A140pp: H2O()@p + s1_tetradecanoyl_sn_glycerol3_phosphate()@p -> Hpl()@p + tetradecanoate__n_C14_0__()@p + Glycerol3_phosphate()@p 0
	R_LPLIPAL1A141pp: H2O()@p + s1_tetradec_7_enoyl_sn_glycerol3_phosphate()@p -> Hpl()@p + Glycerol3_phosphate()@p + tetradecenoate__n_C14_1__()@p 0
	R_LPLIPAL1A160pp: s1_hexadecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + Glycerol3_phosphate()@p 0
	R_LPLIPAL1A161pp: s1_hexadec_9_enoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + Glycerol3_phosphate()@p + Hexadecenoate__n_C16_1__()@p 0
	R_LPLIPAL1A180pp: s1_octadecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + Glycerol3_phosphate()@p 0
	R_LPLIPAL1A181pp: s1_octadec_11_enoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + octadecenoate__n_C18_1__()@p + Glycerol3_phosphate()@p 0
	R_LPLIPAL1E120pp: s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@p + H2O()@p -> Hpl()@p + sn_Glycero_3_phosphoethanolamine()@p + Dodecanoate__n_C12_0__()@p 0
	R_LPLIPAL1E140pp: s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@p + H2O()@p -> Hpl()@p + tetradecanoate__n_C14_0__()@p + sn_Glycero_3_phosphoethanolamine()@p 0
	R_LPLIPAL1E141pp: s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@p + H2O()@p -> Hpl()@p + sn_Glycero_3_phosphoethanolamine()@p + tetradecenoate__n_C14_1__()@p 0
	R_LPLIPAL1E160pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + sn_Glycero_3_phosphoethanolamine()@p 0
	R_LPLIPAL1E161pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@p -> Hpl()@p + sn_Glycero_3_phosphoethanolamine()@p + Hexadecenoate__n_C16_1__()@p 0
	R_LPLIPAL1E180pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + sn_Glycero_3_phosphoethanolamine()@p 0
	R_LPLIPAL1E181pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@p -> Hpl()@p + octadecenoate__n_C18_1__()@p + sn_Glycero_3_phosphoethanolamine()@p 0
	R_LPLIPAL1G120pp: s1_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@p + H2O()@p -> Hpl()@p + Glycerophosphoglycerol()@p + Dodecanoate__n_C12_0__()@p 0
	R_LPLIPAL1G140pp: s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@p + H2O()@p -> tetradecanoate__n_C14_0__()@p + Hpl()@p + Glycerophosphoglycerol()@p 0
	R_LPLIPAL1G141pp: s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@p + H2O()@p -> Hpl()@p + Glycerophosphoglycerol()@p + tetradecenoate__n_C14_1__()@p 0
	R_LPLIPAL1G160pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + Glycerophosphoglycerol()@p 0
	R_LPLIPAL1G161pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@p -> Hpl()@p + Glycerophosphoglycerol()@p + Hexadecenoate__n_C16_1__()@p 0
	R_LPLIPAL1G180pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + Glycerophosphoglycerol()@p 0
	R_LPLIPAL1G181pp: H2O()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@p -> octadecenoate__n_C18_1__()@p + Hpl()@p + Glycerophosphoglycerol()@p 0
	R_LPLIPAL2A120: H2O()@c + s2_dodecanoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + Dodecanoate__n_C12_0__()@c 0
	R_LPLIPAL2A140: H2O()@c + s2_tetradecanoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + tetradecanoate__n_C14_0__()@c 0
	R_LPLIPAL2A141: H2O()@c + s2_tetradec_7_enoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + tetradecenoate__n_C14_1__()@c 0
	R_LPLIPAL2A160: H2O()@c + s2_hexadecanoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + Hexadecanoate__n_C16_0__()@c + Hpl()@c + Hpl()@c 0
	R_LPLIPAL2A161: H2O()@c + s2_hexadec_9_enoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + Hexadecenoate__n_C16_1__()@c 0
	R_LPLIPAL2A180: H2O()@c + s2_octadecanoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + octadecanoate__n_C18_0__()@c + Hpl()@c + Hpl()@c 0
	R_LPLIPAL2A181: H2O()@c + s2_octadec_11_enoyl_sn_glycerol3_phosphate()@c -> Glycerol3_phosphate()@c + Hpl()@c + Hpl()@c + octadecenoate__n_C18_1__()@c 0
	R_LPLIPAL2ATE120: Phosphatidylglycerol__didodecanoyl_n_C12_0__()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@c -> sn_Glycero_3_phosphoethanolamine()@c + acylphosphatidylglycerol__n_C12_0__()@c 0
	R_LPLIPAL2ATE140: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@c + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@c -> sn_Glycero_3_phosphoethanolamine()@c + acylphosphatidylglycerol__n_C14_0__()@c 0
	R_LPLIPAL2ATE141: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@c + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@c -> sn_Glycero_3_phosphoethanolamine()@c + acylphosphatidylglycerol__n_C14_1__()@c 0
	R_LPLIPAL2ATE160: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@c + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@c -> acylphosphatidylglycerol__n_C16_0__()@c + sn_Glycero_3_phosphoethanolamine()@c 0
	R_LPLIPAL2ATE161: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@c + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c -> acylphosphatidylglycerol__n_C16_1__()@c + sn_Glycero_3_phosphoethanolamine()@c 0
	R_LPLIPAL2ATE180: Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@c -> sn_Glycero_3_phosphoethanolamine()@c + acylphosphatidylglycerol__n_C18_0__()@c 0
	R_LPLIPAL2ATE181: Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@c -> sn_Glycero_3_phosphoethanolamine()@c + acylphosphatidylglycerol__n_C18_1__()@c 0
	R_LPLIPAL2ATG120: Phosphatidylglycerol__didodecanoyl_n_C12_0__()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@c -> acylphosphatidylglycerol__n_C12_0__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2ATG140: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@c + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@c -> acylphosphatidylglycerol__n_C14_0__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2ATG141: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@c + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@c -> acylphosphatidylglycerol__n_C14_1__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2ATG160: Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@c -> acylphosphatidylglycerol__n_C16_0__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2ATG161: Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@c -> acylphosphatidylglycerol__n_C16_1__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2ATG180: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@c + Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@c -> acylphosphatidylglycerol__n_C18_0__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2ATG181: s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@c + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c -> acylphosphatidylglycerol__n_C18_1__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2E120: H2O()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@c -> sn_Glycero_3_phosphoethanolamine()@c + Hpl()@c + Dodecanoate__n_C12_0__()@c 0
	R_LPLIPAL2E140: H2O()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@c -> sn_Glycero_3_phosphoethanolamine()@c + Hpl()@c + tetradecanoate__n_C14_0__()@c 0
	R_LPLIPAL2E141: H2O()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@c -> sn_Glycero_3_phosphoethanolamine()@c + Hpl()@c + tetradecenoate__n_C14_1__()@c 0
	R_LPLIPAL2E160: s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@c + H2O()@c -> sn_Glycero_3_phosphoethanolamine()@c + Hexadecanoate__n_C16_0__()@c + Hpl()@c 0
	R_LPLIPAL2E161: H2O()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@c -> sn_Glycero_3_phosphoethanolamine()@c + Hpl()@c + Hexadecenoate__n_C16_1__()@c 0
	R_LPLIPAL2E180: H2O()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@c -> octadecanoate__n_C18_0__()@c + Hpl()@c + sn_Glycero_3_phosphoethanolamine()@c 0
	R_LPLIPAL2E181: H2O()@c + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@c -> sn_Glycero_3_phosphoethanolamine()@c + octadecenoate__n_C18_1__()@c + Hpl()@c 0
	R_LPLIPAL2G120: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@c -> Hpl()@c + Dodecanoate__n_C12_0__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2G140: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@c -> Glycerophosphoglycerol()@c + Hpl()@c + tetradecanoate__n_C14_0__()@c 0
	R_LPLIPAL2G141: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@c -> Hpl()@c + tetradecenoate__n_C14_1__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2G160: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@c -> Hexadecanoate__n_C16_0__()@c + Hpl()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2G161: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@c -> Hpl()@c + Hexadecenoate__n_C16_1__()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2G180: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@c -> octadecanoate__n_C18_0__()@c + Hpl()@c + Glycerophosphoglycerol()@c 0
	R_LPLIPAL2G181: H2O()@c + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@c -> Hpl()@c + octadecenoate__n_C18_1__()@c + Glycerophosphoglycerol()@c 0
	R_LSERDHr: L_Serine()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_Aminomalonatesemialdehyde()@c 0,0
	R_LYSDC: Hpl()@c + L_Lysine()@c -> CO2()@c + s1_5_Diaminopentane()@c 0
	R_LYSTRS: tRNA__Lys__()@c + ATP()@c + L_Lysine()@c -> Diphosphate()@c + L_Lysine_tRNA__Lys__()@c + AMP()@c 0
	R_LYSabcpp: H2O()@c + ATP()@c + L_Lysine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Lysine()@c 0
	R_LYSt2pp: Hpl()@p + L_Lysine()@p -> Hpl()@c + L_Lysine()@c 0
	R_LYSt3pp: Hpl()@p + L_Lysine()@c -> Hpl()@c + L_Lysine()@p 0
	R_LYStex: L_Lysine()@e <-> L_Lysine()@p 0,0
	R_LYXI: L_Lyxose()@c -> L_Xylulose()@c 0
	R_LYXt2pp: Hpl()@p + L_Lyxose()@p -> Hpl()@c + L_Lyxose()@c 0
	R_LYXtex: L_Lyxose()@e <-> L_Lyxose()@p 0,0
	R_M1PD: D_Mannitol1_phosphate()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + D_Fructose6_phosphate()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_MACPD: Hpl()@c + Malonyl___acyl_carrierprotein__()@c -> CO2()@c + Acetyl_ACP()@c 0
	R_MALCOAMT: Malonyl_CoA()@c + S_Adenosyl_L_methionine()@c -> malonyl_CoAmethylester()@c + S_Adenosyl_L_homocysteine()@c 0
	R_MALDDH: D_Malate()@c + Nicotinamideadeninedinucleotide()@c -> Pyruvate()@c + CO2()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_MALDt2_2pp: Hpl()@p + Hpl()@p + D_Malate()@p -> D_Malate()@c + Hpl()@c + Hpl()@c 0
	R_MALDtex: D_Malate()@e <-> D_Malate()@p 0,0
	R_MALS: Acetyl_CoA()@c + H2O()@c + Glyoxylate()@c -> L_Malate()@c + Hpl()@c + CoenzymeA()@c 0
	R_MALTATr: Acetyl_CoA()@c + Maltose()@c <-> CoenzymeA()@c + Acetyl_maltose()@c 0,0
	R_MALTHXabcpp: H2O()@c + ATP()@c + Maltohexaose()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Maltohexaose()@c 0
	R_MALTHXtexi: Maltohexaose()@e -> Maltohexaose()@p 0
	R_MALTPTabcpp: H2O()@c + Maltopentaose()@p + ATP()@c -> Phosphate()@c + Maltopentaose()@c + Hpl()@c + ADP()@c 0
	R_MALTPTtexi: Maltopentaose()@e -> Maltopentaose()@p 0
	R_MALTTRabcpp: H2O()@c + ATP()@c + Maltotriose()@p -> Maltotriose()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_MALTTRtexi: Maltotriose()@e -> Maltotriose()@p 0
	R_MALTTTRabcpp: H2O()@c + ATP()@c + Maltotetraose()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Maltotetraose()@c 0
	R_MALTTTRtexi: Maltotetraose()@e -> Maltotetraose()@p 0
	R_MALTabcpp: H2O()@c + ATP()@c + Maltose()@p -> ADP()@c + Hpl()@c + Maltose()@c + Phosphate()@c 0
	R_MALTptspp: Phosphoenolpyruvate()@c + Maltose()@p -> Maltose6_phosphate()@c + Pyruvate()@c 0
	R_MALTtexi: Maltose()@e -> Maltose()@p 0
	R_MALt2_2pp: Hpl()@p + Hpl()@p + L_Malate()@p -> L_Malate()@c + Hpl()@c + Hpl()@c 0
	R_MALt2_3pp: Hpl()@p + Hpl()@p + Hpl()@p + L_Malate()@p -> L_Malate()@c + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_MALt3pp: L_Malate()@c + Hpl()@p -> Hpl()@c + L_Malate()@p 0
	R_MALtex: L_Malate()@e <-> L_Malate()@p 0,0
	R_MAN1PT2: Hpl()@c + D_Mannose1_phosphate()@c + GDP()@c -> GDP_D_mannose()@c + Phosphate()@c 0
	R_MAN6PI: D_Mannose6_phosphate()@c <-> D_Fructose6_phosphate()@c 0,0
	R_MAN6Pt6_2pp: Phosphate()@c + Phosphate()@c + D_Mannose6_phosphate()@p -> Phosphate()@p + Phosphate()@p + D_Mannose6_phosphate()@c 0
	R_MAN6Ptex: D_Mannose6_phosphate()@e <-> D_Mannose6_phosphate()@p 0,0
	R_MANAO: D_Mannonate()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + D_Fructuronate()@c 0,0
	R_MANGLYCptspp: Phosphoenolpyruvate()@c + s2__alpha_D_Mannosyl___D_glycerate()@p -> Pyruvate()@c + s2__alpha_D_Mannosyl_6_phosphate___D_glycerate()@c 0
	R_MANGLYCtex: s2__alpha_D_Mannosyl___D_glycerate()@e <-> s2__alpha_D_Mannosyl___D_glycerate()@p 0,0
	R_MANPGH: H2O()@c + s2__alpha_D_Mannosyl_6_phosphate___D_glycerate()@c -> D_Mannose6_phosphate()@c + __R___Glycerate()@c 0
	R_MANptspp: Phosphoenolpyruvate()@c + D_Mannose()@p -> Pyruvate()@c + D_Mannose6_phosphate()@c 0
	R_MANtex: D_Mannose()@e <-> D_Mannose()@p 0,0
	R_MCITD: s2_Methylcitrate()@c -> H2O()@c + cis_2_Methylaconitate()@c 0
	R_MCITL2: methylisocitrate()@c <-> Pyruvate()@c + Succinate()@c 0,0
	R_MCITS: Propanoyl_CoA()@c + H2O()@c + Oxaloacetate()@c -> Hpl()@c + s2_Methylcitrate()@c + CoenzymeA()@c 0
	R_MCOATA: Malonyl_CoA()@c + acylcarrierprotein()@c <-> Malonyl___acyl_carrierprotein__()@c + CoenzymeA()@c 0,0
	R_MCPST: Mercaptopyruvate()@c + Hydrogencyanide()@c -> Pyruvate()@c + Thiocyanate()@c + Hpl()@c 0
	R_MCTP1App: twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p -> twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + D_Alanine()@p 0
	R_MCTP1Bpp: twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p -> twodisacharidelinkedmureinunits_pentapeptidecorsslinkedtripeptide__A2pm__A2pm____middleofchain__()@p + D_Alanyl_D_alanine()@p 0
	R_MCTP2App: threelinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p -> threedisacharidelinkedmureinunits__pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()@p + D_Alanine()@p + D_Alanine()@p 0
	R_MDDCP1pp: H2O()@p + twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p -> twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + D_Alanine()@p 0
	R_MDDCP2pp: H2O()@p + threedisacharidelinkedmureinunits__pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()@p -> threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()@p + D_Alanine()@p 0
	R_MDDCP3pp: H2O()@p + twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p -> twolinkeddisacharidepentapeptideandtetrapeptidemureinunits__uncrosslinked_middleofchain__()@p + D_Alanine()@p 0
	R_MDDCP4pp: H2O()@p + twolinkeddisacharidepentapeptideandtetrapeptidemureinunits__uncrosslinked_middleofchain__()@p -> twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__()@p + D_Alanine()@p 0
	R_MDDCP5pp: H2O()@p + twolinkeddisacharidepentapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p -> D_Alanine()@p + twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MDDEP1pp: twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + H2O()@p -> twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MDDEP2pp: twodisacharidelinkedmureinunits_tripeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + H2O()@p -> twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MDDEP3pp: H2O()@p + twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p -> twolinkeddisacharidepentapeptideandtetrapeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MDDEP4pp: H2O()@p + threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala__tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala______middleofchain__()@p -> threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala___oneuncrosslinkedtetrapaptide____middleofchain__()@p 0
	R_MDH: L_Malate()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + Oxaloacetate()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_MDH2: L_Malate()@c + Ubiquinone_8()@c -> Oxaloacetate()@c + Ubiquinol_8()@c 0
	R_MDH3: L_Malate()@c + Menaquinone8()@c -> Menaquinol8()@c + Oxaloacetate()@c 0
	R_ME1: L_Malate()@c + Nicotinamideadeninedinucleotide()@c -> Pyruvate()@c + CO2()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_ME2: L_Malate()@c + Nicotinamideadeninedinucleotidephosphate()@c -> Pyruvate()@c + CO2()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c 0
	R_MECDPDH5: Hpl()@c + Flavodoxinreduced()@c + Flavodoxinreduced()@c + s2_C_methyl_D_erythritol2_4_cyclodiphosphate()@c -> H2O()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c + s1_hydroxy_2_methyl_2___E___butenyl4_diphosphate()@c 0
	R_MECDPS: s2_phospho_4___cytidine5_diphospho___2_C_methyl_D_erythritol()@c -> s2_C_methyl_D_erythritol2_4_cyclodiphosphate()@c + CMP()@c 0
	R_MELIBt2pp: Hpl()@p + Melibiose()@p -> Hpl()@c + Melibiose()@c 0
	R_MELIBt3ipp: Hpl()@p + Melibiose()@c -> Hpl()@c + Melibiose()@p 0
	R_MELIBtex: Melibiose()@e <-> Melibiose()@p 0,0
	R_MEOHtex: Methanol()@e <-> Methanol()@p 0,0
	R_MEOHtrpp: Methanol()@p <-> Methanol()@c 0,0
	R_MEPCT: CTP()@c + Hpl()@c + s2_C_methyl_D_erythritol4_phosphate()@c -> Diphosphate()@c + s4___cytidine5_diphospho___2_C_methyl_D_erythritol()@c 0
	R_METAT: H2O()@c + ATP()@c + L_Methionine()@c -> Diphosphate()@c + Phosphate()@c + S_Adenosyl_L_methionine()@c 0
	R_METDabcpp: H2O()@c + ATP()@c + D_Methionine()@p -> D_Methionine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_METDtex: D_Methionine()@e <-> D_Methionine()@p 0,0
	R_METOX1s: L_Methionine()@c + Hydrogenperoxide()@c -> H2O()@c + L_MethionineSulfoxide()@c 0
	R_METOX2s: L_Methionine()@c + Hydrogenperoxide()@c -> H2O()@c + L_methionine_R_sulfoxide()@c 0
	R_METS: L_Homocysteine()@c + s5_Methyltetrahydrofolate()@c -> Hpl()@c + L_Methionine()@c + s5_6_7_8_Tetrahydrofolate()@c 0
	R_METSOX1abcpp: H2O()@c + ATP()@c + L_MethionineSulfoxide()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_MethionineSulfoxide()@c 0
	R_METSOX1tex: L_MethionineSulfoxide()@e <-> L_MethionineSulfoxide()@p 0,0
	R_METSOX2abcpp: H2O()@c + ATP()@c + L_methionine_R_sulfoxide()@p -> L_methionine_R_sulfoxide()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_METSOX2tex: L_methionine_R_sulfoxide()@e <-> L_methionine_R_sulfoxide()@p 0,0
	R_METSOXR1: Reducedthioredoxin()@c + L_MethionineSulfoxide()@c -> H2O()@c + L_Methionine()@c + Oxidizedthioredoxin()@c 0
	R_METSOXR2: Reducedthioredoxin()@c + L_methionine_R_sulfoxide()@c -> H2O()@c + L_Methionine()@c + Oxidizedthioredoxin()@c 0
	R_METTRS: tRNA__Met__()@c + L_Methionine()@c + ATP()@c -> Diphosphate()@c + L_Methionyl_tRNA__Met__()@c + AMP()@c 0
	R_METabcpp: H2O()@c + ATP()@c + L_Methionine()@p -> L_Methionine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_METtex: L_Methionine()@e <-> L_Methionine()@p 0,0
	R_MG2t3_2pp: Hpl()@c + Hpl()@c + magnesium()@p <-> Hpl()@p + Hpl()@p + magnesium()@c 0,0
	R_MG2tex: magnesium()@e <-> magnesium()@p 0,0
	R_MG2tpp: magnesium()@p -> magnesium()@c 0
	R_MG2uabcpp: H2O()@c + ATP()@c + magnesium()@p -> Phosphate()@c + Hpl()@c + ADP()@c + magnesium()@c 0
	R_MGSA: Dihydroxyacetonephosphate()@c -> Phosphate()@c + Methylglyoxal()@c 0
	R_MI1PP: H2O()@c + s1D_myo_Inositol1_phosphate()@c -> Phosphate()@c + myo_Inositol()@c 0
	R_MICITDr: H2O()@c + cis_2_Methylaconitate()@c <-> methylisocitrate()@c 0,0
	R_MINCYCtex: minocycline()@e <-> minocycline()@p 0,0
	R_MINCYCtpp: Hpl()@p + minocycline()@p -> minocycline()@e + Hpl()@c 0
	R_MINOHPtexi: myo_Inositolhexakisphosphate()@e -> myo_Inositolhexakisphosphate()@p 0
	R_MLDCP1App: H2O()@p + twodisacharidelinkedmureinunits_pentapeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p -> twodisacharidelinkedmureinunits_tripeptidecrosslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + D_Alanyl_D_alanine()@p 0
	R_MLDCP1Bpp: twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__()@p + H2O()@p -> D_Alanine()@p + twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MLDCP2App: H2O()@p + twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p -> twolinkeddisacharidepentapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p + D_Alanyl_D_alanine()@p 0
	R_MLDCP2Bpp: H2O()@p + twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p -> twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain__()@p + D_Alanine()@p 0
	R_MLDCP3App: H2O()@p + twodisacharidelinkedmureinunits_pentapeptidecorsslinkedtripeptide__A2pm__A2pm____middleofchain__()@p -> twodisacharidelinkedmureinunits_tripeptidecrosslinkedtripeptide__A2pm__A2pm____middleofchain__()@p + D_Alanyl_D_alanine()@p 0
	R_MLDEP1pp: twodisacharidelinkedmureinunits_tripeptidecrosslinkedtripeptide__A2pm__A2pm____middleofchain__()@p + H2O()@p -> twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MLDEP2pp: H2O()@p + twodisacharidelinkedmureinunits_pentapeptidecorsslinkedtripeptide__A2pm__A2pm____middleofchain__()@p -> twolinkeddisacharidepentapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MLTG1: H2O()@c + Maltotriose()@c -> D_Glucose()@c + Maltose()@c 0
	R_MLTG2: H2O()@c + Maltotetraose()@c -> D_Glucose()@c + Maltotriose()@c 0
	R_MLTG3: H2O()@c + Maltopentaose()@c -> D_Glucose()@c + Maltotetraose()@c 0
	R_MLTG4: H2O()@c + Maltohexaose()@c -> Maltopentaose()@c + D_Glucose()@c 0
	R_MLTG5: H2O()@c + Maltoheptaose()@c -> D_Glucose()@c + Maltohexaose()@c 0
	R_MLTGY1pp: twolinkeddisacharidetetrapeptidemureinunits__uncrosslinked_middleofchain__()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p 0
	R_MLTGY2pp: twolinkeddisacharidetetrapeptideandtripeptidemureinunits__uncrosslinked_middleofchain__()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p 0
	R_MLTGY3pp: twolinkeddisacharidetripeptidemureinunits__uncrosslinked_middleofchain__()@p -> N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tripeptide()@p 0
	R_MLTGY4pp: threedisacharidelinkedmureinunits__tetrapeptidecrosslinkedtetrapeptide__A2pm__D_ala___oneuncrosslinkedtetrapaptide____middleofchain__()@p -> twodisacharidelinkedmureinunits_tetrapeptidecorsslinkedtetrapeptide__A2pm__D_ala____middleofchain__()@p + N_Acetyl_D_glucosamine__anhydrous__N_Acetylmuramyl_tetrapeptide()@p 0
	R_MLTP1: Phosphate()@c + Maltopentaose()@c <-> D_Glucose1_phosphate()@c + Maltotetraose()@c 0,0
	R_MLTP2: Phosphate()@c + Maltohexaose()@c <-> Maltopentaose()@c + D_Glucose1_phosphate()@c 0,0
	R_MLTP3: Phosphate()@c + Maltoheptaose()@c <-> D_Glucose1_phosphate()@c + Maltohexaose()@c 0,0
	R_MMCD: Hpl()@c + __S___Methylmalonyl_CoA()@c -> Propanoyl_CoA()@c + CO2()@c 0
	R_MMETt2pp: S_Methyl_L_methionine()@p + Hpl()@p -> S_Methyl_L_methionine()@c + Hpl()@c 0
	R_MMETtex: S_Methyl_L_methionine()@e <-> S_Methyl_L_methionine()@p 0,0
	R_MMM: Succinyl_CoA()@c -> __S___Methylmalonyl_CoA()@c 0
	R_MN2t3pp: Mn2pl()@c + Hpl()@p -> Hpl()@c + Mn2pl()@p 0
	R_MN2tpp: Mn2pl()@p -> Mn2pl()@c 0
	R_MN6PP: H2O()@c + D_Mannose6_phosphate()@c -> Phosphate()@c + D_Mannose()@c 0
	R_MNLptspp: D_Mannitol()@p + Phosphoenolpyruvate()@c -> Pyruvate()@c + D_Mannitol1_phosphate()@c 0
	R_MNLtex: D_Mannitol()@e <-> D_Mannitol()@p 0,0
	R_MNNH: D_Mannonate()@c -> H2O()@c + s2_Dehydro_3_deoxy_D_gluconate()@c 0
	R_MNt2pp: Hpl()@p + Mn2pl()@p -> Mn2pl()@c + Hpl()@c 0
	R_MNtex: Mn2pl()@e <-> Mn2pl()@p 0,0
	R_MOADSUx: MoaDProteinwithboundAMP()@c + Nicotinamideadeninedinucleotide_reduced()@c + IscSwithboundsulfur()@c -> IscSsulfuracceptorprotein()@c + Nicotinamideadeninedinucleotide()@c + MoaDProteinwiththiocarboxylate()@c + AMP()@c 0
	R_MOAT: s2_3_23_Tetrakis__beta_hydroxymyristoyl___D_glucosaminyl_1_6_beta_D_glucosamine1_4_bisphosphate()@c + CMP_3_deoxy_D_manno_octulosonate()@c -> Hpl()@c + CMP()@c + KDO_lipidIV__A__()@c 0
	R_MOAT2: KDO_lipidIV__A__()@c + CMP_3_deoxy_D_manno_octulosonate()@c -> KDO__2___lipidIV__A__()@c + Hpl()@c + CMP()@c 0
	R_MOAT3C: CMP_3_deoxy_D_manno_octulosonate()@c + phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()@c -> Hpl()@c + CMP()@c + kdo_phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()@c 0
	R_MOBDabcpp: H2O()@c + Molybdate()@p + ATP()@c -> Molybdate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_MOBDtex: Molybdate()@e <-> Molybdate()@p 0,0
	R_MOCDS: CTP()@c + Hpl()@c + molybdenumcofactor()@c -> molybdopterincytosinedinucleotide()@c + Diphosphate()@c 0
	R_MOCOS: Molybdate()@c + Hpl()@c + Hpl()@c + adenylatedmolybdopterin()@c -> H2O()@c + Cu2pl()@c + molybdenumcofactor()@c + AMP()@c 0
	R_MOGDS: Hpl()@c + molybdenumcofactor()@c + GTP()@c -> Diphosphate()@c + molybdopteringuaninedinucleotide()@c 0
	R_MOHMT: H2O()@c + s3_Methyl_2_oxobutanoate()@c + s5_10_Methylenetetrahydrofolate()@c -> s2_Dehydropantoate()@c + s5_6_7_8_Tetrahydrofolate()@c 0
	R_MOX: L_Malate()@c + O2()@c <-> Oxaloacetate()@c + Hydrogenperoxide()@c 0,0
	R_MPTAT: molybdopterin()@c + Hpl()@c + ATP()@c -> Diphosphate()@c + adenylatedmolybdopterin()@c 0
	R_MPTG: Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala()@c + Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala()@c -> Hpl()@c + Hpl()@c + Undecaprenyldiphosphate()@c + Undecaprenyldiphosphate()@c + twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MPTG2: Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala()@c + twolinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p -> Undecaprenyldiphosphate()@c + Hpl()@c + threelinkeddisacharidepentapeptidemureinunits__uncrosslinked_middleofchain__()@p 0
	R_MPTS: cyclicpyranopterinmonophosphate()@c + Cu2pl()@c + MoaDProteinwiththiocarboxylate()@c + MoaDProteinwiththiocarboxylate()@c -> molybdopterin()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + MoaDProteinwithcarboxylate()@c + MoaDProteinwithcarboxylate()@c 0
	R_MPTSS: Hpl()@c + ATP()@c + MoaDProteinwithcarboxylate()@c -> Diphosphate()@c + MoaDProteinwithboundAMP()@c 0
	R_MSAR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Malonatesemialdehyde()@c -> Nicotinamideadeninedinucleotidephosphate()@c + s3_Hydroxypropanoate()@c 0
	R_MSO3abcpp: H2O()@c + methanesulfonate()@p + ATP()@c -> methanesulfonate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_MSO3tex: methanesulfonate()@e <-> methanesulfonate()@p 0,0
	R_MTAN: H2O()@c + s5_Methylthioadenosine()@c -> Adenine()@c + s5_Methylthio_D_ribose()@c 0
	R_MTHFC: H2O()@c + s5_10_Methenyltetrahydrofolate()@c <-> Hpl()@c + s10_Formyltetrahydrofolate()@c 0,0
	R_MTHFD: s5_10_Methylenetetrahydrofolate()@c + Nicotinamideadeninedinucleotidephosphate()@c <-> Nicotinamideadeninedinucleotidephosphate_reduced()@c + s5_10_Methenyltetrahydrofolate()@c 0,0
	R_MTHFR2: s5_10_Methylenetetrahydrofolate()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> s5_Methyltetrahydrofolate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_MTHTHFSs: H2O()@c + __2R_4S___2_methyl_2_4_dihydroxydihydrofuran_3_one()@c -> __2R_4S___2_methyl_2_3_3_4_tetrahydroxytetrahydrofuran()@c 0
	R_MTRPOX: N_Methyltryptophan()@c + H2O()@c + O2()@c -> Formaldehyde()@c + L_Tryptophan()@c + Hydrogenperoxide()@c 0
	R_N2Otex: Nitrousoxide()@e <-> Nitrousoxide()@p 0,0
	R_N2Otpp: Nitrousoxide()@p <-> Nitrousoxide()@c 0,0
	R_NACODA: H2O()@c + N_Acetyl_L_glutamate5_semialdehyde()@c -> Acetate()@c + L_Glutamate5_semialdehyde()@c 0
	R_NACtex: Nicotinate()@e <-> Nicotinate()@p 0,0
	R_NACtpp: Nicotinate()@p -> Nicotinate()@c 0
	R_NADDP: H2O()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Hpl()@c + NMN()@c + AMP()@c 0
	R_NADH10: Menaquinone8()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Menaquinol8()@c + Nicotinamideadeninedinucleotide()@c 0
	R_NADH16pp: Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Ubiquinone_8()@c -> Hpl()@p + Hpl()@p + Hpl()@p + Nicotinamideadeninedinucleotide()@c + Ubiquinol_8()@c 0
	R_NADH17pp: Menaquinone8()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c -> Menaquinol8()@c + Hpl()@p + Hpl()@p + Hpl()@p + Nicotinamideadeninedinucleotide()@c 0
	R_NADH18pp: Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s2_Demethylmenaquinone8()@c -> Hpl()@p + Hpl()@p + Hpl()@p + s2_Demethylmenaquinol8()@c + Nicotinamideadeninedinucleotide()@c 0
	R_NADH5: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Ubiquinone_8()@c -> Nicotinamideadeninedinucleotide()@c + Ubiquinol_8()@c 0
	R_NADH9: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s2_Demethylmenaquinone8()@c -> s2_Demethylmenaquinol8()@c + Nicotinamideadeninedinucleotide()@c 0
	R_NADK: Nicotinamideadeninedinucleotide()@c + ATP()@c -> Hpl()@c + ADP()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_NADN: H2O()@c + Nicotinamideadeninedinucleotide()@c -> Nicotinamide()@c + Hpl()@c + ADPribose()@c 0
	R_NADPHQR2: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Ubiquinone_8()@c -> Nicotinamideadeninedinucleotidephosphate()@c + Ubiquinol_8()@c 0
	R_NADPHQR3: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Menaquinone8()@c -> Menaquinol8()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_NADPHQR4: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s2_Demethylmenaquinone8()@c -> s2_Demethylmenaquinol8()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_NADPPPS: H2O()@c + Nicotinamideadeninedinucleotidephosphate()@c -> Phosphate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_NADS1: Deamino_NADpl()@c + ATP()@c + Ammonium()@c -> Diphosphate()@c + Hpl()@c + Nicotinamideadeninedinucleotide()@c + AMP()@c 0
	R_NADTRHD: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Nicotinamideadeninedinucleotide()@c -> Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_NAMNPP: H2O()@c + s5_Phospho_alpha_D_ribose1_diphosphate()@c + ATP()@c + Nicotinate()@c -> Diphosphate()@c + Phosphate()@c + NicotinateD_ribonucleotide()@c + ADP()@c 0
	R_NAt3_1p5pp: Hpl()@p + Hpl()@p + Hpl()@p + Sodium()@c + Sodium()@c -> Sodium()@p + Sodium()@p + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_NAt3_2pp: Hpl()@p + Hpl()@p + Sodium()@c -> Sodium()@p + Hpl()@c + Hpl()@c 0
	R_NAt3pp: Hpl()@p + Sodium()@c -> Sodium()@p + Hpl()@c 0
	R_NAtex: Sodium()@e <-> Sodium()@p 0,0
	R_NDPK1: ATP()@c + GDP()@c <-> ADP()@c + GTP()@c 0,0
	R_NDPK2: UDP()@c + ATP()@c <-> UTP()@c + ADP()@c 0,0
	R_NDPK3: CDP()@c + ATP()@c <-> CTP()@c + ADP()@c 0,0
	R_NDPK4: dTDP()@c + ATP()@c <-> dTTP()@c + ADP()@c 0,0
	R_NDPK5: ATP()@c + dGDP()@c <-> ADP()@c + dGTP()@c 0,0
	R_NDPK6: dUDP()@c + ATP()@c <-> dUTP()@c + ADP()@c 0,0
	R_NDPK7: dCDP()@c + ATP()@c <-> dCTP()@c + ADP()@c 0,0
	R_NDPK8: ATP()@c + dADP()@c <-> ADP()@c + dATP()@c 0,0
	R_NH4tex: Ammonium()@e <-> Ammonium()@p 0,0
	R_NH4tpp: Ammonium()@p <-> Ammonium()@c 0,0
	R_NHFRBO: Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nitricoxide()@c + Nitricoxide()@c -> H2O()@c + Nitrousoxide()@c + Nicotinamideadeninedinucleotide()@c 0
	R_NI2abcpp: H2O()@c + ATP()@c + nickel()@c -> Phosphate()@c + Hpl()@c + ADP()@c + nickel()@p 0
	R_NI2t3pp: Hpl()@p + nickel()@c -> Hpl()@c + nickel()@p 0
	R_NI2tex: nickel()@e <-> nickel()@p 0,0
	R_NI2tpp: nickel()@p -> nickel()@c 0
	R_NI2uabcpp: H2O()@c + ATP()@c + nickel()@p -> Phosphate()@c + Hpl()@c + ADP()@c + nickel()@c 0
	R_NMNAT: Hpl()@c + ATP()@c + NMN()@c -> Diphosphate()@c + Nicotinamideadeninedinucleotide()@c 0
	R_NMNDA: H2O()@c + NMN()@c -> NicotinateD_ribonucleotide()@c + Ammonium()@c 0
	R_NMNN: H2O()@c + NMN()@c -> alpha_D_Ribose5_phosphate()@c + Nicotinamide()@c + Hpl()@c 0
	R_NMNPtpp: NMN()@p -> NMN()@c 0
	R_NMNt7pp: H2O()@c + NMN()@p -> alpha_D_Ribose5_phosphate()@c + Nicotinamide()@c + Hpl()@c 0
	R_NMNtex: NMN()@e <-> NMN()@p 0,0
	R_NNAM: H2O()@c + Nicotinamide()@c -> Nicotinate()@c + Ammonium()@c 0
	R_NNATr: NicotinateD_ribonucleotide()@c + Hpl()@c + ATP()@c <-> Diphosphate()@c + Deamino_NADpl()@c 0,0
	R_NNDMBRT: s5_6_Dimethylbenzimidazole()@c + NicotinateD_ribonucleotide()@c -> N1___5_Phospho_alpha_D_ribosyl___5_6_dimethylbenzimidazole()@c + Hpl()@c + Nicotinate()@c 0
	R_NNDPR: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Quinolinate()@c + Hpl()@c + Hpl()@c -> Diphosphate()@c + CO2()@c + NicotinateD_ribonucleotide()@c 0
	R_NO2t2rpp: Hpl()@p + Nitrite()@p <-> Hpl()@c + Nitrite()@c 0,0
	R_NO2tex: Nitrite()@e <-> Nitrite()@p 0,0
	R_NO3R1bpp: Nitrate()@p + Ubiquinol_8()@c -> H2O()@p + Nitrite()@p + Ubiquinone_8()@c 0
	R_NO3R1pp: Hpl()@c + Hpl()@c + Nitrate()@c + Ubiquinol_8()@c -> Hpl()@p + Hpl()@p + H2O()@c + Nitrite()@c + Ubiquinone_8()@c 0
	R_NO3R2bpp: Menaquinol8()@c + Nitrate()@p -> Menaquinone8()@c + H2O()@p + Nitrite()@p 0
	R_NO3R2pp: Menaquinol8()@c + Hpl()@c + Hpl()@c + Nitrate()@c -> Hpl()@p + Hpl()@p + H2O()@c + Menaquinone8()@c + Nitrite()@c 0
	R_NO3t7pp: Nitrite()@c + Nitrate()@p -> Nitrate()@c + Nitrite()@p 0
	R_NO3tex: Nitrate()@e <-> Nitrate()@p 0,0
	R_NODOx: O2()@c + O2()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nitricoxide()@c + Nitricoxide()@c -> Hpl()@c + Nicotinamideadeninedinucleotide()@c + Nitrate()@c + Nitrate()@c 0
	R_NODOy: Nicotinamideadeninedinucleotidephosphate_reduced()@c + O2()@c + O2()@c + Nitricoxide()@c + Nitricoxide()@c -> Hpl()@c + Nitrate()@c + Nitrate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_NOVBCNtex: novobiocin()@e <-> novobiocin()@p 0,0
	R_NOVBCNtpp: Hpl()@p + novobiocin()@p -> novobiocin()@e + Hpl()@c 0
	R_NOtex: Nitricoxide()@e <-> Nitricoxide()@p 0,0
	R_NOtpp: Nitricoxide()@p <-> Nitricoxide()@c 0,0
	R_NTD1: dUMP()@c + H2O()@c -> Deoxyuridine()@c + Phosphate()@c 0
	R_NTD10: H2O()@c + Xanthosine5_phosphate()@c -> Phosphate()@c + Xanthosine()@c 0
	R_NTD10pp: Xanthosine5_phosphate()@p + H2O()@p -> Phosphate()@p + Xanthosine()@p 0
	R_NTD11: H2O()@c + IMP()@c -> Phosphate()@c + Inosine()@c 0
	R_NTD11pp: H2O()@p + IMP()@p -> Phosphate()@p + Inosine()@p 0
	R_NTD12: H2O()@c + dIMP()@c -> Deoxyinosine()@c + Phosphate()@c 0
	R_NTD12pp: H2O()@p + dIMP()@p -> Phosphate()@p + Deoxyinosine()@p 0
	R_NTD1pp: H2O()@p + dUMP()@p -> Phosphate()@p + Deoxyuridine()@p 0
	R_NTD2: H2O()@c + UMP()@c -> Phosphate()@c + Uridine()@c 0
	R_NTD2pp: UMP()@p + H2O()@p -> Uridine()@p + Phosphate()@p 0
	R_NTD3: H2O()@c + dCMP()@c -> Phosphate()@c + Deoxycytidine()@c 0
	R_NTD3pp: H2O()@p + dCMP()@p -> Phosphate()@p + Deoxycytidine()@p 0
	R_NTD4: H2O()@c + CMP()@c -> Phosphate()@c + Cytidine()@c 0
	R_NTD4pp: H2O()@p + CMP()@p -> Phosphate()@p + Cytidine()@p 0
	R_NTD5: H2O()@c + dTMP()@c -> Phosphate()@c + Thymidine()@c 0
	R_NTD5pp: H2O()@p + dTMP()@p -> Phosphate()@p + Thymidine()@p 0
	R_NTD6: H2O()@c + dAMP()@c -> Phosphate()@c + Deoxyadenosine()@c 0
	R_NTD6pp: H2O()@p + dAMP()@p -> Deoxyadenosine()@p + Phosphate()@p 0
	R_NTD7: H2O()@c + AMP()@c -> Phosphate()@c + Adenosine()@c 0
	R_NTD7pp: H2O()@p + AMP()@p -> Phosphate()@p + Adenosine()@p 0
	R_NTD8: H2O()@c + dGMP()@c -> Phosphate()@c + Deoxyguanosine()@c 0
	R_NTD8pp: dGMP()@p + H2O()@p -> Phosphate()@p + Deoxyguanosine()@p 0
	R_NTD9: H2O()@c + GMP()@c -> Phosphate()@c + Guanosine()@c 0
	R_NTD9pp: GMP()@p + H2O()@p -> Phosphate()@p + Guanosine()@p 0
	R_NTP1: H2O()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c 0
	R_NTP10: H2O()@c + ITP()@c -> Phosphate()@c + Hpl()@c + IDP()@c 0
	R_NTP11: H2O()@c + dITP()@c -> Phosphate()@c + Hpl()@c + dIDP()@c 0
	R_NTP12: H2O()@c + XTP()@c -> Phosphate()@c + Hpl()@c + XDP()@c 0
	R_NTP3: H2O()@c + GTP()@c -> Phosphate()@c + Hpl()@c + GDP()@c 0
	R_NTP3pp: H2O()@p + GTP()@p -> Hpl()@p + Phosphate()@p + GDP()@p 0
	R_NTP5: H2O()@c + CTP()@c -> Phosphate()@c + CDP()@c + Hpl()@c 0
	R_NTPP1: H2O()@c + dGTP()@c -> Diphosphate()@c + dGMP()@c + Hpl()@c 0
	R_NTPP10: H2O()@c + dITP()@c -> Diphosphate()@c + Hpl()@c + dIMP()@c 0
	R_NTPP11: H2O()@c + XTP()@c -> Diphosphate()@c + Xanthosine5_phosphate()@c + Hpl()@c 0
	R_NTPP2: H2O()@c + GTP()@c -> Diphosphate()@c + GMP()@c + Hpl()@c 0
	R_NTPP3: H2O()@c + dCTP()@c -> Diphosphate()@c + Hpl()@c + dCMP()@c 0
	R_NTPP4: H2O()@c + CTP()@c -> Diphosphate()@c + Hpl()@c + CMP()@c 0
	R_NTPP5: H2O()@c + dATP()@c -> Diphosphate()@c + Hpl()@c + dAMP()@c 0
	R_NTPP6: H2O()@c + ATP()@c -> Diphosphate()@c + Hpl()@c + AMP()@c 0
	R_NTPP7: H2O()@c + dTTP()@c -> Diphosphate()@c + Hpl()@c + dTMP()@c 0
	R_NTPP8: H2O()@c + UTP()@c -> Diphosphate()@c + Hpl()@c + UMP()@c 0
	R_NTPP9: H2O()@c + ITP()@c -> Diphosphate()@c + Hpl()@c + IMP()@c 0
	R_NTPTP1: H2O()@c + dGTP()@c -> Deoxyguanosine()@c + Inorganictriphosphate()@c 0
	R_NTPTP2: H2O()@c + GTP()@c -> Guanosine()@c + Inorganictriphosphate()@c 0
	R_NTRIR2x: Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nitrite()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotide_reduced()@c -> H2O()@c + H2O()@c + Nicotinamideadeninedinucleotide()@c + Nicotinamideadeninedinucleotide()@c + Nicotinamideadeninedinucleotide()@c + Ammonium()@c 0
	R_NTRIR3pp: Hpl()@p + Hpl()@p + Ubiquinol_8()@c + Ubiquinol_8()@c + Ubiquinol_8()@c + Nitrite()@p -> H2O()@p + H2O()@p + Ammonium()@p + Ubiquinone_8()@c + Ubiquinone_8()@c + Ubiquinone_8()@c 0
	R_NTRIR4pp: Menaquinol8()@c + Menaquinol8()@c + Menaquinol8()@c + Hpl()@p + Hpl()@p + Nitrite()@p -> Menaquinone8()@c + Menaquinone8()@c + Menaquinone8()@c + H2O()@p + H2O()@p + Ammonium()@p 0
	R_O16A4COLIPAabctex: H2O()@c + ATP()@c + __O16antigen__x4coreoligosaccharidelipidA()@p -> __O16antigen__x4coreoligosaccharidelipidA()@e + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_O16A4Lpp: __O16antigen__x4undecaprenyldiphosphate()@p + coreoligosaccharidelipidA()@p -> Hpl()@p + Undecaprenyldiphosphate()@p + __O16antigen__x4coreoligosaccharidelipidA()@p 0
	R_O16AP1pp: O16antigenundecaprenyldiphosphate()@p + O16antigenundecaprenyldiphosphate()@p -> Hpl()@p + Undecaprenyldiphosphate()@p + __O16antigen__x2undecaprenyldiphosphate()@p 0
	R_O16AP2pp: __O16antigen__x2undecaprenyldiphosphate()@p + O16antigenundecaprenyldiphosphate()@p -> Hpl()@p + Undecaprenyldiphosphate()@p + __O16antigen__x3undecaprenyldiphosphate()@p 0
	R_O16AP3pp: __O16antigen__x3undecaprenyldiphosphate()@p + O16antigenundecaprenyldiphosphate()@p -> Hpl()@p + __O16antigen__x4undecaprenyldiphosphate()@p + Undecaprenyldiphosphate()@p 0
	R_O16AT: Acetyl_CoA()@c + rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c -> O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c + CoenzymeA()@c 0
	R_O16AUNDtpp: O16antigenundecaprenyldiphosphate()@c -> O16antigenundecaprenyldiphosphate()@p 0
	R_O16GALFT: UDP_D_galacto_1_4_furanose()@c + glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c -> UDP()@c + galactofuranosyl_glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c + Hpl()@c 0
	R_O16GLCT1: UDPglucose()@c + O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c -> UDP()@c + Hpl()@c + glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c 0
	R_O16GLCT2: galactofuranosyl_glucosyl_O_acetyl_rhamanosyl_N_acetylglucosamyl_undecaprenyldiphosphate()@c + UDPglucose()@c -> UDP()@c + Hpl()@c + O16antigenundecaprenyldiphosphate()@c 0
	R_O2Stex: Superoxideanion()@e <-> Superoxideanion()@p 0,0
	R_O2tex: O2()@e <-> O2()@p 0,0
	R_O2tpp: O2()@p <-> O2()@c 0,0
	R_OAADC: Hpl()@c + Oxaloacetate()@c -> Pyruvate()@c + CO2()@c 0
	R_OBTFL: s2_Oxobutanoate()@c + CoenzymeA()@c -> Propanoyl_CoA()@c + Formate()@c 0
	R_OCBT: Carbamoylphosphate()@c + Ornithine()@c <-> Phosphate()@c + Hpl()@c + L_Citrulline()@c 0,0
	R_OCDCAtexi: octadecanoate__n_C18_0__()@e -> octadecanoate__n_C18_0__()@p 0
	R_OCDCEAtexi: octadecenoate__n_C18_1__()@e -> octadecenoate__n_C18_1__()@p 0
	R_OCTAtex: octanoate__n_C8_0__()@e <-> octanoate__n_C8_0__()@p 0,0
	R_OCTDPS: Farnesyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c -> Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + all_trans_Octaprenyldiphosphate()@c 0
	R_OCTNLL: octanoate__n_C8_0__()@c + Hpl()@c + ATP()@c -> Diphosphate()@c + octanoate__proteinbound__()@c + AMP()@c 0
	R_OGMEACPD: s3_Hydroxyglutaryl___acyl_carrierprotein__methylester()@c -> H2O()@c + Enoylglutaryl___acyl_carrierprotein__methylester()@c 0
	R_OGMEACPR: s3_Oxo_glutaryl___acyl_carrierprotein__methylester()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> s3_Hydroxyglutaryl___acyl_carrierprotein__methylester()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_OGMEACPS: Hpl()@c + malonyl_CoAmethylester()@c + Malonyl___acyl_carrierprotein__()@c -> CO2()@c + CoenzymeA()@c + s3_Oxo_glutaryl___acyl_carrierprotein__methylester()@c 0
	R_OHPBAT: L_Glutamate()@c + s2_Oxo_3_hydroxy_4_phosphobutanoate()@c <-> s2_Oxoglutarate()@c + O_Phospho_4_hydroxy_L_threonine()@c 0,0
	R_OHPHM: s2_Octaprenyl_6_hydroxyphenol()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + S_Adenosyl_L_homocysteine()@c + s2_Octaprenyl_6_methoxyphenol()@c 0
	R_OMBZLM: s2_Octaprenyl_6_methoxy_1_4_benzoquinol()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + S_Adenosyl_L_homocysteine()@c + s2_Octaprenyl_3_methyl_6_methoxy_1_4_benzoquinol()@c 0
	R_OMCDC: s3_Carboxy_4_methyl_2_oxopentanoate()@c + Hpl()@c -> CO2()@c + s4_Methyl_2_oxopentanoate()@c 0
	R_OMMBLHX: O2()@c + s2_Octaprenyl_3_methyl_6_methoxy_1_4_benzoquinol()@c -> s2_Octaprenyl_3_methyl_5_hydroxy_6_methoxy_1_4_benzoquinol()@c 0
	R_OMMBLHX3: H2O()@c + H2O()@c + H2O()@c + ATP()@c + ATP()@c + Nicotinamideadeninedinucleotide()@c + s2_Octaprenyl_3_methyl_6_methoxy_1_4_benzoquinol()@c -> s2_Octaprenyl_3_methyl_5_hydroxy_6_methoxy_1_4_benzoquinol()@c + Phosphate()@c + Phosphate()@c + Hpl()@c + Hpl()@c + Hpl()@c + ADP()@c + ADP()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_OMPDC: Hpl()@c + Orotidine5_phosphate()@c -> CO2()@c + UMP()@c 0
	R_OMPHHX: O2()@c + s2_Octaprenyl_6_methoxyphenol()@c -> s2_Octaprenyl_6_methoxy_1_4_benzoquinol()@c 0
	R_OMPHHX3: H2O()@c + H2O()@c + H2O()@c + ATP()@c + ATP()@c + Nicotinamideadeninedinucleotide()@c + s2_Octaprenyl_6_methoxyphenol()@c -> Phosphate()@c + Phosphate()@c + s2_Octaprenyl_6_methoxy_1_4_benzoquinol()@c + Hpl()@c + Hpl()@c + Hpl()@c + ADP()@c + ADP()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_OP4ENH: H2O()@c + s2_Oxopent_4_enoate()@c -> s4_Hydroxy_2_oxopentanoate()@c 0
	R_OPHBDC: Hpl()@c + s3_Octaprenyl_4_hydroxybenzoate()@c -> CO2()@c + s2_Octaprenylphenol()@c 0
	R_OPHHX: O2()@c + s2_Octaprenylphenol()@c -> s2_Octaprenyl_6_hydroxyphenol()@c 0
	R_OPHHX3: H2O()@c + H2O()@c + H2O()@c + ATP()@c + ATP()@c + Nicotinamideadeninedinucleotide()@c + s2_Octaprenylphenol()@c -> s2_Octaprenyl_6_hydroxyphenol()@c + Phosphate()@c + Phosphate()@c + Hpl()@c + Hpl()@c + Hpl()@c + ADP()@c + ADP()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_OPMEACPD: s3_Hydroxypimeloyl___acyl_carrierprotein__methylester()@c -> H2O()@c + Enoylpimeloyl___acyl_carrierprotein__methylester()@c 0
	R_OPMEACPR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_Oxo_pimeloyl___acyl_carrierprotein__methylester()@c -> s3_Hydroxypimeloyl___acyl_carrierprotein__methylester()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_OPMEACPS: Hpl()@c + Glutaryl___acyl_carrierprotein__methylester()@c + Malonyl___acyl_carrierprotein__()@c -> acylcarrierprotein()@c + s3_Oxo_pimeloyl___acyl_carrierprotein__methylester()@c + CO2()@c 0
	R_ORNDC: Hpl()@c + Ornithine()@c -> CO2()@c + Putrescine()@c 0
	R_ORNabcpp: H2O()@c + ATP()@c + Ornithine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Ornithine()@c 0
	R_ORNtex: Ornithine()@e <-> Ornithine()@p 0,0
	R_OROTt2_2pp: Hpl()@p + Hpl()@p + Orotate()@p -> Orotate()@c + Hpl()@c + Hpl()@c 0
	R_OROTtex: Orotate()@e <-> Orotate()@p 0,0
	R_ORPT: Diphosphate()@c + Orotidine5_phosphate()@c <-> s5_Phospho_alpha_D_ribose1_diphosphate()@c + Orotate()@c 0,0
	R_OXAMTC: Phosphate()@c + Oxalureate()@c -> Carbamoylphosphate()@c + Oxamate()@c 0
	R_OXCDC: Oxalyl_CoA()@c + Hpl()@c -> CO2()@c + Formyl_CoA()@c 0
	R_OXCOAHDH: H2O()@c + H2O()@c + s2_oxepin_2__3H___ylideneacetyl_CoA()@c + Nicotinamideadeninedinucleotidephosphate()@c -> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + s3_oxo_5_6_dehydrosuberyl_CoA()@c 0
	R_OXDHCOAT: CoenzymeA()@c + s3_oxo_5_6_dehydrosuberyl_CoA()@c -> Acetyl_CoA()@c + s2_3_dehydroadipyl_CoA()@c 0
	R_P5CD: H2O()@c + H2O()@c + s1_Pyrroline_5_carboxylate()@c + Nicotinamideadeninedinucleotide()@c -> L_Glutamate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_P5CR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + s1_Pyrroline_5_carboxylate()@c -> L_Proline()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_PA120abcpp: H2O()@c + s1_2_didodecanoyl_sn_glycerol3_phosphate()@c + ATP()@c -> s1_2_didodecanoyl_sn_glycerol3_phosphate()@p + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_PA140abcpp: H2O()@c + ATP()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@p 0
	R_PA141abcpp: H2O()@c + ATP()@c + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@p 0
	R_PA160abcpp: H2O()@c + ATP()@c + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@c -> s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PA161abcpp: H2O()@c + ATP()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@p 0
	R_PA180abcpp: H2O()@c + s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@c + ATP()@c -> Phosphate()@c + s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@p + Hpl()@c + ADP()@c 0
	R_PA181abcpp: s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@c + H2O()@c + ATP()@c -> Hpl()@c + s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@p + ADP()@c + Phosphate()@c 0
	R_PACALDt2rpp: Hpl()@p + Phenylacetaldehyde()@p <-> Hpl()@c + Phenylacetaldehyde()@c 0,0
	R_PACALDtex: Phenylacetaldehyde()@e <-> Phenylacetaldehyde()@p 0,0
	R_PACCOAE: Hpl()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + O2()@c + Phenylacetyl_CoA()@c -> H2O()@c + Nicotinamideadeninedinucleotidephosphate()@c + Ring1_2_epoxyphenylacetyl_CoA()@c 0
	R_PACCOAL: Phenylaceticacid()@c + ATP()@c + CoenzymeA()@c -> Diphosphate()@c + Phenylacetyl_CoA()@c + AMP()@c 0
	R_PANTS: __R___Pantoate()@c + ATP()@c + beta_Alanine()@c -> Diphosphate()@c + Hpl()@c + __R___Pantothenate()@c + AMP()@c 0
	R_PAPA120: H2O()@c + s1_2_didodecanoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__()@c 0
	R_PAPA120pp: s1_2_didodecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> s1_2_Diacyl_sn_glycerol__didodecanoyl_n_C12_0__()@p + Phosphate()@p 0
	R_PAPA140: H2O()@c + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__()@c 0
	R_PAPA140pp: H2O()@p + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@p -> s1_2_Diacyl_sn_glycerol__ditetradecanoyl_n_C14_0__()@p + Phosphate()@p 0
	R_PAPA141: H2O()@c + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__()@c 0
	R_PAPA141pp: H2O()@p + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@p -> s1_2_Diacyl_sn_glycerol__ditetradec_7_enoyl_n_C14_1__()@p + Phosphate()@p 0
	R_PAPA160: H2O()@c + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__()@c 0
	R_PAPA160pp: H2O()@p + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@p -> Phosphate()@p + s1_2_Diacyl_sn_glycerol__dihexadecanoyl_n_C16_0__()@p 0
	R_PAPA161: H2O()@c + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()@c 0
	R_PAPA161pp: H2O()@p + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@p -> Phosphate()@p + s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()@p 0
	R_PAPA180: H2O()@c + s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__()@c 0
	R_PAPA180pp: s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Phosphate()@p + s1_2_Diacyl_sn_glycerol__dioctadecanoyl_n_C18_0__()@p 0
	R_PAPA181: s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@c + H2O()@c -> Phosphate()@c + s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()@c 0
	R_PAPA181pp: s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Phosphate()@p + s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()@p 0
	R_PAPPT3: Undecaprenylphosphate()@c + UDP_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine()@c -> UMP()@c + Undecaprenyl_diphospho_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine()@c 0
	R_PAPSR: s3_Phosphoadenylylsulfate()@c + Reducedthioredoxin()@c -> Sulfite()@c + Hpl()@c + Hpl()@c + Oxidizedthioredoxin()@c + Adenosine3_5_bisphosphate()@c 0
	R_PAPSR2: glutaredoxin__reduced__()@c + s3_Phosphoadenylylsulfate()@c -> Sulfite()@c + Hpl()@c + Hpl()@c + Adenosine3_5_bisphosphate()@c + glutaredoxin__oxidized__()@c 0
	R_PDE1: H2O()@c + cAMP()@c -> Hpl()@c + AMP()@c 0
	R_PDE4: H2O()@c + s3_5_CyclicGMP()@c -> GMP()@c + Hpl()@c 0
	R_PDH: Pyruvate()@c + Nicotinamideadeninedinucleotide()@c + CoenzymeA()@c -> Acetyl_CoA()@c + CO2()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_PDX5PO2: Pyridoxine5_phosphate()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Pyridoxal5_phosphate()@c 0
	R_PDX5POi: Pyridoxine5_phosphate()@c + O2()@c -> Pyridoxal5_phosphate()@c + Hydrogenperoxide()@c 0
	R_PDX5PS: s1_deoxy_D_xylulose5_phosphate()@c + Nicotinamideadeninedinucleotide()@c + O_Phospho_4_hydroxy_L_threonine()@c -> CO2()@c + Phosphate()@c + Nicotinamideadeninedinucleotide_reduced()@c + Pyridoxine5_phosphate()@c + H2O()@c + H2O()@c + Hpl()@c 0
	R_PDXPP: H2O()@c + Pyridoxine5_phosphate()@c -> Phosphate()@c + Pyridoxine()@c 0
	R_PE120abcpp: H2O()@c + ATP()@c + phosphatidylethanolamine__didodecanoyl_n_C12_0__()@c -> phosphatidylethanolamine__didodecanoyl_n_C12_0__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PE140abcpp: H2O()@c + phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()@c + ATP()@c -> Phosphate()@c + phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()@p + Hpl()@c + ADP()@c 0
	R_PE141abcpp: phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()@c + H2O()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()@p 0
	R_PE160abcpp: H2O()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@c + ATP()@c -> phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@p + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_PE161abcpp: H2O()@c + phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@c + ATP()@c -> phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PE180abcpp: H2O()@c + ATP()@c + phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()@p 0
	R_PE181abcpp: H2O()@c + ATP()@c + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@p 0
	R_PEAMNOpp: O2()@p + H2O()@p + Phenethylamine()@p -> Ammonium()@p + Hydrogenperoxide()@p + Phenylacetaldehyde()@p 0
	R_PEAMNtex: Phenethylamine()@e <-> Phenethylamine()@p 0,0
	R_PERD: Nicotinamideadeninedinucleotide()@c + s4_Phospho_D_erythronate()@c <-> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s2_Oxo_3_hydroxy_4_phosphobutanoate()@c 0,0
	R_PETNT161pp: phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@p + KDO__2___lipid__A__()@p -> phosphoethanolamineKDO__2___lipid__A__()@p + s1_2_Diacyl_sn_glycerol__dihexadec_9_enoyl_n_C16_1__()@p 0
	R_PETNT181pp: KDO__2___lipid__A__()@p + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@p -> phosphoethanolamineKDO__2___lipid__A__()@p + s1_2_Diacyl_sn_glycerol__dioctadec_11_enoyl_n_C18_1__()@p 0
	R_PFK: ATP()@c + D_Fructose6_phosphate()@c -> Hpl()@c + ADP()@c + D_Fructose1_6_bisphosphate()@c 0
	R_PFK_2: D_Tagatose6_phosphate()@c + ATP()@c -> D_Tagatose1_6_biphosphate()@c + Hpl()@c + ADP()@c 0
	R_PFK_3: ATP()@c + Sedoheptulose7_phosphate()@c -> Sedoheptulose1_7_bisphosphate()@c + Hpl()@c + ADP()@c 0
	R_PFL: Pyruvate()@c + CoenzymeA()@c -> Acetyl_CoA()@c + Formate()@c 0
	R_PG120abcpp: H2O()@c + Phosphatidylglycerol__didodecanoyl_n_C12_0__()@c + ATP()@c -> Phosphate()@c + Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p + Hpl()@c + ADP()@c 0
	R_PG140abcpp: H2O()@c + ATP()@c + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@c -> Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PG141abcpp: H2O()@c + ATP()@c + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p 0
	R_PG160abcpp: H2O()@c + ATP()@c + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p 0
	R_PG161abcpp: H2O()@c + ATP()@c + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p 0
	R_PG180abcpp: H2O()@c + Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@c + ATP()@c -> Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_PG181abcpp: H2O()@c + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c + ATP()@c -> Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PGAMT: D_Glucosamine1_phosphate()@c <-> D_Glucosamine6_phosphate()@c 0,0
	R_PGCD: Nicotinamideadeninedinucleotide()@c + s3_Phospho_D_glycerate()@c -> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + s3_Phosphohydroxypyruvate()@c 0
	R_PGI: D_Glucose6_phosphate()@c <-> D_Fructose6_phosphate()@c 0,0
	R_PGK: ATP()@c + s3_Phospho_D_glycerate()@c <-> s3_Phospho_D_glyceroylphosphate()@c + ADP()@c 0,0
	R_PGL: H2O()@c + s6_phospho_D_glucono_1_5_lactone()@c -> Hpl()@c + s6_Phospho_D_gluconate()@c 0
	R_PGLYCP: H2O()@c + s2_Phosphoglycolate()@c -> Glycolate()@c + Phosphate()@c 0
	R_PGM: D_Glycerate2_phosphate()@c <-> s3_Phospho_D_glycerate()@c 0,0
	R_PGMT: D_Glucose1_phosphate()@c <-> D_Glucose6_phosphate()@c 0,0
	R_PGP120abcpp: H2O()@c + ATP()@c + Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__()@p 0
	R_PGP140abcpp: H2O()@c + Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__()@c + ATP()@c -> Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PGP141abcpp: H2O()@c + Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__()@c + ATP()@c -> Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__()@p + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_PGP160abcpp: Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__()@c + H2O()@c + ATP()@c -> Phosphate()@c + Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__()@p + Hpl()@c + ADP()@c 0
	R_PGP161abcpp: H2O()@c + Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__()@c + ATP()@c -> Phosphate()@c + Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__()@p + Hpl()@c + ADP()@c 0
	R_PGP180abcpp: H2O()@c + ATP()@c + Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__()@p 0
	R_PGP181abcpp: H2O()@c + ATP()@c + Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__()@c -> Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PGPP120: H2O()@c + Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__()@c -> Phosphatidylglycerol__didodecanoyl_n_C12_0__()@c + Phosphate()@c 0
	R_PGPP120pp: H2O()@p + Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__()@p -> Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p + Phosphate()@p 0
	R_PGPP140: H2O()@c + Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__()@c -> Phosphate()@c + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@c 0
	R_PGPP140pp: Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__()@p + H2O()@p -> Phosphate()@p + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p 0
	R_PGPP141: H2O()@c + Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__()@c -> Phosphate()@c + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@c 0
	R_PGPP141pp: Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__()@p + H2O()@p -> Phosphate()@p + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p 0
	R_PGPP160: Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__()@c + H2O()@c -> Phosphate()@c + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@c 0
	R_PGPP160pp: H2O()@p + Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__()@p -> Phosphate()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p 0
	R_PGPP161: H2O()@c + Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__()@c -> Phosphate()@c + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@c 0
	R_PGPP161pp: Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__()@p + H2O()@p -> Phosphate()@p + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p 0
	R_PGPP180: H2O()@c + Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__()@c -> Phosphate()@c + Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@c 0
	R_PGPP180pp: H2O()@p + Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__()@p -> Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p + Phosphate()@p 0
	R_PGPP181: H2O()@c + Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__()@c -> Phosphate()@c + Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@c 0
	R_PGPP181pp: H2O()@p + Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__()@p -> Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + Phosphate()@p 0
	R_PGSA120: Glycerol3_phosphate()@c + CDP_1_2_didodecanoylglycerol()@c -> Hpl()@c + Phosphatidylglycerophosphate__didodecanoyl_n_C12_0__()@c + CMP()@c 0
	R_PGSA140: Glycerol3_phosphate()@c + CDP_1_2_ditetradecanoylglycerol()@c -> Phosphatidylglycerophosphate__ditetradecanoyl_n_C14_0__()@c + Hpl()@c + CMP()@c 0
	R_PGSA141: Glycerol3_phosphate()@c + CDP_1_2_ditetradec_7_enoylglycerol()@c -> Hpl()@c + Phosphatidylglycerophosphate__ditetradec_7_enoyl_n_C14_1__()@c + CMP()@c 0
	R_PGSA160: Glycerol3_phosphate()@c + CDP_1_2_dihexadecanoylglycerol()@c -> Phosphatidylglycerophosphate__dihexadecanoyl_n_C16_0__()@c + Hpl()@c + CMP()@c 0
	R_PGSA161: Glycerol3_phosphate()@c + CDP_1_2_dihexadec_9_enoylglycerol()@c -> Phosphatidylglycerophosphate__dihexadec_9_enoyl_n_C16_1__()@c + Hpl()@c + CMP()@c 0
	R_PGSA180: Glycerol3_phosphate()@c + CDP_1_2_dioctadecanoylglycerol()@c -> Hpl()@c + CMP()@c + Phosphatidylglycerophosphate__dioctadecanoyl_n_C18_0__()@c 0
	R_PGSA181: CDP_1_2_dioctadec_11_enoylglycerol()@c + Glycerol3_phosphate()@c -> Hpl()@c + CMP()@c + Phosphatidylglycerophosphate__dioctadec_11_enoyl_n_C18_1__()@c 0
	R_PHEMEabcpp: Protoheme()@c + H2O()@c + ATP()@c -> Protoheme()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PHEMEtiex: Protoheme()@p -> Protoheme()@e 0
	R_PHETA1: s2_Oxoglutarate()@c + L_Phenylalanine()@c <-> L_Glutamate()@c + Phenylpyruvate()@c 0,0
	R_PHETRS: tRNA__Phe__()@c + ATP()@c + L_Phenylalanine()@c -> Diphosphate()@c + L_Phenylalanyl_tRNA__Phe__()@c + AMP()@c 0
	R_PHEt2rpp: Hpl()@p + L_Phenylalanine()@p <-> Hpl()@c + L_Phenylalanine()@c 0,0
	R_PHEtex: L_Phenylalanine()@e <-> L_Phenylalanine()@p 0,0
	R_PHYTSpp: myo_Inositolhexakisphosphate()@p + H2O()@p + H2O()@p + H2O()@p + H2O()@p + H2O()@p + H2O()@p -> myo_Inositol()@p + Phosphate()@p + Phosphate()@p + Phosphate()@p + Phosphate()@p + Phosphate()@p + Phosphate()@p 0
	R_PIt2rpp: Hpl()@p + Phosphate()@p <-> Phosphate()@c + Hpl()@c 0,0
	R_PItex: Phosphate()@e <-> Phosphate()@p 0,0
	R_PIuabcpp: H2O()@c + Phosphate()@p + ATP()@c -> Phosphate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_PLIPA1A120pp: s1_2_didodecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> s2_dodecanoyl_sn_glycerol3_phosphate()@p + Dodecanoate__n_C12_0__()@p 0
	R_PLIPA1A140pp: H2O()@p + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@p -> tetradecanoate__n_C14_0__()@p + s2_tetradecanoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA1A141pp: H2O()@p + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@p -> tetradecenoate__n_C14_1__()@p + s2_tetradec_7_enoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA1A160pp: H2O()@p + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@p -> Hexadecanoate__n_C16_0__()@p + s2_hexadecanoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA1A161pp: H2O()@p + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@p -> s2_hexadec_9_enoyl_sn_glycerol3_phosphate()@p + Hexadecenoate__n_C16_1__()@p 0
	R_PLIPA1A180pp: s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> octadecanoate__n_C18_0__()@p + s2_octadecanoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA1A181pp: s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@p + H2O()@p -> octadecenoate__n_C18_1__()@p + s2_octadec_11_enoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA1E120pp: H2O()@p + phosphatidylethanolamine__didodecanoyl_n_C12_0__()@p -> Hpl()@p + Dodecanoate__n_C12_0__()@p + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@p 0
	R_PLIPA1E140pp: phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()@p + H2O()@p -> Hpl()@p + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@p + tetradecanoate__n_C14_0__()@p 0
	R_PLIPA1E141pp: H2O()@p + phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()@p -> s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@p + Hpl()@p + tetradecenoate__n_C14_1__()@p 0
	R_PLIPA1E160pp: phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@p + H2O()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@p 0
	R_PLIPA1E161pp: phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@p + H2O()@p -> Hpl()@p + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@p + Hexadecenoate__n_C16_1__()@p 0
	R_PLIPA1E180pp: H2O()@p + phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@p 0
	R_PLIPA1E181pp: H2O()@p + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@p -> octadecenoate__n_C18_1__()@p + Hpl()@p + s2_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@p 0
	R_PLIPA1G120pp: Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p + H2O()@p -> Hpl()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@p + Dodecanoate__n_C12_0__()@p 0
	R_PLIPA1G140pp: H2O()@p + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p -> Hpl()@p + tetradecanoate__n_C14_0__()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@p 0
	R_PLIPA1G141pp: H2O()@p + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p -> Hpl()@p + tetradecenoate__n_C14_1__()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@p 0
	R_PLIPA1G160pp: H2O()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@p 0
	R_PLIPA1G161pp: H2O()@p + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p -> Hpl()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@p + Hexadecenoate__n_C16_1__()@p 0
	R_PLIPA1G180pp: Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p + H2O()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@p 0
	R_PLIPA1G181pp: Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + H2O()@p -> octadecenoate__n_C18_1__()@p + Hpl()@p + s2_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@p 0
	R_PLIPA2A120pp: s1_2_didodecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + s1_dodecanoyl_sn_glycerol3_phosphate()@p + Dodecanoate__n_C12_0__()@p 0
	R_PLIPA2A140pp: H2O()@p + s1_2_ditetradecanoyl_sn_glycerol3_phosphate()@p -> Hpl()@p + tetradecanoate__n_C14_0__()@p + s1_tetradecanoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA2A141pp: H2O()@p + s1_2_ditetradec_7_enoyl_sn_glycerol3_phosphate()@p -> Hpl()@p + tetradecenoate__n_C14_1__()@p + s1_tetradec_7_enoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA2A160pp: H2O()@p + s1_2_dihexadecanoyl_sn_glycerol3_phosphate()@p -> s1_hexadecanoyl_sn_glycerol3_phosphate()@p + Hexadecanoate__n_C16_0__()@p + Hpl()@p 0
	R_PLIPA2A161pp: H2O()@p + s1_2_dihexadec_9_enoyl_sn_glycerol3_phosphate()@p -> s1_hexadec_9_enoyl_sn_glycerol3_phosphate()@p + Hpl()@p + Hexadecenoate__n_C16_1__()@p 0
	R_PLIPA2A180pp: s1_2_dioctadecanoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + s1_octadecanoyl_sn_glycerol3_phosphate()@p 0
	R_PLIPA2A181pp: s1_2_dioctadec_11_enoyl_sn_glycerol3_phosphate()@p + H2O()@p -> Hpl()@p + s1_octadec_11_enoyl_sn_glycerol3_phosphate()@p + octadecenoate__n_C18_1__()@p 0
	R_PLIPA2E120pp: H2O()@p + phosphatidylethanolamine__didodecanoyl_n_C12_0__()@p -> Hpl()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C12_0__()@p + Dodecanoate__n_C12_0__()@p 0
	R_PLIPA2E140pp: phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()@p + H2O()@p -> Hpl()@p + tetradecanoate__n_C14_0__()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_0__()@p 0
	R_PLIPA2E141pp: H2O()@p + phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()@p -> Hpl()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C14_1__()@p + tetradecenoate__n_C14_1__()@p 0
	R_PLIPA2E160pp: phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@p + H2O()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_0__()@p 0
	R_PLIPA2E161pp: phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@p + H2O()@p -> Hpl()@p + Hexadecenoate__n_C16_1__()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C16_1__()@p 0
	R_PLIPA2E180pp: H2O()@p + phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_0__()@p 0
	R_PLIPA2E181pp: H2O()@p + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@p -> octadecenoate__n_C18_1__()@p + Hpl()@p + s1_Acyl_sn_glycero_3_phosphoethanolamine__n_C18_1__()@p 0
	R_PLIPA2G120pp: Phosphatidylglycerol__didodecanoyl_n_C12_0__()@p + H2O()@p -> Hpl()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C12_0__()@p + Dodecanoate__n_C12_0__()@p 0
	R_PLIPA2G140pp: H2O()@p + Phosphatidylglycerol__ditetradecanoyl_n_C14_0__()@p -> tetradecanoate__n_C14_0__()@p + Hpl()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_0__()@p 0
	R_PLIPA2G141pp: H2O()@p + Phosphatidylglycerol__ditetradec_7_enoyl_n_C14_1__()@p -> Hpl()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C14_1__()@p + tetradecenoate__n_C14_1__()@p 0
	R_PLIPA2G160pp: H2O()@p + Phosphatidylglycerol__dihexadecanoyl_n_C16_0__()@p -> Hpl()@p + Hexadecanoate__n_C16_0__()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_0__()@p 0
	R_PLIPA2G161pp: H2O()@p + Phosphatidylglycerol__dihexadec_9_enoyl_n_C16_1__()@p -> Hpl()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C16_1__()@p + Hexadecenoate__n_C16_1__()@p 0
	R_PLIPA2G180pp: Phosphatidylglycerol__dioctadecanoyl_n_C18_0__()@p + H2O()@p -> Hpl()@p + octadecanoate__n_C18_0__()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_0__()@p 0
	R_PLIPA2G181pp: Phosphatidylglycerol__dioctadec_11_enoyl_n_C18_1__()@p + H2O()@p -> octadecenoate__n_C18_1__()@p + Hpl()@p + s1_Acyl_sn_glycero_3_phosphoglycerol__n_C18_1__()@p 0
	R_PMANM: D_Mannose1_phosphate()@c <-> D_Mannose6_phosphate()@c 0,0
	R_PMDPHT: H2O()@c + s5_Amino_6___5_phosphoribitylamino__uracil()@c -> Phosphate()@c + s4___1_D_Ribitylamino___5_aminouracil()@c 0
	R_PMEACPE: H2O()@c + Pimeloyl___acyl_carrierprotein__methylester()@c -> Methanol()@c + Pimeloyl___acyl_carrierprotein__()@c 0
	R_PMPK: s4_Amino_2_methyl_5_phosphomethylpyrimidine()@c + ATP()@c -> ADP()@c + s2_Methyl_4_amino_5_hydroxymethylpyrimidinediphosphate()@c 0
	R_PNTK: ATP()@c + __R___Pantothenate()@c -> Hpl()@c + ADP()@c + D_4_Phosphopantothenate()@c 0
	R_PNTOt4pp: Sodium()@p + __R___Pantothenate()@p -> Sodium()@c + __R___Pantothenate()@c 0
	R_PNTOtex: __R___Pantothenate()@e <-> __R___Pantothenate()@p 0,0
	R_POAACR: Peroxyaminoacrylate()@c + Nicotinamideadeninedinucleotide_reduced()@c -> H2O()@c + Nicotinamideadeninedinucleotide()@c + s3_Aminoacrylate()@c 0
	R_POR5: Pyruvate()@c + CoenzymeA()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c <-> Acetyl_CoA()@c + CO2()@c + Flavodoxinreduced()@c + Flavodoxinreduced()@c + Hpl()@c 0,0
	R_POX: H2O()@c + Pyruvate()@c + Ubiquinone_8()@c -> Acetate()@c + CO2()@c + Ubiquinol_8()@c 0
	R_PPA: Diphosphate()@c + H2O()@c -> Phosphate()@c + Phosphate()@c + Hpl()@c 0
	R_PPA2: H2O()@c + Inorganictriphosphate()@c -> Diphosphate()@c + Phosphate()@c + Hpl()@c 0
	R_PPAKr: Propanoylphosphate()@c + ADP()@c <-> Propionate__n_C3_0__()@c + ATP()@c 0,0
	R_PPALtex: Propanal()@e <-> Propanal()@p 0,0
	R_PPALtpp: Propanal()@c <-> Propanal()@p 0,0
	R_PPAt4pp: Sodium()@p + Propionate__n_C3_0__()@p -> Propionate__n_C3_0__()@c + Sodium()@c 0
	R_PPAtex: Propionate__n_C3_0__()@e <-> Propionate__n_C3_0__()@p 0,0
	R_PPBNGS: s5_Amino_4_oxopentanoate()@c + s5_Amino_4_oxopentanoate()@c -> H2O()@c + H2O()@c + Hpl()@c + Porphobilinogen()@c 0
	R_PPC: H2O()@c + CO2()@c + Phosphoenolpyruvate()@c -> Phosphate()@c + Hpl()@c + Oxaloacetate()@c 0
	R_PPCDC: Hpl()@c + N_____R___4_Phosphopantothenoyl___L_cysteine()@c -> CO2()@c + Pantetheine4_phosphate()@c 0
	R_PPCK: Oxaloacetate()@c + ATP()@c -> CO2()@c + Phosphoenolpyruvate()@c + ADP()@c 0
	R_PPCSCT: Propanoyl_CoA()@c + Succinate()@c -> Propionate__n_C3_0__()@c + Succinyl_CoA()@c 0
	R_PPGPPDP: H2O()@c + Guanosine3_5_bis__diphosphate__()@c -> Diphosphate()@c + GDP()@c 0
	R_PPK2r: Diphosphate()@c + ATP()@c <-> ADP()@c + Inorganictriphosphate()@c 0,0
	R_PPKr: Phosphate()@c + ATP()@c <-> Diphosphate()@c + ADP()@c 0,0
	R_PPM: alpha_D_Ribose1_phosphate()@c <-> alpha_D_Ribose5_phosphate()@c 0,0
	R_PPM2: s2_Deoxy_D_ribose1_phosphate()@c <-> s2_Deoxy_D_ribose5_phosphate()@c 0,0
	R_PPNCL2: CTP()@c + L_Cysteine()@c + D_4_Phosphopantothenate()@c -> Diphosphate()@c + Hpl()@c + CMP()@c + N_____R___4_Phosphopantothenoyl___L_cysteine()@c 0
	R_PPND: Prephenate()@c + Nicotinamideadeninedinucleotide()@c -> CO2()@c + s3___4_Hydroxyphenyl__pyruvate()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_PPNDH: Hpl()@c + Prephenate()@c -> H2O()@c + CO2()@c + Phenylpyruvate()@c 0
	R_PPPGO: O2()@c + ProtoporphyrinogenIX()@c -> H2O()@c + H2O()@c + H2O()@c + Protoporphyrin()@c 0
	R_PPPGO3: Fumarate()@c + Fumarate()@c + Fumarate()@c + ProtoporphyrinogenIX()@c -> Succinate()@c + Succinate()@c + Succinate()@c + Protoporphyrin()@c 0
	R_PPPNDO: Hpl()@c + O2()@c + Phenylpropanoate()@c + Nicotinamideadeninedinucleotide_reduced()@c -> cis_3___3_carboxyethyl___3_5_cyclohexadiene_1_2_diol()@c + Nicotinamideadeninedinucleotide()@c 0
	R_PPPNt2rpp: Hpl()@p + Phenylpropanoate()@p <-> Hpl()@c + Phenylpropanoate()@c 0,0
	R_PPPNtex: Phenylpropanoate()@e <-> Phenylpropanoate()@p 0,0
	R_PPS: Pyruvate()@c + H2O()@c + ATP()@c -> Phosphate()@c + Phosphoenolpyruvate()@c + Hpl()@c + Hpl()@c + AMP()@c 0
	R_PPTHpp: H2O()@p + Phosphonate()@p -> Phosphate()@p + H2()@p 0
	R_PPTtex: Phosphonate()@e <-> Phosphonate()@p 0,0
	R_PRAGSr: ATP()@c + s5_Phospho_beta_D_ribosylamine()@c + Glycine()@c <-> Phosphate()@c + Hpl()@c + ADP()@c + N1___5_Phospho_D_ribosyl__glycinamide()@c 0,0
	R_PRAIS: s2___Formamido___N1___5_phospho_D_ribosyl__acetamidine()@c + ATP()@c -> Phosphate()@c + Hpl()@c + Hpl()@c + ADP()@c + s5_amino_1___5_phospho_D_ribosyl__imidazole()@c 0
	R_PRAIi: N___5_Phospho_D_ribosyl__anthranilate()@c -> s1___2_Carboxyphenylamino___1_deoxy_D_ribulose5_phosphate()@c 0
	R_PRAMPC: H2O()@c + s1___5_Phosphoribosyl___AMP()@c -> s1___5_Phosphoribosyl___5_____5_phosphoribosylamino__methylideneamino__imidazole_4_carboxamide()@c 0
	R_PRASCSi: s5_amino_1___5_phospho_D_ribosyl__imidazole_4_carboxylate()@c + L_Aspartate()@c + ATP()@c -> Hpl()@c + __S___2___5_Amino_1___5_phospho_D_ribosyl__imidazole_4_carboxamido__succinate()@c + ADP()@c + Phosphate()@c 0
	R_PRATPP: H2O()@c + s1___5_Phosphoribosyl___ATP()@c -> Diphosphate()@c + Hpl()@c + s1___5_Phosphoribosyl___AMP()@c 0
	R_PRFGS: H2O()@c + ATP()@c + N2_Formyl_N1___5_phospho_D_ribosyl__glycinamide()@c + L_Glutamine()@c -> L_Glutamate()@c + s2___Formamido___N1___5_phospho_D_ribosyl__acetamidine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PRMICI: s1___5_Phosphoribosyl___5_____5_phosphoribosylamino__methylideneamino__imidazole_4_carboxamide()@c <-> s5_____5_phospho_1_deoxyribulos_1_ylamino__methylideneamino___1___5_phosphoribosyl__imidazole_4_carboxamide()@c 0,0
	R_PROD2: L_Proline()@c + Flavinadeninedinucleotideoxidized()@c -> s1_Pyrroline_5_carboxylate()@c + Hpl()@c + Flavinadeninedinucleotidereduced()@c 0
	R_PROGLYabcpp: H2O()@c + ATP()@c + L_Prolinylglycine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Prolinylglycine()@c 0
	R_PROGLYtex: L_Prolinylglycine()@e <-> L_Prolinylglycine()@p 0,0
	R_PROTRS: L_Proline()@c + tRNA__Pro__()@c + ATP()@c -> Diphosphate()@c + L_Prolyl_tRNA__Pro__()@c + AMP()@c 0
	R_PROabcpp: H2O()@c + L_Proline()@p + ATP()@c -> L_Proline()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_PROt2rpp: Hpl()@p + L_Proline()@p <-> L_Proline()@c + Hpl()@c 0,0
	R_PROt4pp: L_Proline()@p + Sodium()@p -> L_Proline()@c + Sodium()@c 0
	R_PROtex: L_Proline()@e <-> L_Proline()@p 0,0
	R_PRPPS: alpha_D_Ribose5_phosphate()@c + ATP()@c <-> s5_Phospho_alpha_D_ribose1_diphosphate()@c + Hpl()@c + AMP()@c 0,0
	R_PSCLYSt2pp: Hpl()@p + psicoselysine()@p -> Hpl()@c + psicoselysine()@c 0
	R_PSCLYStex: psicoselysine()@e <-> psicoselysine()@p 0,0
	R_PSCVT: Phosphoenolpyruvate()@c + Shikimate5_phosphate()@c <-> Phosphate()@c + s5_O___1_Carboxyvinyl___3_phosphoshikimate()@c 0,0
	R_PSD120: Hpl()@c + phosphatidylserine__didodecanoyl_n_C12_0__()@c -> CO2()@c + phosphatidylethanolamine__didodecanoyl_n_C12_0__()@c 0
	R_PSD140: Hpl()@c + phosphatidylserine__ditetradecanoyl_n_C14_0__()@c -> CO2()@c + phosphatidylethanolamine__ditetradecanoyl_n_C14_0__()@c 0
	R_PSD141: phosphatidylserine__ditetradec_7_enoyl_n_C14_1__()@c + Hpl()@c -> phosphatidylethanolamine__ditetradec_7_enoyl_n_C14_1__()@c + CO2()@c 0
	R_PSD160: phosphatidylserine__dihexadecanoyl_n_C16_0__()@c + Hpl()@c -> CO2()@c + phosphatidylethanolamine__dihexadecanoyl_n_C16_0__()@c 0
	R_PSD161: phosphatidylserine__dihexadec_9_enoyl_n_C16_1__()@c + Hpl()@c -> CO2()@c + phosphatidylethanolamine__dihexadec_9enoyl_n_C16_1__()@c 0
	R_PSD180: Hpl()@c + phosphatidylserine__dioctadecanoyl_n_C18_0__()@c -> CO2()@c + phosphatidylethanolamine__dioctadecanoyl_n_C18_0__()@c 0
	R_PSD181: Hpl()@c + phosphatidylserine__dioctadec_11_enoyl_n_C18_1__()@c -> CO2()@c + phosphatidylethanolamine__dioctadec_11_enoyl_n_C18_1__()@c 0
	R_PSERT: L_Glutamate()@c + s3_Phosphohydroxypyruvate()@c -> O_Phospho_L_serine()@c + s2_Oxoglutarate()@c 0
	R_PSERtex: O_Phospho_L_serine()@e <-> O_Phospho_L_serine()@p 0,0
	R_PSP_L: H2O()@c + O_Phospho_L_serine()@c -> L_Serine()@c + Phosphate()@c 0
	R_PSP_Lpp: O_Phospho_L_serine()@p + H2O()@p -> Phosphate()@p + L_Serine()@p 0
	R_PSSA120: L_Serine()@c + CDP_1_2_didodecanoylglycerol()@c -> Hpl()@c + phosphatidylserine__didodecanoyl_n_C12_0__()@c + CMP()@c 0
	R_PSSA140: L_Serine()@c + CDP_1_2_ditetradecanoylglycerol()@c -> Hpl()@c + CMP()@c + phosphatidylserine__ditetradecanoyl_n_C14_0__()@c 0
	R_PSSA141: L_Serine()@c + CDP_1_2_ditetradec_7_enoylglycerol()@c -> phosphatidylserine__ditetradec_7_enoyl_n_C14_1__()@c + Hpl()@c + CMP()@c 0
	R_PSSA160: L_Serine()@c + CDP_1_2_dihexadecanoylglycerol()@c -> phosphatidylserine__dihexadecanoyl_n_C16_0__()@c + Hpl()@c + CMP()@c 0
	R_PSSA161: L_Serine()@c + CDP_1_2_dihexadec_9_enoylglycerol()@c -> phosphatidylserine__dihexadec_9_enoyl_n_C16_1__()@c + Hpl()@c + CMP()@c 0
	R_PSSA180: L_Serine()@c + CDP_1_2_dioctadecanoylglycerol()@c -> Hpl()@c + CMP()@c + phosphatidylserine__dioctadecanoyl_n_C18_0__()@c 0
	R_PSSA181: L_Serine()@c + CDP_1_2_dioctadec_11_enoylglycerol()@c -> Hpl()@c + CMP()@c + phosphatidylserine__dioctadec_11_enoyl_n_C18_1__()@c 0
	R_PTA2: Propanoyl_CoA()@c + Phosphate()@c -> Propanoylphosphate()@c + CoenzymeA()@c 0
	R_PTAr: Acetyl_CoA()@c + Phosphate()@c <-> Acetylphosphate()@c + CoenzymeA()@c 0,0
	R_PTHRpp: H2O()@p + L_ThreonineO_3_phosphate()@p -> Phosphate()@p + L_Threonine()@p 0
	R_PTPATi: Hpl()@c + ATP()@c + Pantetheine4_phosphate()@c -> Diphosphate()@c + Dephospho_CoA()@c 0
	R_PTRCORNt7pp: Putrescine()@p + Ornithine()@c <-> Ornithine()@p + Putrescine()@c 0,0
	R_PTRCTA: s2_Oxoglutarate()@c + Putrescine()@c -> L_Glutamate()@c + s4_Aminobutanal()@c 0
	R_PTRCabcpp: H2O()@c + ATP()@c + Putrescine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Putrescine()@c 0
	R_PTRCt2pp: Hpl()@p + Putrescine()@p -> Hpl()@c + Putrescine()@c 0
	R_PTRCtex: Putrescine()@e <-> Putrescine()@p 0,0
	R_PUNP1: Phosphate()@c + Adenosine()@c <-> Adenine()@c + alpha_D_Ribose1_phosphate()@c 0,0
	R_PUNP2: Deoxyadenosine()@c + Phosphate()@c <-> Adenine()@c + s2_Deoxy_D_ribose1_phosphate()@c 0,0
	R_PUNP3: Phosphate()@c + Guanosine()@c <-> Guanine()@c + alpha_D_Ribose1_phosphate()@c 0,0
	R_PUNP4: Phosphate()@c + Deoxyguanosine()@c <-> Guanine()@c + s2_Deoxy_D_ribose1_phosphate()@c 0,0
	R_PUNP5: Phosphate()@c + Inosine()@c <-> Hypoxanthine()@c + alpha_D_Ribose1_phosphate()@c 0,0
	R_PUNP6: Deoxyinosine()@c + Phosphate()@c <-> Hypoxanthine()@c + s2_Deoxy_D_ribose1_phosphate()@c 0,0
	R_PUNP7: Xanthosine()@c + Phosphate()@c <-> alpha_D_Ribose1_phosphate()@c + Xanthine()@c 0,0
	R_PYAM5PO: Pyridoxamine5_phosphate()@c + H2O()@c + O2()@c -> Ammonium()@c + Pyridoxal5_phosphate()@c + Hydrogenperoxide()@c 0
	R_PYDAMK: ATP()@c + Pyridoxamine()@c -> Pyridoxamine5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_PYDAMtex: Pyridoxamine()@e <-> Pyridoxamine()@p 0,0
	R_PYDAMtpp: Pyridoxamine()@p -> Pyridoxamine()@c 0
	R_PYDXK: Pyridoxal()@c + ATP()@c -> Hpl()@c + ADP()@c + Pyridoxal5_phosphate()@c 0
	R_PYDXNK: ATP()@c + Pyridoxine()@c -> Pyridoxine5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_PYDXNtex: Pyridoxine()@e <-> Pyridoxine()@p 0,0
	R_PYDXNtpp: Pyridoxine()@p -> Pyridoxine()@c 0
	R_PYDXPP: H2O()@c + Pyridoxal5_phosphate()@c -> Phosphate()@c + Pyridoxal()@c 0
	R_PYDXtex: Pyridoxal()@e <-> Pyridoxal()@p 0,0
	R_PYDXtpp: Pyridoxal()@p -> Pyridoxal()@c 0
	R_PYK: Phosphoenolpyruvate()@c + Hpl()@c + ADP()@c -> Pyruvate()@c + ATP()@c 0
	R_PYNP2r: Phosphate()@c + Uridine()@c <-> Uracil()@c + alpha_D_Ribose1_phosphate()@c 0,0
	R_PYROX: Uracil()@c + O2()@c + Nicotinamideadeninedinucleotide_reduced()@c + Hpl()@c -> Ureidoacrylateperacid()@c + Nicotinamideadeninedinucleotide()@c 0
	R_PYRt2rpp: Hpl()@p + Pyruvate()@p <-> Pyruvate()@c + Hpl()@c 0,0
	R_PYRtex: Pyruvate()@e <-> Pyruvate()@p 0,0
	R_QMO2: O2()@c + O2()@c + Ubiquinol_8()@c -> Hpl()@c + Hpl()@c + Superoxideanion()@c + Superoxideanion()@c + Ubiquinone_8()@c 0
	R_QMO3: Menaquinol8()@c + O2()@c + O2()@c -> Superoxideanion()@c + Superoxideanion()@c + Menaquinone8()@c + Hpl()@c + Hpl()@c 0
	R_QUIN2tex: Quinate()@e <-> Quinate()@p 0,0
	R_QUIN2tpp: Quinate()@p <-> Quinate()@c 0,0
	R_QUINDH: Nicotinamideadeninedinucleotide()@c + Quinate()@c <-> s3_Dehydroquinate()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_QULNS: Iminoaspartate()@c + Dihydroxyacetonephosphate()@c -> H2O()@c + H2O()@c + Phosphate()@c + Quinolinate()@c 0
	R_R15BPK: ATP()@c + D_Ribose1_5_bisphosphate()@c -> s5_Phospho_alpha_D_ribose1_diphosphate()@c + ADP()@c 0
	R_R1PK: alpha_D_Ribose1_phosphate()@c + ATP()@c -> Hpl()@c + ADP()@c + D_Ribose1_5_bisphosphate()@c 0
	R_R5PP: H2O()@c + alpha_D_Ribose5_phosphate()@c -> Phosphate()@c + D_Ribose()@c 0
	R_R5PPpp: H2O()@p + alpha_D_Ribose5_phosphate()@p -> Phosphate()@p + D_Ribose()@p 0
	R_R5Ptex: alpha_D_Ribose5_phosphate()@e <-> alpha_D_Ribose5_phosphate()@p 0,0
	R_RBFK: ATP()@c + Riboflavin()@c -> Hpl()@c + ADP()@c + FMN()@c 0
	R_RBFSa: s3_4_dihydroxy_2_butanone4_phosphate()@c + s4___1_D_Ribitylamino___5_aminouracil()@c -> H2O()@c + H2O()@c + Phosphate()@c + s6_7_Dimethyl_8___1_D_ribityl__lumazine()@c 0
	R_RBFSb: s6_7_Dimethyl_8___1_D_ribityl__lumazine()@c + s6_7_Dimethyl_8___1_D_ribityl__lumazine()@c -> Riboflavin()@c + s4___1_D_Ribitylamino___5_aminouracil()@c 0
	R_RBK: ATP()@c + D_Ribose()@c -> alpha_D_Ribose5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_RBK_L1: L_Ribulose()@c + ATP()@c -> Hpl()@c + ADP()@c + L_Ribulose5_phosphate()@c 0
	R_RBP4E: L_Ribulose5_phosphate()@c <-> D_Xylulose5_phosphate()@c 0,0
	R_REPHACCOAI: Ring1_2_epoxyphenylacetyl_CoA()@c <-> s2_oxepin_2__3H___ylideneacetyl_CoA()@c 0,0
	R_RFAMPtex: rifampin()@e <-> rifampin()@p 0,0
	R_RFAMPtpp: Hpl()@p + rifampin()@p -> Hpl()@c + rifampin()@e 0
	R_RHAT1: dTDP_L_rhamnose()@c + kdo_phospho_heptosyl_phospho_heptosyl_heptosyl_kdo2_lipidA()@c -> dTDP()@c + Hpl()@c + innercoreoligosaccharidelipidA__Ecoli__()@c 0
	R_RHCCE: S_Ribosyl_L_homocysteine()@c -> L_Homocysteine()@c + s4_5_dihydroxy_2_3_pentanedione()@c 0
	R_RIBabcpp: H2O()@c + ATP()@c + D_Ribose()@p -> Phosphate()@c + Hpl()@c + ADP()@c + D_Ribose()@c 0
	R_RIBtex: D_Ribose()@e <-> D_Ribose()@p 0,0
	R_RMI: L_Rhamnose()@c <-> L_Rhamnulose()@c 0,0
	R_RMK: L_Rhamnulose()@c + ATP()@c -> L_Rhamnulose1_phosphate()@c + Hpl()@c + ADP()@c 0
	R_RMNtex: L_Rhamnose()@e <-> L_Rhamnose()@p 0,0
	R_RMNtpp: Hpl()@p + L_Rhamnose()@p -> L_Rhamnose()@c + Hpl()@c 0
	R_RMPA: L_Rhamnulose1_phosphate()@c <-> L_Lactaldehyde()@c + Dihydroxyacetonephosphate()@c 0,0
	R_RNDR1: Reducedthioredoxin()@c + ADP()@c -> H2O()@c + Oxidizedthioredoxin()@c + dADP()@c 0
	R_RNDR1b: glutaredoxin__reduced__()@c + ADP()@c -> H2O()@c + glutaredoxin__oxidized__()@c + dADP()@c 0
	R_RNDR2: Reducedthioredoxin()@c + GDP()@c -> H2O()@c + Oxidizedthioredoxin()@c + dGDP()@c 0
	R_RNDR2b: glutaredoxin__reduced__()@c + GDP()@c -> H2O()@c + dGDP()@c + glutaredoxin__oxidized__()@c 0
	R_RNDR3: CDP()@c + Reducedthioredoxin()@c -> H2O()@c + dCDP()@c + Oxidizedthioredoxin()@c 0
	R_RNDR3b: glutaredoxin__reduced__()@c + CDP()@c -> H2O()@c + dCDP()@c + glutaredoxin__oxidized__()@c 0
	R_RNDR4: UDP()@c + Reducedthioredoxin()@c -> H2O()@c + dUDP()@c + Oxidizedthioredoxin()@c 0
	R_RNDR4b: UDP()@c + glutaredoxin__reduced__()@c -> H2O()@c + dUDP()@c + glutaredoxin__oxidized__()@c 0
	R_RNTR1c2: Flavodoxinreduced()@c + Flavodoxinreduced()@c + Hpl()@c + Hpl()@c + ATP()@c -> H2O()@c + dATP()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c 0
	R_RNTR2c2: Flavodoxinreduced()@c + Flavodoxinreduced()@c + Hpl()@c + Hpl()@c + GTP()@c -> H2O()@c + dGTP()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c 0
	R_RNTR3c2: CTP()@c + Hpl()@c + Hpl()@c + Flavodoxinreduced()@c + Flavodoxinreduced()@c -> H2O()@c + dCTP()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c 0
	R_RNTR4c2: UTP()@c + Flavodoxinreduced()@c + Flavodoxinreduced()@c + Hpl()@c + Hpl()@c -> H2O()@c + dUTP()@c + flavodoxinsemioxidized()@c + flavodoxinsemioxidized()@c 0
	R_RPE: D_Ribulose5_phosphate()@c <-> D_Xylulose5_phosphate()@c 0,0
	R_RPI: alpha_D_Ribose5_phosphate()@c <-> D_Ribulose5_phosphate()@c 0,0
	R_RZ5PP: H2O()@c + N1___5_Phospho_alpha_D_ribosyl___5_6_dimethylbenzimidazole()@c -> Phosphate()@c + N1___alpha_D_ribosyl___5_6_dimethylbenzimidazole()@c 0
	R_S2FE2SR: H2O()@c + SufSEwithboundsulfur()@c + ATP()@c + SufBCDscaffoldcomplex()@c + __2Fe_1S__desulfuratediron_sulfurcluster()@c -> SufSEsulfuracceptorcomplex()@c + SufBCDwithbound__2Fe_2S__cluster()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_S2FE2SS: Fe2pl()@c + Fe2pl()@c + SufSEwithboundsulfur()@c + SufSEwithboundsulfur()@c + Flavinadeninedinucleotidereduced()@c + H2O()@c + ATP()@c + SufBCDscaffoldcomplex()@c -> SufSEsulfuracceptorcomplex()@c + SufSEsulfuracceptorcomplex()@c + SufBCDwithbound__2Fe_2S__cluster()@c + ADP()@c + Phosphate()@c + Flavinadeninedinucleotideoxidized()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_S2FE2SS2: Fe2pl()@c + Fe2pl()@c + SufSEwithboundsulfur()@c + SufSEwithboundsulfur()@c + SufBCDwithbound__2Fe_2S__cluster()@c + Flavinadeninedinucleotidereduced()@c + H2O()@c + ATP()@c -> SufSEsulfuracceptorcomplex()@c + SufSEsulfuracceptorcomplex()@c + SufBCDwithtwobound__2Fe_2S__clusters()@c + ADP()@c + Phosphate()@c + Flavinadeninedinucleotideoxidized()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c 0
	R_S2FE2ST: SufBCDwithbound__2Fe_2S__cluster()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c -> __2Fe_2S__iron_sulfurcluster()@c + SufBCDscaffoldcomplex()@c 0
	R_S4FE4SR: SufBCDwithtwobound__2Fe_2S__clusters()@c + Hpl()@c + Hpl()@c + Flavinadeninedinucleotidereduced()@c -> Flavinadeninedinucleotideoxidized()@c + SufBCDwithbound__4Fe_4S__cluster()@c 0
	R_S4FE4ST: Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + SufBCDwithbound__4Fe_4S__cluster()@c -> __4Fe_4S__iron_sulfurcluster()@c + SufBCDscaffoldcomplex()@c 0
	R_S7PI: Sedoheptulose7_phosphate()@c -> D_Glycero_D_manno_heptose7_phosphate()@c 0
	R_SADH: H2O()@c + H2O()@c + N2_Succinyl_L_arginine()@c + Hpl()@c + Hpl()@c -> CO2()@c + N2_Succinyl_L_ornithine()@c + Ammonium()@c + Ammonium()@c 0
	R_SADT2: H2O()@c + Sulfate()@c + ATP()@c + GTP()@c -> Diphosphate()@c + Phosphate()@c + GDP()@c + Adenosine5_phosphosulfate()@c 0
	R_SARCOX: H2O()@c + O2()@c + Sarcosine()@c -> Formaldehyde()@c + Glycine()@c + Hydrogenperoxide()@c 0
	R_SBTPD: D_Sorbitol6_phosphate()@c + Nicotinamideadeninedinucleotide()@c <-> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + D_Fructose6_phosphate()@c 0,0
	R_SBTptspp: Phosphoenolpyruvate()@c + D_Sorbitol()@p -> D_Sorbitol6_phosphate()@c + Pyruvate()@c 0
	R_SBTtex: D_Sorbitol()@e <-> D_Sorbitol()@p 0,0
	R_SCYSDS: SufSEsulfuracceptorcomplex()@c + L_Cysteine()@c -> SufSEwithboundsulfur()@c + L_Alanine()@c 0
	R_SDPDS: H2O()@c + N_Succinyl_LL_2_6_diaminoheptanedioate()@c -> LL_2_6_Diaminoheptanedioate()@c + Succinate()@c 0
	R_SDPTA: N_Succinyl_LL_2_6_diaminoheptanedioate()@c + s2_Oxoglutarate()@c <-> L_Glutamate()@c + N_Succinyl_2_L_amino_6_oxoheptanedioate()@c 0,0
	R_SELCYSS: L_Seryl_tRNA__Sec__()@c + Selenophosphate()@c -> Phosphate()@c + Hpl()@c + L_Selenocysteinyl_tRNA__Sec__()@c 0
	R_SELGTHR: Reducedglutathione()@c + Reducedglutathione()@c + Reducedglutathione()@c + Reducedglutathione()@c + Hpl()@c + Hpl()@c + selenite()@c -> Selenodiglutathione()@c + Oxidizedglutathione()@c + H2O()@c + H2O()@c + H2O()@c 0
	R_SELGTHR2: Selenodiglutathione()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c -> Reducedglutathione()@c + Nicotinamideadeninedinucleotidephosphate()@c + Glutathiolselenolate()@c 0
	R_SELGTHR3: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Glutathiolselenolate()@c -> Reducedglutathione()@c + Selenide()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_SELNPS: H2O()@c + ATP()@c + Selenide()@c -> Selenophosphate()@c + Phosphate()@c + AMP()@c 0
	R_SELR: Menaquinol8()@c + Selenate()@c -> H2O()@c + Menaquinone8()@c + selenite()@c 0
	R_SELtex: Selenate()@e <-> Selenate()@p 0,0
	R_SELtpp: Hpl()@p + Hpl()@p + Selenate()@p -> Selenate()@c + Hpl()@c + Hpl()@c 0
	R_SEPHCHCS: s2_Oxoglutarate()@c + Hpl()@c + Isochorismate()@c -> s2_succinyl_5_enolpyruvyl_6_hydroxy_3_cyclohexene_1_carboxylate()@c + CO2()@c 0
	R_SERASr: L_Serine()@c + Hpl()@c + ATP()@c <-> Diphosphate()@c + L_seryl_AMP()@c 0,0
	R_SERAT: Acetyl_CoA()@c + L_Serine()@c <-> O_Acetyl_L_serine()@c + CoenzymeA()@c 0,0
	R_SERD_D: D_Serine()@c -> Pyruvate()@c + Ammonium()@c 0
	R_SERD_L: L_Serine()@c -> Pyruvate()@c + Ammonium()@c 0
	R_SERTRS: L_Serine()@c + ATP()@c + tRNA__Ser__()@c -> Diphosphate()@c + L_Seryl_tRNA__Ser__()@c + AMP()@c 0
	R_SERTRS2: L_Serine()@c + tRNA__SeCys__()@c + ATP()@c -> Diphosphate()@c + L_Seryl_tRNA__Sec__()@c + AMP()@c 0
	R_SERt2rpp: Hpl()@p + L_Serine()@p <-> L_Serine()@c + Hpl()@c 0,0
	R_SERt4pp: Sodium()@p + L_Serine()@p -> L_Serine()@c + Sodium()@c 0
	R_SERtex: L_Serine()@e <-> L_Serine()@p 0,0
	R_SFGTHi: H2O()@c + S_Formylglutathione()@c -> Reducedglutathione()@c + Hpl()@c + Formate()@c 0
	R_SGDS: H2O()@c + N2_Succinyl_L_glutamate()@c -> L_Glutamate()@c + Succinate()@c 0
	R_SGSAD: H2O()@c + Nicotinamideadeninedinucleotide()@c + N2_Succinyl_L_glutamate5_semialdehyde()@c -> Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + N2_Succinyl_L_glutamate()@c 0
	R_SHCHCS3: s2_succinyl_5_enolpyruvyl_6_hydroxy_3_cyclohexene_1_carboxylate()@c -> Pyruvate()@c + s2_Succinyl_6_hydroxy_2_4_cyclohexadiene_1_carboxylate()@c 0
	R_SHCHD2: dihydrosirohydrochlorin()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + sirohydrochlorin()@c 0
	R_SHCHF: Fe2pl()@c + sirohydrochlorin()@c -> Hpl()@c + Hpl()@c + Hpl()@c + Siroheme()@c 0
	R_SHK3Dr: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + s3_Dehydroshikimate()@c <-> Nicotinamideadeninedinucleotidephosphate()@c + Shikimate()@c 0,0
	R_SHKK: ATP()@c + Shikimate()@c -> Shikimate5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_SHSL1: O_Succinyl_L_homoserine()@c + L_Cysteine()@c -> L_Cystathionine()@c + Hpl()@c + Succinate()@c 0
	R_SKMt2pp: Hpl()@p + Shikimate()@p -> Hpl()@c + Shikimate()@c 0
	R_SKMtex: Shikimate()@e <-> Shikimate()@p 0,0
	R_SLNTtex: selenite()@e <-> selenite()@p 0,0
	R_SLNTtpp: Hpl()@p + selenite()@p -> Hpl()@c + selenite()@c 0
	R_SO2tex: sulfurdioxide()@e <-> sulfurdioxide()@p 0,0
	R_SO2tpp: sulfurdioxide()@p <-> sulfurdioxide()@c 0,0
	R_SO3tex: Sulfite()@e <-> Sulfite()@p 0,0
	R_SO4t2pp: Sulfate()@p + Hpl()@p -> Hpl()@c + Sulfate()@c 0
	R_SO4tex: Sulfate()@e <-> Sulfate()@p 0,0
	R_SOTA: N2_Succinyl_L_ornithine()@c + s2_Oxoglutarate()@c -> L_Glutamate()@c + N2_Succinyl_L_glutamate5_semialdehyde()@c 0
	R_SPMDAT1: Acetyl_CoA()@c + Spermidine()@c -> Hpl()@c + CoenzymeA()@c + N1_Acetylspermidine()@c 0
	R_SPMDAT2: Acetyl_CoA()@c + Spermidine()@c -> N8_Acetylspermidine()@c + Hpl()@c + CoenzymeA()@c 0
	R_SPMDabcpp: H2O()@c + ATP()@c + Spermidine()@p -> Spermidine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_SPMDt3pp: Hpl()@p + Spermidine()@c -> Hpl()@c + Spermidine()@p 0
	R_SPMDtex: Spermidine()@e <-> Spermidine()@p 0,0
	R_SPMS: S_Adenosylmethioninamine()@c + Putrescine()@c -> Hpl()@c + Spermidine()@c + s5_Methylthioadenosine()@c 0
	R_SPODM: Hpl()@c + Hpl()@c + Superoxideanion()@c + Superoxideanion()@c -> O2()@c + Hydrogenperoxide()@c 0
	R_SPODMpp: Superoxideanion()@p + Superoxideanion()@p + Hpl()@p + Hpl()@p -> O2()@p + Hydrogenperoxide()@p 0
	R_SSALx: H2O()@c + Succinicsemialdehyde()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Hpl()@c + Succinate()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_SSALy: H2O()@c + Succinicsemialdehyde()@c + Nicotinamideadeninedinucleotidephosphate()@c -> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + Succinate()@c 0
	R_SUCASPtpp: L_Aspartate()@p + Succinate()@c -> L_Aspartate()@c + Succinate()@p 0
	R_SUCBZL: ATP()@c + o_Succinylbenzoate()@c + CoenzymeA()@c -> Diphosphate()@c + O_Succinylbenzoyl_CoA()@c + AMP()@c 0
	R_SUCBZS: s2_Succinyl_6_hydroxy_2_4_cyclohexadiene_1_carboxylate()@c -> H2O()@c + o_Succinylbenzoate()@c 0
	R_SUCCt2_2pp: Hpl()@p + Hpl()@p + Succinate()@p -> Hpl()@c + Hpl()@c + Succinate()@c 0
	R_SUCCt2_3pp: Hpl()@p + Hpl()@p + Hpl()@p + Succinate()@p -> Hpl()@c + Hpl()@c + Hpl()@c + Succinate()@c 0
	R_SUCCt3pp: Hpl()@p + Succinate()@c -> Hpl()@c + Succinate()@p 0
	R_SUCCtex: Succinate()@e <-> Succinate()@p 0,0
	R_SUCDi: Succinate()@c + Ubiquinone_8()@c -> Fumarate()@c + Ubiquinol_8()@c 0
	R_SUCFUMtpp: Fumarate()@p + Succinate()@c -> Fumarate()@c + Succinate()@p 0
	R_SUCMALtpp: L_Malate()@p + Succinate()@c -> L_Malate()@c + Succinate()@p 0
	R_SUCOAS: Succinate()@c + ATP()@c + CoenzymeA()@c <-> Phosphate()@c + ADP()@c + Succinyl_CoA()@c 0,0
	R_SUCRtex: Sucrose()@e <-> Sucrose()@p 0,0
	R_SUCTARTtpp: Succinate()@c + D_tartrate()@p -> D_tartrate()@c + Succinate()@p 0
	R_SUCptspp: Phosphoenolpyruvate()@c + Sucrose()@p -> Pyruvate()@c + Sucrose6_phosphate()@c 0
	R_SULFACabcpp: H2O()@c + sulfoacetate()@p + ATP()@c -> Phosphate()@c + sulfoacetate()@c + Hpl()@c + ADP()@c 0
	R_SULFACtex: sulfoacetate()@e <-> sulfoacetate()@p 0,0
	R_SULRi: Sulfite()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c -> H2O()@c + H2O()@c + H2O()@c + Hydrogensulfide()@c + Nicotinamideadeninedinucleotidephosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_SULabcpp: Sulfate()@p + H2O()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + Sulfate()@c 0
	R_T2DECAI: trans_Dec_2_enoyl___acyl_carrierprotein__()@c <-> cis_dec_3_enoyl___acyl_carrierprotein____n_C10_1__()@c 0,0
	R_TAGURr: D_Altronate()@c + Nicotinamideadeninedinucleotide()@c <-> D_Tagaturonate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0,0
	R_TALA: Sedoheptulose7_phosphate()@c + Glyceraldehyde3_phosphate()@c <-> D_Erythrose4_phosphate()@c + D_Fructose6_phosphate()@c 0,0
	R_TARTD: L_tartrate()@c -> H2O()@c + Oxaloacetate()@c 0
	R_TARTRDtex: D_tartrate()@e <-> D_tartrate()@p 0,0
	R_TARTRt7pp: Succinate()@c + L_tartrate()@p <-> L_tartrate()@c + Succinate()@p 0,0
	R_TARTRtex: L_tartrate()@e <-> L_tartrate()@p 0,0
	R_TARTt2_3pp: Hpl()@p + Hpl()@p + Hpl()@p + D_tartrate()@p -> Hpl()@c + Hpl()@c + Hpl()@c + D_tartrate()@c 0
	R_TAUDO: Taurine()@c + O2()@c + s2_Oxoglutarate()@c -> Sulfite()@c + CO2()@c + Hpl()@c + Succinate()@c + Aminoacetaldehyde()@c 0
	R_TAURabcpp: H2O()@c + Taurine()@p + ATP()@c -> Phosphate()@c + Taurine()@c + Hpl()@c + ADP()@c 0
	R_TAURtex: Taurine()@e <-> Taurine()@p 0,0
	R_TCYNTtex: Thiocyanate()@e <-> Thiocyanate()@p 0,0
	R_TDP: H2O()@c + Thiaminediphosphate()@c -> Thiaminmonophosphate()@c + Hpl()@c + Phosphate()@c 0
	R_TDPADGAT: Acetyl_CoA()@c + dTDP_4_amino_4_6_dideoxy_D_galactose()@c -> dTDP_4_acetamido_4_6_dideoxy_D_galactose()@c + Hpl()@c + CoenzymeA()@c 0
	R_TDPAGTA: L_Glutamate()@c + dTDP_4_dehydro_6_deoxy_D_glucose()@c -> s2_Oxoglutarate()@c + dTDP_4_amino_4_6_dideoxy_D_galactose()@c 0
	R_TDPDRE: dTDP_4_dehydro_6_deoxy_D_glucose()@c -> dTDP_4_dehydro_6_deoxy_L_mannose()@c 0
	R_TDPDRR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + dTDP_4_dehydro_6_deoxy_L_mannose()@c -> dTDP_L_rhamnose()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_TDPGDH: dTDPglucose()@c -> H2O()@c + dTDP_4_dehydro_6_deoxy_D_glucose()@c 0
	R_TDSK: LipidADisaccharide()@c + ATP()@c -> Hpl()@c + ADP()@c + s2_3_23_Tetrakis__beta_hydroxymyristoyl___D_glucosaminyl_1_6_beta_D_glucosamine1_4_bisphosphate()@c 0
	R_TDSR1: proteindisulfideisomeraseII__oxidized__()@p + fusedthiol_disulfideinterchangeprotein__reduced__()@c -> fusedthiol_disulfideinterchangeprotein__oxidized__()@c + proteindisulfideisomeraseII__reduced__()@p 0
	R_TDSR2: periplasmicdisulfideisomerase_thiol_disulphideoxidase__oxidized__()@p + fusedthiol_disulfideinterchangeprotein__reduced__()@c -> fusedthiol_disulfideinterchangeprotein__oxidized__()@c + periplasmicdisulfideisomerase_thiol_disulphideoxidase__reduced__()@p 0
	R_TGBPA: D_Tagatose1_6_biphosphate()@c <-> Dihydroxyacetonephosphate()@c + Glyceraldehyde3_phosphate()@c 0,0
	R_THD2pp: Hpl()@p + Hpl()@p + Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotidephosphate()@c -> Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide()@c 0
	R_THDPS: H2O()@c + Succinyl_CoA()@c + s2_3_4_5_Tetrahydrodipicolinate()@c -> N_Succinyl_2_L_amino_6_oxoheptanedioate()@c + CoenzymeA()@c 0
	R_THFAT: H2O()@c + s5_10_Methenyltetrahydrofolate()@c -> Hpl()@c + s5_Formyltetrahydrofolate()@c 0
	R_THIORDXi: Reducedthioredoxin()@c + Hydrogenperoxide()@c -> H2O()@c + H2O()@c + Oxidizedthioredoxin()@c 0
	R_THMDt2pp: Hpl()@p + Thymidine()@p -> Thymidine()@c + Hpl()@c 0
	R_THMDt2rpp: Hpl()@p + Thymidine()@p <-> Thymidine()@c + Hpl()@c 0,0
	R_THMDtex: Thymidine()@e <-> Thymidine()@p 0,0
	R_THMabcpp: H2O()@c + Thiamin()@p + ATP()@c -> Thiamin()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_THMtex: Thiamin()@e <-> Thiamin()@p 0,0
	R_THRA2i: L_Allo_threonine()@c -> Acetaldehyde()@c + Glycine()@c 0
	R_THRAi: L_Threonine()@c -> Acetaldehyde()@c + Glycine()@c 0
	R_THRD: L_Threonine()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + L_2_Amino_3_oxobutanoate()@c 0
	R_THRD_L: L_Threonine()@c -> s2_Oxobutanoate()@c + Ammonium()@c 0
	R_THRPtex: L_ThreonineO_3_phosphate()@e <-> L_ThreonineO_3_phosphate()@p 0,0
	R_THRS: H2O()@c + O_Phospho_L_homoserine()@c -> L_Threonine()@c + Phosphate()@c 0
	R_THRTRS: L_Threonine()@c + tRNA__Thr__()@c + ATP()@c -> Diphosphate()@c + L_Threonyl_tRNA__Thr__()@c + AMP()@c 0
	R_THRabcpp: H2O()@c + L_Threonine()@p + ATP()@c -> L_Threonine()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_THRt2pp: L_Threonine()@c + Hpl()@p -> Hpl()@c + L_Threonine()@p 0
	R_THRt2rpp: Hpl()@p + L_Threonine()@p <-> L_Threonine()@c + Hpl()@c 0,0
	R_THRt4pp: Sodium()@p + L_Threonine()@p -> L_Threonine()@c + Sodium()@c 0
	R_THRtex: L_Threonine()@e <-> L_Threonine()@p 0,0
	R_THYMt3pp: Hpl()@p + Thymine()@c -> Hpl()@c + Thymine()@p 0
	R_THYMtex: Thymine()@e <-> Thymine()@p 0,0
	R_THZPSN3: Nicotinamideadeninedinucleotidephosphate_reduced()@c + s1_deoxy_D_xylulose5_phosphate()@c + Hpl()@c + ATP()@c + dehydroglycine()@c + IscSwithboundsulfur()@c -> CO2()@c + s4_Methyl_5___2_phosphoethyl___thiazole()@c + IscSsulfuracceptorprotein()@c + Diphosphate()@c + Nicotinamideadeninedinucleotidephosphate()@c + H2O()@c + H2O()@c + AMP()@c 0
	R_TKT1: alpha_D_Ribose5_phosphate()@c + D_Xylulose5_phosphate()@c <-> Sedoheptulose7_phosphate()@c + Glyceraldehyde3_phosphate()@c 0,0
	R_TKT2: D_Erythrose4_phosphate()@c + D_Xylulose5_phosphate()@c <-> D_Fructose6_phosphate()@c + Glyceraldehyde3_phosphate()@c 0,0
	R_TMAOR1: Menaquinol8()@c + Hpl()@c + TrimethylamineN_oxide()@c -> H2O()@c + Menaquinone8()@c + trimethylamine()@c 0
	R_TMAOR1pp: Hpl()@p + Menaquinol8()@c + TrimethylamineN_oxide()@p -> Menaquinone8()@c + H2O()@p + trimethylamine()@p 0
	R_TMAOR2: Hpl()@c + s2_Demethylmenaquinol8()@c + TrimethylamineN_oxide()@c -> H2O()@c + s2_Demethylmenaquinone8()@c + trimethylamine()@c 0
	R_TMAOR2pp: Hpl()@p + s2_Demethylmenaquinol8()@c + TrimethylamineN_oxide()@p -> H2O()@p + trimethylamine()@p + s2_Demethylmenaquinone8()@c 0
	R_TMAOtex: TrimethylamineN_oxide()@e <-> TrimethylamineN_oxide()@p 0,0
	R_TMAtex: trimethylamine()@e <-> trimethylamine()@p 0,0
	R_TMDK1: Thymidine()@c + ATP()@c -> Hpl()@c + ADP()@c + dTMP()@c 0
	R_TMDPP: Phosphate()@c + Thymidine()@c <-> Thymine()@c + s2_Deoxy_D_ribose1_phosphate()@c 0,0
	R_TMDS: dUMP()@c + s5_10_Methylenetetrahydrofolate()@c -> dTMP()@c + s7_8_Dihydrofolate()@c 0
	R_TMK: Thiamin()@c + ATP()@c -> Thiaminmonophosphate()@c + Hpl()@c + ADP()@c 0
	R_TMPK: Thiaminmonophosphate()@c + ATP()@c -> ADP()@c + Thiaminediphosphate()@c 0
	R_TMPPP: s4_Methyl_5___2_phosphoethyl___thiazole()@c + Hpl()@c + s2_Methyl_4_amino_5_hydroxymethylpyrimidinediphosphate()@c -> Diphosphate()@c + Thiaminmonophosphate()@c 0
	R_TPI: Dihydroxyacetonephosphate()@c <-> Glyceraldehyde3_phosphate()@c 0,0
	R_TPRDCOAS: Dephospho_CoA()@c + ATP()@c -> Adenine()@c + s2___5_triphosphoribosyl___3_dephospho_CoA()@c 0
	R_TRDR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + Oxidizedthioredoxin()@c -> Reducedthioredoxin()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_TRE6PH: H2O()@c + alpha_alpha_Trehalose6_phosphate()@c -> D_Glucose6_phosphate()@c + D_Glucose()@c 0
	R_TRE6PP: H2O()@c + alpha_alpha_Trehalose6_phosphate()@c -> Phosphate()@c + Trehalose()@c 0
	R_TRE6PS: D_Glucose6_phosphate()@c + UDPglucose()@c -> UDP()@c + Hpl()@c + alpha_alpha_Trehalose6_phosphate()@c 0
	R_TREH: H2O()@c + Trehalose()@c -> D_Glucose()@c + D_Glucose()@c 0
	R_TREHpp: Trehalose()@p + H2O()@p -> D_Glucose()@p + D_Glucose()@p 0
	R_TREptspp: Trehalose()@p + Phosphoenolpyruvate()@c -> Pyruvate()@c + alpha_alpha_Trehalose6_phosphate()@c 0
	R_TREtex: Trehalose()@e <-> Trehalose()@p 0,0
	R_TRPAS2: H2O()@c + L_Tryptophan()@c <-> Pyruvate()@c + Indole()@c + Ammonium()@c 0,0
	R_TRPS1: L_Serine()@c + C___3_Indolyl___glycerol3_phosphate()@c -> H2O()@c + L_Tryptophan()@c + Glyceraldehyde3_phosphate()@c 0
	R_TRPS2: L_Serine()@c + Indole()@c -> H2O()@c + L_Tryptophan()@c 0
	R_TRPS3: C___3_Indolyl___glycerol3_phosphate()@c -> Glyceraldehyde3_phosphate()@c + Indole()@c 0
	R_TRPTRS: ATP()@c + tRNA__Trp__()@c + L_Tryptophan()@c -> Diphosphate()@c + L_Tryptophanyl_tRNA__Trp__()@c + AMP()@c 0
	R_TRPt2rpp: Hpl()@p + L_Tryptophan()@p <-> Hpl()@c + L_Tryptophan()@c 0,0
	R_TRPtex: L_Tryptophan()@e <-> L_Tryptophan()@p 0,0
	R_TRSARr: Hpl()@c + s2_Hydroxy_3_oxopropanoate()@c + Nicotinamideadeninedinucleotide_reduced()@c <-> Nicotinamideadeninedinucleotide()@c + __R___Glycerate()@c 0,0
	R_TSULabcpp: H2O()@c + Thiosulfate()@p + ATP()@c -> Phosphate()@c + Thiosulfate()@c + Hpl()@c + ADP()@c 0
	R_TSULtex: Thiosulfate()@e <-> Thiosulfate()@p 0,0
	R_TTDCAtexi: tetradecanoate__n_C14_0__()@e -> tetradecanoate__n_C14_0__()@p 0
	R_TTDCEAtexi: tetradecenoate__n_C14_1__()@e -> tetradecenoate__n_C14_1__()@p 0
	R_TTRCYCtex: tetracycline()@e <-> tetracycline()@p 0,0
	R_TTRCYCtpp: Hpl()@p + tetracycline()@p -> Hpl()@c + tetracycline()@e 0
	R_TUNGSabcpp: H2O()@c + tungstate()@p + ATP()@c -> tungstate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_TUNGStex: tungstate()@e <-> tungstate()@p 0,0
	R_TYMtex: Tyramine()@e <-> Tyramine()@p 0,0
	R_TYRL: Nicotinamideadeninedinucleotidephosphate_reduced()@c + L_Tyrosine()@c + S_Adenosyl_L_methionine()@c -> L_Methionine()@c + p_Cresol()@c + Nicotinamideadeninedinucleotidephosphate()@c + s5_Deoxyadenosine()@c + Hpl()@c + dehydroglycine()@c 0
	R_TYROXDApp: O2()@p + H2O()@p + Tyramine()@p -> Ammonium()@p + Hydrogenperoxide()@p + s4_Hydroxyphenylacetaldehyde()@p 0
	R_TYRPpp: H2O()@p + Phosphotyrosine()@p -> Phosphate()@p + L_Tyrosine()@p 0
	R_TYRPtex: Phosphotyrosine()@e <-> Phosphotyrosine()@p 0,0
	R_TYRTA: s2_Oxoglutarate()@c + L_Tyrosine()@c <-> L_Glutamate()@c + s3___4_Hydroxyphenyl__pyruvate()@c 0,0
	R_TYRTRS: tRNA__Tyr__()@c + ATP()@c + L_Tyrosine()@c -> Diphosphate()@c + L_Tyrosyl_tRNA__Tyr__()@c + AMP()@c 0
	R_TYRt2rpp: Hpl()@p + L_Tyrosine()@p <-> Hpl()@c + L_Tyrosine()@c 0,0
	R_TYRtex: L_Tyrosine()@e <-> L_Tyrosine()@p 0,0
	R_ThDPAT: Hpl()@c + ADP()@c + Thiaminediphosphate()@c -> Phosphate()@c + adenosinethiaminetriphosphate()@c 0
	R_U23GAAT: __R___3_Hydroxytetradecanoyl___acyl_carrierprotein__()@c + UDP_3_O___3_hydroxytetradecanoyl___D_glucosamine()@c -> acylcarrierprotein()@c + Hpl()@c + UDP_2_3_bis__3_hydroxytetradecanoyl__glucosamine()@c 0
	R_UAAGDS: meso_2_6_Diaminoheptanedioate()@c + UDP_N_acetylmuramoyl_L_alanyl_D_glutamate()@c + ATP()@c -> Phosphate()@c + Hpl()@c + ADP()@c + UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate()@c 0
	R_UACGALPpp: UDP_N_acetyl_D_galactosamine()@p + H2O()@p -> UMP()@p + N_Acetyl_D_galactosamine1_phosphate()@p + Hpl()@p + Hpl()@p 0
	R_UACGAMPpp: UDP_N_acetyl_D_glucosamine()@p + H2O()@p -> Hpl()@p + Hpl()@p + UMP()@p + N_Acetyl_D_glucosamine1_phosphate()@p 0
	R_UACGAMtex: UDP_N_acetyl_D_glucosamine()@e <-> UDP_N_acetyl_D_glucosamine()@p 0,0
	R_UACMAMO: H2O()@c + UDP_N_acetyl_D_mannosamine()@c + Nicotinamideadeninedinucleotide()@c + Nicotinamideadeninedinucleotide()@c -> Hpl()@c + Hpl()@c + Hpl()@c + UDP_N_acetyl_D_mannosaminouronate()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_UAG2E: UDP_N_acetyl_D_glucosamine()@c <-> UDP_N_acetyl_D_mannosamine()@c 0,0
	R_UAGAAT: UDP_N_acetyl_D_glucosamine()@c + __R___3_Hydroxytetradecanoyl___acyl_carrierprotein__()@c <-> acylcarrierprotein()@c + UDP_3_O___3_hydroxytetradecanoyl___N_acetylglucosamine()@c 0,0
	R_UAGCVT: UDP_N_acetyl_D_glucosamine()@c + Phosphoenolpyruvate()@c -> Phosphate()@c + UDP_N_acetyl_3_O___1_carboxyvinyl___D_glucosamine()@c 0
	R_UAGDP: UTP()@c + Hpl()@c + N_Acetyl_D_glucosamine1_phosphate()@c -> Diphosphate()@c + UDP_N_acetyl_D_glucosamine()@c 0
	R_UAGPT3: UDP_N_acetyl_D_glucosamine()@c + Undecaprenyl_diphospho_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine()@c -> UDP()@c + Undecaprenyl_diphospho_N_acetylmuramoyl___N_acetylglucosamine___L_ala_D_glu_meso_2_6_diaminopimeloyl_D_ala_D_ala()@c + Hpl()@c 0
	R_UAMAGS: D_Glutamate()@c + UDP_N_acetylmuramoyl_L_alanine()@c + ATP()@c -> UDP_N_acetylmuramoyl_L_alanyl_D_glutamate()@c + Phosphate()@c + Hpl()@c + ADP()@c 0
	R_UAMAS: ATP()@c + UDP_N_acetylmuramate()@c + L_Alanine()@c -> Phosphate()@c + UDP_N_acetylmuramoyl_L_alanine()@c + Hpl()@c + ADP()@c 0
	R_UAPGR: Nicotinamideadeninedinucleotidephosphate_reduced()@c + Hpl()@c + UDP_N_acetyl_3_O___1_carboxyvinyl___D_glucosamine()@c -> UDP_N_acetylmuramate()@c + Nicotinamideadeninedinucleotidephosphate()@c 0
	R_UDCPDP: H2O()@c + Undecaprenyldiphosphate()@c -> Phosphate()@c + Hpl()@c + Undecaprenylphosphate()@c 0
	R_UDCPDPS: Farnesyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c + Isopentenyldiphosphate()@c -> Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Diphosphate()@c + Undecaprenyldiphosphate()@c 0
	R_UDCPDPpp: Undecaprenyldiphosphate()@p + H2O()@p -> Hpl()@p + Undecaprenylphosphate()@p + Phosphate()@p 0
	R_UDCPPtppi: Undecaprenylphosphate()@p -> Undecaprenylphosphate()@c 0
	R_UDPACGALtex: UDP_N_acetyl_D_galactosamine()@e <-> UDP_N_acetyl_D_galactosamine()@p 0,0
	R_UDPG4E: UDPglucose()@c <-> UDPgalactose()@c 0,0
	R_UDPGALM: UDPgalactose()@c -> UDP_D_galacto_1_4_furanose()@c 0
	R_UDPGALPpp: UDPgalactose()@p + H2O()@p -> UMP()@p + Hpl()@p + Hpl()@p + alpha_D_Galactose1_phosphate()@p 0
	R_UDPGALtex: UDPgalactose()@e <-> UDPgalactose()@p 0,0
	R_UDPGD: H2O()@c + UDPglucose()@c + Nicotinamideadeninedinucleotide()@c + Nicotinamideadeninedinucleotide()@c -> UDP_D_glucuronate()@c + Hpl()@c + Hpl()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_UDPGDC: UDP_D_glucuronate()@c + Nicotinamideadeninedinucleotide()@c -> CO2()@c + Nicotinamideadeninedinucleotide_reduced()@c + UDP_4_keto_pyranose()@c 0
	R_UDPGLCURtex: UDP_D_glucuronate()@e <-> UDP_D_glucuronate()@p 0,0
	R_UDPGPpp: UDPglucose()@p + H2O()@p -> UMP()@p + Hpl()@p + Hpl()@p + D_Glucose1_phosphate()@p 0
	R_UDPGtex: UDPglucose()@e <-> UDPglucose()@p 0,0
	R_UDPKAAT: L_Glutamate()@c + UDP_4_keto_pyranose()@c <-> s2_Oxoglutarate()@c + uridine5_diphospho_beta_4_deoxy_4_amino_L_arabinose()@c 0,0
	R_UGLCURPpp: H2O()@p + UDP_D_glucuronate()@p -> UMP()@p + Hpl()@p + Hpl()@p + D_Glucuronate1_phosphate()@p 0
	R_UGLT: alpha_D_Galactose1_phosphate()@c + UDPglucose()@c <-> UDPgalactose()@c + D_Glucose1_phosphate()@c 0,0
	R_UGLYCH: H2O()@c + ______Ureidoglycolate()@c + Hpl()@c + Hpl()@c -> CO2()@c + Glyoxylate()@c + Ammonium()@c + Ammonium()@c 0
	R_UGMDDS: ATP()@c + D_Alanyl_D_alanine()@c + UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate()@c -> Phosphate()@c + Hpl()@c + ADP()@c + UDP_N_acetylmuramoyl_L_alanyl_D_glutamyl_meso_2_6_diaminopimeloyl_D_alanyl_D_alanine()@c 0
	R_UHGADA: H2O()@c + UDP_3_O___3_hydroxytetradecanoyl___N_acetylglucosamine()@c -> Acetate()@c + UDP_3_O___3_hydroxytetradecanoyl___D_glucosamine()@c 0
	R_ULA4NFT: uridine5_diphospho_beta_4_deoxy_4_amino_L_arabinose()@c + s10_Formyltetrahydrofolate()@c -> Hpl()@c + uridine5_diphospho_beta_4_deoxy_4_formamido_L_arabinose()@c + s5_6_7_8_Tetrahydrofolate()@c 0
	R_ULA4Ntppi: undecaprenylphosphate_4_amino_4_deoxy_L_arabinose()@c -> undecaprenylphosphate_4_amino_4_deoxy_L_arabinose()@p 0
	R_UM3PL: L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate()@c + ATP()@c + UDP_N_acetylmuramate()@c -> UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_UM4PCP: H2O()@c + UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate_D_alanine()@c -> UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate()@c + D_Alanine()@c 0
	R_UM4PL: ATP()@c + L_alanine_D_glutamate_meso_2_6_diaminoheptanedioate_D_alanine()@c + UDP_N_acetylmuramate()@c -> UDP_N_acetylmuramoyl_L_alanyl_D_gamma_glutamyl_meso_2_6_diaminopimelate_D_alanine()@c + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_UMPK: UMP()@c + ATP()@c <-> UDP()@c + ADP()@c 0,0
	R_UMPtex: UMP()@e <-> UMP()@p 0,0
	R_UPLA4FNF: H2O()@c + undecaprenylphosphate_4_amino_4_formyl_L_arabinose()@c -> undecaprenylphosphate_4_amino_4_deoxy_L_arabinose()@c + Formate()@c 0
	R_UPLA4FNT: Undecaprenylphosphate()@c + uridine5_diphospho_beta_4_deoxy_4_formamido_L_arabinose()@c -> UDP()@c + undecaprenylphosphate_4_amino_4_formyl_L_arabinose()@c 0
	R_UPP3MT: UroporphyrinogenIII()@c + S_Adenosyl_L_methionine()@c + S_Adenosyl_L_methionine()@c -> Hpl()@c + dihydrosirohydrochlorin()@c + S_Adenosyl_L_homocysteine()@c + S_Adenosyl_L_homocysteine()@c 0
	R_UPP3S: Hydroxymethylbilane()@c -> H2O()@c + UroporphyrinogenIII()@c 0
	R_UPPDC1: UroporphyrinogenIII()@c + Hpl()@c + Hpl()@c + Hpl()@c + Hpl()@c -> CO2()@c + CO2()@c + CO2()@c + CO2()@c + CoproporphyrinogenIII()@c 0
	R_UPPRT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Uracil()@c -> Diphosphate()@c + UMP()@c 0
	R_URACPAH: H2O()@c + Ureidoacrylateperacid()@c -> Hpl()@c + Peroxyaminoacrylate()@c + Carbamate()@c 0
	R_URAt2pp: Hpl()@p + Uracil()@p -> Hpl()@c + Uracil()@c 0
	R_URAt2rpp: Hpl()@p + Uracil()@p <-> Hpl()@c + Uracil()@c 0,0
	R_URAtex: Uracil()@e <-> Uracil()@p 0,0
	R_URDGLYCD: ______Ureidoglycolate()@c + Nicotinamideadeninedinucleotide()@c -> Oxalureate()@c + Hpl()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_UREAtex: Urea()@e <-> Urea()@p 0,0
	R_UREAtpp: Urea()@p <-> Urea()@c 0,0
	R_URIC: H2O()@c + H2O()@c + O2()@c + Urate()@c -> Allantoin()@c + CO2()@c + Hydrogenperoxide()@c 0
	R_URIH: H2O()@c + Uridine()@c -> Uracil()@c + D_Ribose()@c 0
	R_URIK2: Uridine()@c + GTP()@c -> Hpl()@c + UMP()@c + GDP()@c 0
	R_URIt2pp: Uridine()@p + Hpl()@p -> Hpl()@c + Uridine()@c 0
	R_URIt2rpp: Hpl()@p + Uridine()@p <-> Hpl()@c + Uridine()@c 0,0
	R_URItex: Uridine()@e <-> Uridine()@p 0,0
	R_USHD: H2O()@c + UDP_2_3_bis__3_hydroxytetradecanoyl__glucosamine()@c -> Hpl()@c + Hpl()@c + UMP()@c + s2_3_Bis__3_hydroxytetradecanoyl___beta_D_glucosaminyl1_phosphate()@c 0
	R_VALTA: s2_Oxoglutarate()@c + L_Valine()@c <-> L_Glutamate()@c + s3_Methyl_2_oxobutanoate()@c 0,0
	R_VALTRS: tRNA__Val__()@c + ATP()@c + L_Valine()@c -> Diphosphate()@c + L_Valyl_tRNA__Val__()@c + AMP()@c 0
	R_VALabcpp: H2O()@c + ATP()@c + L_Valine()@p -> Phosphate()@c + Hpl()@c + ADP()@c + L_Valine()@c 0
	R_VALt2rpp: Hpl()@p + L_Valine()@p <-> Hpl()@c + L_Valine()@c 0,0
	R_VALtex: L_Valine()@e <-> L_Valine()@p 0,0
	R_VPAMTr: s3_Methyl_2_oxobutanoate()@c + L_Alanine()@c <-> Pyruvate()@c + L_Valine()@c 0,0
	R_WCOS: tungstate()@c + Hpl()@c + Hpl()@c + adenylatedmolybdopterin()@c -> H2O()@c + Cu2pl()@c + tungstenbindingcofactor()@c + AMP()@c 0
	R_X5PL3E: L_Xylulose5_phosphate()@c -> L_Ribulose5_phosphate()@c 0
	R_XAND: H2O()@c + Nicotinamideadeninedinucleotide()@c + Xanthine()@c -> Hpl()@c + Urate()@c + Nicotinamideadeninedinucleotide_reduced()@c 0
	R_XANt2pp: Hpl()@p + Xanthine()@p -> Hpl()@c + Xanthine()@c 0
	R_XANtex: Xanthine()@e <-> Xanthine()@p 0,0
	R_XANtpp: Xanthine()@p <-> Xanthine()@c 0,0
	R_XMPtex: Xanthosine5_phosphate()@e <-> Xanthosine5_phosphate()@p 0,0
	R_XPPT: s5_Phospho_alpha_D_ribose1_diphosphate()@c + Xanthine()@c -> Diphosphate()@c + Xanthosine5_phosphate()@c 0
	R_XTSNH: H2O()@c + Xanthosine()@c -> Xanthine()@c + D_Ribose()@c 0
	R_XTSNt2rpp: Hpl()@p + Xanthosine()@p <-> Xanthosine()@c + Hpl()@c 0,0
	R_XTSNtex: Xanthosine()@e <-> Xanthosine()@p 0,0
	R_XYLI1: D_Xylose()@c <-> D_Xylulose()@c 0,0
	R_XYLI2: D_Glucose()@c <-> D_Fructose()@c 0,0
	R_XYLK: D_Xylulose()@c + ATP()@c -> D_Xylulose5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_XYLK2: L_Xylulose()@c + ATP()@c -> L_Xylulose5_phosphate()@c + Hpl()@c + ADP()@c 0
	R_XYLUt2pp: L_Xylulose()@p + Hpl()@p -> Hpl()@c + L_Xylulose()@c 0
	R_XYLUtex: L_Xylulose()@e <-> L_Xylulose()@p 0,0
	R_XYLabcpp: H2O()@c + ATP()@c + D_Xylose()@p -> Phosphate()@c + Hpl()@c + ADP()@c + D_Xylose()@c 0
	R_XYLt2pp: Hpl()@p + D_Xylose()@p -> Hpl()@c + D_Xylose()@c 0
	R_XYLtex: D_Xylose()@e <-> D_Xylose()@p 0,0
	R_ZN2abcpp: H2O()@c + ATP()@c + Zinc()@c -> Zinc()@p + Hpl()@c + ADP()@c + Phosphate()@c 0
	R_ZN2t3pp: Hpl()@p + Zinc()@c -> Hpl()@c + Zinc()@p 0
	R_ZN2tpp: Zinc()@p -> Zinc()@c 0
	R_ZNabcpp: H2O()@c + ATP()@c + Zinc()@p -> Phosphate()@c + Hpl()@c + ADP()@c + Zinc()@c 0
	R_Zn2tex: Zinc()@e <-> Zinc()@p 0,0
end reaction rules
end model

begin actions
  writeXML()
end actions
